
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Locke2005 - Circadian Clock
#
# is http://identifiers.org/biomodels.db/MODEL0737170531
# is http://identifiers.org/biomodels.db/BIOMD0000000055
# isDescribedBy http://identifiers.org/pubmed/16729048
# isDerivedFrom http://identifiers.org/pubmed/15784272
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Parameter:   id =  q1, name = q1, constant
par q1=2.4514

# Parameter:   id =  n1, name = n1, constant
par n1=5.1694

# Parameter:   id =  a, name = a, constant
par a=3.3064

# Parameter:   id =  g1, name = g1, constant
par g1=0.876738488

# Parameter:   id =  m1, name = m1, constant
par m1=1.5283

# Parameter:   id =  k1, name = k1, constant
par k1=1.817

# Parameter:   id =  p1, name = p1, constant
par p1=0.8295

# Parameter:   id =  r1, name = r1, constant
par r1=16.8363

# Parameter:   id =  r2, name = r2, constant
par r2=0.1687

# Parameter:   id =  m2, name = m2, constant
par m2=20.44

# Parameter:   id =  k2, name = k2, constant
par k2=1.5644

# Parameter:   id =  m3, name = m3, constant
par m3=3.6888

# Parameter:   id =  k3, name = k3, constant
par k3=1.2765

# Parameter:   id =  n2, name = n2, constant
par n2=3.0087

# Parameter:   id =  b, name = b, constant
par b=1.0258

# Parameter:   id =  g2, name = g2, constant
par g2=0.036805783

# Parameter:   id =  g3, name = g3, constant
par g3=0.26593318

# Parameter:   id =  c, name = c, constant
par c=1.0258

# Parameter:   id =  m4, name = m4, constant
par m4=3.8231

# Parameter:   id =  k4, name = k4, constant
par k4=2.5734

# Parameter:   id =  p2, name = p2, constant
par p2=4.324

# Parameter:   id =  r3, name = r3, constant
par r3=0.3166

# Parameter:   id =  r4, name = r4, constant
par r4=2.1509

# Parameter:   id =  m5, name = m5, constant
par m5=0.0013

# Parameter:   id =  m6, name = m6, constant
par m6=3.1741

# Parameter:   id =  k5, name = k5, constant
par k5=2.7454

# Parameter:   id =  m7, name = m7, constant
par m7=0.0492

# Parameter:   id =  m8, name = m8, constant
par m8=4.0424

# Parameter:   id =  k6, name = k6, constant
par k6=0.4033

# Parameter:   id =  n3, name = n3, constant
par n3=0.2431

# Parameter:   id =  d, name = d, constant
par d=1.4422

# Parameter:   id =  g4, name = g4, constant
par g4=0.538811228

# Parameter:   id =  m9, name = m9, constant
par m9=10.1132

# Parameter:   id =  k7, name = k7, constant
par k7=6.5585

# Parameter:   id =  p3, name = p3, constant
par p3=2.147

# Parameter:   id =  r5, name = r5, constant
par r5=1.0352

# Parameter:   id =  r6, name = r6, constant
par r6=3.3017

# Parameter:   id =  m10, name = m10, constant
par m10=0.2179

# Parameter:   id =  k8, name = k8, constant
par k8=0.6632

# Parameter:   id =  m11, name = m11, constant
par m11=3.3442

# Parameter:   id =  k9, name = k9, constant
par k9=17.1111

# Parameter:   id =  q2, name = q2, constant
par q2=2.40178

# Parameter:   id =  n4, name = n4, constant
par n4=0.0857

# Parameter:   id =  n5, name = n5, constant
par n5=0.1649

# Parameter:   id =  g5, name = g5, constant
par g5=1.17803247

# Parameter:   id =  g6, name = g6, constant
par g6=0.064455137

# Parameter:   id =  f, name = f, constant
par f=1.0237

# Parameter:   id =  e, name = e, constant
par e=3.6064

# Parameter:   id =  m12, name = m12, constant
par m12=4.297

# Parameter:   id =  k10, name = k10, constant
par k10=1.7303

# Parameter:   id =  p4, name = p4, constant
par p4=0.2485

# Parameter:   id =  r7, name = r7, constant
par r7=2.2123

# Parameter:   id =  r8, name = r8, constant
par r8=0.2002

# Parameter:   id =  m13, name = m13, constant
par m13=0.1347

# Parameter:   id =  k11, name = k11, constant
par k11=1.8258

# Parameter:   id =  m14, name = m14, constant
par m14=0.6114

# Parameter:   id =  k12, name = k12, constant
par k12=1.8066

# Parameter:   id =  p5, name = p5, constant
par p5=0.5

# Parameter:   id =  k13, name = k13, constant
par k13=1.2

# Parameter:   id =  q3, name = q3, constant
par q3=1.0

# Parameter:   id =  m15, name = m15, constant
par m15=1.2

# Parameter:   id =  Lmax, name = Lmax, constant
par Lmax=1.0

# Parameter:   id =  Lmin, name = Lmin, constant
par Lmin=0.0

# Parameter:   id =  CP, name = CP, constant
par CP=24.0

# Parameter:   id =  dayLength, name = dayLength, constant
par dayLength=12.0

# Reaction: id = one11, name = LHY transcription by light activation

one11=compartme*ceil(sin(pi*t/dayLength+0.001)/2)*q1*cPn

# Reaction: id = two11, name = Light independent LHY transcription
# Local Parameter:   id =  Fch_0, name = Fch_0
par Fch_0=8.0


two11=compartme*n1*cXn^a/(g1^a+cXn^a)

# Reaction: id = three11, name = LHY mRNA degradation

three11=compartme*m1*cLm/(k1+cLm)

# Reaction: id = one12, name = LHY translation

one12=compartme*p1*cLm

# Reaction: id = three12, name = LHY transport out of nucleus

three12=compartme*r2*cLn

# Reaction: id = four12, name = Cytoplasmic LHY degradation
# Local Parameter:   id =  Fch_0, name = Fch_0
par Fch_0_1=8.0


four12=compartme*m2*cLc/(k2+cLc)

# Reaction: id = one13, name = LHY transport into nucleus

one13=compartme*r1*cLc

# Reaction: id = three13, name = Nuclear LHY degradation

three13=compartme*m3*cLn/(k3+cLn)

# Reaction: id = one14, name = TOC1 transcription

one14=compartme*n2*cYn^b/(g2^b+cYn^b)*g3^c/(g3^c+cLn^c)

# Reaction: id = two14, name = TOC mRNA degradation

two14=compartme*m4*cTm/(k4+cTm)

# Reaction: id = one15, name = TOC1 translation

one15=compartme*p2*cTm

# Reaction: id = three15, name = TOC1 transport out of nucleus

three15=compartme*r4*cTn

# Reaction: id = four15, name = Cytoplasmic TOC1 degradation

four15=compartme*((1-ceil(sin(pi*t/dayLength+0.001)/2))*m5+m6)*cTc/(k5+cTc)

# Reaction: id = one16, name = TOC1 movement into nucleus

one16=compartme*r3*cTc

# Reaction: id = three16, name = Nuclear TOC1 degradation

three16=compartme*((1-ceil(sin(pi*t/dayLength+0.001)/2))*m7+m8)*cTn/(k6+cTn)

# Reaction: id = one17, name = Protein X transcription

one17=compartme*n3*cTn^d/(g4^d+cTn^d)

# Reaction: id = two17, name = Protein X degradation

two17=compartme*m9*cXm/(k7+cXm)

# Reaction: id = one18, name = Protein X translation

one18=compartme*p3*cXm

# Reaction: id = three18, name = ProteinX movement out of nucleus

three18=compartme*r6*cXn

# Reaction: id = four18, name = Cytoplasmic Protein X degradation

four18=compartme*m10*cXc/(k8+cXc)

# Reaction: id = one19, name = Protein X movement into nucleus

one19=compartme*r5*cXc

# Reaction: id = three19, name = Nuclear Protein X degradation

three19=compartme*m11*cXn/(k9+cXn)

# Reaction: id = one20, name = Protein Y transcription

one20=compartme*(ceil(sin(pi*t/dayLength+0.001)/2)*q2*cPn+(ceil(sin(pi*t/dayLength+0.001)/2)*n4+n5)*g5^e/(g5^e+cTn^e))*g6^f/(g6^f+cLn^f)

# Reaction: id = two20, name = Protein Y mRNA degradation

two20=compartme*m12*cYm/(k10+cYm)

# Reaction: id = one21, name = Protein Y translation

one21=compartme*p4*cYm

# Reaction: id = three21, name = Protein Y out of nucleus

three21=compartme*r8*cYn

# Reaction: id = four21, name = Cytoplasmic Protein Y degradation

four21=compartme*m13*cYc/(k11+cYc)

# Reaction: id = one22, name = Protein Y into nucleus

one22=compartme*r7*cYc

# Reaction: id = three22, name = Nuclear Protein Y degradation

three22=compartme*m14*cYn/(k12+cYn)

# Reaction: id = one23, name = Light dependent production of Protein P

one23=compartme*(1-ceil(sin(pi*t/dayLength+0.001)/2))*p5

# Reaction: id = two23, name = Protein P degradation

two23=compartme*m15*cPn/(k13+cPn)

# Reaction: id = three23, name = Light activated Protein P degradation

three23=compartme*q3*ceil(sin(pi*t/dayLength+0.001)/2)*cPn

# Species:   id = cLm, name = LHY mRNA, affected by kineticLaw

init cLm=0.539
dcLm/dt=(1/(compartme))*(( 1.0 * one11) + ( 1.0 * two11) + (-1.0 * three11))

# Species:   id = cLc, name = LHY protein in cytoplasm, affected by kineticLaw

init cLc=0.015
dcLc/dt=(1/(compartme))*(( 1.0 * one12) + ( 1.0 * three12) + (-1.0 * four12) + (-1.0 * one13))

# Species:   id = cLn, name = LHY protein in nucleus, affected by kineticLaw

init cLn=0.0855
dcLn/dt=(1/(compartme))*((-1.0 * three12) + ( 1.0 * one13) + (-1.0 * three13))

# Species:   id = cTm, name = TOC1 mRNA, affected by kineticLaw

init cTm=0.456
dcTm/dt=(1/(compartme))*(( 1.0 * one14) + (-1.0 * two14))

# Species:   id = cTc, name = TOC1 protein in cytoplasm, affected by kineticLaw

init cTc=8.7
dcTc/dt=(1/(compartme))*(( 1.0 * one15) + ( 1.0 * three15) + (-1.0 * four15) + (-1.0 * one16))

# Species:   id = cTn, name = TOC1 protein in nucleus, affected by kineticLaw

init cTn=0.4
dcTn/dt=(1/(compartme))*((-1.0 * three15) + ( 1.0 * one16) + (-1.0 * three16))

# Species:   id = cXm, name = X mRNA, affected by kineticLaw

init cXm=0.08
dcXm/dt=(1/(compartme))*(( 1.0 * one17) + (-1.0 * two17))

# Species:   id = cXc, name = X protein in cytoplasm, affected by kineticLaw

init cXc=1.34
dcXc/dt=(1/(compartme))*(( 1.0 * one18) + ( 1.0 * three18) + (-1.0 * four18) + (-1.0 * one19))

# Species:   id = cXn, name = X protein in nucleus, affected by kineticLaw

init cXn=0.4
dcXn/dt=(1/(compartme))*((-1.0 * three18) + ( 1.0 * one19) + (-1.0 * three19))

# Species:   id = cYm, name = Y mRNA, affected by kineticLaw

init cYm=0.037
dcYm/dt=(1/(compartme))*(( 1.0 * one20) + (-1.0 * two20))

# Species:   id = cYc, name = Y protein in cytoplasm, affected by kineticLaw

init cYc=0.004
dcYc/dt=(1/(compartme))*(( 1.0 * one21) + ( 1.0 * three21) + (-1.0 * four21) + (-1.0 * one22))

# Species:   id = cYn, name = Y protein in nucleus, affected by kineticLaw

init cYn=0.013
dcYn/dt=(1/(compartme))*((-1.0 * three21) + ( 1.0 * one22) + (-1.0 * three22))

# Species:   id = cPn, name = light sensitive protein P, affected by kineticLaw

init cPn=0.835
dcPn/dt=(1/(compartme))*(( 1.0 * one23) + (-1.0 * two23) + (-1.0 * three23))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

