
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Proctor2005 - Actions of chaperones and their role in ageing
#
# is http://identifiers.org/biomodels.db/MODEL2223638385
# is http://identifiers.org/biomodels.db/BIOMD0000000091
# isDescribedBy http://identifiers.org/pubmed/15610770
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Parameter:   id =  k1, name = k1, constant
par k1=10.0

# Parameter:   id =  k2, name = k2, constant
par k2=2.0E-5

# Parameter:   id =  k3, name = k3, constant
par k3=50.0

# Parameter:   id =  k4, name = k4, constant
par k4=1.0E-5

# Parameter:   id =  k5, name = k5, constant
par k5=4.0E-6

# Parameter:   id =  k6, name = k6, constant
par k6=6.0E-7

# Parameter:   id =  k7, name = k7, constant
par k7=1.0E-7

# Parameter:   id =  k8, name = k8, constant
par k8=500.0

# Parameter:   id =  k9, name = k9, constant
par k9=1.0

# Parameter:   id =  k10, name = k10, constant
par k10=0.01

# Parameter:   id =  k11, name = k11, constant
par k11=100.0

# Parameter:   id =  k12, name = k12, constant
par k12=0.5

# Parameter:   id =  k13, name = k13, constant
par k13=0.5

# Parameter:   id =  k14, name = k14, constant
par k14=0.05

# Parameter:   id =  k15, name = k15, constant
par k15=0.08

# Parameter:   id =  k16, name = k16, constant
par k16=1000.0

# Parameter:   id =  k17, name = k17, constant
par k17=8.02E-9

# Parameter:   id =  k18, name = k18, constant
par k18=12.0

# Parameter:   id =  k19, name = k19, constant
par k19=0.02

# Parameter:   id =  k20, name = k20, constant
par k20=0.1

# Parameter:   id =  k21, name = k21, constant
par k21=0.001

# Reaction: id = proteinSynthesis, name = proteinSynthesis

proteinSy=k1

# Reaction: id = misfolding, name = misfolding

misfoldin=k2*NatP*ROS

# Reaction: id = Hsp90MisPBinding, name = Hsp90MisPBinding

Hsp90MisP=k3*MisP*Hsp90

# Reaction: id = unsuccessulRefolding, name = unsuccessfulRefolding

unsuccess=k4*MCom

# Reaction: id = refolding, name = refolding

refolding=k5*MCom*ATP

# Reaction: id = proteinDegradation, name = proteinDegradation

proteinDe=k6*MisP*ATP

# Reaction: id = proteinAggregation1

proteinAg=(MisP-1)*k7*MisP/2

# Reaction: id = proteinAggregation2

protein_1=k7*MisP*AggP

# Reaction: id = Hsp90HSF1Binding, name = Hsp90HSF1Binding

Hsp90HSF1=k8*Hsp90*HSF1

# Reaction: id = Hsp90HSF1Release, name = Hsp90HSF1Release

Hsp90HS_1=k9*HCom

# Reaction: id = dimerisation, name = dimerisation

dimerisat=(HSF1-1)*k10*HSF1/2

# Reaction: id = trimerisation, name = trimerisation

trimerisa=k11*HSF1*DiH

# Reaction: id = deTrimerisation, name = deTrimerisation

deTrimeri=k12*TriH

# Reaction: id = deDimerisation, name = deDimerisation

deDimeris=k13*DiH

# Reaction: id = HSETriHBinding, name = HSETriHBinding

HSETriHBi=k14*HSE*TriH

# Reaction: id = HSETriHRelease, name = HSETriHRelease

HSETriHRe=k15*HSETriH

# Reaction: id = Hsp90Transcription, name = Hsp90Transcription

Hsp90Tran=k16*HSETriH

# Reaction: id = Hsp90Degradation, name = Hsp90Degradation

Hsp90Degr=k17*Hsp90*ATP

# Reaction: id = countTime, name = countTime

countTime=1

# Reaction: id = ATPformation, name = ATPformation

ATPformat=k18*ADP

# Reaction: id = ATPconsumption, name = ATPconsumption

ATPconsum=k19*ATP

# Reaction: id = radicalFormation, name = radicalFormation

radicalFo=k20

# Reaction: id = radicalScavenging, name = radicalScavenging

radicalSc=k21*ROS

# Species:   id = Hsp90, name = Hsp90, affected by kineticLaw

init Hsp90=300000.0
dHsp90/dt=(-1.0 * Hsp90MisP) + ( 1.0 * unsuccess) + ( 1.0 * refolding) + (-1.0 * Hsp90HSF1) + ( 1.0 * Hsp90HS_1) + ( 1.0 * Hsp90Tran) + (-1.0 * Hsp90Degr)

# Species:   id = HCom, name = HCom, affected by kineticLaw

init HCom=5900.0
dHCom/dt=( 1.0 * Hsp90HSF1) + (-1.0 * Hsp90HS_1)

# Species:   id = HSF1, name = HSF1, affected by kineticLaw

init HSF1=100.0
dHSF1/dt=(-1.0 * Hsp90HSF1) + ( 1.0 * Hsp90HS_1) + (-2.0 * dimerisat) + (-1.0 * trimerisa) + ( 1.0 * deTrimeri) + ( 2.0 * deDimeris)

# Species:   id = MisP, name = MisP, affected by kineticLaw

init MisP=0.0
dMisP/dt=( 1.0 * misfoldin) + (-1.0 * Hsp90MisP) + ( 1.0 * unsuccess) + (-1.0 * proteinDe) + (-2.0 * proteinAg) + (-1.0 * protein_1)

# Species:   id = MCom, name = MCom, affected by kineticLaw

init MCom=0.0
dMCom/dt=( 1.0 * Hsp90MisP) + (-1.0 * unsuccess) + (-1.0 * refolding)

# Species:   id = TriH, name = TriH, affected by kineticLaw

init TriH=0.0
dTriH/dt=( 1.0 * trimerisa) + (-1.0 * deTrimeri) + (-1.0 * HSETriHBi) + ( 1.0 * HSETriHRe)

# Species:   id = DiH, name = DiH, affected by kineticLaw

init DiH=0.0
dDiH/dt=( 1.0 * dimerisat) + (-1.0 * trimerisa) + ( 1.0 * deTrimeri) + (-1.0 * deDimeris)

# Species:   id = NatP, name = NatP, affected by kineticLaw

init NatP=6000000.0
dNatP/dt=( 1.0 * proteinSy) + (-1.0 * misfoldin) + ( 1.0 * refolding)

# Species:   id = AggP, name = AggP, affected by kineticLaw

init AggP=0.0
dAggP/dt=( 1.0 * proteinAg) + (-1.0 * protein_1) + ( 2.0 * protein_1)

# Species:   id = HSE, name = HSE, affected by kineticLaw

init HSE=1.0
dHSE/dt=(-1.0 * HSETriHBi) + ( 1.0 * HSETriHRe)

# Species:   id = HSETriH, name = HSETriH, affected by kineticLaw

init HSETriH=0.0
dHSETriH/dt=( 1.0 * HSETriHBi) + (-1.0 * HSETriHRe) + (-1.0 * Hsp90Tran) + ( 1.0 * Hsp90Tran)

# Species:   id = X, name = X, affected by kineticLaw

init X=0.0
dX/dt=( 1.0 * countTime)

# Species:   id = ROS, name = ROS, affected by kineticLaw

init ROS=100.0
dROS/dt=(-1.0 * misfoldin) + ( 1.0 * misfoldin) + ( 1.0 * radicalFo) + (-1.0 * radicalSc)

# Species:   id = ATP, name = ATP, affected by kineticLaw

init ATP=10000.0
dATP/dt=(-1.0 * refolding) + (-1.0 * proteinDe) + (-1.0 * Hsp90Degr) + ( 1.0 * ATPformat) + (-1.0 * ATPconsum)

# Species:   id = ADP, name = ADP, affected by kineticLaw

init ADP=1000.0
dADP/dt=( 1.0 * refolding) + ( 1.0 * proteinDe) + ( 1.0 * Hsp90Degr) + (-1.0 * ATPformat) + ( 1.0 * ATPconsum)

# Species:   id = source, name = source
par source=0.0
aux source=source
#WARNING speciesID: source, constant= false  , boundaryCondition = true but is not involved in assignmentRule, rateRule or events !

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

