
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Fuentes2005_ZymogenActivation
#
# is http://identifiers.org/biomodels.db/MODEL6623597435
# is http://identifiers.org/biomodels.db/BIOMD0000000092
# isDescribedBy http://identifiers.org/pubmed/15634334
# isDerivedFrom http://identifiers.org/pubmed/7558
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Reaction: id = v1, name = Intramolecular autoactivation
# Local Parameter:   id =  k1, name = k1
par k1=0.004


v1=compartme*k1*z

# Reaction: id = v2, name = Intermolecular autoactivation-Complex formation
# Local Parameter:   id =  k21, name = k21
par k21=1000.0

# Local Parameter:   id =  k22, name = k22
par k22=2.1E-4


v2=compartme*(k21*e*z-k22*ez)

# Reaction: id = v3, name = Intermolecular autoactivation-Enzyme release
# Local Parameter:   id =  k3, name = k3
par k3=5.4E-4


v3=compartme*k3*ez

# Species:   id = z, name = Zymogen, affected by kineticLaw

init z=2.4E-5
dz/dt=(1/(compartme))*((-1.0 * v1) + (-1.0 * v2))

# Species:   id = e, name = Enzyme, affected by kineticLaw

init e=0.0
de/dt=(1/(compartme))*(( 1.0 * v1) + (-1.0 * v2) + ( 2.0 * v3))

# Species:   id = w, name = Peptide, affected by kineticLaw

init w=0.0
dw/dt=(1/(compartme))*(( 1.0 * v1) + ( 1.0 * v3))

# Species:   id = ez, name = Enzyme-Substrate complex, affected by kineticLaw

init ez=0.0
dez/dt=(1/(compartme))*(( 1.0 * v2) + (-1.0 * v3))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

