
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Wajima2009_BloodCoagulation_aPTTtest
#
# is http://identifiers.org/biomodels.db/MODEL1107010000
# is http://identifiers.org/biomodels.db/BIOMD0000000338
# isDescribedBy http://identifiers.org/pubmed/19516255
# isDerivedFrom http://identifiers.org/biomodels.db/BIOMD0000000365
# isDerivedFrom http://identifiers.org/biomodels.db/MODEL1108260015
# isDerivedFrom http://identifiers.org/biomodels.db/MODEL1109160000
# isDerivedFrom http://identifiers.org/biomodels.db/MODEL1109160001
# isDerivedFrom http://identifiers.org/pubmed/18831981
# isDerivedFrom http://identifiers.org/pubmed/12524220
# isDerivedFrom http://identifiers.org/pubmed/2779263
# isDerivedFrom http://identifiers.org/pubmed/8948060
# isDerivedFrom http://identifiers.org/pubmed/12231555
# isDerivedFrom http://identifiers.org/pubmed/15804855
# isDerivedFrom http://identifiers.org/pubmed/16432308
# isDerivedFrom http://identifiers.org/pubmed/7843644
# isDerivedFrom http://identifiers.org/pubmed/9645916
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Irreversible_association, name = Irreversible association
Irreversi(s1,s2,c)=(s1*s2/c)


# FunctionDefinition id = Hyperbolic_rate_law, name = Hyperbolic rate law
Hyperboli(v,substrate,enzyme,k)=(v*substrate*enzyme/(k+enzyme))


# FunctionDefinition id = Factor_production, name = Factor production
Factor_pr(initial,degradation)=(initial*degradation)


# FunctionDefinition id = VKH2mediated_factor_production, name = VKH2-mediated factor production
VKH2media(d_factor,factor_initial,VKH2,VKH2_initial)=(d_factor*factor_initial*VKH2/VKH2_initial)


# FunctionDefinition id = Warfarin_inhibited_first_order_kinetics, name = Warfarin inhibited first order kinetics
Warfarin_(Imax,Cwarf,IC50,substrate,degradation)=(degradation*substrate*(1-Imax*Cwarf/(IC50+Cwarf)))

# Compartment: id = compartment_1, name = compartment_1
# Warning compartment compartment_1 has no rule and is not constant

# Parameter:   id =  I_max, name = I_max, constant
par I_max=1.0

# Parameter:   id =  IC50, name = IC50, constant
par IC50=0.34

# Parameter:   id =  II0, name = II(0), constant
par II0=1394.4

# Parameter:   id =  VII0, name = VII(0), constant
par VII0=10.0

# Parameter:   id =  IX0, name = IX(0), constant
par IX0=89.6

# Parameter:   id =  X0, name = X(0), constant
par X0=174.3

# Parameter:   id =  PC0, name = PC(0), constant
par PC0=60.0

# Parameter:   id =  PS0, name = PS(0), constant
par PS0=300.0

# Parameter:   id =  VKH20, name = VKH2(0), constant
par VKH20=0.1

# Parameter:   id =  d_II, name = d_II, constant
par d_II=0.01

# Parameter:   id =  d_VII, name = d_VII, constant
par d_VII=0.12

# Parameter:   id =  d_IX, name = d_IX, constant
par d_IX=0.029

# Parameter:   id =  d_X, name = d_X, constant
par d_X=0.018

# Parameter:   id =  d_PC, name = d_PC, constant
par d_PC=0.05

# Parameter:   id =  d_PS, name = d_PS, constant
par d_PS=0.0165

# Parameter:   id =  VitaminK_Vc, name = VitaminK_Vc, constant
par VitaminK_=24.0

# Parameter:   id =  d_VK2, name = d_VK2, constant
par d_VK2=0.0228

# Parameter:   id =  d_VKH2, name = d_VKH2, constant
par d_VKH2=0.228

# Parameter:   id =  d_VKO, name = d_VKO, constant
par d_VKO=0.228

# Parameter:   id =  VK0, name = VK(0), constant
par VK0=1.0

# Parameter:   id =  VKO0, name = VKO(0), constant
par VKO0=0.1

# Parameter:   id =  VitaminK_k21_Vc, name = VitaminK_k21/Vc, constant
par Vitamin_1=5.08333333333333E-4

# Parameter:   id =  VitaminK_k12, name = VitaminK_k12, constant
par Vitamin_2=0.0587

# Parameter:   id =  Heparin_ke, name = Heparin_ke, constant
par Heparin_k=0.693

# Parameter:   id =  Warfarin_ka, name = Warfarin_ka, constant
par Warfari_1=1.0

# Parameter:   id =  Warfarin_Vd, name = Warfarin_Vd, constant
par Warfari_2=10.0

# Parameter:   id =  Warfarin_CL, name = Warfarin_CL, constant
par Warfari_3=0.2

# Parameter:   id =  Warfarin_ke, name = Warfarin_ke, constant
par Warfari_4=0.02

# Parameter:   id =  Integral_Fibrin, name = Integral_Fibrin, defined by a Rule

# Parameter:   id =  d_XII, name = d_XII, constant
par d_XII=0.012

# Parameter:   id =  d_VIII, name = d_VIII, constant
par d_VIII=0.058

# Parameter:   id =  d_XI, name = d_XI, constant
par d_XI=0.1

# Parameter:   id =  d_V, name = d_V, constant
par d_V=0.043

# Parameter:   id =  d_Fg, name = d_Fg, constant
par d_Fg=0.032

# Parameter:   id =  d_XIII, name = d_XIII, constant
par d_XIII=0.0036

# Parameter:   id =  d_Pg, name = d_Pg, constant
par d_Pg=0.05

# Parameter:   id =  d_Tmod, name = d_Tmod, constant
par d_Tmod=0.05

# Parameter:   id =  d_TFPI, name = d_TFPI, constant
par d_TFPI=20.0

# Parameter:   id =  d_Pk, name = d_Pk, constant
par d_Pk=0.05

# Parameter:   id =  XII0, name = XII(0), constant
par XII0=375.0

# Parameter:   id =  VIII0, name = VIII(0), constant
par VIII0=0.7

# Parameter:   id =  XI0, name = XI(0), constant
par XI0=30.6

# Parameter:   id =  V0, name = V(0), constant
par V0=26.7

# Parameter:   id =  Fg0, name = Fg(0), constant
par Fg0=8945.5

# Parameter:   id =  XIII0, name = XIII(0), constant
par XIII0=70.3

# Parameter:   id =  Pg0, name = Pg(0), constant
par Pg0=2154.3

# Parameter:   id =  Tmod0, name = Tmod(0), constant
par Tmod0=50.0

# Parameter:   id =  TFPI0, name = TFPI(0), constant
par TFPI0=2.5

# Parameter:   id =  Pk0, name = Pk(0), constant
par Pk0=450.0

# Parameter:   id =  R1, name = R1, constant
par R1=0.140845070422535

# Parameter:   id =  R2, name = R2, constant
par R2=1.0

# Parameter:   id =  c44, name = c44, constant
par c44=0.119718309859155

# Parameter:   id =  c45, name = c45, constant
par c45=0.85

# Parameter:   id =  c46, name = c46, constant
par c46=0.85

# Parameter:   id =  clottingTime_s, name = clottingTime [s]
par clottingT=0.0

# Parameter:   id =  d_VK, name = d_VK, constant
par d_VK=0.2052

# assignmentRule: variable = DP
DP=FDP+D
aux DP=DP

# rateRule: variable = C_warf
init C_warf=0.0
dC_warf/dt=Warfari_1*A_warf/Warfari_2-Warfari_4*C_warf

# rateRule: variable = A_warf
init A_warf=0.0
dA_warf/dt=(-Warfari_1)*A_warf

# rateRule: variable = Integral_Fibrin
init Integral_=0.0
dIntegral_/dt=F

# Reaction: id = r1_, name = r1 
# Local Parameter:   id =  v, name = v
par v_1=50000.0

# Local Parameter:   id =  k, name = k
par k_1=1.0E-6


r1_=compartme*Hyperboli(v_1, VIII, IIa, k_1)

# Reaction: id = r2_, name = r2 
# Local Parameter:   id =  v, name = v
par v_1_2=50.0

# Local Parameter:   id =  k, name = k
par k_1_2=1.0


r2_=compartme*Hyperboli(v_1_2, VIIIa, APC_PS, k_1_2)

# Reaction: id = r3_, name = r3 
# Local Parameter:   id =  v, name = v
par v_1_2_3=7.0

# Local Parameter:   id =  k, name = k
par k_1_2_3=10.0


r3_=compartme*Hyperboli(v_1_2_3, IX, XIa, k_1_2_3)

# Reaction: id = r4_, name = r4 
# Local Parameter:   id =  v, name = v
par v_1_2_3_4=7.0

# Local Parameter:   id =  k, name = k
par k_1_2_3_4=1.0


r4_=compartme*Hyperboli(v_1_2_3_4, XI, XIIa, k_1_2_3_4)

# Reaction: id = r5_, name = r5 
# Local Parameter:   id =  v, name = v
par v_1_2_3_5=10.0

# Local Parameter:   id =  k, name = k
par k_1_2_3_5=10.0


r5_=compartme*Hyperboli(v_1_2_3_5, XI, IIa, k_1_2_3_5)

# Reaction: id = r6_, name = r6 
# Local Parameter:   id =  v, name = v
par v_1_2_3_6=0.1

# Local Parameter:   id =  k, name = k
par k_1_2_3_6=10.0


r6_=compartme*Hyperboli(v_1_2_3_6, VII, IIa, k_1_2_3_6)

# Reaction: id = r7_, name = r7 
# Local Parameter:   id =  v, name = v
par v_1_2_3_7=0.02

# Local Parameter:   id =  k, name = k
par k_1_2_3_7=10.0


r7_=compartme*Hyperboli(v_1_2_3_7, X, IXa, k_1_2_3_7)

# Reaction: id = r8_, name = r8 
# Local Parameter:   id =  v, name = v
par v_1_2_3_8=2.0

# Local Parameter:   id =  k, name = k
par k_1_2_3_8=0.1


r8_=compartme*Hyperboli(v_1_2_3_8, X, IXa_VIIIa, k_1_2_3_8)

# Reaction: id = r9_, name = r9 
# Local Parameter:   id =  v, name = v
par v_1_2_3_9=1.0E-9

# Local Parameter:   id =  k, name = k
par k_1_2_3_9=10.0


r9_=compartme*Hyperboli(v_1_2_3_9, X, VIIa, k_1_2_3_9)

# Reaction: id = r10, name = r10
# Local Parameter:   id =  v, name = v
par v_1_2__10=50000.0

# Local Parameter:   id =  k, name = k
par k_1_2__10=10.0


r10=compartme*Hyperboli(v_1_2__10, V, IIa, k_1_2__10)

# Reaction: id = r11, name = r11
# Local Parameter:   id =  v, name = v
par v_1_2__11=50.0

# Local Parameter:   id =  k, name = k
par k_1_2__11=1.0


r11=compartme*Hyperboli(v_1_2__11, Va, APC_PS, k_1_2__11)

# Reaction: id = r12, name = r12
# Local Parameter:   id =  v, name = v
par v_1_2__12=100.0

# Local Parameter:   id =  k, name = k
par k_1_2__12=10.0


r12=compartme*Hyperboli(v_1_2__12, II, Va_Xa, k_1_2__12)

# Reaction: id = r13, name = r13
# Local Parameter:   id =  v, name = v
par v_1_2__13=9.0

# Local Parameter:   id =  k, name = k
par k_1_2__13=500.0


r13=compartme*Hyperboli(v_1_2__13, II, Xa, k_1_2__13)

# Reaction: id = r14, name = r14
# Local Parameter:   id =  v, name = v
par v_1_2__14=20000.0

# Local Parameter:   id =  k, name = k
par k_1_2__14=0.5


r14=compartme*Hyperboli(v_1_2__14, Fg, IIa, k_1_2__14)

# Reaction: id = r15, name = r15
# Local Parameter:   id =  v, name = v
par v_1_2__15=500.0

# Local Parameter:   id =  k, name = k
par k_1_2__15=500.0


r15=compartme*Hyperboli(v_1_2__15, Fg, P, k_1_2__15)

# Reaction: id = r16, name = r16
# Local Parameter:   id =  v, name = v
par v_1_2__16=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__16=10.0


r16=compartme*Hyperboli(v_1_2__16, F, XIIIa, k_1_2__16)

# Reaction: id = r17, name = r17
# Local Parameter:   id =  v, name = v
par v_1_2__17=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__17=10.0


r17=compartme*Hyperboli(v_1_2__17, F, P, k_1_2__17)

# Reaction: id = r18, name = r18
# Local Parameter:   id =  v, name = v
par v_1_2__18=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__18=100.0


r18=compartme*Hyperboli(v_1_2__18, XF, P, k_1_2__18)

# Reaction: id = r19, name = r19
# Local Parameter:   id =  v, name = v
par v_1_2__19=1.0

# Local Parameter:   id =  k, name = k
par k_1_2__19=1.0


r19=compartme*Hyperboli(v_1_2__19, XF, APC_PS, k_1_2__19)

# Reaction: id = r20, name = r20
# Local Parameter:   id =  v, name = v
par v_1_2__20=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__20=1.0


r20=compartme*Hyperboli(v_1_2__20, XIII, IIa, k_1_2__20)

# Reaction: id = r21, name = r21
# Local Parameter:   id =  v, name = v
par v_1_2__21=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__21=5000.0


r21=compartme*Hyperboli(v_1_2__21, Pg, IIa, k_1_2__21)

# Reaction: id = r22, name = r22
# Local Parameter:   id =  v, name = v
par v_1_2__22=5.0

# Local Parameter:   id =  k, name = k
par k_1_2__22=10000.0


r22=compartme*Hyperboli(v_1_2__22, Pg, F, k_1_2__22)

# Reaction: id = r23, name = r23
# Local Parameter:   id =  v, name = v
par v_1_2__23=2.0

# Local Parameter:   id =  k, name = k
par k_1_2__23=1.0


r23=compartme*Hyperboli(v_1_2__23, Pg, APC_PS, k_1_2__23)

# Reaction: id = r24, name = r24
# Local Parameter:   id =  v, name = v
par v_1_2__24=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__24=1.0


r24=compartme*Hyperboli(v_1_2__24, PC, IIa_Tmod, k_1_2__24)

# Reaction: id = r25, name = r25
# Local Parameter:   id =  v, name = v
par v_1_2__25=2.0

# Local Parameter:   id =  k, name = k
par k_1_2__25=1.0


r25=compartme*Hyperboli(v_1_2__25, Va_Xa, APC_PS, k_1_2__25)

# Reaction: id = r26, name = r26
# Local Parameter:   id =  c, name = c
par c=0.01


r26=compartme*Irreversi(IXa, VIIIa, c)

# Reaction: id = r27, name = r27
# Local Parameter:   id =  c, name = c
par c_1=0.5


r27=compartme*Irreversi(Va, Xa, c_1)

# Reaction: id = r28, name = r28
# Local Parameter:   id =  c, name = c
par c_1_2=0.5


r28=compartme*Irreversi(IIa, Tmod, c_1_2)

# Reaction: id = r29, name = r29
# Local Parameter:   id =  c, name = c
par c_1_2_3=0.5


r29=compartme*Irreversi(VIIa, TF, c_1_2_3)

# Reaction: id = r30, name = r30
# Local Parameter:   id =  c, name = c
par c_1_2_3_4=0.1


r30=compartme*Irreversi(VII, TF, c_1_2_3_4)

# Reaction: id = r31, name = r31
# Local Parameter:   id =  c, name = c
par c_1_2_3_5=0.5


r31=compartme*Irreversi(VIIa_TF, Xa_TFPI, c_1_2_3_5)

# Reaction: id = r32, name = r32
# Local Parameter:   id =  c, name = c
par c_1_2_3_6=0.5


r32=compartme*Irreversi(Xa, TFPI, c_1_2_3_6)

# Reaction: id = r33, name = r33
# Local Parameter:   id =  v, name = v
par v_1_2__26=70.0

# Local Parameter:   id =  k, name = k
par k_1_2__26=1.0


r33=compartme*Hyperboli(v_1_2__26, VII_TF, Xa, k_1_2__26)

# Reaction: id = r34, name = r34
# Local Parameter:   id =  v, name = v
par v_1_2__27=900.0

# Local Parameter:   id =  k, name = k
par k_1_2__27=200.0


r34=compartme*Hyperboli(v_1_2__27, X, VIIa_TF, k_1_2__27)

# Reaction: id = r35, name = r35
# Local Parameter:   id =  v, name = v
par v_1_2__28=70.0

# Local Parameter:   id =  k, name = k
par k_1_2__28=1.0


r35=compartme*Hyperboli(v_1_2__28, IX, VIIa_TF, k_1_2__28)

# Reaction: id = r36, name = r36
# Local Parameter:   id =  v, name = v
par v_1_2__29=1000.0

# Local Parameter:   id =  k, name = k
par k_1_2__29=1.0


r36=compartme*Hyperboli(v_1_2__29, VII_TF, TF, k_1_2__29)

# Reaction: id = r37, name = r37
# Local Parameter:   id =  c, name = c
par c_1_2_3_7=0.5


r37=compartme*Irreversi(APC, PS, c_1_2_3_7)

# Reaction: id = r38, name = r38
# Local Parameter:   id =  v, name = v
par v_1_2__30=1.0

# Local Parameter:   id =  k, name = k
par k_1_2__30=10.0


r38=compartme*Hyperboli(v_1_2__30, VII, Xa, k_1_2__30)

# Reaction: id = r39, name = r39
# Local Parameter:   id =  v, name = v
par v_1_2__31=1.0

# Local Parameter:   id =  k, name = k
par k_1_2__31=10.0


r39=compartme*Hyperboli(v_1_2__31, VII, VIIa_TF, k_1_2__31)

# Reaction: id = r40, name = r40
# Local Parameter:   id =  v, name = v
par v_1_2__32=0.2

# Local Parameter:   id =  k, name = k
par k_1_2__32=10.0


r40=compartme*Hyperboli(v_1_2__32, VII, IXa, k_1_2__32)

# Reaction: id = r41, name = r41
# Local Parameter:   id =  v, name = v
par v_1_2__33=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__33=1.0


r41=compartme*Hyperboli(v_1_2__33, XII, CA, k_1_2__33)

# Reaction: id = r42, name = r42
# Local Parameter:   id =  v, name = v
par v_1_2__34=70.0

# Local Parameter:   id =  k, name = k
par k_1_2__34=1.0


r42=compartme*Hyperboli(v_1_2__34, XII, K, k_1_2__34)

# Reaction: id = r43, name = r43
# Local Parameter:   id =  v, name = v
par v_1_2__35=7.0

# Local Parameter:   id =  k, name = k
par k_1_2__35=1.0


r43=compartme*Hyperboli(v_1_2__35, Pk, XIIa, k_1_2__35)

# Reaction: id = r44, name = r44

r44=compartme*Irreversi(IIa, ATIII_Hep, c44)

# Reaction: id = r45, name = r45

r45=compartme*Irreversi(Xa, ATIII_Hep, c45)

# Reaction: id = r46, name = r46

r46=compartme*Irreversi(IXa, ATIII_Hep, c46)

# Reaction: id = r47, name = r47

r47=compartme*Warfarin_(I_max, C_warf, IC50, VK, d_VK2)

# Reaction: id = r48, name = r48

r48=compartme*Warfarin_(I_max, C_warf, IC50, VKO, d_VKO)

# Reaction: id = pII_VKH2, name = pII_VKH2

pII_VKH2=compartme*VKH2media(d_II, II0, VKH2, VKH20)

# Reaction: id = pVII_VKH2, name = pVII_VKH2

pVII_VKH2=compartme*VKH2media(d_VII, VII0, VKH2, VKH20)

# Reaction: id = pIX_VKH2, name = pIX_VKH2

pIX_VKH2=compartme*VKH2media(d_IX, IX0, VKH2, VKH20)

# Reaction: id = pX_VKH2, name = pX_VKH2

pX_VKH2=compartme*VKH2media(d_X, X0, VKH2, VKH20)

# Reaction: id = pPC_VKH2, name = pPC_VKH2

pPC_VKH2=compartme*VKH2media(d_PC, PC0, VKH2, VKH20)

# Reaction: id = pPS_VKH2, name = pPS_VKH2

pPS_VKH2=compartme*VKH2media(d_PS, PS0, VKH2, VKH20)

# Reaction: id = dFg, name = dFg

dFg=compartme*d_Fg*Fg

# Reaction: id = dF, name = dF
# Local Parameter:   id =  k1, name = k1
par k1=0.05


dF=compartme*k1*F

# Reaction: id = dXF, name = dXF
# Local Parameter:   id =  k1, name = k1
par k1_1=0.05


dXF=compartme*k1_1*XF

# Reaction: id = dII, name = dII

dII=compartme*d_II*II

# Reaction: id = dIIa, name = dIIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2=67.4


dIIa=compartme*k1_1_2*IIa

# Reaction: id = dTF, name = dTF
# Local Parameter:   id =  k1, name = k1
par k1_1_2_3=0.05


dTF=compartme*k1_1_2_3*TF

# Reaction: id = dV, name = dV

dV=compartme*d_V*V

# Reaction: id = dVa, name = dVa
# Local Parameter:   id =  k1, name = k1
par k1_1_2__4=20.0


dVa=compartme*k1_1_2__4*Va

# Reaction: id = dVII, name = dVII

dVII=compartme*d_VII*VII

# Reaction: id = dVIIa, name = dVIIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2__5=20.0


dVIIa=compartme*k1_1_2__5*VIIa

# Reaction: id = dVIII, name = dVIII

dVIII=compartme*d_VIII*VIII

# Reaction: id = dVIIIa, name = dVIIIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2__6=20.0


dVIIIa=compartme*k1_1_2__6*VIIIa

# Reaction: id = dX, name = dX

dX=compartme*d_X*X

# Reaction: id = dXa, name = dXa
# Local Parameter:   id =  k1, name = k1
par k1_1_2__7=20.0


dXa=compartme*k1_1_2__7*Xa

# Reaction: id = dIX, name = dIX

dIX=compartme*d_IX*IX

# Reaction: id = dIXa, name = dIXa
# Local Parameter:   id =  k1, name = k1
par k1_1_2__8=20.0


dIXa=compartme*k1_1_2__8*IXa

# Reaction: id = dXII, name = dXII

dXII=compartme*d_XII*XII

# Reaction: id = dXIIa, name = dXIIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2__9=20.0


dXIIa=compartme*k1_1_2__9*XIIa

# Reaction: id = dXIII, name = dXIII

dXIII=compartme*d_XIII*XIII

# Reaction: id = dXIIIa, name = dXIIIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2_10=0.69


dXIIIa=compartme*k1_1_2_10*XIIIa

# Reaction: id = dPk, name = dPk

dPk=compartme*d_Pk*Pk

# Reaction: id = dK, name = dK
# Local Parameter:   id =  k1, name = k1
par k1_1_2_11=20.0


dK=compartme*k1_1_2_11*K

# Reaction: id = dPg, name = dPg

dPg=compartme*d_Pg*Pg

# Reaction: id = dP, name = dP
# Local Parameter:   id =  k1, name = k1
par k1_1_2_12=20.0


dP_1=compartme*k1_1_2_12*P

# Reaction: id = dPC, name = dPC

dPC=compartme*d_PC*PC

# Reaction: id = dAPC, name = dAPC
# Local Parameter:   id =  k1, name = k1
par k1_1_2_13=20.4


dAPC=compartme*k1_1_2_13*APC

# Reaction: id = dPS, name = dPS

dPS=compartme*d_PS*PS

# Reaction: id = dFDP, name = dFDP
# Local Parameter:   id =  k1, name = k1
par k1_1_2_14=3.5


dFDP=compartme*k1_1_2_14*FDP

# Reaction: id = dD, name = dD
# Local Parameter:   id =  k1, name = k1
par k1_1_2_15=0.1


dD=compartme*k1_1_2_15*D

# Reaction: id = dTFPI, name = dTFPI

dTFPI=compartme*d_TFPI*TFPI

# Reaction: id = dVIIa_TF, name = dVIIa_TF
# Local Parameter:   id =  k1, name = k1
par k1_1_2_16=20.0


dVIIa_TF=compartme*k1_1_2_16*VIIa_TF

# Reaction: id = dVII_TF, name = dVII_TF
# Local Parameter:   id =  k1, name = k1
par k1_1_2_17=0.7


dVII_TF=compartme*k1_1_2_17*VII_TF

# Reaction: id = dAPC_PS, name = dAPC_PS
# Local Parameter:   id =  k1, name = k1
par k1_1_2_18=20.0


dAPC_PS=compartme*k1_1_2_18*APC_PS

# Reaction: id = dVa_Xa, name = dVa_Xa
# Local Parameter:   id =  k1, name = k1
par k1_1_2_19=20.0


dVa_Xa=compartme*k1_1_2_19*Va_Xa

# Reaction: id = dIXa_VIIIa, name = dIXa_VIIIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2_20=20.0


dIXa_VIII=compartme*k1_1_2_20*IXa_VIIIa

# Reaction: id = dTmod, name = dTmod

dTmod=compartme*d_Tmod*Tmod

# Reaction: id = dIIa_Tmod, name = dIIa_Tmod
# Local Parameter:   id =  k1, name = k1
par k1_1_2_21=20.0


dIIa_Tmod=compartme*k1_1_2_21*IIa_Tmod

# Reaction: id = dXa_TFPI, name = dXa_TFPI
# Local Parameter:   id =  k1, name = k1
par k1_1_2_22=20.0


dXa_TFPI=compartme*k1_1_2_22*Xa_TFPI

# Reaction: id = dVIIa_TF_Xa_TFPI, name = dVIIa_TF_Xa_TFPI
# Local Parameter:   id =  k1, name = k1
par k1_1_2_23=20.0


dVIIa_TF_=compartme*k1_1_2_23*VIIa_TF_X

# Reaction: id = dTAT, name = dTAT
# Local Parameter:   id =  k1, name = k1
par k1_1_2_24=0.2


dTAT=compartme*k1_1_2_24*TAT

# Reaction: id = dCA, name = dCA
# Local Parameter:   id =  k1, name = k1
par k1_1_2_25=0.05


dCA=compartme*k1_1_2_25*CA

# Reaction: id = dXIa, name = dXIa
# Local Parameter:   id =  k1, name = k1
par k1_1_2_26=20.0


dXIa=compartme*k1_1_2_26*XIa

# Reaction: id = dVKH2, name = dVKH2

dVKH2=compartme*d_VKH2*VKH2

# Reaction: id = VK_transport, name = VK_transport

VK_transp=compartme*(Vitamin_2*VK-Vitamin_1*VK_p)

# Reaction: id = eHeparin, name = eHeparin

eHeparin=compartme*Heparin_k*ATIII_Hep

# Reaction: id = eHeparinXa, name = eHeparinXa

eHeparinX=compartme*Heparin_k*Xa_ATIII_

# Reaction: id = eHeparinIXa, name = eHeparinIXa

eHeparinI=compartme*Heparin_k*IXa_ATIII

# Reaction: id = eHeparinIIa, name = eHeparinIIa

eHepari_1=compartme*Heparin_k*IIa_ATIII

# Reaction: id = dXI, name = dXI
# Local Parameter:   id =  k1, name = k1
par k1_1_2_27=0.1


dXI=compartme*k1_1_2_27*XI

# Reaction: id = pXII, name = pXII

pXII=compartme*Factor_pr(XII0, d_XII)

# Reaction: id = pVIII, name = pVIII

pVIII=compartme*Factor_pr(VIII0, d_VIII)

# Reaction: id = pXI, name = pXI

pXI=compartme*Factor_pr(XI0, d_XI)

# Reaction: id = pV, name = pV

pV=compartme*Factor_pr(V0, d_V)

# Reaction: id = pFg, name = pFg

pFg=compartme*Factor_pr(Fg0, d_Fg)

# Reaction: id = pXIII, name = pXIII

pXIII=compartme*Factor_pr(XIII0, d_XIII)

# Reaction: id = pPg, name = pPg

pPg=compartme*Factor_pr(Pg0, d_Pg)

# Reaction: id = pTmod, name = pTmod

pTmod=compartme*Factor_pr(Tmod0, d_Tmod)

# Reaction: id = pTFPI, name = pTFPI

pTFPI=compartme*Factor_pr(TFPI0, d_TFPI)

# Reaction: id = pPk, name = pPk

pPk=compartme*Factor_pr(Pk0, d_Pk)

# Reaction: id = pVK, name = pVK

pVK=compartme*Factor_pr(VK0, d_VK)

# Reaction: id = dVK, name = dVK

dVK=compartme*d_VK*VK

# Species:   id = IIa, name = IIa, affected by kineticLaw

init IIa=0.0
dIIa/dt=(1/(compartme))*(( 1.0 * r12) + ( 1.0 * r13) + (-1.0 * r28) + (-1.0 * r44) + (-1.0 * dIIa))

# Species:   id = VIII, name = VIII, affected by kineticLaw

init VIII=0.7
dVIII/dt=(1/(compartme))*((-1.0 * r1_) + (-1.0 * dVIII) + ( 1.0 * pVIII))

# Species:   id = VIIIa, name = VIIIa, affected by kineticLaw

init VIIIa=0.0
dVIIIa/dt=(1/(compartme))*(( 1.0 * r1_) + (-1.0 * r2_) + (-1.0 * r26) + (-1.0 * dVIIIa))

# Species:   id = APC_PS, name = APC_PS, affected by kineticLaw

init APC_PS=0.0
dAPC_PS/dt=(1/(compartme))*(( 1.0 * r37) + (-1.0 * dAPC_PS))

# Species:   id = IX, name = IX, affected by kineticLaw

init IX=89.6
dIX/dt=(1/(compartme))*((-1.0 * r3_) + (-1.0 * r35) + ( 1.0 * pIX_VKH2) + (-1.0 * dIX))

# Species:   id = IXa, name = IXa, affected by kineticLaw

init IXa=0.0
dIXa/dt=(1/(compartme))*(( 1.0 * r3_) + (-1.0 * r26) + ( 1.0 * r35) + (-1.0 * r46) + (-1.0 * dIXa))

# Species:   id = XIa, name = XIa, affected by kineticLaw

init XIa=4.5288
dXIa/dt=(1/(compartme))*(( 1.0 * r4_) + ( 1.0 * r5_) + (-1.0 * dXIa))

# Species:   id = XI, name = XI, affected by kineticLaw

init XI=10.3734
dXI/dt=(1/(compartme))*((-1.0 * r4_) + (-1.0 * r5_) + (-1.0 * dXI) + ( 1.0 * pXI))

# Species:   id = XIIa, name = XIIa, affected by kineticLaw

init XIIa=0.0
dXIIa/dt=(1/(compartme))*(( 1.0 * r41) + ( 1.0 * r42) + (-1.0 * dXIIa))

# Species:   id = VII, name = VII, affected by kineticLaw

init VII=10.0
dVII/dt=(1/(compartme))*((-1.0 * r6_) + (-1.0 * r30) + (-1.0 * r38) + (-1.0 * r39) + (-1.0 * r40) + ( 1.0 * pVII_VKH2) + (-1.0 * dVII))

# Species:   id = VIIa, name = VIIa, affected by kineticLaw

init VIIa=0.0
dVIIa/dt=(1/(compartme))*(( 1.0 * r6_) + (-1.0 * r29) + ( 1.0 * r38) + ( 1.0 * r39) + ( 1.0 * r40) + (-1.0 * dVIIa))

# Species:   id = X, name = X, affected by kineticLaw

init X=174.3
dX/dt=(1/(compartme))*((-1.0 * r7_) + (-1.0 * r8_) + (-1.0 * r9_) + (-1.0 * r34) + ( 1.0 * pX_VKH2) + (-1.0 * dX))

# Species:   id = Xa, name = Xa, affected by kineticLaw

init Xa=0.0
dXa/dt=(1/(compartme))*(( 1.0 * r7_) + ( 1.0 * r8_) + ( 1.0 * r9_) + (-1.0 * r27) + (-1.0 * r32) + ( 1.0 * r34) + (-1.0 * r45) + (-1.0 * dXa))

# Species:   id = IXa_VIIIa, name = IXa_VIIIa, affected by kineticLaw

init IXa_VIIIa=0.0
dIXa_VIIIa/dt=(1/(compartme))*(( 1.0 * r26) + (-1.0 * dIXa_VIII))

# Species:   id = V, name = V, affected by kineticLaw

init V=26.7
dV/dt=(1/(compartme))*((-1.0 * r10) + (-1.0 * dV) + ( 1.0 * pV))

# Species:   id = Va, name = Va, affected by kineticLaw

init Va=0.0
dVa/dt=(1/(compartme))*(( 1.0 * r10) + (-1.0 * r11) + (-1.0 * r27) + (-1.0 * dVa))

# Species:   id = II, name = II, affected by kineticLaw

init II=1394.4
dII/dt=(1/(compartme))*((-1.0 * r12) + (-1.0 * r13) + ( 1.0 * pII_VKH2) + (-1.0 * dII))

# Species:   id = F, name = F, affected by kineticLaw

init F=0.0
dF/dt=(1/(compartme))*(( 1.0 * r14) + (-1.0 * r16) + (-1.0 * r17) + (-1.0 * dF))

# Species:   id = Fg, name = Fg, affected by kineticLaw

init Fg=8945.5
dFg/dt=(1/(compartme))*((-1.0 * r14) + (-1.0 * r15) + (-1.0 * dFg) + ( 1.0 * pFg))

# Species:   id = DP, name = DP, involved in a rule 

# Species:   id = P, name = P, affected by kineticLaw

init P=0.0
dP/dt=(1/(compartme))*(( 1.0 * r21) + ( 1.0 * r22) + ( 1.0 * r23) + (-1.0 * dP_1))

# Species:   id = XF, name = XF, affected by kineticLaw

init XF=0.0
dXF/dt=(1/(compartme))*(( 1.0 * r16) + (-1.0 * r18) + (-1.0 * r19) + (-1.0 * dXF))

# Species:   id = XIII, name = XIII, affected by kineticLaw

init XIII=70.3
dXIII/dt=(1/(compartme))*((-1.0 * r20) + (-1.0 * dXIII) + ( 1.0 * pXIII))

# Species:   id = Pg, name = Pg, affected by kineticLaw

init Pg=2154.3
dPg/dt=(1/(compartme))*((-1.0 * r21) + (-1.0 * r22) + (-1.0 * r23) + (-1.0 * dPg) + ( 1.0 * pPg))

# Species:   id = APC, name = APC, affected by kineticLaw

init APC=0.0
dAPC/dt=(1/(compartme))*(( 1.0 * r24) + (-1.0 * r37) + (-1.0 * dAPC))

# Species:   id = IIa_Tmod, name = IIa_Tmod, affected by kineticLaw

init IIa_Tmod=0.0
dIIa_Tmod/dt=(1/(compartme))*(( 1.0 * r28) + (-1.0 * dIIa_Tmod))

# Species:   id = PC, name = PC, affected by kineticLaw

init PC=60.0
dPC/dt=(1/(compartme))*((-1.0 * r24) + ( 1.0 * pPC_VKH2) + (-1.0 * dPC))

# Species:   id = Tmod, name = Tmod, affected by kineticLaw

init Tmod=50.0
dTmod/dt=(1/(compartme))*((-1.0 * r28) + (-1.0 * dTmod) + ( 1.0 * pTmod))

# Species:   id = TF, name = TF, affected by kineticLaw

init TF=0.0
dTF/dt=(1/(compartme))*((-1.0 * r29) + (-1.0 * r30) + (-1.0 * dTF))

# Species:   id = VIIa_TF, name = VIIa_TF, affected by kineticLaw

init VIIa_TF=0.0
dVIIa_TF/dt=(1/(compartme))*(( 1.0 * r29) + (-1.0 * r31) + ( 1.0 * r33) + ( 1.0 * r36) + (-1.0 * dVIIa_TF))

# Species:   id = VII_TF, name = VII_TF, affected by kineticLaw

init VII_TF=0.0
dVII_TF/dt=(1/(compartme))*(( 1.0 * r30) + (-1.0 * r33) + (-1.0 * r36) + (-1.0 * dVII_TF))

# Species:   id = Xa_TFPI, name = Xa_TFPI, affected by kineticLaw

init Xa_TFPI=0.0
dXa_TFPI/dt=(1/(compartme))*((-1.0 * r31) + ( 1.0 * r32) + (-1.0 * dXa_TFPI))

# Species:   id = TFPI, name = TFPI, affected by kineticLaw

init TFPI=2.5
dTFPI/dt=(1/(compartme))*((-1.0 * r32) + (-1.0 * dTFPI) + ( 1.0 * pTFPI))

# Species:   id = PS, name = PS, affected by kineticLaw

init PS=300.0
dPS/dt=(1/(compartme))*((-1.0 * r37) + ( 1.0 * pPS_VKH2) + (-1.0 * dPS))

# Species:   id = VKH2, name = VKH2, affected by kineticLaw

init VKH2=0.1
dVKH2/dt=(1/(compartme))*(( 1.0 * r47) + (-1.0 * dVKH2))

# Species:   id = Va_Xa, name = Va_Xa, affected by kineticLaw

init Va_Xa=0.0
dVa_Xa/dt=(1/(compartme))*((-1.0 * r25) + ( 1.0 * r27) + (-1.0 * dVa_Xa))

# Species:   id = CA, name = CA, affected by kineticLaw

init CA=0.0
dCA/dt=(1/(compartme))*((-1.0 * dCA))

# Species:   id = XII, name = XII, affected by kineticLaw

init XII=375.0
dXII/dt=(1/(compartme))*((-1.0 * r41) + (-1.0 * r42) + (-1.0 * dXII) + ( 1.0 * pXII))

# Species:   id = K, name = K, affected by kineticLaw

init K=0.0
dK/dt=(1/(compartme))*(( 1.0 * r43) + (-1.0 * dK))

# Species:   id = ATIII_Heparin, name = ATIII_Heparin, affected by kineticLaw

par ATIII_Hep=0.0
aux ATIII_Hep=ATIII_Hep
dATIII_Hep/dt=(1/(compartme))*((-1.0 * r44) + (-1.0 * r45) + (-1.0 * r46) + (-1.0 * eHeparin))

# Species:   id = Xa_ATIII_Heparin, name = Xa_ATIII_Heparin, affected by kineticLaw

par Xa_ATIII_=0.0
aux Xa_ATIII_=Xa_ATIII_
dXa_ATIII_/dt=(1/(compartme))*(( 1.0 * r45) + (-1.0 * eHeparinX))

# Species:   id = VK, name = VK, affected by kineticLaw

init VK=1.0
dVK/dt=(1/(compartme))*((-1.0 * r47) + ( 1.0 * r48) + (-1.0 * VK_transp) + ( 1.0 * pVK) + (-1.0 * dVK))

# Species:   id = C_warf, name = C_warf, involved in a rule 

# Species:   id = VKO, name = VKO, affected by kineticLaw

init VKO=0.1
dVKO/dt=(1/(compartme))*((-1.0 * r48) + ( 1.0 * dVKH2))

# Species:   id = Pk, name = Pk, affected by kineticLaw

init Pk=450.0
dPk/dt=(1/(compartme))*((-1.0 * r43) + (-1.0 * dPk) + ( 1.0 * pPk))

# Species:   id = FDP, name = FDP, affected by kineticLaw

init FDP=0.0
dFDP/dt=(1/(compartme))*(( 1.0 * r15) + ( 1.0 * r17) + ( 1.0 * dFg) + ( 1.0 * dF) + (-1.0 * dFDP))

# Species:   id = D, name = D, affected by kineticLaw

init D=0.0
dD/dt=(1/(compartme))*(( 1.0 * r18) + ( 1.0 * r19) + ( 1.0 * dXF) + (-1.0 * dD))

# Species:   id = TAT, name = TAT, affected by kineticLaw

init TAT=0.0
dTAT/dt=(1/(compartme))*(( 1.0 * dIIa) + (-1.0 * dTAT))

# Species:   id = VIIa_TF_Xa_TFPI, name = VIIa_TF_Xa_TFPI, affected by kineticLaw

par VIIa_TF_X=0.0
aux VIIa_TF_X=VIIa_TF_X
dVIIa_TF_X/dt=(1/(compartme))*(( 1.0 * r31) + (-1.0 * dVIIa_TF_))

# Species:   id = XIIIa, name = XIIIa, affected by kineticLaw

init XIIIa=0.0
dXIIIa/dt=(1/(compartme))*(( 1.0 * r20) + (-1.0 * dXIIIa))

# Species:   id = IIa_ATIII_Heparin, name = IIa_ATIII_Heparin, affected by kineticLaw

par IIa_ATIII=0.0
aux IIa_ATIII=IIa_ATIII
dIIa_ATIII/dt=(1/(compartme))*(( 1.0 * r44) + (-1.0 * eHepari_1))

# Species:   id = A_warf, name = A_warf, involved in a rule 

# Species:   id = IXa_ATIII_Heparin, name = IXa_ATIII_Heparin, affected by kineticLaw

par IXa_ATIII=0.0
aux IXa_ATIII=IXa_ATIII
dIXa_ATIII/dt=(1/(compartme))*(( 1.0 * r46) + (-1.0 * eHeparinI))

# Species:   id = VK_p, name = VK_p, affected by kineticLaw

init VK_p=0.0
dVK_p/dt=(1/(compartme))*(( 1.0 * VK_transp))

# event : clottingTime_event
clottin_1=if ((Integral_*3600) > 1500) then (1.5) else (0.2)
global 1 {clottin_1 - 1.1} {clottingTime_s=t*3600}

# event : dilution_event
dilution_=if (t > 0) then (1.5) else (0.2)
global 1 {dilution_ - 1.1} {compartment_1=compartme*3}

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

