
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Orfao2008_ThrombinGeneration_AmidolyticActivity
#
# is http://identifiers.org/biomodels.db/MODEL1108260000
# is http://identifiers.org/biomodels.db/BIOMD0000000366
# isDescribedBy http://identifiers.org/doi/10.1016/j.jmaa.2008.05.060
# isDerivedFrom http://identifiers.org/biomodels.db/BIOMD0000000358
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = HenriMichaelisMenten_irreversible_kcat, name = Henri-Michaelis-Menten (irreversible) kcat
HenriMich(kcat,enzyme,substrate,Km)=(kcat*enzyme*substrate/(Km+substrate))


# Compartment: id = compartment_1, name = compartment_1, constant
par compartme=1.0

# Parameter:   id =  kcat_X, name = kcat_X, constant
par kcat_X=239.1

# Parameter:   id =  km_X, name = km_X, constant
par km_X=23.65

# Parameter:   id =  ki_Xa, name = ki_Xa, constant
par ki_Xa=4.531

# Parameter:   id =  k_PT, name = k_PT, constant
par k_PT=122.9

# Parameter:   id =  k_PL, name = k_PL, constant
par k_PL=801.4

# Parameter:   id =  kcat_V, name = kcat_V, constant
par kcat_V=7.844

# Parameter:   id =  km_V, name = km_V, constant
par km_V=149.7

# Parameter:   id =  kcat_II, name = kcat_II, constant
par kcat_II=43.87

# Parameter:   id =  km_II, name = km_II, constant
par km_II=62.25

# Parameter:   id =  kcat_2, name = kcat_2, constant
par kcat_2=12.4

# Parameter:   id =  km_2, name = km_2, constant
par km_2=0.06148

# Parameter:   id =  ki_IIaAlpha2M, name = ki_IIaAlpha2M, constant
par ki_IIaAlp=0.1762

# Parameter:   id =  ki_IIaATIII, name = ki_IIaATIII, constant
par ki_IIaATI=0.7859

# Parameter:   id =  AmAct, name = AmAct, defined by a Rule

# assignmentRule: variable = AmAct
AmAct=IIa+0.556*IIa_alpha
aux AmAct=AmAct

# Reaction: id = R1, name = R1

R1=compartme*HenriMich(kcat_X, RVV, X, km_X)

# Reaction: id = R2, name = R2

R2=compartme*ki_Xa*Xa

# Reaction: id = R3, name = R3

R3=compartme*(k_PT*Va*Xa*PL-k_PL*PT)

# Reaction: id = R4, name = R4

R4=compartme*HenriMich(kcat_V, IIa, V, km_V)

# Reaction: id = R5, name = R5

R5=compartme*HenriMich(kcat_II, PT, II, km_II)

# Reaction: id = R6, name = R6

R6=compartme*HenriMich(kcat_2, Xa, II, km_2)

# Reaction: id = R7, name = R7

R7=compartme*ki_IIaAlp*IIa

# Reaction: id = R8, name = R8

R8=compartme*ki_IIaATI*IIa

# Species:   id = X, name = X, affected by kineticLaw

init X=0.1999999
dX/dt=(1/(compartme))*((-1.0 * R1))

# Species:   id = Xa, name = Xa, affected by kineticLaw

init Xa=0.0
dXa/dt=(1/(compartme))*(( 1.0 * R1) + (-1.0 * R2) + (-1.0 * R3))

# Species:   id = Xa_ATIII, name = Xa_ATIII, affected by kineticLaw

init Xa_ATIII=0.0
dXa_ATIII/dt=(1/(compartme))*(( 1.0 * R2))

# Species:   id = PL, name = PL, affected by kineticLaw

init PL=0.04999999
dPL/dt=(1/(compartme))*((-1.0 * R3))

# Species:   id = PT, name = PT, affected by kineticLaw

init PT=0.0
dPT/dt=(1/(compartme))*(( 1.0 * R3))

# Species:   id = Va, name = Va, affected by kineticLaw

init Va=0.0
dVa/dt=(1/(compartme))*((-1.0 * R3) + ( 1.0 * R4))

# Species:   id = IIa, name = IIa, affected by kineticLaw

init IIa=0.0
dIIa/dt=(1/(compartme))*(( 1.0 * R5) + ( 1.0 * R6) + (-1.0 * R7) + (-1.0 * R8))

# Species:   id = V, name = V, affected by kineticLaw

init V=0.02999999
dV/dt=(1/(compartme))*((-1.0 * R4))

# Species:   id = II, name = II, affected by kineticLaw

init II=1.4
dII/dt=(1/(compartme))*((-1.0 * R5) + (-1.0 * R6))

# Species:   id = IIa_alpha2M, name = IIa_alpha2M, affected by kineticLaw

par IIa_alpha=0.0
aux IIa_alpha=IIa_alpha
dIIa_alpha/dt=(1/(compartme))*(( 1.0 * R7))

# Species:   id = IIa_ATIII, name = IIa_ATIII, affected by kineticLaw

init IIa_ATIII=0.0
dIIa_ATIII/dt=(1/(compartme))*(( 1.0 * R8))

# Species:   id = RVV, name = RVV
# Warning species is not changed by either rules or reactions

par RVV=0.03
aux RVV=RVV

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

