
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Smith2013 - Regulation of Insulin Signalling by Oxidative Stress (with events)
#
# is urn:miriam:biomodels.db:MODEL1212210000
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = function_358, name = Constant flux (irreversible)
function_(v)=(v)


# FunctionDefinition id = function_1, name = Function for R1f
functio_1(InR,Ins,cellsurface,extracellular,k1)=(k1*Ins*extracellular*InR*cellsurface)


# FunctionDefinition id = function_2, name = Function for R1r
functio_2(Ins_InR,cellsurface,kminus1)=(kminus1*Ins_InR*cellsurface)


# FunctionDefinition id = function_3, name = Function for R2
functio_3(Ins_InR,cellsurface,k3)=(k3*Ins_InR*cellsurface/cellsurface)


# FunctionDefinition id = function_4, name = Function for R3f
functio_4(Ins,Ins_InR_P,cellsurface,extracellular,k2)=(k2*Ins*extracellular*Ins_InR_P*cellsurface)


# FunctionDefinition id = function_5, name = Function for R3r
functio_5(Ins_2_InR_P,cellsurface,kminus2)=(kminus2*Ins_2_InR_P*cellsurface)


# FunctionDefinition id = function_172, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by SGK
functio_6(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_173, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by SGK
functio_7(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_174, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
functio_8(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_175, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
functio_9(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_176, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
functi_10(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_6, name = Function for R4
functi_11(Ins_InR_P,PTP1B,cellsurface,cytoplasm,kminus3)=(kminus3*PTP1B*cytoplasm*Ins_InR_P*cellsurface/cellsurface)


# FunctionDefinition id = function_7, name = Function for R5f
functi_12(InR,cellsurface,k4)=(k4*InR*cellsurface)


# FunctionDefinition id = function_8, name = Function for R5r
functi_13(cytoplasm,cytoplasm_InR,kminus4)=(kminus4*cytoplasm_InR*cytoplasm)


# FunctionDefinition id = function_9, name = Function for R6f
functi_14(Ins_2_InR_P,cellsurface,k4prime)=(k4prime*Ins_2_InR_P*cellsurface)


# FunctionDefinition id = function_10, name = Function for R6r
functi_15(cytoplasm,cytoplasm_Ins_2_InR_P,kminus4prime)=(kminus4prime*cytoplasm_Ins_2_InR_P*cytoplasm)


# FunctionDefinition id = function_11, name = Function for R7f
functi_16(Ins_InR_P,cellsurface,k4prime)=(k4prime*Ins_InR_P*cellsurface)


# FunctionDefinition id = function_12, name = Function for R7r
functi_17(cytoplasm,cytoplasm_Ins_InR_P,kminus4prime)=(kminus4prime*cytoplasm_Ins_InR_P*cytoplasm)


# FunctionDefinition id = function_13, name = Function for R10
functi_18(PTP1B,cytoplasm,cytoplasm_Ins_2_InR_P,k6)=(k6*PTP1B*cytoplasm*cytoplasm_Ins_2_InR_P*cytoplasm/cytoplasm)


# FunctionDefinition id = function_14, name = Function for R11
functi_19(PTP1B,cytoplasm,cytoplasm_Ins_InR_P,k6)=(k6*PTP1B*cytoplasm*cytoplasm_Ins_InR_P*cytoplasm/cytoplasm)


# FunctionDefinition id = function_15, name = Function for R14f
functi_20(IRS1_TyrP_PI3K,PIP2,cytoplasm,k9,k9_basal)=((k9_basal+k9*IRS1_TyrP_PI3K*cytoplasm)*PIP2*cytoplasm/cytoplasm)


# FunctionDefinition id = function_16, name = Function for R14r
functi_21(PI345P3,PTEN,cytoplasm,kminus9,kminus9_basal)=((kminus9_basal+kminus9*PTEN*cytoplasm)*PI345P3*cytoplasm/cytoplasm)


# FunctionDefinition id = function_17, name = Function for R16f
functi_22(Akt,PI345P3,cytoplasm,k11,pip3_basal)=(k11*Akt*cytoplasm*piecewise(PI345P3*cytoplasm-pip3_basal,(PI345P3*cytoplasm) > pip3_basal,0)/cytoplasm)


# FunctionDefinition id = function_18, name = Function for R16r
functi_23(Akt_P2,PP2A,cytoplasm,kminus11)=(kminus11*PP2A*cytoplasm*Akt_P2*cytoplasm/cytoplasm)


# FunctionDefinition id = function_19, name = Function for R16a_f
functi_24(AS160,Akt_P2,cytoplasm,kr16a)=(kr16a*Akt_P2*cytoplasm*AS160*cytoplasm/cytoplasm)


# FunctionDefinition id = function_20, name = Function for R16a_r
functi_25(AS160_P,PP2A,cytoplasm,kminusr16a)=(kminusr16a*PP2A*cytoplasm*AS160_P*cytoplasm/cytoplasm)


# FunctionDefinition id = function_21, name = Function for R17f
functi_26(PI345P3,PKC,cytoplasm,k12,pip3_basal)=(k12*PKC*cytoplasm*piecewise(PI345P3*cytoplasm-pip3_basal,(PI345P3*cytoplasm) > pip3_basal,0)/cytoplasm)


# FunctionDefinition id = function_22, name = Function for R17r
functi_27(PKC_P,PP2A,cytoplasm,kminus12)=(kminus12*PP2A*cytoplasm*PKC_P*cytoplasm/cytoplasm)


# FunctionDefinition id = function_23, name = Function for R20f
functi_28(AS160_P,cytoplasm,cytoplasm_GLUT4,k13,k13_basal)=((k13_basal+k13*AS160_P*cytoplasm)*cytoplasm_GLUT4*cytoplasm)


# FunctionDefinition id = function_24, name = Function for R20r
functi_29(cellsurface,cellsurface_GLUT4,kminus13)=(kminus13*cellsurface_GLUT4*cellsurface)


# FunctionDefinition id = function_25, name = Function for R30f
functi_30(PTP1B,ROS,cytoplasm,k30f)=(k30f*PTP1B*cytoplasm*ROS*cytoplasm/cytoplasm)


# FunctionDefinition id = function_26, name = Function for R30r
functi_31(GSH,PTP1B_ox,cytoplasm,k30r)=(k30r*PTP1B_ox*cytoplasm*GSH*cytoplasm/cytoplasm)


# FunctionDefinition id = function_27, name = Function for R31f
functi_32(PTEN,ROS,cytoplasm,k31f)=(k31f*PTEN*cytoplasm*ROS*cytoplasm/cytoplasm)


# FunctionDefinition id = function_28, name = Function for R31r
functi_33(GSH,PTEN_ox,cytoplasm,k31r)=(k31r*PTEN_ox*cytoplasm*GSH*cytoplasm/cytoplasm)


# FunctionDefinition id = function_29, name = Function for R34f
functi_34(Ins,NOX_inact,cytoplasm,extracellular,k34f)=(k34f*NOX_inact*cytoplasm*Ins*extracellular)


# FunctionDefinition id = function_30, name = Function for R34r1
functi_35(NOX,cytoplasm,k34r1)=(k34r1*NOX*cytoplasm*NOX*cytoplasm/cytoplasm)


# FunctionDefinition id = function_31, name = Function for R34r2
functi_36(NOX,cytoplasm,k34r2)=(k34r2*NOX*cytoplasm/cytoplasm)


# FunctionDefinition id = function_32, name = Function for R34r3
functi_37(NOX_deact,cytoplasm,k34r3)=(k34r3*NOX_deact*cytoplasm*NOX_deact*cytoplasm/cytoplasm)


# FunctionDefinition id = function_33, name = Function for R35f
functi_38(NOX,cytoplasm,k35f)=(k35f*NOX*cytoplasm/cytoplasm)


# FunctionDefinition id = function_34, name = Function for R35r
functi_39(ROS,cytoplasm,cytoplasm_SOD2,k35r)=(k35r*ROS*cytoplasm*cytoplasm_SOD2*cytoplasm/cytoplasm)


# FunctionDefinition id = function_35, name = Function for R36f
functi_40(Mt,cytoplasm,k36f)=(k36f*Mt*cytoplasm/cytoplasm)


# FunctionDefinition id = function_36, name = Function for R37f
functi_41(extracellular,extracellular_ROS,k_ros_perm)=(k_ros_perm*extracellular_ROS*extracellular)


# FunctionDefinition id = function_37, name = Function for R37r
functi_42(ROS,cytoplasm,extracellular,k_ros_perm)=(k_ros_perm*extracellular/cytoplasm*ROS*cytoplasm)


# FunctionDefinition id = function_38, name = Function for R38f
functi_43(GSH,ROS,cytoplasm,k38f)=(k38f*GSH*cytoplasm*ROS*cytoplasm/cytoplasm)


# FunctionDefinition id = function_39, name = Function for R38r
functi_44(GSSG,cytoplasm,k38r)=(k38r*GSSG*cytoplasm/cytoplasm)


# FunctionDefinition id = function_40, name = Function for R12f
functi_45(IRS1,IRp,Ins_2_InR_P,Ins_InR_P,cellsurface,cyto_vol,cytoplasm,k7)=(cyto_vol*k7*IRS1*cytoplasm*(Ins_2_InR_P*cellsurface+Ins_InR_P*cellsurface)/IRp/cytoplasm)


# FunctionDefinition id = function_41, name = Function for R12r
functi_46(IRS1_TyrP,PTP1B,cyto_vol,cytoplasm,kminus7a)=(cyto_vol*kminus7a*PTP1B*cytoplasm*IRS1_TyrP*cytoplasm/cytoplasm)


# FunctionDefinition id = function_42, name = Function for R12_a_f
functi_47(IRS1,PKC_P,cyto_vol,cytoplasm,k2psp)=(cyto_vol*k2psp*IRS1*cytoplasm*PKC_P*cytoplasm/cytoplasm)


# FunctionDefinition id = function_43, name = Function for R12_a_r
functi_48(IRS1_PolySerP,PP2A,cyto_vol,cytoplasm,kminus7b)=(cyto_vol*kminus7b*PP2A*cytoplasm*IRS1_PolySerP*cytoplasm/cytoplasm)


# FunctionDefinition id = function_44, name = Function for R12_b_f
functi_49(IRS1_TyrP,PKC_P,cyto_vol,cytoplasm,k2psp)=(cyto_vol*k2psp*IRS1_TyrP*cytoplasm*PKC_P*cytoplasm/cytoplasm)


# FunctionDefinition id = function_45, name = Function for R12_b_r
functi_50(IRS1_TyrP_PolySerP,PP2A,cyto_vol,cytoplasm,kminus7b)=(cyto_vol*kminus7b*PP2A*cytoplasm*IRS1_TyrP_PolySerP*cytoplasm/cytoplasm)


# FunctionDefinition id = function_46, name = Function for R13f
functi_51(IRS1_TyrP,PI3K,cyto_vol,cytoplasm,k8)=(cyto_vol*k8*IRS1_TyrP*cytoplasm*PI3K*cytoplasm/cytoplasm)


# FunctionDefinition id = function_47, name = Function for R13r
functi_52(IRS1_TyrP_PI3K,cyto_vol,cytoplasm,kminus8)=(cyto_vol*kminus8*IRS1_TyrP_PI3K*cytoplasm/cytoplasm)


# FunctionDefinition id = function_48, name = Function for R50f
functi_53(cytoplasm,k_irs1_basal_syn)=(k_irs1_basal_syn/cytoplasm)


# FunctionDefinition id = function_49, name = Function for R50r1
functi_54(IRS1,cytoplasm,k_irs1_basal_degr)=(IRS1*cytoplasm*k_irs1_basal_degr/cytoplasm)


# FunctionDefinition id = function_50, name = Function for R50r2
functi_55(IRS1_TyrP,cytoplasm,k_irs1_basal_degr)=(IRS1_TyrP*cytoplasm*k_irs1_basal_degr/cytoplasm)


# FunctionDefinition id = function_51, name = Function for R50r3
functi_56(IRS1_PolySerP,cytoplasm,k_irs1_polyserp_degr)=(IRS1_PolySerP*cytoplasm*k_irs1_polyserp_degr/cytoplasm)


# FunctionDefinition id = function_52, name = Function for R50r4
functi_57(IRS1_TyrP_PolySerP,cytoplasm,k_irs1_polyserp_degr)=(IRS1_TyrP_PolySerP*cytoplasm*k_irs1_polyserp_degr/cytoplasm)


# FunctionDefinition id = function_53, name = Function for R51f
functi_58(IKK_P,IRS1,Km51,cytoplasm,kcat51)=(kcat51*IRS1*cytoplasm*IKK_P*cytoplasm/(Km51+IRS1*cytoplasm)/cytoplasm)


# FunctionDefinition id = function_54, name = Function for R52f
functi_59(IRS1,JNK_P,Km52,cytoplasm,kcat52)=(kcat52*IRS1*cytoplasm*JNK_P*cytoplasm/(Km52+IRS1*cytoplasm)/cytoplasm)


# FunctionDefinition id = function_55, name = Function for R42f
functi_60(JNK,ROS,alpha_ox,cytoplasm,k42f)=(k42f*alpha_ox*JNK*cytoplasm*ROS*cytoplasm/cytoplasm)


# FunctionDefinition id = function_56, name = Function for R42r
functi_61(DUSP,JNK_P,cytoplasm,k42r)=(k42r*JNK_P*cytoplasm*DUSP*cytoplasm/cytoplasm)


# FunctionDefinition id = function_57, name = Function for R43f
functi_62(IKK,ROS,cytoplasm,k43f)=(k43f*IKK*cytoplasm*ROS*cytoplasm/cytoplasm)


# FunctionDefinition id = function_58, name = Function for R43r
functi_63(DUSP,IKK_P,cytoplasm,k43r)=(k43r*IKK_P*cytoplasm*DUSP*cytoplasm/cytoplasm)


# FunctionDefinition id = function_59, name = Function for R32f
functi_64(DUSP,ROS,cytoplasm,k32f)=(k32f*DUSP*cytoplasm*ROS*cytoplasm/cytoplasm)


# FunctionDefinition id = function_60, name = Function for R32r
functi_65(DUSP_ox,GSH,cytoplasm,k32r)=(k32r*DUSP_ox*cytoplasm*GSH*cytoplasm/cytoplasm)


# FunctionDefinition id = function_61, name = Function for Synthesis
functi_66(E2F1,cytoplasm,ksynth)=(E2F1*cytoplasm*ksynth/cytoplasm)


# FunctionDefinition id = function_62, name = Function for transport cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0
functi_67(cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0,ktr)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_63, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0
functi_68(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_64, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0
functi_69(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_65, name = Function for transport dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0
functi_70(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,ktr)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*ktr)


# FunctionDefinition id = function_66, name = Function for transport cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1
functi_71(cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1,ktr)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_67, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1
functi_72(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_68, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1
functi_73(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_69, name = Function for transport dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1
functi_74(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,ktr)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*ktr)


# FunctionDefinition id = function_70, name = Function for transport cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0
functi_75(cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0,ktr)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_71, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0
functi_76(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_72, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0
functi_77(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_73, name = Function for transport dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0
functi_78(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,ktr)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*ktr)


# FunctionDefinition id = function_74, name = Function for transport cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1
functi_79(cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1,ktr)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_75, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1
functi_80(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_76, name = Function for transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1
functi_81(ktr,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_77, name = Function for transport dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1
functi_82(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,ktr)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*ktr)


# FunctionDefinition id = function_78, name = Function for transport cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0
functi_83(cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0,ktr)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_79, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0
functi_84(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_80, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0
functi_85(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_81, name = Function for transport dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0
functi_86(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,ktr)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*ktr)


# FunctionDefinition id = function_82, name = Function for transport cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1
functi_87(cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1,ktr)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_83, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1
functi_88(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_84, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1
functi_89(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_85, name = Function for transport dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1
functi_90(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,ktr)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*ktr)


# FunctionDefinition id = function_86, name = Function for transport cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0
functi_91(cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0,ktr)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_87, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0
functi_92(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_88, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0
functi_93(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_89, name = Function for transport dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0
functi_94(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,ktr)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*ktr)


# FunctionDefinition id = function_90, name = Function for transport cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1
functi_95(cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1,ktr)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_91, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1
functi_96(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_92, name = Function for transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1
functi_97(ktr,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_93, name = Function for transport dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1
functi_98(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,ktr)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*ktr)


# FunctionDefinition id = function_94, name = Function for transport cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0
functi_99(cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0,ktr)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_95, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0
func_100(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_96, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0
func_101(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_97, name = Function for transport dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0
func_102(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,ktr)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*ktr)


# FunctionDefinition id = function_98, name = Function for transport cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1
func_103(cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1,ktr)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_99, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1
func_104(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_100, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1
func_105(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_101, name = Function for transport dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1
func_106(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1,ktr)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1*dnabound*ktr)


# FunctionDefinition id = function_102, name = Function for transport cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0
func_107(cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0,ktr)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_103, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0
func_108(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_104, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0
func_109(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_105, name = Function for transport dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0
func_110(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,ktr)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*ktr)


# FunctionDefinition id = function_106, name = Function for transport cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1
func_111(cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1,ktr)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_107, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1
func_112(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_108, name = Function for transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1
func_113(ktr,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_109, name = Function for transport dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1
func_114(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1,ktr)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1*dnabound*ktr)


# FunctionDefinition id = function_110, name = Function for transport cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0
func_115(cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0,ktr)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_111, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0
func_116(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_112, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0
func_117(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0*nucleus*ktr)


# FunctionDefinition id = function_113, name = Function for transport dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0
func_118(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,ktr)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*ktr)


# FunctionDefinition id = function_114, name = Function for transport cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1
func_119(cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1,ktr)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_115, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1
func_120(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_116, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1
func_121(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1*nucleus*ktr)


# FunctionDefinition id = function_117, name = Function for transport dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1
func_122(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1,ktr)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1*dnabound*ktr)


# FunctionDefinition id = function_118, name = Function for transport cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0
func_123(cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0,ktr)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0*cytoplasm*ktr)


# FunctionDefinition id = function_119, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0
func_124(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_120, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0
func_125(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0*nucleus*ktr)


# FunctionDefinition id = function_121, name = Function for transport dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0
func_126(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,ktr)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*ktr)


# FunctionDefinition id = function_122, name = Function for transport cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1
func_127(cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1,ktr)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1*cytoplasm*ktr)


# FunctionDefinition id = function_123, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1
func_128(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_124, name = Function for transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1
func_129(ktr,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1*nucleus*ktr)


# FunctionDefinition id = function_125, name = Function for transport dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1
func_130(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1,ktr)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1*dnabound*ktr)


# FunctionDefinition id = function_126, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by Akt_P2
func_131(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_127, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by Akt_P2
func_132(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_128, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by Akt_P2
func_133(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_129, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by Akt_P2
func_134(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_130, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by Akt_P2
func_135(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_131, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by Akt_P2
func_136(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_132, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by Akt_P2
func_137(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_133, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by Akt_P2
func_138(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_134, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by Akt_P2
func_139(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_135, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by Akt_P2
func_140(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_136, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by Akt_P2
func_141(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_137, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by Akt_P2
func_142(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_138, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by Akt_P2
func_143(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_139, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by Akt_P2
func_144(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_140, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by Akt_P2
func_145(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_141, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by Akt_P2
func_146(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_142, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by Akt_P2
func_147(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_143, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by Akt_P2
func_148(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_144, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by Akt_P2
func_149(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_145, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by Akt_P2
func_150(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_146, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by Akt_P2
func_151(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_147, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by Akt_P2
func_152(Akt_P2,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1*cytoplasm*Akt_P2*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_148, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by Akt_P2
func_153(Akt_P2,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1*nucleus*Akt_P2*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_149, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by Akt_P2
func_154(Akt_P2,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*Akt_P2*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_150, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by SGK
func_155(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_151, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by SGK
func_156(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_152, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by SGK
func_157(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_153, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by SGK
func_158(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_154, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by SGK
func_159(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_155, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by SGK
func_160(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_156, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by SGK
func_161(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_157, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by SGK
func_162(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_158, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by SGK
func_163(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_159, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by SGK
func_164(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_160, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by SGK
func_165(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_161, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by SGK
func_166(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_162, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by SGK
func_167(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_163, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by SGK
func_168(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_164, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by SGK
func_169(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_165, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by SGK
func_170(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_166, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by SGK
func_171(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_167, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by SGK
func_172(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_168, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by SGK
func_173(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_169, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by SGK
func_174(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*SGK*cytoplasm*kkin/nucleus)


# FunctionDefinition id = function_170, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by SGK
func_175(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*SGK*cytoplasm*kkin/dnabound)


# FunctionDefinition id = function_171, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by SGK
func_176(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = function_177, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_177(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_178, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_178(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_179, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_179(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_180, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
func_180(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_181, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
func_181(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_182, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
func_182(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_183, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
func_183(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_184, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
func_184(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_185, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
func_185(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_186, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
func_186(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_187, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
func_187(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_188, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
func_188(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_189, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
func_189(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_190, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
func_190(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_191, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
func_191(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_192, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 by PP2A
func_192(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_193, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 by PP2A
func_193(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_194, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 by PP2A
func_194(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_195, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by PP2A
func_195(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_196, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by PP2A
func_196(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_197, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by PP2A
func_197(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_198, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 by IKK_P
func_198(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_199, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 by IKK_P
func_199(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_200, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 by IKK_P
func_200(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_201, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by IKK_P
func_201(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_202, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by IKK_P
func_202(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_203, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by IKK_P
func_203(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_204, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 by IKK_P
func_204(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_205, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 by IKK_P
func_205(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_206, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 by IKK_P
func_206(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_207, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by IKK_P
func_207(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_208, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by IKK_P
func_208(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_209, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by IKK_P
func_209(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_210, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
func_210(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0,kdephos)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_211, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
func_211(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_212, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
func_212(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,kdephos)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_213, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_213(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1,kdephos)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_214, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_214(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_215, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_215(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,kdephos)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_216, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
func_216(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_217, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
func_217(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_218, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
func_218(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_219, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
func_219(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_220, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
func_220(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_221, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
func_221(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_222, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by IKK_P
func_222(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_223, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by IKK_P
func_223(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_224, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by IKK_P
func_224(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_225, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by IKK_P
func_225(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_226, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by IKK_P
func_226(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_227, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by IKK_P
func_227(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_228, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by IKK_P
func_228(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0,kkin)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_229, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by IKK_P
func_229(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_230, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by IKK_P
func_230(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,kkin)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_231, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by IKK_P
func_231(IKK_P,by_ikk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1,kkin)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1*cytoplasm*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_232, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by IKK_P
func_232(IKK_P,by_ikk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1*nucleus*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_233, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by IKK_P
func_233(IKK_P,by_ikk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1,kkin)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1*dnabound*IKK_P*cytoplasm*by_ikk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_234, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
func_234(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_235, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
func_235(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_236, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
func_236(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_237, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
func_237(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_238, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
func_238(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_239, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
func_239(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_240, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by PP2A
func_240(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_241, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by PP2A
func_241(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_242, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by PP2A
func_242(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_243, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by PP2A
func_243(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_244, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by PP2A
func_244(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_245, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by PP2A
func_245(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_246, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 by JNK_P
func_246(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_247, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 by JNK_P
func_247(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_248, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 by JNK_P
func_248(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_249, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by JNK_P
func_249(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_250, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by JNK_P
func_250(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_251, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by JNK_P
func_251(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_252, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
func_252(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_253, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
func_253(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_254, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
func_254(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_255, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_255(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_256, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_256(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_257, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
func_257(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_258, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 by JNK_P
func_258(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_259, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 by JNK_P
func_259(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_260, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 by JNK_P
func_260(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_261, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by JNK_P
func_261(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_262, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by JNK_P
func_262(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_263, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by JNK_P
func_263(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_264, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
func_264(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_265, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
func_265(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_266, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
func_266(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_267, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
func_267(PP2A,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_268, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
func_268(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_269, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
func_269(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_270, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by JNK_P
func_270(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_271, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by JNK_P
func_271(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_272, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by JNK_P
func_272(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_273, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by JNK_P
func_273(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_274, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by JNK_P
func_274(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_275, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by JNK_P
func_275(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_276, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
func_276(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_277, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
func_277(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_278, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
func_278(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_279, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
func_279(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_280, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
func_280(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_281, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
func_281(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_282, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by JNK_P
func_282(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0,kkin)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_283, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by JNK_P
func_283(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_284, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by JNK_P
func_284(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,kkin)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_285, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by JNK_P
func_285(JNK_P,by_jnk_phos_factor,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1,kkin)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1*cytoplasm*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/cytoplasm)


# FunctionDefinition id = function_286, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by JNK_P
func_286(JNK_P,by_jnk_phos_factor,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1*nucleus*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/nucleus)


# FunctionDefinition id = function_287, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by JNK_P
func_287(JNK_P,by_jnk_phos_factor,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1,kkin)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1*dnabound*JNK_P*cytoplasm*by_jnk_phos_factor*kkin/dnabound)


# FunctionDefinition id = function_288, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by PP2A
func_288(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_289, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by PP2A
func_289(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_290, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by PP2A
func_290(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_291, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by PP2A
func_291(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = function_292, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by PP2A
func_292(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1*nucleus*PP2A*cytoplasm*kdephos/nucleus)


# FunctionDefinition id = function_293, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by PP2A
func_293(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1,kdephos)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1*dnabound*PP2A*cytoplasm*kdephos/dnabound)


# FunctionDefinition id = function_294, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by SCF
func_294(SCF,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0,kub)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_295, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by SCF
func_295(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_296, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by SCF
func_296(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,kub)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_297, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by SCF
func_297(SCF,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0,kub)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_298, name = Function for conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by SCF
func_298(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_299, name = Function for conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by SCF
func_299(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,kub)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_300, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by SCF
func_300(SCF,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0,kub)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_301, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by SCF
func_301(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_302, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by SCF
func_302(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,kub)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_303, name = Function for conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by SCF
func_303(SCF,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0,kub)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_304, name = Function for conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by SCF
func_304(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_305, name = Function for conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by SCF
func_305(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,kub)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_306, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by SCF
func_306(SCF,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0,kub)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_307, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by SCF
func_307(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_308, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by SCF
func_308(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,kub)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_309, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by SCF
func_309(SCF,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0,kub)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_310, name = Function for conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by SCF
func_310(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_311, name = Function for conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by SCF
func_311(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,kub)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_312, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by SCF
func_312(SCF,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0,kub)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_313, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by SCF
func_313(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_314, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by SCF
func_314(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,kub)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_315, name = Function for conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by SCF
func_315(SCF,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0,kub)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = function_316, name = Function for conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by SCF
func_316(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0)=(nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0*nucleus*SCF*cytoplasm*kub/nucleus)


# FunctionDefinition id = function_317, name = Function for conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by SCF
func_317(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,kub)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*SCF*cytoplasm*kub/dnabound)


# FunctionDefinition id = function_318, name = Function for degradation of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1
func_318(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1,kdeg)=(cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_319, name = Function for degradation of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1
func_319(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1,kdeg)=(cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_320, name = Function for degradation of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1
func_320(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1,kdeg)=(cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_321, name = Function for degradation of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1
func_321(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1,kdeg)=(cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_322, name = Function for degradation of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1
func_322(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1,kdeg)=(cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_323, name = Function for degradation of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1
func_323(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1,kdeg)=(cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_324, name = Function for degradation of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1
func_324(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1,kdeg)=(cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_325, name = Function for degradation of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1
func_325(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1,kdeg)=(cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = function_326, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0
func_326(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_327, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0
func_327(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_328, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1
func_328(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_329, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1
func_329(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_330, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0
func_330(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_331, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0
func_331(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_332, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1
func_332(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_333, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1
func_333(dnabound,dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_334, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0
func_334(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_335, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0
func_335(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_336, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1
func_336(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_337, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1
func_337(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_338, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0
func_338(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_339, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0
func_339(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_340, name = Function for transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1
func_340(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_341, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1
func_341(dnabound,dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_342, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0
func_342(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_343, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0
func_343(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_344, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1
func_344(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_345, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1
func_345(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_346, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0
func_346(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_347, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0
func_347(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_348, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1
func_348(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_349, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1
func_349(dnabound,dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_350, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0
func_350(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_351, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0
func_351(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_352, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1
func_352(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_353, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1
func_353(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_354, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0
func_354(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_355, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0
func_355(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = function_356, name = Function for transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1
func_356(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_357, name = Function for transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1
func_357(dnabound,dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = function_359, name = Function for export of InR RNA
func_358(kexp,nucleus,nucleus_RNA_InR)=(nucleus_RNA_InR*nucleus*kexp)


# FunctionDefinition id = function_360, name = Function for cyto degr of InR RNA
func_359(cytoplasm,cytoplasm_RNA_InR,kmdeg)=(cytoplasm_RNA_InR*cytoplasm*kmdeg/cytoplasm)


# FunctionDefinition id = function_361, name = Function for translation of InR
func_360(cytoplasm,cytoplasm_RNA_InR,ktransl)=(cytoplasm_RNA_InR*cytoplasm*ktransl/cytoplasm)


# FunctionDefinition id = function_362, name = Function for degradation of InR protein
func_361(cytoplasm,cytoplasm_InR,kpdeg)=(cytoplasm_InR*cytoplasm*kpdeg/cytoplasm)


# FunctionDefinition id = function_363, name = Function for export of SOD2 RNA
func_362(kexp,nucleus,nucleus_RNA_SOD2)=(nucleus_RNA_SOD2*nucleus*kexp)


# FunctionDefinition id = function_364, name = Function for cyto degr of SOD2 RNA
func_363(cytoplasm,cytoplasm_RNA_SOD2,kmdeg)=(cytoplasm_RNA_SOD2*cytoplasm*kmdeg/cytoplasm)


# FunctionDefinition id = function_365, name = Function for translation of SOD2
func_364(cytoplasm,cytoplasm_RNA_SOD2,ktransl)=(cytoplasm_RNA_SOD2*cytoplasm*ktransl/cytoplasm)


# FunctionDefinition id = function_366, name = Function for degradation of SOD2 protein
func_365(cytoplasm,cytoplasm_SOD2,kpdeg)=(cytoplasm_SOD2*cytoplasm*kpdeg/cytoplasm)


# Compartment: id = extracellular, name = extracellular, constant
par extracell=8.3E-12

# Compartment: id = cellsurface, name = cellsurface, constant
par cellsurfa=6.4E-14

# Compartment: id = cytoplasm, name = cytoplasm, constant
par cytoplasm=1.65E-11

# Compartment: id = nucleus, name = nucleus, constant
par nucleus=5.0E-13

# Compartment: id = dnabound, name = dnabound, constant
par dnabound=1.0E-13

# Parameter:   id =  k1, name = k1, constant
par k1=2.0E-5

# Parameter:   id =  kminus1, name = kminus1, constant
par kminus1=12072.0

# Parameter:   id =  k2, name = k2, constant
par k2=1.2E-5

# Parameter:   id =  kminus2, name = kminus2, constant
par kminus2=90000.0

# Parameter:   id =  k3, name = k3, constant
par k3=2500.0

# Parameter:   id =  kminus3, name = kminus3, constant
par kminus3=2.0E-6

# Parameter:   id =  k4, name = k4, constant
par k4=0.033333334

# Parameter:   id =  kminus4, name = kminus4, constant
par kminus4=0.3

# Parameter:   id =  k4prime, name = k4prime, constant
par k4prime=0.0021

# Parameter:   id =  kminus4prime, name = kminus4prime, constant
par kminus4pr=2.1E-4

# Parameter:   id =  k6, name = k6, constant
par k6=4.61E-6

# Parameter:   id =  cellsurf_vol, name = cellsurf_vol, constant
par cellsurf_=1.0

# Parameter:   id =  cyto_vol, name = cyto_vol, constant
par cyto_vol=1.0

# Parameter:   id =  vextracellular, name = vextracellular, constant
par vextracel=8.3E-12

# Parameter:   id =  vcellsurface, name = vcellsurface, constant
par vcellsurf=6.4E-14

# Parameter:   id =  vcytoplasm, name = vcytoplasm, constant
par vcytoplas=1.65E-11

# Parameter:   id =  navo, name = navo, constant
par navo=6.02E23

# Parameter:   id =  insconc, name = insconc, defined by a Rule

# Parameter:   id =  k9_basal, name = k9_basal, constant
par k9_basal=0.13145

# Parameter:   id =  k9, name = k9, constant
par k9=0.0055

# Parameter:   id =  kminus9_basal, name = kminus9_basal, constant
par kminus9_b=2.7

# Parameter:   id =  kminus9, name = kminus9, constant
par kminus9=0.0014

# Parameter:   id =  k11, name = k11, constant
par k11=2.5E-5

# Parameter:   id =  kminus11, name = kminus11, constant
par kminus11=1.1878E-6

# Parameter:   id =  k12, name = k12, constant
par k12=3.5E-5

# Parameter:   id =  kminus12, name = kminus12, constant
par kminus12=1.25E-6

# Parameter:   id =  kr16a, name = kr16a, constant
par kr16a=3.33E-4

# Parameter:   id =  kminusr16a, name = kminusr16a, constant
par kminusr16=1.0E-6

# Parameter:   id =  k13_basal, name = k13_basal, constant
par k13_basal=0.015

# Parameter:   id =  k13, name = k13, constant
par k13=7.5E-6

# Parameter:   id =  kminus13, name = kminus13, constant
par kminus13=0.167

# Parameter:   id =  k14, name = k14, constant
par k14=110.88

# Parameter:   id =  kminus14, name = kminus14, constant
par kminus14=0.001155

# Parameter:   id =  sc_pip, name = sc_pip, constant
par sc_pip=1000.0

# Parameter:   id =  pip3_basal, name = pip3_basal, constant
par pip3_basa=200.0

# Parameter:   id =  k30f, name = k30f, constant
par k30f=0.08

# Parameter:   id =  k30r, name = k30r, constant
par k30r=0.005

# Parameter:   id =  k31f, name = k31f, constant
par k31f=2.7E-4

# Parameter:   id =  k31r, name = k31r, constant
par k31r=0.002

# Parameter:   id =  k34f, name = k34f, constant
par k34f=2.0E-5

# Parameter:   id =  k34r1, name = k34r1, constant
par k34r1=0.001

# Parameter:   id =  k34r2, name = k34r2, constant
par k34r2=0.25

# Parameter:   id =  k34r3, name = k34r3, constant
par k34r3=0.001

# Parameter:   id =  k35f, name = k35f, constant
par k35f=450.0

# Parameter:   id =  k35r, name = k35r, constant
par k35r=0.12

# Parameter:   id =  k36f, name = k36f, constant
par k36f=180.0

# Parameter:   id =  k_ros_perm, name = k_ros_perm, defined by a Rule

# Parameter:   id =  ros_perm, name = ros_perm, constant
par ros_perm=7.4E8

# Parameter:   id =  membrane_area, name = membrane_area, constant
par membrane_=6.5E-9

# Parameter:   id =  k38r, name = k38r, constant
par k38r=2.0

# Parameter:   id =  k38f, name = k38f, constant
par k38f=0.05

# Parameter:   id =  ros_ext_conc, name = ros_ext_conc, defined by a Rule

# Parameter:   id =  ros_cyto_conc, name = ros_cyto_conc, defined by a Rule

# Parameter:   id =  sc_ros, name = sc_ros, constant
par sc_ros=1000.0

# Parameter:   id =  k7, name = k7, constant
par k7=5.8

# Parameter:   id =  kminus7a, name = kminus7a, constant
par kminus7a=8.75E-5

# Parameter:   id =  kminus7b, name = kminus7b, constant
par kminus7b=2.8E-6

# Parameter:   id =  k8, name = k8, constant
par k8=2.6E-6

# Parameter:   id =  kminus8, name = kminus8, constant
par kminus8=1.55

# Parameter:   id =  IRp, name = IRp, constant
par IRp=90000.0

# Parameter:   id =  molec_per_fm, name = molec_per_fm, constant
par molec_per=6.02E8

# Parameter:   id =  k2psp, name = k2psp, constant
par k2psp=2.2E-4

# Parameter:   id =  kcat82, name = kcat82, constant
par kcat82=3.0

# Parameter:   id =  Km82, name = Km82, constant
par Km82=100.0

# Parameter:   id =  k_irs1_basal_syn, name = k_irs1_basal_syn, constant
par k_irs1_ba=260.0

# Parameter:   id =  k_irs1_basal_degr, name = k_irs1_basal_degr, constant
par k_irs1__1=0.001

# Parameter:   id =  k_irs1_polyserp_degr, name = k_irs1_polyserp_degr, constant
par k_irs1_po=0.01

# Parameter:   id =  kcat51, name = kcat51, constant
par kcat51=0.87

# Parameter:   id =  kcat52, name = kcat52, constant
par kcat52=6.95

# Parameter:   id =  Km51, name = Km51, constant
par Km51=100.0

# Parameter:   id =  Km52, name = Km52, constant
par Km52=100.0

# Parameter:   id =  k42f, name = k42f, constant
par k42f=5.0E-5

# Parameter:   id =  k42r, name = k42r, constant
par k42r=5.0E-7

# Parameter:   id =  k43f, name = k43f, constant
par k43f=5.0E-5

# Parameter:   id =  k43r, name = k43r, constant
par k43r=5.0E-7

# Parameter:   id =  alpha_ox, name = alpha_ox, constant
par alpha_ox=5.0

# Parameter:   id =  k32f, name = k32f, constant
par k32f=6.0E-4

# Parameter:   id =  k32r, name = k32r, constant
par k32r=4.0E-4

# Parameter:   id =  rosconc, name = rosconc, defined by a Rule

# Parameter:   id =  by_jnk_phos_factor, name = by_jnk_phos_factor, constant
par by_jnk_ph=2.0

# Parameter:   id =  by_ikk_phos_factor, name = by_ikk_phos_factor, constant
par by_ikk_ph=3.0

# assignmentRule: variable = insconc
insconc=Ins*extracell/(navo*vextracel)
aux insconc=insconc

# assignmentRule: variable = nucleus_Foxo1_tot
nucleu_16=(nucleus_F*nucleus+nucleus_1*nucleus+nucleus_2*nucleus+nucleus_3*nucleus+nucleus_4*nucleus+nucleus_5*nucleus+nucleus_6*nucleus+nucleus_7*nucleus+nucleus_8*nucleus+nucleus_9*nucleus+nucleu_10*nucleus+nucleu_11*nucleus+nucleu_12*nucleus+nucleu_13*nucleus+nucleu_14*nucleus+nucleu_15*nucleus)/extracell
aux nucleu_16=nucleu_16

# assignmentRule: variable = dnabound_Foxo1_tot
dnabou_16=(dnabound_*dnabound+dnaboun_1*dnabound+dnaboun_2*dnabound+dnaboun_3*dnabound+dnaboun_4*dnabound+dnaboun_5*dnabound+dnaboun_6*dnabound+dnaboun_7*dnabound+dnaboun_8*dnabound+dnaboun_9*dnabound+dnabou_10*dnabound+dnabou_11*dnabound+dnabou_12*dnabound+dnabou_13*dnabound+dnabou_14*dnabound+dnabou_15*dnabound)/extracell
aux dnabou_16=dnabou_16

# assignmentRule: variable = PI345P3_mol
PI345P3_m=sc_pip*PI345P3*cytoplasm/cytoplasm
aux PI345P3_m=PI345P3_m

# assignmentRule: variable = PIP2_mol
PIP2_mol=sc_pip*PIP2*cytoplasm/cytoplasm
aux PIP2_mol=PIP2_mol

# assignmentRule: variable = Foxo1_Pa0_tot
Foxo1_Pa0=(cytopla_6*cytoplasm+nucleus_F*nucleus+dnabound_*dnabound+cytopla_7*cytoplasm+nucleus_1*nucleus+dnaboun_1*dnabound+cytopla_8*cytoplasm+nucleus_2*nucleus+dnaboun_2*dnabound+cytopla_9*cytoplasm+nucleus_3*nucleus+dnaboun_3*dnabound+cytopl_10*cytoplasm+nucleus_4*nucleus+dnaboun_4*dnabound+cytopl_11*cytoplasm+nucleus_5*nucleus+dnaboun_5*dnabound+cytopl_12*cytoplasm+nucleus_6*nucleus+dnaboun_6*dnabound+cytopl_13*cytoplasm+nucleus_7*nucleus+dnaboun_7*dnabound)/extracell
aux Foxo1_Pa0=Foxo1_Pa0

# assignmentRule: variable = Foxo1_Pa1_tot
Foxo1_Pa1=(cytopl_14*cytoplasm+nucleus_8*nucleus+dnaboun_8*dnabound+cytopl_15*cytoplasm+nucleus_9*nucleus+dnaboun_9*dnabound+cytopl_16*cytoplasm+nucleu_10*nucleus+dnabou_10*dnabound+cytopl_17*cytoplasm+nucleu_11*nucleus+dnabou_11*dnabound+cytopl_18*cytoplasm+nucleu_12*nucleus+dnabou_12*dnabound+cytopl_19*cytoplasm+nucleu_13*nucleus+dnabou_13*dnabound+cytopl_20*cytoplasm+nucleu_14*nucleus+dnabou_14*dnabound+cytopl_21*cytoplasm+nucleu_15*nucleus+dnabou_15*dnabound)/extracell
aux Foxo1_Pa1=Foxo1_Pa1

# assignmentRule: variable = Foxo1_Pd0_tot
Foxo1_Pd0=(cytopla_6*cytoplasm+nucleus_F*nucleus+dnabound_*dnabound+cytopla_7*cytoplasm+nucleus_1*nucleus+dnaboun_1*dnabound+cytopla_8*cytoplasm+nucleus_2*nucleus+dnaboun_2*dnabound+cytopla_9*cytoplasm+nucleus_3*nucleus+dnaboun_3*dnabound+cytopl_14*cytoplasm+nucleus_8*nucleus+dnaboun_8*dnabound+cytopl_15*cytoplasm+nucleus_9*nucleus+dnaboun_9*dnabound+cytopl_16*cytoplasm+nucleu_10*nucleus+dnabou_10*dnabound+cytopl_17*cytoplasm+nucleu_11*nucleus+dnabou_11*dnabound)/extracell
aux Foxo1_Pd0=Foxo1_Pd0

# assignmentRule: variable = Foxo1_Pd1_tot
Foxo1_Pd1=(cytopl_10*cytoplasm+nucleus_4*nucleus+dnaboun_4*dnabound+cytopl_11*cytoplasm+nucleus_5*nucleus+dnaboun_5*dnabound+cytopl_12*cytoplasm+nucleus_6*nucleus+dnaboun_6*dnabound+cytopl_13*cytoplasm+nucleus_7*nucleus+dnaboun_7*dnabound+cytopl_18*cytoplasm+nucleu_12*nucleus+dnabou_12*dnabound+cytopl_19*cytoplasm+nucleu_13*nucleus+dnabou_13*dnabound+cytopl_20*cytoplasm+nucleu_14*nucleus+dnabou_14*dnabound+cytopl_21*cytoplasm+nucleu_15*nucleus+dnabou_15*dnabound)/extracell
aux Foxo1_Pd1=Foxo1_Pd1

# assignmentRule: variable = Foxo1_Pe0_tot
Foxo1_Pe0=(cytopla_6*cytoplasm+nucleus_F*nucleus+dnabound_*dnabound+cytopla_7*cytoplasm+nucleus_1*nucleus+dnaboun_1*dnabound+cytopl_10*cytoplasm+nucleus_4*nucleus+dnaboun_4*dnabound+cytopl_11*cytoplasm+nucleus_5*nucleus+dnaboun_5*dnabound+cytopl_14*cytoplasm+nucleus_8*nucleus+dnaboun_8*dnabound+cytopl_15*cytoplasm+nucleus_9*nucleus+dnaboun_9*dnabound+cytopl_18*cytoplasm+nucleu_12*nucleus+dnabou_12*dnabound+cytopl_19*cytoplasm+nucleu_13*nucleus+dnabou_13*dnabound)/extracell
aux Foxo1_Pe0=Foxo1_Pe0

# assignmentRule: variable = Foxo1_Pe1_tot
Foxo1_Pe1=(cytopla_8*cytoplasm+nucleus_2*nucleus+dnaboun_2*dnabound+cytopla_9*cytoplasm+nucleus_3*nucleus+dnaboun_3*dnabound+cytopl_12*cytoplasm+nucleus_6*nucleus+dnaboun_6*dnabound+cytopl_13*cytoplasm+nucleus_7*nucleus+dnaboun_7*dnabound+cytopl_16*cytoplasm+nucleu_10*nucleus+dnabou_10*dnabound+cytopl_17*cytoplasm+nucleu_11*nucleus+dnabou_11*dnabound+cytopl_20*cytoplasm+nucleu_14*nucleus+dnabou_14*dnabound+cytopl_21*cytoplasm+nucleu_15*nucleus+dnabou_15*dnabound)/extracell
aux Foxo1_Pe1=Foxo1_Pe1

# assignmentRule: variable = Foxo1_pUb0_tot
Foxo1_pUb=(cytopla_6*cytoplasm+nucleus_F*nucleus+dnabound_*dnabound+cytopla_8*cytoplasm+nucleus_2*nucleus+dnaboun_2*dnabound+cytopl_10*cytoplasm+nucleus_4*nucleus+dnaboun_4*dnabound+cytopl_12*cytoplasm+nucleus_6*nucleus+dnaboun_6*dnabound+cytopl_14*cytoplasm+nucleus_8*nucleus+dnaboun_8*dnabound+cytopl_16*cytoplasm+nucleu_10*nucleus+dnabou_10*dnabound+cytopl_18*cytoplasm+nucleu_12*nucleus+dnabou_12*dnabound+cytopl_20*cytoplasm+nucleu_14*nucleus+dnabou_14*dnabound)/extracell
aux Foxo1_pUb=Foxo1_pUb

# assignmentRule: variable = Foxo1_pUb1_tot
Foxo1_p_1=(cytopla_7*cytoplasm+nucleus_1*nucleus+dnaboun_1*dnabound+cytopla_9*cytoplasm+nucleus_3*nucleus+dnaboun_3*dnabound+cytopl_11*cytoplasm+nucleus_5*nucleus+dnaboun_5*dnabound+cytopl_13*cytoplasm+nucleus_7*nucleus+dnaboun_7*dnabound+cytopl_15*cytoplasm+nucleus_9*nucleus+dnaboun_9*dnabound+cytopl_17*cytoplasm+nucleu_11*nucleus+dnabou_11*dnabound+cytopl_19*cytoplasm+nucleu_13*nucleus+dnabou_13*dnabound+cytopl_21*cytoplasm+nucleu_15*nucleus+dnabou_15*dnabound)/extracell
aux Foxo1_p_1=Foxo1_p_1

# assignmentRule: variable = cytoplasm_Foxo1_tot
cytopl_22=(cytopla_6*cytoplasm+cytopla_7*cytoplasm+cytopla_8*cytoplasm+cytopla_9*cytoplasm+cytopl_10*cytoplasm+cytopl_11*cytoplasm+cytopl_12*cytoplasm+cytopl_13*cytoplasm+cytopl_14*cytoplasm+cytopl_15*cytoplasm+cytopl_16*cytoplasm+cytopl_17*cytoplasm+cytopl_18*cytoplasm+cytopl_19*cytoplasm+cytopl_20*cytoplasm+cytopl_21*cytoplasm)/extracell
aux cytopl_22=cytopl_22

# assignmentRule: variable = Foxo1_all
Foxo1_all=(cytopl_22*extracell+nucleu_16*extracell+dnabou_16*extracell)/extracell
aux Foxo1_all=Foxo1_all

# assignmentRule: variable = rosconc
rosconc=ROS*cytoplasm/(navo*vcytoplas)
aux rosconc=rosconc

# assignmentRule: variable = k_ros_perm
k_ros_per=ros_perm*membrane_
aux k_ros_per=k_ros_per

# assignmentRule: variable = ros_ext_conc
ros_ext_c=sc_ros*extrace_1*extracell/(navo*extracell)
aux ros_ext_c=ros_ext_c

# assignmentRule: variable = ros_cyto_conc
ros_cyto_=sc_ros*ROS*cytoplasm/(navo*cytoplasm)
aux ros_cyto_=ros_cyto_

# assignmentRule: variable = InR_tot
InR_tot=(InR*cellsurfa+Ins_InR*cellsurfa+Ins_InR_P*cellsurfa+Ins_2_InR*cellsurfa+cytopla_1*cytoplasm+cytopla_2*cytoplasm+cytopla_3*cytoplasm)/cytoplasm
aux InR_tot=InR_tot

# assignmentRule: variable = JNK_plus_JNK_P
JNK_plus_=(JNK*cytoplasm+JNK_P*cytoplasm)/cytoplasm
aux JNK_plus_=JNK_plus_

# assignmentRule: variable = IKK_plus_IKK_P
IKK_plus_=(IKK*cytoplasm+IKK_P*cytoplasm)/cytoplasm
aux IKK_plus_=IKK_plus_

# assignmentRule: variable = DUSP_plus_DUSP_ox
DUSP_plus=(DUSP*cytoplasm+DUSP_ox*cytoplasm)/cytoplasm
aux DUSP_plus=DUSP_plus

# assignmentRule: variable = IRS_total
IRS_total=(IRS1*cytoplasm+IRS1_Ty_1*cytoplasm+IRS1_Poly*cytoplasm+IRS1_Ty_2*cytoplasm)/cytoplasm
aux IRS_total=IRS_total

# assignmentRule: variable = PTEN_plus_PTEN_ox
PTEN_plus=(PTEN*cytoplasm+PTEN_ox*cytoplasm)/cytoplasm
aux PTEN_plus=PTEN_plus

# assignmentRule: variable = NOX_total
NOX_total=(NOX_inact*cytoplasm+NOX*cytoplasm+NOX_deact*cytoplasm)/cytoplasm
aux NOX_total=NOX_total

# assignmentRule: variable = PTP1B_plus_PTP1B_ox
PTP1B_plu=(PTP1B*cytoplasm+PTP1B_ox*cytoplasm)/cytoplasm
aux PTP1B_plu=PTP1B_plu

# assignmentRule: variable = InR_bound
InR_bound=(Ins_2_InR*cellsurfa+Ins_InR_P*cellsurfa+Ins_InR*cellsurfa)/cytoplasm
aux InR_bound=InR_bound

# assignmentRule: variable = InR_active
InR_activ=(Ins_2_InR*cellsurfa+Ins_InR_P*cellsurfa)/cytoplasm
aux InR_activ=InR_activ

# Reaction: id = R1f, name = R1f

R1f=functio_1(InR, Ins, cellsurfa, extracell, k1)

# Reaction: id = R1r, name = R1r

R1r=functio_2(Ins_InR, cellsurfa, kminus1)

# Reaction: id = R2, name = R2

R2=cellsurfa*functio_3(Ins_InR, cellsurfa, k3)

# Reaction: id = R3f, name = R3f

R3f=functio_4(Ins, Ins_InR_P, cellsurfa, extracell, k2)

# Reaction: id = R3r, name = R3r

R3r=functio_5(Ins_2_InR, cellsurfa, kminus2)

# Reaction: id = R4, name = R4

R4=cellsurfa*functi_11(Ins_InR_P, PTP1B, cellsurfa, cytoplasm, kminus3)

# Reaction: id = R5f, name = R5f

R5f=functi_12(InR, cellsurfa, k4)

# Reaction: id = R5r, name = R5r

R5r=functi_13(cytoplasm, cytopla_1, kminus4)

# Reaction: id = R6f, name = R6f

R6f=functi_14(Ins_2_InR, cellsurfa, k4prime)

# Reaction: id = R6r, name = R6r

R6r=functi_15(cytoplasm, cytopla_2, kminus4pr)

# Reaction: id = R7f, name = R7f

R7f=functi_16(Ins_InR_P, cellsurfa, k4prime)

# Reaction: id = R7r, name = R7r

R7r=functi_17(cytoplasm, cytopla_3, kminus4pr)

# Reaction: id = R10, name = R10

R10=cytoplasm*functi_18(PTP1B, cytoplasm, cytopla_2, k6)

# Reaction: id = R11, name = R11

R11=cytoplasm*functi_19(PTP1B, cytoplasm, cytopla_3, k6)

# Reaction: id = R14f, name = R14f

R14f=cytoplasm*functi_20(IRS1_TyrP, PIP2, cytoplasm, k9, k9_basal)

# Reaction: id = R14r, name = R14r

R14r=cytoplasm*functi_21(PI345P3, PTEN, cytoplasm, kminus9, kminus9_b)

# Reaction: id = R16f, name = R16f

R16f=cytoplasm*functi_22(Akt, PI345P3, cytoplasm, k11, pip3_basa)

# Reaction: id = R16r, name = R16r

R16r=cytoplasm*functi_23(Akt_P2, PP2A, cytoplasm, kminus11)

# Reaction: id = R16a_f, name = R16a_f

R16a_f=cytoplasm*functi_24(AS160, Akt_P2, cytoplasm, kr16a)

# Reaction: id = R16a_r, name = R16a_r

R16a_r=cytoplasm*functi_25(AS160_P, PP2A, cytoplasm, kminusr16)

# Reaction: id = R17f, name = R17f

R17f=cytoplasm*functi_26(PI345P3, PKC, cytoplasm, k12, pip3_basa)

# Reaction: id = R17r, name = R17r

R17r=cytoplasm*functi_27(PKC_P, PP2A, cytoplasm, kminus12)

# Reaction: id = R20f, name = R20f

R20f=functi_28(AS160_P, cytoplasm, cytopla_4, k13, k13_basal)

# Reaction: id = R20r, name = R20r

R20r=functi_29(cellsurfa, cellsur_1, kminus13)

# Reaction: id = R30f, name = R30f

R30f=cytoplasm*functi_30(PTP1B, ROS, cytoplasm, k30f)

# Reaction: id = R30r, name = R30r

R30r=cytoplasm*functi_31(GSH, PTP1B_ox, cytoplasm, k30r)

# Reaction: id = R31f, name = R31f

R31f=cytoplasm*functi_32(PTEN, ROS, cytoplasm, k31f)

# Reaction: id = R31r, name = R31r

R31r=cytoplasm*functi_33(GSH, PTEN_ox, cytoplasm, k31r)

# Reaction: id = R34f, name = R34f

R34f=functi_34(Ins, NOX_inact, cytoplasm, extracell, k34f)

# Reaction: id = R34r1, name = R34r1

R34r1=cytoplasm*functi_35(NOX, cytoplasm, k34r1)

# Reaction: id = R34r2, name = R34r2

R34r2=cytoplasm*functi_36(NOX, cytoplasm, k34r2)

# Reaction: id = R34r3, name = R34r3

R34r3=cytoplasm*functi_37(NOX_deact, cytoplasm, k34r3)

# Reaction: id = R35f, name = R35f

R35f=cytoplasm*functi_38(NOX, cytoplasm, k35f)

# Reaction: id = R35r, name = R35r

R35r=cytoplasm*functi_39(ROS, cytoplasm, cytopla_5, k35r)

# Reaction: id = R36f, name = R36f

R36f=cytoplasm*functi_40(Mt, cytoplasm, k36f)

# Reaction: id = R37f, name = R37f

R37f=functi_41(extracell, extrace_1, k_ros_per)

# Reaction: id = R37r, name = R37r

R37r=functi_42(ROS, cytoplasm, extracell, k_ros_per)

# Reaction: id = R38f, name = R38f

R38f=cytoplasm*functi_43(GSH, ROS, cytoplasm, k38f)

# Reaction: id = R38r, name = R38r

R38r=cytoplasm*functi_44(GSSG, cytoplasm, k38r)

# Reaction: id = R12f, name = R12f

R12f=cytoplasm*functi_45(IRS1, IRp, Ins_2_InR, Ins_InR_P, cellsurfa, cyto_vol, cytoplasm, k7)

# Reaction: id = R12r, name = R12r

R12r=cytoplasm*functi_46(IRS1_Ty_1, PTP1B, cyto_vol, cytoplasm, kminus7a)

# Reaction: id = R12_a_f, name = R12_a_f

R12_a_f=cytoplasm*functi_47(IRS1, PKC_P, cyto_vol, cytoplasm, k2psp)

# Reaction: id = R12_a_r, name = R12_a_r

R12_a_r=cytoplasm*functi_48(IRS1_Poly, PP2A, cyto_vol, cytoplasm, kminus7b)

# Reaction: id = R12_b_f, name = R12_b_f

R12_b_f=cytoplasm*functi_49(IRS1_Ty_1, PKC_P, cyto_vol, cytoplasm, k2psp)

# Reaction: id = R12_b_r, name = R12_b_r

R12_b_r=cytoplasm*functi_50(IRS1_Ty_2, PP2A, cyto_vol, cytoplasm, kminus7b)

# Reaction: id = R13f, name = R13f

R13f=cytoplasm*functi_51(IRS1_Ty_1, PI3K, cyto_vol, cytoplasm, k8)

# Reaction: id = R13r, name = R13r

R13r=cytoplasm*functi_52(IRS1_TyrP, cyto_vol, cytoplasm, kminus8)

# Reaction: id = R50f, name = R50f

R50f=cytoplasm*functi_53(cytoplasm, k_irs1_ba)

# Reaction: id = R50r1, name = R50r1

R50r1=cytoplasm*functi_54(IRS1, cytoplasm, k_irs1__1)

# Reaction: id = R50r2, name = R50r2

R50r2=cytoplasm*functi_55(IRS1_Ty_1, cytoplasm, k_irs1__1)

# Reaction: id = R50r3, name = R50r3

R50r3=cytoplasm*functi_56(IRS1_Poly, cytoplasm, k_irs1_po)

# Reaction: id = R50r4, name = R50r4

R50r4=cytoplasm*functi_57(IRS1_Ty_2, cytoplasm, k_irs1_po)

# Reaction: id = R51f, name = R51f

R51f=cytoplasm*functi_58(IKK_P, IRS1, Km51, cytoplasm, kcat51)

# Reaction: id = R52f, name = R52f

R52f=cytoplasm*functi_59(IRS1, JNK_P, Km52, cytoplasm, kcat52)

# Reaction: id = R42f, name = R42f

R42f=cytoplasm*functi_60(JNK, ROS, alpha_ox, cytoplasm, k42f)

# Reaction: id = R42r, name = R42r

R42r=cytoplasm*functi_61(DUSP, JNK_P, cytoplasm, k42r)

# Reaction: id = R43f, name = R43f

R43f=cytoplasm*functi_62(IKK, ROS, cytoplasm, k43f)

# Reaction: id = R43r, name = R43r

R43r=cytoplasm*functi_63(DUSP, IKK_P, cytoplasm, k43r)

# Reaction: id = R32f, name = R32f

R32f=cytoplasm*functi_64(DUSP, ROS, cytoplasm, k32f)

# Reaction: id = R32r, name = R32r

R32r=cytoplasm*functi_65(DUSP_ox, GSH, cytoplasm, k32r)

# Reaction: id = R100, name = Synthesis
# Local Parameter:   id =  ksynth, name = ksynth
par ksynth=0.0055


R100=cytoplasm*functi_66(E2F1, cytoplasm, ksynth)

# Reaction: id = R101, name = transport cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr=0.181818181818


R101=functi_67(cytoplasm, cytopla_6, ktr)

# Reaction: id = R102, name = transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1=0.055


R102=functi_68(ktr_1, nucleus, nucleus_F)

# Reaction: id = R103, name = transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2=0.25


R103=functi_69(ktr_1_2, nucleus, nucleus_F)

# Reaction: id = R104, name = transport dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_3=0.125


R104=functi_70(dnabound, dnabound_, ktr_1_2_3)

# Reaction: id = R105, name = transport cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_4=0.181818181818


R105=functi_71(cytoplasm, cytopla_7, ktr_1_2_4)

# Reaction: id = R106, name = transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_5=0.055


R106=functi_72(ktr_1_2_5, nucleus, nucleus_1)

# Reaction: id = R107, name = transport nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_6=0.25


R107=functi_73(ktr_1_2_6, nucleus, nucleus_1)

# Reaction: id = R108, name = transport dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_7=0.125


R108=functi_74(dnabound, dnaboun_1, ktr_1_2_7)

# Reaction: id = R109, name = transport cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_8=1.81818181818


R109=functi_75(cytoplasm, cytopla_8, ktr_1_2_8)

# Reaction: id = R110, name = transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1_2_9=0.0055


R110=functi_76(ktr_1_2_9, nucleus, nucleus_2)

# Reaction: id = R111, name = transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__10=0.25


R111=functi_77(ktr_1__10, nucleus, nucleus_2)

# Reaction: id = R112, name = transport dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__11=0.125


R112=functi_78(dnabound, dnaboun_2, ktr_1__11)

# Reaction: id = R113, name = transport cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__12=1.81818181818


R113=functi_79(cytoplasm, cytopla_9, ktr_1__12)

# Reaction: id = R114, name = transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__13=0.0055


R114=functi_80(ktr_1__13, nucleus, nucleus_3)

# Reaction: id = R115, name = transport nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__14=0.25


R115=functi_81(ktr_1__14, nucleus, nucleus_3)

# Reaction: id = R116, name = transport dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__15=0.125


R116=functi_82(dnabound, dnaboun_3, ktr_1__15)

# Reaction: id = R117, name = transport cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__16=0.0909090909091


R117=functi_83(cytoplasm, cytopl_10, ktr_1__16)

# Reaction: id = R118, name = transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__17=0.55


R118=functi_84(ktr_1__17, nucleus, nucleus_4)

# Reaction: id = R119, name = transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__18=0.25


R119=functi_85(ktr_1__18, nucleus, nucleus_4)

# Reaction: id = R120, name = transport dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__19=0.125


R120=functi_86(dnabound, dnaboun_4, ktr_1__19)

# Reaction: id = R121, name = transport cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__20=0.0909090909091


R121=functi_87(cytoplasm, cytopl_11, ktr_1__20)

# Reaction: id = R122, name = transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__21=0.55


R122=functi_88(ktr_1__21, nucleus, nucleus_5)

# Reaction: id = R123, name = transport nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__22=0.25


R123=functi_89(ktr_1__22, nucleus, nucleus_5)

# Reaction: id = R124, name = transport dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__23=0.125


R124=functi_90(dnabound, dnaboun_5, ktr_1__23)

# Reaction: id = R125, name = transport cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__24=0.909090909091


R125=functi_91(cytoplasm, cytopl_12, ktr_1__24)

# Reaction: id = R126, name = transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__25=0.055


R126=functi_92(ktr_1__25, nucleus, nucleus_6)

# Reaction: id = R127, name = transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__26=0.25


R127=functi_93(ktr_1__26, nucleus, nucleus_6)

# Reaction: id = R128, name = transport dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__27=0.125


R128=functi_94(dnabound, dnaboun_6, ktr_1__27)

# Reaction: id = R129, name = transport cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__28=0.909090909091


R129=functi_95(cytoplasm, cytopl_13, ktr_1__28)

# Reaction: id = R130, name = transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__29=0.055


R130=functi_96(ktr_1__29, nucleus, nucleus_7)

# Reaction: id = R131, name = transport nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__30=0.25


R131=functi_97(ktr_1__30, nucleus, nucleus_7)

# Reaction: id = R132, name = transport dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__31=0.125


R132=functi_98(dnabound, dnaboun_7, ktr_1__31)

# Reaction: id = R133, name = transport cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__32=0.0181818181818


R133=functi_99(cytoplasm, cytopl_14, ktr_1__32)

# Reaction: id = R134, name = transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__33=0.55


R134=func_100(ktr_1__33, nucleus, nucleus_8)

# Reaction: id = R135, name = transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__34=0.125


R135=func_101(ktr_1__34, nucleus, nucleus_8)

# Reaction: id = R136, name = transport dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__35=0.125


R136=func_102(dnabound, dnaboun_8, ktr_1__35)

# Reaction: id = R137, name = transport cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__36=0.0181818181818


R137=func_103(cytoplasm, cytopl_15, ktr_1__36)

# Reaction: id = R138, name = transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__37=0.55


R138=func_104(ktr_1__37, nucleus, nucleus_9)

# Reaction: id = R139, name = transport nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__38=0.125


R139=func_105(ktr_1__38, nucleus, nucleus_9)

# Reaction: id = R140, name = transport dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__39=0.125


R140=func_106(dnabound, dnaboun_9, ktr_1__39)

# Reaction: id = R141, name = transport cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__40=0.181818181818


R141=func_107(cytoplasm, cytopl_16, ktr_1__40)

# Reaction: id = R142, name = transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__41=0.055


R142=func_108(ktr_1__41, nucleus, nucleu_10)

# Reaction: id = R143, name = transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__42=0.125


R143=func_109(ktr_1__42, nucleus, nucleu_10)

# Reaction: id = R144, name = transport dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__43=0.125


R144=func_110(dnabound, dnabou_10, ktr_1__43)

# Reaction: id = R145, name = transport cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__44=0.181818181818


R145=func_111(cytoplasm, cytopl_17, ktr_1__44)

# Reaction: id = R146, name = transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__45=0.055


R146=func_112(ktr_1__45, nucleus, nucleu_11)

# Reaction: id = R147, name = transport nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__46=0.125


R147=func_113(ktr_1__46, nucleus, nucleu_11)

# Reaction: id = R148, name = transport dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__47=0.125


R148=func_114(dnabound, dnabou_11, ktr_1__47)

# Reaction: id = R149, name = transport cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__48=0.00909090909091


R149=func_115(cytoplasm, cytopl_18, ktr_1__48)

# Reaction: id = R150, name = transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__49=5.5


R150=func_116(ktr_1__49, nucleus, nucleu_12)

# Reaction: id = R151, name = transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__50=0.125


R151=func_117(ktr_1__50, nucleus, nucleu_12)

# Reaction: id = R152, name = transport dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__51=0.125


R152=func_118(dnabound, dnabou_12, ktr_1__51)

# Reaction: id = R153, name = transport cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__52=0.00909090909091


R153=func_119(cytoplasm, cytopl_19, ktr_1__52)

# Reaction: id = R154, name = transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__53=5.5


R154=func_120(ktr_1__53, nucleus, nucleu_13)

# Reaction: id = R155, name = transport nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__54=0.125


R155=func_121(ktr_1__54, nucleus, nucleu_13)

# Reaction: id = R156, name = transport dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__55=0.125


R156=func_122(dnabound, dnabou_13, ktr_1__55)

# Reaction: id = R157, name = transport cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__56=0.0909090909091


R157=func_123(cytoplasm, cytopl_20, ktr_1__56)

# Reaction: id = R158, name = transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__57=0.55


R158=func_124(ktr_1__57, nucleus, nucleu_14)

# Reaction: id = R159, name = transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__58=0.125


R159=func_125(ktr_1__58, nucleus, nucleu_14)

# Reaction: id = R160, name = transport dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__59=0.125


R160=func_126(dnabound, dnabou_14, ktr_1__59)

# Reaction: id = R161, name = transport cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__60=0.0909090909091


R161=func_127(cytoplasm, cytopl_21, ktr_1__60)

# Reaction: id = R162, name = transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__61=0.55


R162=func_128(ktr_1__61, nucleus, nucleu_15)

# Reaction: id = R163, name = transport nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__62=0.125


R163=func_129(ktr_1__62, nucleus, nucleu_15)

# Reaction: id = R164, name = transport dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktr, name = ktr
par ktr_1__63=0.125


R164=func_130(dnabound, dnabou_15, ktr_1__63)

# Reaction: id = R165, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin=3.0E-4


R165=cytoplasm*func_131(Akt_P2, cytoplasm, cytopla_6, kkin)

# Reaction: id = R166, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1=3.0E-4


R166=nucleus*func_132(Akt_P2, cytoplasm, kkin_1, nucleus, nucleus_F)

# Reaction: id = R167, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_2=3.0E-4


R167=dnabound*func_133(Akt_P2, cytoplasm, dnabound, dnabound_, kkin_1_2)

# Reaction: id = R168, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__3=3.0E-4


R168=cytoplasm*func_134(Akt_P2, cytoplasm, cytopla_7, kkin_1__3)

# Reaction: id = R169, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__4=3.0E-4


R169=nucleus*func_135(Akt_P2, cytoplasm, kkin_1__4, nucleus, nucleus_1)

# Reaction: id = R170, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__5=3.0E-4


R170=dnabound*func_136(Akt_P2, cytoplasm, dnabound, dnaboun_1, kkin_1__5)

# Reaction: id = R171, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__6=3.0E-4


R171=cytoplasm*func_137(Akt_P2, cytoplasm, cytopla_8, kkin_1__6)

# Reaction: id = R172, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__7=3.0E-4


R172=nucleus*func_138(Akt_P2, cytoplasm, kkin_1__7, nucleus, nucleus_2)

# Reaction: id = R173, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__8=3.0E-4


R173=dnabound*func_139(Akt_P2, cytoplasm, dnabound, dnaboun_2, kkin_1__8)

# Reaction: id = R174, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1__9=3.0E-4


R174=cytoplasm*func_140(Akt_P2, cytoplasm, cytopla_9, kkin_1__9)

# Reaction: id = R175, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_10=3.0E-4


R175=nucleus*func_141(Akt_P2, cytoplasm, kkin_1_10, nucleus, nucleus_3)

# Reaction: id = R176, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_11=3.0E-4


R176=dnabound*func_142(Akt_P2, cytoplasm, dnabound, dnaboun_3, kkin_1_11)

# Reaction: id = R177, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_12=3.0E-4


R177=cytoplasm*func_143(Akt_P2, cytoplasm, cytopl_10, kkin_1_12)

# Reaction: id = R178, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_13=3.0E-4


R178=nucleus*func_144(Akt_P2, cytoplasm, kkin_1_13, nucleus, nucleus_4)

# Reaction: id = R179, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_14=3.0E-4


R179=dnabound*func_145(Akt_P2, cytoplasm, dnabound, dnaboun_4, kkin_1_14)

# Reaction: id = R180, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_15=3.0E-4


R180=cytoplasm*func_146(Akt_P2, cytoplasm, cytopl_11, kkin_1_15)

# Reaction: id = R181, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_16=3.0E-4


R181=nucleus*func_147(Akt_P2, cytoplasm, kkin_1_16, nucleus, nucleus_5)

# Reaction: id = R182, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_17=3.0E-4


R182=dnabound*func_148(Akt_P2, cytoplasm, dnabound, dnaboun_5, kkin_1_17)

# Reaction: id = R183, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_18=3.0E-4


R183=cytoplasm*func_149(Akt_P2, cytoplasm, cytopl_12, kkin_1_18)

# Reaction: id = R184, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_19=3.0E-4


R184=nucleus*func_150(Akt_P2, cytoplasm, kkin_1_19, nucleus, nucleus_6)

# Reaction: id = R185, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_20=3.0E-4


R185=dnabound*func_151(Akt_P2, cytoplasm, dnabound, dnaboun_6, kkin_1_20)

# Reaction: id = R186, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_21=3.0E-4


R186=cytoplasm*func_152(Akt_P2, cytoplasm, cytopl_13, kkin_1_21)

# Reaction: id = R187, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_22=3.0E-4


R187=nucleus*func_153(Akt_P2, cytoplasm, kkin_1_22, nucleus, nucleus_7)

# Reaction: id = R188, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by Akt_P2
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_23=3.0E-4


R188=dnabound*func_154(Akt_P2, cytoplasm, dnabound, dnaboun_7, kkin_1_23)

# Reaction: id = R189, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_24=3.0E-4


R189=cytoplasm*func_155(SGK, cytoplasm, cytopla_6, kkin_1_24)

# Reaction: id = R190, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_25=3.0E-4


R190=nucleus*func_156(SGK, cytoplasm, kkin_1_25, nucleus, nucleus_F)

# Reaction: id = R191, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_26=3.0E-4


R191=dnabound*func_157(SGK, cytoplasm, dnabound, dnabound_, kkin_1_26)

# Reaction: id = R192, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_27=3.0E-4


R192=cytoplasm*func_158(SGK, cytoplasm, cytopla_7, kkin_1_27)

# Reaction: id = R193, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_28=3.0E-4


R193=nucleus*func_159(SGK, cytoplasm, kkin_1_28, nucleus, nucleus_1)

# Reaction: id = R194, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_29=3.0E-4


R194=dnabound*func_160(SGK, cytoplasm, dnabound, dnaboun_1, kkin_1_29)

# Reaction: id = R195, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_30=3.0E-4


R195=cytoplasm*func_161(SGK, cytoplasm, cytopla_8, kkin_1_30)

# Reaction: id = R196, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_31=3.0E-4


R196=nucleus*func_162(SGK, cytoplasm, kkin_1_31, nucleus, nucleus_2)

# Reaction: id = R197, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_32=3.0E-4


R197=dnabound*func_163(SGK, cytoplasm, dnabound, dnaboun_2, kkin_1_32)

# Reaction: id = R198, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_33=3.0E-4


R198=cytoplasm*func_164(SGK, cytoplasm, cytopla_9, kkin_1_33)

# Reaction: id = R199, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_34=3.0E-4


R199=nucleus*func_165(SGK, cytoplasm, kkin_1_34, nucleus, nucleus_3)

# Reaction: id = R200, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_35=3.0E-4


R200=dnabound*func_166(SGK, cytoplasm, dnabound, dnaboun_3, kkin_1_35)

# Reaction: id = R201, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_36=3.0E-4


R201=cytoplasm*func_167(SGK, cytoplasm, cytopl_10, kkin_1_36)

# Reaction: id = R202, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_37=3.0E-4


R202=nucleus*func_168(SGK, cytoplasm, kkin_1_37, nucleus, nucleus_4)

# Reaction: id = R203, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_38=3.0E-4


R203=dnabound*func_169(SGK, cytoplasm, dnabound, dnaboun_4, kkin_1_38)

# Reaction: id = R204, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_39=3.0E-4


R204=cytoplasm*func_170(SGK, cytoplasm, cytopl_11, kkin_1_39)

# Reaction: id = R205, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_40=3.0E-4


R205=nucleus*func_171(SGK, cytoplasm, kkin_1_40, nucleus, nucleus_5)

# Reaction: id = R206, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_41=3.0E-4


R206=dnabound*func_172(SGK, cytoplasm, dnabound, dnaboun_5, kkin_1_41)

# Reaction: id = R207, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_42=3.0E-4


R207=cytoplasm*func_173(SGK, cytoplasm, cytopl_12, kkin_1_42)

# Reaction: id = R208, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_43=3.0E-4


R208=nucleus*func_174(SGK, cytoplasm, kkin_1_43, nucleus, nucleus_6)

# Reaction: id = R209, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_44=3.0E-4


R209=dnabound*func_175(SGK, cytoplasm, dnabound, dnaboun_6, kkin_1_44)

# Reaction: id = R210, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_45=3.0E-4


R210=cytoplasm*func_176(SGK, cytoplasm, cytopl_13, kkin_1_45)

# Reaction: id = R211, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_46=3.0E-4


R211=nucleus*functio_6(SGK, cytoplasm, kkin_1_46, nucleus, nucleus_7)

# Reaction: id = R212, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by SGK
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_47=3.0E-4


R212=dnabound*functio_7(SGK, cytoplasm, dnabound, dnaboun_7, kkin_1_47)

# Reaction: id = R213, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos=1.0E-6


R213=cytoplasm*functio_8(PP2A, cytoplasm, cytopl_14, kdephos)

# Reaction: id = R214, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_1=1.0E-6


R214=nucleus*functio_9(PP2A, cytoplasm, kdephos_1, nucleus, nucleus_8)

# Reaction: id = R215, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_2=1.0E-6


R215=dnabound*functi_10(PP2A, cytoplasm, dnabound, dnaboun_8, kdephos_2)

# Reaction: id = R216, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_3=1.0E-6


R216=cytoplasm*func_177(PP2A, cytoplasm, cytopl_15, kdephos_3)

# Reaction: id = R217, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_4=1.0E-6


R217=nucleus*func_178(PP2A, cytoplasm, kdephos_4, nucleus, nucleus_9)

# Reaction: id = R218, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_5=1.0E-6


R218=dnabound*func_179(PP2A, cytoplasm, dnabound, dnaboun_9, kdephos_5)

# Reaction: id = R219, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_6=1.0E-6


R219=cytoplasm*func_180(PP2A, cytoplasm, cytopl_16, kdephos_6)

# Reaction: id = R220, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_7=1.0E-6


R220=nucleus*func_181(PP2A, cytoplasm, kdephos_7, nucleus, nucleu_10)

# Reaction: id = R221, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_8=1.0E-6


R221=dnabound*func_182(PP2A, cytoplasm, dnabound, dnabou_10, kdephos_8)

# Reaction: id = R222, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdephos_9=1.0E-6


R222=cytoplasm*func_183(PP2A, cytoplasm, cytopl_17, kdephos_9)

# Reaction: id = R223, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_10=1.0E-6


R223=nucleus*func_184(PP2A, cytoplasm, kdepho_10, nucleus, nucleu_11)

# Reaction: id = R224, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_11=1.0E-6


R224=dnabound*func_185(PP2A, cytoplasm, dnabound, dnabou_11, kdepho_11)

# Reaction: id = R225, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_12=1.0E-6


R225=cytoplasm*func_186(PP2A, cytoplasm, cytopl_18, kdepho_12)

# Reaction: id = R226, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_13=1.0E-6


R226=nucleus*func_187(PP2A, cytoplasm, kdepho_13, nucleus, nucleu_12)

# Reaction: id = R227, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_14=1.0E-6


R227=dnabound*func_188(PP2A, cytoplasm, dnabound, dnabou_12, kdepho_14)

# Reaction: id = R228, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_15=1.0E-6


R228=cytoplasm*func_189(PP2A, cytoplasm, cytopl_19, kdepho_15)

# Reaction: id = R229, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_16=1.0E-6


R229=nucleus*func_190(PP2A, cytoplasm, kdepho_16, nucleus, nucleu_13)

# Reaction: id = R230, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_17=1.0E-6


R230=dnabound*func_191(PP2A, cytoplasm, dnabound, dnabou_13, kdepho_17)

# Reaction: id = R231, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_18=1.0E-6


R231=cytoplasm*func_192(PP2A, cytoplasm, cytopl_20, kdepho_18)

# Reaction: id = R232, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_19=1.0E-6


R232=nucleus*func_193(PP2A, cytoplasm, kdepho_19, nucleus, nucleu_14)

# Reaction: id = R233, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_20=1.0E-6


R233=dnabound*func_194(PP2A, cytoplasm, dnabound, dnabou_14, kdepho_20)

# Reaction: id = R234, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_21=1.0E-6


R234=cytoplasm*func_195(PP2A, cytoplasm, cytopl_21, kdepho_21)

# Reaction: id = R235, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_22=1.0E-6


R235=nucleus*func_196(PP2A, cytoplasm, kdepho_22, nucleus, nucleu_15)

# Reaction: id = R236, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_23=1.0E-6


R236=dnabound*func_197(PP2A, cytoplasm, dnabound, dnabou_15, kdepho_23)

# Reaction: id = R237, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_48=5.0E-5


R237=cytoplasm*func_198(IKK_P, by_ikk_ph, cytoplasm, cytopla_6, kkin_1_48)

# Reaction: id = R238, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_49=5.0E-5


R238=nucleus*func_199(IKK_P, by_ikk_ph, cytoplasm, kkin_1_49, nucleus, nucleus_F)

# Reaction: id = R239, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_50=5.0E-5


R239=dnabound*func_200(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnabound_, kkin_1_50)

# Reaction: id = R240, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_51=5.0E-5


R240=cytoplasm*func_201(IKK_P, by_ikk_ph, cytoplasm, cytopla_7, kkin_1_51)

# Reaction: id = R241, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_52=5.0E-5


R241=nucleus*func_202(IKK_P, by_ikk_ph, cytoplasm, kkin_1_52, nucleus, nucleus_1)

# Reaction: id = R242, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_53=5.0E-5


R242=dnabound*func_203(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnaboun_1, kkin_1_53)

# Reaction: id = R243, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_54=5.0E-5


R243=cytoplasm*func_204(IKK_P, by_ikk_ph, cytoplasm, cytopla_8, kkin_1_54)

# Reaction: id = R244, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_55=5.0E-5


R244=nucleus*func_205(IKK_P, by_ikk_ph, cytoplasm, kkin_1_55, nucleus, nucleus_2)

# Reaction: id = R245, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_56=5.0E-5


R245=dnabound*func_206(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnaboun_2, kkin_1_56)

# Reaction: id = R246, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_57=5.0E-5


R246=cytoplasm*func_207(IKK_P, by_ikk_ph, cytoplasm, cytopla_9, kkin_1_57)

# Reaction: id = R247, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_58=5.0E-5


R247=nucleus*func_208(IKK_P, by_ikk_ph, cytoplasm, kkin_1_58, nucleus, nucleus_3)

# Reaction: id = R248, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_59=5.0E-5


R248=dnabound*func_209(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnaboun_3, kkin_1_59)

# Reaction: id = R249, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_24=1.0E-6


R249=cytoplasm*func_210(PP2A, cytoplasm, cytopl_10, kdepho_24)

# Reaction: id = R250, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_25=1.0E-6


R250=nucleus*func_211(PP2A, cytoplasm, kdepho_25, nucleus, nucleus_4)

# Reaction: id = R251, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_26=1.0E-6


R251=dnabound*func_212(PP2A, cytoplasm, dnabound, dnaboun_4, kdepho_26)

# Reaction: id = R252, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_27=1.0E-6


R252=cytoplasm*func_213(PP2A, cytoplasm, cytopl_11, kdepho_27)

# Reaction: id = R253, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_28=1.0E-6


R253=nucleus*func_214(PP2A, cytoplasm, kdepho_28, nucleus, nucleus_5)

# Reaction: id = R254, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_29=1.0E-6


R254=dnabound*func_215(PP2A, cytoplasm, dnabound, dnaboun_5, kdepho_29)

# Reaction: id = R255, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_30=1.0E-6


R255=cytoplasm*func_216(PP2A, cytoplasm, cytopl_12, kdepho_30)

# Reaction: id = R256, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_31=1.0E-6


R256=nucleus*func_217(PP2A, cytoplasm, kdepho_31, nucleus, nucleus_6)

# Reaction: id = R257, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_32=1.0E-6


R257=dnabound*func_218(PP2A, cytoplasm, dnabound, dnaboun_6, kdepho_32)

# Reaction: id = R258, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_33=1.0E-6


R258=cytoplasm*func_219(PP2A, cytoplasm, cytopl_13, kdepho_33)

# Reaction: id = R259, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_34=1.0E-6


R259=nucleus*func_220(PP2A, cytoplasm, kdepho_34, nucleus, nucleus_7)

# Reaction: id = R260, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_35=1.0E-6


R260=dnabound*func_221(PP2A, cytoplasm, dnabound, dnaboun_7, kdepho_35)

# Reaction: id = R261, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_60=5.0E-5


R261=cytoplasm*func_222(IKK_P, by_ikk_ph, cytoplasm, cytopl_14, kkin_1_60)

# Reaction: id = R262, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_61=5.0E-5


R262=nucleus*func_223(IKK_P, by_ikk_ph, cytoplasm, kkin_1_61, nucleus, nucleus_8)

# Reaction: id = R263, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_62=5.0E-5


R263=dnabound*func_224(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnaboun_8, kkin_1_62)

# Reaction: id = R264, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_63=5.0E-5


R264=cytoplasm*func_225(IKK_P, by_ikk_ph, cytoplasm, cytopl_15, kkin_1_63)

# Reaction: id = R265, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_64=5.0E-5


R265=nucleus*func_226(IKK_P, by_ikk_ph, cytoplasm, kkin_1_64, nucleus, nucleus_9)

# Reaction: id = R266, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_65=5.0E-5


R266=dnabound*func_227(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnaboun_9, kkin_1_65)

# Reaction: id = R267, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_66=5.0E-5


R267=cytoplasm*func_228(IKK_P, by_ikk_ph, cytoplasm, cytopl_16, kkin_1_66)

# Reaction: id = R268, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_67=5.0E-5


R268=nucleus*func_229(IKK_P, by_ikk_ph, cytoplasm, kkin_1_67, nucleus, nucleu_10)

# Reaction: id = R269, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_68=5.0E-5


R269=dnabound*func_230(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnabou_10, kkin_1_68)

# Reaction: id = R270, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_69=5.0E-5


R270=cytoplasm*func_231(IKK_P, by_ikk_ph, cytoplasm, cytopl_17, kkin_1_69)

# Reaction: id = R271, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_70=5.0E-5


R271=nucleus*func_232(IKK_P, by_ikk_ph, cytoplasm, kkin_1_70, nucleus, nucleu_11)

# Reaction: id = R272, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by IKK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_71=5.0E-5


R272=dnabound*func_233(IKK_P, by_ikk_ph, cytoplasm, dnabound, dnabou_11, kkin_1_71)

# Reaction: id = R273, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_36=1.0E-6


R273=cytoplasm*func_234(PP2A, cytoplasm, cytopl_18, kdepho_36)

# Reaction: id = R274, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_37=1.0E-6


R274=nucleus*func_235(PP2A, cytoplasm, kdepho_37, nucleus, nucleu_12)

# Reaction: id = R275, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_38=1.0E-6


R275=dnabound*func_236(PP2A, cytoplasm, dnabound, dnabou_12, kdepho_38)

# Reaction: id = R276, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_39=1.0E-6


R276=cytoplasm*func_237(PP2A, cytoplasm, cytopl_19, kdepho_39)

# Reaction: id = R277, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_40=1.0E-6


R277=nucleus*func_238(PP2A, cytoplasm, kdepho_40, nucleus, nucleu_13)

# Reaction: id = R278, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_41=1.0E-6


R278=dnabound*func_239(PP2A, cytoplasm, dnabound, dnabou_13, kdepho_41)

# Reaction: id = R279, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_42=1.0E-6


R279=cytoplasm*func_240(PP2A, cytoplasm, cytopl_20, kdepho_42)

# Reaction: id = R280, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_43=1.0E-6


R280=nucleus*func_241(PP2A, cytoplasm, kdepho_43, nucleus, nucleu_14)

# Reaction: id = R281, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_44=1.0E-6


R281=dnabound*func_242(PP2A, cytoplasm, dnabound, dnabou_14, kdepho_44)

# Reaction: id = R282, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_45=1.0E-6


R282=cytoplasm*func_243(PP2A, cytoplasm, cytopl_21, kdepho_45)

# Reaction: id = R283, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_46=1.0E-6


R283=nucleus*func_244(PP2A, cytoplasm, kdepho_46, nucleus, nucleu_15)

# Reaction: id = R284, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_47=1.0E-6


R284=dnabound*func_245(PP2A, cytoplasm, dnabound, dnabou_15, kdepho_47)

# Reaction: id = R285, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_72=5.0E-5


R285=cytoplasm*func_246(JNK_P, by_jnk_ph, cytoplasm, cytopla_6, kkin_1_72)

# Reaction: id = R286, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_73=5.0E-5


R286=nucleus*func_247(JNK_P, by_jnk_ph, cytoplasm, kkin_1_73, nucleus, nucleus_F)

# Reaction: id = R287, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_74=5.0E-5


R287=dnabound*func_248(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnabound_, kkin_1_74)

# Reaction: id = R288, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_75=5.0E-5


R288=cytoplasm*func_249(JNK_P, by_jnk_ph, cytoplasm, cytopla_7, kkin_1_75)

# Reaction: id = R289, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_76=5.0E-5


R289=nucleus*func_250(JNK_P, by_jnk_ph, cytoplasm, kkin_1_76, nucleus, nucleus_1)

# Reaction: id = R290, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_77=5.0E-5


R290=dnabound*func_251(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnaboun_1, kkin_1_77)

# Reaction: id = R291, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_48=1.0E-6


R291=cytoplasm*func_252(PP2A, cytoplasm, cytopla_8, kdepho_48)

# Reaction: id = R292, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_49=1.0E-6


R292=nucleus*func_253(PP2A, cytoplasm, kdepho_49, nucleus, nucleus_2)

# Reaction: id = R293, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_50=1.0E-6


R293=dnabound*func_254(PP2A, cytoplasm, dnabound, dnaboun_2, kdepho_50)

# Reaction: id = R294, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_51=1.0E-6


R294=cytoplasm*func_255(PP2A, cytoplasm, cytopla_9, kdepho_51)

# Reaction: id = R295, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_52=1.0E-6


R295=nucleus*func_256(PP2A, cytoplasm, kdepho_52, nucleus, nucleus_3)

# Reaction: id = R296, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_53=1.0E-6


R296=dnabound*func_257(PP2A, cytoplasm, dnabound, dnaboun_3, kdepho_53)

# Reaction: id = R297, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_78=5.0E-5


R297=cytoplasm*func_258(JNK_P, by_jnk_ph, cytoplasm, cytopl_10, kkin_1_78)

# Reaction: id = R298, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_79=5.0E-5


R298=nucleus*func_259(JNK_P, by_jnk_ph, cytoplasm, kkin_1_79, nucleus, nucleus_4)

# Reaction: id = R299, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_80=5.0E-5


R299=dnabound*func_260(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnaboun_4, kkin_1_80)

# Reaction: id = R300, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_81=5.0E-5


R300=cytoplasm*func_261(JNK_P, by_jnk_ph, cytoplasm, cytopl_11, kkin_1_81)

# Reaction: id = R301, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_82=5.0E-5


R301=nucleus*func_262(JNK_P, by_jnk_ph, cytoplasm, kkin_1_82, nucleus, nucleus_5)

# Reaction: id = R302, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_83=5.0E-5


R302=dnabound*func_263(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnaboun_5, kkin_1_83)

# Reaction: id = R303, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_54=1.0E-6


R303=cytoplasm*func_264(PP2A, cytoplasm, cytopl_12, kdepho_54)

# Reaction: id = R304, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_55=1.0E-6


R304=nucleus*func_265(PP2A, cytoplasm, kdepho_55, nucleus, nucleus_6)

# Reaction: id = R305, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_56=1.0E-6


R305=dnabound*func_266(PP2A, cytoplasm, dnabound, dnaboun_6, kdepho_56)

# Reaction: id = R306, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_57=1.0E-6


R306=cytoplasm*func_267(PP2A, cytoplasm, cytopl_13, kdepho_57)

# Reaction: id = R307, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_58=1.0E-6


R307=nucleus*func_268(PP2A, cytoplasm, kdepho_58, nucleus, nucleus_7)

# Reaction: id = R308, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_59=1.0E-6


R308=dnabound*func_269(PP2A, cytoplasm, dnabound, dnaboun_7, kdepho_59)

# Reaction: id = R309, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_84=5.0E-5


R309=cytoplasm*func_270(JNK_P, by_jnk_ph, cytoplasm, cytopl_14, kkin_1_84)

# Reaction: id = R310, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_85=5.0E-5


R310=nucleus*func_271(JNK_P, by_jnk_ph, cytoplasm, kkin_1_85, nucleus, nucleus_8)

# Reaction: id = R311, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_86=5.0E-5


R311=dnabound*func_272(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnaboun_8, kkin_1_86)

# Reaction: id = R312, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_87=5.0E-5


R312=cytoplasm*func_273(JNK_P, by_jnk_ph, cytoplasm, cytopl_15, kkin_1_87)

# Reaction: id = R313, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_88=5.0E-5


R313=nucleus*func_274(JNK_P, by_jnk_ph, cytoplasm, kkin_1_88, nucleus, nucleus_9)

# Reaction: id = R314, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_89=5.0E-5


R314=dnabound*func_275(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnaboun_9, kkin_1_89)

# Reaction: id = R315, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_60=1.0E-6


R315=cytoplasm*func_276(PP2A, cytoplasm, cytopl_16, kdepho_60)

# Reaction: id = R316, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_61=1.0E-6


R316=nucleus*func_277(PP2A, cytoplasm, kdepho_61, nucleus, nucleu_10)

# Reaction: id = R317, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_62=1.0E-6


R317=dnabound*func_278(PP2A, cytoplasm, dnabound, dnabou_10, kdepho_62)

# Reaction: id = R318, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_63=1.0E-6


R318=cytoplasm*func_279(PP2A, cytoplasm, cytopl_17, kdepho_63)

# Reaction: id = R319, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_64=1.0E-6


R319=nucleus*func_280(PP2A, cytoplasm, kdepho_64, nucleus, nucleu_11)

# Reaction: id = R320, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_65=1.0E-6


R320=dnabound*func_281(PP2A, cytoplasm, dnabound, dnabou_11, kdepho_65)

# Reaction: id = R321, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_90=5.0E-5


R321=cytoplasm*func_282(JNK_P, by_jnk_ph, cytoplasm, cytopl_18, kkin_1_90)

# Reaction: id = R322, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_91=5.0E-5


R322=nucleus*func_283(JNK_P, by_jnk_ph, cytoplasm, kkin_1_91, nucleus, nucleu_12)

# Reaction: id = R323, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_92=5.0E-5


R323=dnabound*func_284(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnabou_12, kkin_1_92)

# Reaction: id = R324, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_93=5.0E-5


R324=cytoplasm*func_285(JNK_P, by_jnk_ph, cytoplasm, cytopl_19, kkin_1_93)

# Reaction: id = R325, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_94=5.0E-5


R325=nucleus*func_286(JNK_P, by_jnk_ph, cytoplasm, kkin_1_94, nucleus, nucleu_13)

# Reaction: id = R326, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by JNK_P
# Local Parameter:   id =  kkin, name = kkin
par kkin_1_95=5.0E-5


R326=dnabound*func_287(JNK_P, by_jnk_ph, cytoplasm, dnabound, dnabou_13, kkin_1_95)

# Reaction: id = R327, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_66=1.0E-6


R327=cytoplasm*func_288(PP2A, cytoplasm, cytopl_20, kdepho_66)

# Reaction: id = R328, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_67=1.0E-6


R328=nucleus*func_289(PP2A, cytoplasm, kdepho_67, nucleus, nucleu_14)

# Reaction: id = R329, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_68=1.0E-6


R329=dnabound*func_290(PP2A, cytoplasm, dnabound, dnabou_14, kdepho_68)

# Reaction: id = R330, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_69=1.0E-6


R330=cytoplasm*func_291(PP2A, cytoplasm, cytopl_21, kdepho_69)

# Reaction: id = R331, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_70=1.0E-6


R331=nucleus*func_292(PP2A, cytoplasm, kdepho_70, nucleus, nucleu_15)

# Reaction: id = R332, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by PP2A
# Local Parameter:   id =  kdephos, name = kdephos
par kdepho_71=1.0E-6


R332=dnabound*func_293(PP2A, cytoplasm, dnabound, dnabou_15, kdepho_71)

# Reaction: id = R333, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub=1.0E-6


R333=cytoplasm*func_294(SCF, cytoplasm, cytopla_6, kub)

# Reaction: id = R334, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1=1.0E-6


R334=nucleus*func_295(SCF, cytoplasm, kub_1, nucleus, nucleus_F)

# Reaction: id = R335, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2=1.0E-6


R335=dnabound*func_296(SCF, cytoplasm, dnabound, dnabound_, kub_1_2)

# Reaction: id = R336, name = conversion of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_3=1.0E-6


R336=cytoplasm*func_297(SCF, cytoplasm, cytopla_8, kub_1_2_3)

# Reaction: id = R337, name = conversion of nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_4=1.0E-6


R337=nucleus*func_298(SCF, cytoplasm, kub_1_2_4, nucleus, nucleus_2)

# Reaction: id = R338, name = conversion of dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_5=1.0E-6


R338=dnabound*func_299(SCF, cytoplasm, dnabound, dnaboun_2, kub_1_2_5)

# Reaction: id = R339, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_6=2.2E-5


R339=cytoplasm*func_300(SCF, cytoplasm, cytopl_10, kub_1_2_6)

# Reaction: id = R340, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_7=2.2E-5


R340=nucleus*func_301(SCF, cytoplasm, kub_1_2_7, nucleus, nucleus_4)

# Reaction: id = R341, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_8=2.2E-5


R341=dnabound*func_302(SCF, cytoplasm, dnabound, dnaboun_4, kub_1_2_8)

# Reaction: id = R342, name = conversion of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1_2_9=2.2E-5


R342=cytoplasm*func_303(SCF, cytoplasm, cytopl_12, kub_1_2_9)

# Reaction: id = R343, name = conversion of nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__10=2.2E-5


R343=nucleus*func_304(SCF, cytoplasm, kub_1__10, nucleus, nucleus_6)

# Reaction: id = R344, name = conversion of dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__11=2.2E-5


R344=dnabound*func_305(SCF, cytoplasm, dnabound, dnaboun_6, kub_1__11)

# Reaction: id = R345, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__12=3.0E-6


R345=cytoplasm*func_306(SCF, cytoplasm, cytopl_14, kub_1__12)

# Reaction: id = R346, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__13=3.0E-6


R346=nucleus*func_307(SCF, cytoplasm, kub_1__13, nucleus, nucleus_8)

# Reaction: id = R347, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__14=3.0E-6


R347=dnabound*func_308(SCF, cytoplasm, dnabound, dnaboun_8, kub_1__14)

# Reaction: id = R348, name = conversion of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__15=3.0E-6


R348=cytoplasm*func_309(SCF, cytoplasm, cytopl_16, kub_1__15)

# Reaction: id = R349, name = conversion of nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__16=3.0E-6


R349=nucleus*func_310(SCF, cytoplasm, kub_1__16, nucleus, nucleu_10)

# Reaction: id = R350, name = conversion of dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__17=3.0E-6


R350=dnabound*func_311(SCF, cytoplasm, dnabound, dnabou_10, kub_1__17)

# Reaction: id = R351, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__18=6.6E-5


R351=cytoplasm*func_312(SCF, cytoplasm, cytopl_18, kub_1__18)

# Reaction: id = R352, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__19=6.6E-5


R352=nucleus*func_313(SCF, cytoplasm, kub_1__19, nucleus, nucleu_12)

# Reaction: id = R353, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__20=6.6E-5


R353=dnabound*func_314(SCF, cytoplasm, dnabound, dnabou_12, kub_1__20)

# Reaction: id = R354, name = conversion of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0 to cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__21=6.6E-5


R354=cytoplasm*func_315(SCF, cytoplasm, cytopl_20, kub_1__21)

# Reaction: id = R355, name = conversion of nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0 to nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__22=6.6E-5


R355=nucleus*func_316(SCF, cytoplasm, kub_1__22, nucleus, nucleu_14)

# Reaction: id = R356, name = conversion of dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0 to dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1 by SCF
# Local Parameter:   id =  kub, name = kub
par kub_1__23=6.6E-5


R356=dnabound*func_317(SCF, cytoplasm, dnabound, dnabou_14, kub_1__23)

# Reaction: id = R357, name = degradation of cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg=1.0E-4


R357=cytoplasm*func_318(Proteasom, cytoplasm, cytopla_7, kdeg)

# Reaction: id = R358, name = degradation of cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1=1.0E-4


R358=cytoplasm*func_319(Proteasom, cytoplasm, cytopla_9, kdeg_1)

# Reaction: id = R359, name = degradation of cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1_2=1.0E-4


R359=cytoplasm*func_320(Proteasom, cytoplasm, cytopl_11, kdeg_1_2)

# Reaction: id = R360, name = degradation of cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1__3=1.0E-4


R360=cytoplasm*func_321(Proteasom, cytoplasm, cytopl_13, kdeg_1__3)

# Reaction: id = R361, name = degradation of cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1__4=1.0E-4


R361=cytoplasm*func_322(Proteasom, cytoplasm, cytopl_15, kdeg_1__4)

# Reaction: id = R362, name = degradation of cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1__5=1.0E-4


R362=cytoplasm*func_323(Proteasom, cytoplasm, cytopl_17, kdeg_1__5)

# Reaction: id = R363, name = degradation of cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1__6=1.0E-4


R363=cytoplasm*func_324(Proteasom, cytoplasm, cytopl_19, kdeg_1__6)

# Reaction: id = R364, name = degradation of cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  kdeg, name = kdeg
par kdeg_1__7=1.0E-4


R364=cytoplasm*func_325(Proteasom, cytoplasm, cytopl_21, kdeg_1__7)

# Reaction: id = R365, name = transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktranscr=0.24


R365=func_326(dnabound, dnabound_, ktranscr)

# Reaction: id = R366, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_1=0.95


R366=func_327(dnabound, dnabound_, ktransc_1)

# Reaction: id = R367, name = transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_2=0.24


R367=func_328(dnabound, dnaboun_1, ktransc_2)

# Reaction: id = R368, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_3=0.95


R368=func_329(dnabound, dnaboun_1, ktransc_3)

# Reaction: id = R369, name = transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_4=0.24


R369=func_330(dnabound, dnaboun_2, ktransc_4)

# Reaction: id = R370, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_5=0.95


R370=func_331(dnabound, dnaboun_2, ktransc_5)

# Reaction: id = R371, name = transcription of InR by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_6=0.24


R371=func_332(dnabound, dnaboun_3, ktransc_6)

# Reaction: id = R372, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_7=0.95


R372=func_333(dnabound, dnaboun_3, ktransc_7)

# Reaction: id = R373, name = transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_8=0.24


R373=func_334(dnabound, dnaboun_4, ktransc_8)

# Reaction: id = R374, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktransc_9=0.95


R374=func_335(dnabound, dnaboun_4, ktransc_9)

# Reaction: id = R375, name = transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_10=0.24


R375=func_336(dnabound, dnaboun_5, ktrans_10)

# Reaction: id = R376, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_11=0.95


R376=func_337(dnabound, dnaboun_5, ktrans_11)

# Reaction: id = R377, name = transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_12=0.24


R377=func_338(dnabound, dnaboun_6, ktrans_12)

# Reaction: id = R378, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_13=0.95


R378=func_339(dnabound, dnaboun_6, ktrans_13)

# Reaction: id = R379, name = transcription of InR by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_14=0.24


R379=func_340(dnabound, dnaboun_7, ktrans_14)

# Reaction: id = R380, name = transcription of SOD2 by dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_15=0.95


R380=func_341(dnabound, dnaboun_7, ktrans_15)

# Reaction: id = R381, name = transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_16=0.24


R381=func_342(dnabound, dnaboun_8, ktrans_16)

# Reaction: id = R382, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_17=0.95


R382=func_343(dnabound, dnaboun_8, ktrans_17)

# Reaction: id = R383, name = transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_18=0.24


R383=func_344(dnabound, dnaboun_9, ktrans_18)

# Reaction: id = R384, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_19=0.95


R384=func_345(dnabound, dnaboun_9, ktrans_19)

# Reaction: id = R385, name = transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_20=0.24


R385=func_346(dnabound, dnabou_10, ktrans_20)

# Reaction: id = R386, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_21=0.95


R386=func_347(dnabound, dnabou_10, ktrans_21)

# Reaction: id = R387, name = transcription of InR by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_22=0.24


R387=func_348(dnabound, dnabou_11, ktrans_22)

# Reaction: id = R388, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_23=0.95


R388=func_349(dnabound, dnabou_11, ktrans_23)

# Reaction: id = R389, name = transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_24=0.24


R389=func_350(dnabound, dnabou_12, ktrans_24)

# Reaction: id = R390, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_25=0.95


R390=func_351(dnabound, dnabou_12, ktrans_25)

# Reaction: id = R391, name = transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_26=0.24


R391=func_352(dnabound, dnabou_13, ktrans_26)

# Reaction: id = R392, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_27=0.95


R392=func_353(dnabound, dnabou_13, ktrans_27)

# Reaction: id = R393, name = transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_28=0.24


R393=func_354(dnabound, dnabou_14, ktrans_28)

# Reaction: id = R394, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_29=0.95


R394=func_355(dnabound, dnabou_14, ktrans_29)

# Reaction: id = R395, name = transcription of InR by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_30=0.24


R395=func_356(dnabound, dnabou_15, ktrans_30)

# Reaction: id = R396, name = transcription of SOD2 by dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1
# Local Parameter:   id =  ktranscr, name = ktranscr
par ktrans_31=0.95


R396=func_357(dnabound, dnabou_15, ktrans_31)

# Reaction: id = R397, name = basal transcription of InR
# Local Parameter:   id =  v, name = v
par v=5.0


R397=function_(v)

# Reaction: id = R398, name = export of InR RNA
# Local Parameter:   id =  kexp, name = kexp
par kexp=0.22


R398=func_358(kexp, nucleus, nucleus_R)

# Reaction: id = R399, name = cyto degr of InR RNA
# Local Parameter:   id =  kmdeg, name = kmdeg
par kmdeg=5.622


R399=cytoplasm*func_359(cytoplasm, cytopl_23, kmdeg)

# Reaction: id = R400, name = translation of InR
# Local Parameter:   id =  ktransl, name = ktransl
par ktransl=2.46


R400=cytoplasm*func_360(cytoplasm, cytopl_23, ktransl)

# Reaction: id = R401, name = degradation of InR protein
# Local Parameter:   id =  kpdeg, name = kpdeg
par kpdeg=0.0044


R401=cytoplasm*func_361(cytoplasm, cytopla_1, kpdeg)

# Reaction: id = R402, name = basal transcription of SOD2
# Local Parameter:   id =  v, name = v
par v_1=15.0


R402=function_(v_1)

# Reaction: id = R403, name = export of SOD2 RNA
# Local Parameter:   id =  kexp, name = kexp
par kexp_1=0.22


R403=func_362(kexp_1, nucleus, nucleu_17)

# Reaction: id = R404, name = cyto degr of SOD2 RNA
# Local Parameter:   id =  kmdeg, name = kmdeg
par kmdeg_1=5.622


R404=cytoplasm*func_363(cytoplasm, cytopl_24, kmdeg_1)

# Reaction: id = R405, name = translation of SOD2
# Local Parameter:   id =  ktransl, name = ktransl
par ktransl_1=1.23


R405=cytoplasm*func_364(cytoplasm, cytopl_24, ktransl_1)

# Reaction: id = R406, name = degradation of SOD2 protein
# Local Parameter:   id =  kpdeg, name = kpdeg
par kpdeg_1=0.0019


R406=cytoplasm*func_365(cytoplasm, cytopla_5, kpdeg_1)

# Species:   id = NULL, name = NULL, constant
par NULL=0.0


# Species:   id = Ins, name = Ins# Species is changed by 4 event(s)
par Ins=0.0
aux Ins=Ins

# Species:   id = InR, name = InR, affected by kineticLaw

init InR=90000.0
dInR/dt=(1/(cellsurfa))*((-1.0 * R1f) + ( 1.0 * R1r) + ( 1.0 * R4) + (-1.0 * R5f) + ( 1.0 * R5r))

# Species:   id = Ins_InR, name = Ins_InR, affected by kineticLaw

init Ins_InR=0.0
dIns_InR/dt=(1/(cellsurfa))*(( 1.0 * R1f) + (-1.0 * R1r) + (-1.0 * R2))

# Species:   id = Ins_InR_P, name = Ins_InR_P, affected by kineticLaw

init Ins_InR_P=0.0
dIns_InR_P/dt=(1/(cellsurfa))*(( 1.0 * R2) + (-1.0 * R3f) + ( 1.0 * R3r) + (-1.0 * R4) + (-1.0 * R7f) + ( 1.0 * R7r))

# Species:   id = Ins_2_InR_P, name = Ins_2_InR_P, affected by kineticLaw

par Ins_2_InR=0.0
aux Ins_2_InR=Ins_2_InR
dIns_2_InR/dt=(1/(cellsurfa))*(( 1.0 * R3f) + (-1.0 * R3r) + (-1.0 * R6f) + ( 1.0 * R6r))

# Species:   id = cytoplasm_InR, name = cytoplasm_InR, affected by kineticLaw

par cytopla_1=10000.0
aux cytopla_1=cytopla_1
dcytopla_1/dt=(1/(cytoplasm))*(( 1.0 * R5f) + (-1.0 * R5r) + ( 1.0 * R10) + ( 1.0 * R11) + ( 1.0 * R400) + (-1.0 * R401))

# Species:   id = cytoplasm_Ins_2_InR_P, name = cytoplasm_Ins_2_InR_P, affected by kineticLaw

par cytopla_2=0.0
aux cytopla_2=cytopla_2
dcytopla_2/dt=(1/(cytoplasm))*(( 1.0 * R6f) + (-1.0 * R6r) + (-1.0 * R10))

# Species:   id = cytoplasm_Ins_InR_P, name = cytoplasm_Ins_InR_P, affected by kineticLaw

par cytopla_3=0.0
aux cytopla_3=cytopla_3
dcytopla_3/dt=(1/(cytoplasm))*(( 1.0 * R7f) + (-1.0 * R7r) + (-1.0 * R11))

# Species:   id = InR_tot, name = InR_tot, involved in a rule 

# Species:   id = InR_bound, name = InR_bound, involved in a rule 

# Species:   id = InR_active, name = InR_active, involved in a rule 

# Species:   id = PTP1B, name = PTP1B, affected by kineticLaw

init PTP1B=100000.0
dPTP1B/dt=(1/(cytoplasm))*((-1.0 * R30f) + ( 1.0 * R30r))

# Species:   id = IRS1_TyrP_PI3K, name = IRS1_TyrP_PI3K, affected by kineticLaw

init IRS1_TyrP=0.0
dIRS1_TyrP/dt=(1/(cytoplasm))*(( 1.0 * R13f) + (-1.0 * R13r))

# Species:   id = PI345P3, name = PI345P3, affected by kineticLaw

init PI345P3=1000.0
dPI345P3/dt=(1/(cytoplasm))*(( 1.0 * R14f) + (-1.0 * R14r))

# Species:   id = PIP2, name = PIP2, affected by kineticLaw

init PIP2=200000.0
dPIP2/dt=(1/(cytoplasm))*((-1.0 * R14f) + ( 1.0 * R14r))

# Species:   id = PI345P3_mol, name = PI345P3_mol, involved in a rule 

# Species:   id = PIP2_mol, name = PIP2_mol, involved in a rule 

# Species:   id = Akt, name = Akt, affected by kineticLaw

init Akt=100000.0
dAkt/dt=(1/(cytoplasm))*((-1.0 * R16f) + ( 1.0 * R16r))

# Species:   id = Akt_P2, name = Akt_P2, affected by kineticLaw

init Akt_P2=0.0
dAkt_P2/dt=(1/(cytoplasm))*(( 1.0 * R16f) + (-1.0 * R16r))

# Species:   id = PKC, name = PKC, affected by kineticLaw

init PKC=100000.0
dPKC/dt=(1/(cytoplasm))*((-1.0 * R17f) + ( 1.0 * R17r))

# Species:   id = PKC_P, name = PKC_P, affected by kineticLaw

init PKC_P=0.0
dPKC_P/dt=(1/(cytoplasm))*(( 1.0 * R17f) + (-1.0 * R17r))

# Species:   id = AS160, name = AS160, affected by kineticLaw

init AS160=20000.0
dAS160/dt=(1/(cytoplasm))*((-1.0 * R16a_f) + ( 1.0 * R16a_r))

# Species:   id = AS160_P, name = AS160_P, affected by kineticLaw

init AS160_P=0.0
dAS160_P/dt=(1/(cytoplasm))*(( 1.0 * R16a_f) + (-1.0 * R16a_r))

# Species:   id = cytoplasm_GLUT4, name = cytoplasm_GLUT4, affected by kineticLaw

par cytopla_4=96000.0
aux cytopla_4=cytopla_4
dcytopla_4/dt=(1/(cytoplasm))*((-1.0 * R20f) + ( 1.0 * R20r))

# Species:   id = cellsurface_GLUT4, name = cellsurface_GLUT4, affected by kineticLaw

par cellsur_1=4000.0
aux cellsur_1=cellsur_1
dcellsur_1/dt=(1/(cellsurfa))*(( 1.0 * R20f) + (-1.0 * R20r))

# Species:   id = PTEN, name = PTEN, affected by kineticLaw

init PTEN=100000.0
dPTEN/dt=(1/(cytoplasm))*((-1.0 * R31f) + ( 1.0 * R31r))

# Species:   id = PP2A, name = PP2A
# Warning species is not changed by either rules or reactions

par PP2A=500000.0
aux PP2A=PP2A

# Species:   id = extracellular_ROS, name = extracellular_ROS, constant
par extrace_1=0.0


# Species:   id = PTP1B_ox, name = PTP1B_ox, affected by kineticLaw

init PTP1B_ox=0.0
dPTP1B_ox/dt=(1/(cytoplasm))*(( 1.0 * R30f) + (-1.0 * R30r))

# Species:   id = PTP1B_plus_PTP1B_ox, name = PTP1B_plus_PTP1B_ox, involved in a rule 

# Species:   id = PTEN_ox, name = PTEN_ox, affected by kineticLaw

init PTEN_ox=0.0
dPTEN_ox/dt=(1/(cytoplasm))*(( 1.0 * R31f) + (-1.0 * R31r))

# Species:   id = PTEN_plus_PTEN_ox, name = PTEN_plus_PTEN_ox, involved in a rule 

# Species:   id = ROS, name = ROS, affected by kineticLaw

init ROS=0.0
dROS/dt=(1/(cytoplasm))*((-1.0 * R30f) + ( 1.0 * R30f) + (-1.0 * R31f) + ( 1.0 * R31f) + ( 1.0 * R35f) + (-1.0 * R35r) + ( 1.0 * R36f) + ( 1.0 * R37f) + (-1.0 * R37r) + (-1.0 * R32f) + ( 1.0 * R32f))

# Species:   id = GSH, name = GSH, affected by kineticLaw

init GSH=100.0
dGSH/dt=(1/(cytoplasm))*((-1.0 * R30r) + ( 1.0 * R30r) + (-1.0 * R31r) + ( 1.0 * R31r) + (-1.0 * R38f) + ( 1.0 * R38r) + (-1.0 * R32r) + ( 1.0 * R32r))

# Species:   id = GSSG, name = GSSG, affected by kineticLaw

init GSSG=0.0
dGSSG/dt=(1/(cytoplasm))*(( 1.0 * R38f) + (-1.0 * R38r))

# Species:   id = cytoplasm_SOD2, name = cytoplasm_SOD2, affected by kineticLaw

par cytopla_5=41700.0
aux cytopla_5=cytopla_5
dcytopla_5/dt=(1/(cytoplasm))*((-1.0 * R35r) + ( 1.0 * R35r) + ( 1.0 * R405) + (-1.0 * R406))

# Species:   id = NOX_inact, name = NOX_inact, affected by kineticLaw

init NOX_inact=100.0
dNOX_inact/dt=(1/(cytoplasm))*((-1.0 * R34f) + ( 1.0 * R34r2) + ( 1.0 * R34r3))

# Species:   id = NOX, name = NOX, affected by kineticLaw

init NOX=0.0
dNOX/dt=(1/(cytoplasm))*(( 1.0 * R34f) + (-1.0 * R34r1) + (-1.0 * R34r2) + (-1.0 * R35f) + ( 1.0 * R35f))

# Species:   id = NOX_deact, name = NOX_deact, affected by kineticLaw

init NOX_deact=0.0
dNOX_deact/dt=(1/(cytoplasm))*(( 1.0 * R34r1) + (-1.0 * R34r3))

# Species:   id = NOX_total, name = NOX_total, involved in a rule 

# Species:   id = Mt, name = Mt, constant
par Mt=50.0


# Species:   id = IRS1, name = IRS1, affected by kineticLaw

init IRS1=100000.0
dIRS1/dt=(1/(cytoplasm))*((-1.0 * R12f) + ( 1.0 * R12r) + (-1.0 * R12_a_f) + ( 1.0 * R12_a_r) + ( 1.0 * R50f) + (-1.0 * R50r1) + (-1.0 * R51f) + (-1.0 * R52f))

# Species:   id = IRS1_TyrP, name = IRS1_TyrP, affected by kineticLaw

par IRS1_Ty_1=0.0
aux IRS1_Ty_1=IRS1_Ty_1
dIRS1_Ty_1/dt=(1/(cytoplasm))*(( 1.0 * R12f) + (-1.0 * R12r) + (-1.0 * R12_b_f) + ( 1.0 * R12_b_r) + (-1.0 * R13f) + ( 1.0 * R13r) + (-1.0 * R50r2))

# Species:   id = IRS1_PolySerP, name = IRS1_PolySerP, affected by kineticLaw

par IRS1_Poly=0.0
aux IRS1_Poly=IRS1_Poly
dIRS1_Poly/dt=(1/(cytoplasm))*(( 1.0 * R12_a_f) + (-1.0 * R12_a_r) + (-1.0 * R50r3) + ( 1.0 * R51f) + ( 1.0 * R52f))

# Species:   id = IRS1_TyrP_PolySerP, name = IRS1_TyrP_PolySerP, affected by kineticLaw

par IRS1_Ty_2=0.0
aux IRS1_Ty_2=IRS1_Ty_2
dIRS1_Ty_2/dt=(1/(cytoplasm))*(( 1.0 * R12_b_f) + (-1.0 * R12_b_r) + (-1.0 * R50r4))

# Species:   id = IRS_total, name = IRS_total, involved in a rule 

# Species:   id = PI3K, name = PI3K, affected by kineticLaw

init PI3K=10000.0
dPI3K/dt=(1/(cytoplasm))*((-1.0 * R13f) + ( 1.0 * R13r))

# Species:   id = JNK_P, name = JNK_P, affected by kineticLaw

init JNK_P=0.0
dJNK_P/dt=(1/(cytoplasm))*(( 1.0 * R42f) + (-1.0 * R42r))

# Species:   id = IKK_P, name = IKK_P, affected by kineticLaw

init IKK_P=0.0
dIKK_P/dt=(1/(cytoplasm))*(( 1.0 * R43f) + (-1.0 * R43r))

# Species:   id = JNK, name = JNK, affected by kineticLaw

init JNK=16000.0
dJNK/dt=(1/(cytoplasm))*((-1.0 * R42f) + ( 1.0 * R42r))

# Species:   id = JNK_plus_JNK_P, name = JNK_plus_JNK_P, involved in a rule 

# Species:   id = IKK, name = IKK, affected by kineticLaw

init IKK=2000.0
dIKK/dt=(1/(cytoplasm))*((-1.0 * R43f) + ( 1.0 * R43r))

# Species:   id = IKK_plus_IKK_P, name = IKK_plus_IKK_P, involved in a rule 

# Species:   id = DUSP, name = DUSP, affected by kineticLaw

init DUSP=100000.0
dDUSP/dt=(1/(cytoplasm))*((-1.0 * R32f) + ( 1.0 * R32r))

# Species:   id = DUSP_ox, name = DUSP_ox, affected by kineticLaw

init DUSP_ox=0.0
dDUSP_ox/dt=(1/(cytoplasm))*(( 1.0 * R32f) + (-1.0 * R32r))

# Species:   id = DUSP_plus_DUSP_ox, name = DUSP_plus_DUSP_ox, involved in a rule 

# Species:   id = null, name = null, constant
par null_1=0.0


# Species:   id = degr_Foxo1, name = degr_Foxo1, affected by kineticLaw

par degr_Foxo=0.0
aux degr_Foxo=degr_Foxo
ddegr_Foxo/dt=(1/(cytoplasm))*(( 1.0 * R357) + ( 1.0 * R358) + ( 1.0 * R359) + ( 1.0 * R360) + ( 1.0 * R361) + ( 1.0 * R362) + ( 1.0 * R363) + ( 1.0 * R364))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0, name = cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb0, affected by kineticLaw

par cytopla_6=1000.0
aux cytopla_6=cytopla_6
dcytopla_6/dt=(1/(cytoplasm))*(( 1.0 * R100) + (-1.0 * R101) + ( 1.0 * R102) + (-1.0 * R165) + (-1.0 * R189) + ( 1.0 * R213) + (-1.0 * R237) + ( 1.0 * R249) + (-1.0 * R285) + ( 1.0 * R291) + (-1.0 * R333))

# Species:   id = nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0, name = nucleus_Foxo1_Pa0_Pd0_Pe0_pUb0, affected by kineticLaw

par nucleus_F=0.0
aux nucleus_F=nucleus_F
dnucleus_F/dt=(1/(nucleus))*(( 1.0 * R101) + (-1.0 * R102) + (-1.0 * R103) + ( 1.0 * R104) + (-1.0 * R166) + (-1.0 * R190) + ( 1.0 * R214) + (-1.0 * R238) + ( 1.0 * R250) + (-1.0 * R286) + ( 1.0 * R292) + (-1.0 * R334))

# Species:   id = dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0, name = dnabound_Foxo1_Pa0_Pd0_Pe0_pUb0, affected by kineticLaw

par dnabound_=0.0
aux dnabound_=dnabound_
ddnabound_/dt=(1/(dnabound))*(( 1.0 * R103) + (-1.0 * R104) + (-1.0 * R167) + (-1.0 * R191) + ( 1.0 * R215) + (-1.0 * R239) + ( 1.0 * R251) + (-1.0 * R287) + ( 1.0 * R293) + (-1.0 * R335))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1, name = cytoplasm_Foxo1_Pa0_Pd0_Pe0_pUb1, affected by kineticLaw

par cytopla_7=0.0
aux cytopla_7=cytopla_7
dcytopla_7/dt=(1/(cytoplasm))*((-1.0 * R105) + ( 1.0 * R106) + (-1.0 * R168) + (-1.0 * R192) + ( 1.0 * R216) + (-1.0 * R240) + ( 1.0 * R252) + (-1.0 * R288) + ( 1.0 * R294) + ( 1.0 * R333) + (-1.0 * R357))

# Species:   id = nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1, name = nucleus_Foxo1_Pa0_Pd0_Pe0_pUb1, affected by kineticLaw

par nucleus_1=0.0
aux nucleus_1=nucleus_1
dnucleus_1/dt=(1/(nucleus))*(( 1.0 * R105) + (-1.0 * R106) + (-1.0 * R107) + ( 1.0 * R108) + (-1.0 * R169) + (-1.0 * R193) + ( 1.0 * R217) + (-1.0 * R241) + ( 1.0 * R253) + (-1.0 * R289) + ( 1.0 * R295) + ( 1.0 * R334))

# Species:   id = dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1, name = dnabound_Foxo1_Pa0_Pd0_Pe0_pUb1, affected by kineticLaw

par dnaboun_1=0.0
aux dnaboun_1=dnaboun_1
ddnaboun_1/dt=(1/(dnabound))*(( 1.0 * R107) + (-1.0 * R108) + (-1.0 * R170) + (-1.0 * R194) + ( 1.0 * R218) + (-1.0 * R242) + ( 1.0 * R254) + (-1.0 * R290) + ( 1.0 * R296) + ( 1.0 * R335))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0, name = cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb0, affected by kineticLaw

par cytopla_8=0.0
aux cytopla_8=cytopla_8
dcytopla_8/dt=(1/(cytoplasm))*((-1.0 * R109) + ( 1.0 * R110) + (-1.0 * R171) + (-1.0 * R195) + ( 1.0 * R219) + (-1.0 * R243) + ( 1.0 * R255) + ( 1.0 * R285) + (-1.0 * R291) + (-1.0 * R336))

# Species:   id = nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0, name = nucleus_Foxo1_Pa0_Pd0_Pe1_pUb0, affected by kineticLaw

par nucleus_2=0.0
aux nucleus_2=nucleus_2
dnucleus_2/dt=(1/(nucleus))*(( 1.0 * R109) + (-1.0 * R110) + (-1.0 * R111) + ( 1.0 * R112) + (-1.0 * R172) + (-1.0 * R196) + ( 1.0 * R220) + (-1.0 * R244) + ( 1.0 * R256) + ( 1.0 * R286) + (-1.0 * R292) + (-1.0 * R337))

# Species:   id = dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0, name = dnabound_Foxo1_Pa0_Pd0_Pe1_pUb0, affected by kineticLaw

par dnaboun_2=0.0
aux dnaboun_2=dnaboun_2
ddnaboun_2/dt=(1/(dnabound))*(( 1.0 * R111) + (-1.0 * R112) + (-1.0 * R173) + (-1.0 * R197) + ( 1.0 * R221) + (-1.0 * R245) + ( 1.0 * R257) + ( 1.0 * R287) + (-1.0 * R293) + (-1.0 * R338))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1, name = cytoplasm_Foxo1_Pa0_Pd0_Pe1_pUb1, affected by kineticLaw

par cytopla_9=0.0
aux cytopla_9=cytopla_9
dcytopla_9/dt=(1/(cytoplasm))*((-1.0 * R113) + ( 1.0 * R114) + (-1.0 * R174) + (-1.0 * R198) + ( 1.0 * R222) + (-1.0 * R246) + ( 1.0 * R258) + ( 1.0 * R288) + (-1.0 * R294) + ( 1.0 * R336) + (-1.0 * R358))

# Species:   id = nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1, name = nucleus_Foxo1_Pa0_Pd0_Pe1_pUb1, affected by kineticLaw

par nucleus_3=0.0
aux nucleus_3=nucleus_3
dnucleus_3/dt=(1/(nucleus))*(( 1.0 * R113) + (-1.0 * R114) + (-1.0 * R115) + ( 1.0 * R116) + (-1.0 * R175) + (-1.0 * R199) + ( 1.0 * R223) + (-1.0 * R247) + ( 1.0 * R259) + ( 1.0 * R289) + (-1.0 * R295) + ( 1.0 * R337))

# Species:   id = dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1, name = dnabound_Foxo1_Pa0_Pd0_Pe1_pUb1, affected by kineticLaw

par dnaboun_3=0.0
aux dnaboun_3=dnaboun_3
ddnaboun_3/dt=(1/(dnabound))*(( 1.0 * R115) + (-1.0 * R116) + (-1.0 * R176) + (-1.0 * R200) + ( 1.0 * R224) + (-1.0 * R248) + ( 1.0 * R260) + ( 1.0 * R290) + (-1.0 * R296) + ( 1.0 * R338))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0, name = cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb0, affected by kineticLaw

par cytopl_10=0.0
aux cytopl_10=cytopl_10
dcytopl_10/dt=(1/(cytoplasm))*((-1.0 * R117) + ( 1.0 * R118) + (-1.0 * R177) + (-1.0 * R201) + ( 1.0 * R225) + ( 1.0 * R237) + (-1.0 * R249) + (-1.0 * R297) + ( 1.0 * R303) + (-1.0 * R339))

# Species:   id = nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0, name = nucleus_Foxo1_Pa0_Pd1_Pe0_pUb0, affected by kineticLaw

par nucleus_4=0.0
aux nucleus_4=nucleus_4
dnucleus_4/dt=(1/(nucleus))*(( 1.0 * R117) + (-1.0 * R118) + (-1.0 * R119) + ( 1.0 * R120) + (-1.0 * R178) + (-1.0 * R202) + ( 1.0 * R226) + ( 1.0 * R238) + (-1.0 * R250) + (-1.0 * R298) + ( 1.0 * R304) + (-1.0 * R340))

# Species:   id = dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0, name = dnabound_Foxo1_Pa0_Pd1_Pe0_pUb0, affected by kineticLaw

par dnaboun_4=0.0
aux dnaboun_4=dnaboun_4
ddnaboun_4/dt=(1/(dnabound))*(( 1.0 * R119) + (-1.0 * R120) + (-1.0 * R179) + (-1.0 * R203) + ( 1.0 * R227) + ( 1.0 * R239) + (-1.0 * R251) + (-1.0 * R299) + ( 1.0 * R305) + (-1.0 * R341))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1, name = cytoplasm_Foxo1_Pa0_Pd1_Pe0_pUb1, affected by kineticLaw

par cytopl_11=0.0
aux cytopl_11=cytopl_11
dcytopl_11/dt=(1/(cytoplasm))*((-1.0 * R121) + ( 1.0 * R122) + (-1.0 * R180) + (-1.0 * R204) + ( 1.0 * R228) + ( 1.0 * R240) + (-1.0 * R252) + (-1.0 * R300) + ( 1.0 * R306) + ( 1.0 * R339) + (-1.0 * R359))

# Species:   id = nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1, name = nucleus_Foxo1_Pa0_Pd1_Pe0_pUb1, affected by kineticLaw

par nucleus_5=0.0
aux nucleus_5=nucleus_5
dnucleus_5/dt=(1/(nucleus))*(( 1.0 * R121) + (-1.0 * R122) + (-1.0 * R123) + ( 1.0 * R124) + (-1.0 * R181) + (-1.0 * R205) + ( 1.0 * R229) + ( 1.0 * R241) + (-1.0 * R253) + (-1.0 * R301) + ( 1.0 * R307) + ( 1.0 * R340))

# Species:   id = dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1, name = dnabound_Foxo1_Pa0_Pd1_Pe0_pUb1, affected by kineticLaw

par dnaboun_5=0.0
aux dnaboun_5=dnaboun_5
ddnaboun_5/dt=(1/(dnabound))*(( 1.0 * R123) + (-1.0 * R124) + (-1.0 * R182) + (-1.0 * R206) + ( 1.0 * R230) + ( 1.0 * R242) + (-1.0 * R254) + (-1.0 * R302) + ( 1.0 * R308) + ( 1.0 * R341))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0, name = cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb0, affected by kineticLaw

par cytopl_12=0.0
aux cytopl_12=cytopl_12
dcytopl_12/dt=(1/(cytoplasm))*((-1.0 * R125) + ( 1.0 * R126) + (-1.0 * R183) + (-1.0 * R207) + ( 1.0 * R231) + ( 1.0 * R243) + (-1.0 * R255) + ( 1.0 * R297) + (-1.0 * R303) + (-1.0 * R342))

# Species:   id = nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0, name = nucleus_Foxo1_Pa0_Pd1_Pe1_pUb0, affected by kineticLaw

par nucleus_6=0.0
aux nucleus_6=nucleus_6
dnucleus_6/dt=(1/(nucleus))*(( 1.0 * R125) + (-1.0 * R126) + (-1.0 * R127) + ( 1.0 * R128) + (-1.0 * R184) + (-1.0 * R208) + ( 1.0 * R232) + ( 1.0 * R244) + (-1.0 * R256) + ( 1.0 * R298) + (-1.0 * R304) + (-1.0 * R343))

# Species:   id = dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0, name = dnabound_Foxo1_Pa0_Pd1_Pe1_pUb0, affected by kineticLaw

par dnaboun_6=0.0
aux dnaboun_6=dnaboun_6
ddnaboun_6/dt=(1/(dnabound))*(( 1.0 * R127) + (-1.0 * R128) + (-1.0 * R185) + (-1.0 * R209) + ( 1.0 * R233) + ( 1.0 * R245) + (-1.0 * R257) + ( 1.0 * R299) + (-1.0 * R305) + (-1.0 * R344))

# Species:   id = cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1, name = cytoplasm_Foxo1_Pa0_Pd1_Pe1_pUb1, affected by kineticLaw

par cytopl_13=0.0
aux cytopl_13=cytopl_13
dcytopl_13/dt=(1/(cytoplasm))*((-1.0 * R129) + ( 1.0 * R130) + (-1.0 * R186) + (-1.0 * R210) + ( 1.0 * R234) + ( 1.0 * R246) + (-1.0 * R258) + ( 1.0 * R300) + (-1.0 * R306) + ( 1.0 * R342) + (-1.0 * R360))

# Species:   id = nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1, name = nucleus_Foxo1_Pa0_Pd1_Pe1_pUb1, affected by kineticLaw

par nucleus_7=0.0
aux nucleus_7=nucleus_7
dnucleus_7/dt=(1/(nucleus))*(( 1.0 * R129) + (-1.0 * R130) + (-1.0 * R131) + ( 1.0 * R132) + (-1.0 * R187) + (-1.0 * R211) + ( 1.0 * R235) + ( 1.0 * R247) + (-1.0 * R259) + ( 1.0 * R301) + (-1.0 * R307) + ( 1.0 * R343))

# Species:   id = dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1, name = dnabound_Foxo1_Pa0_Pd1_Pe1_pUb1, affected by kineticLaw

par dnaboun_7=0.0
aux dnaboun_7=dnaboun_7
ddnaboun_7/dt=(1/(dnabound))*(( 1.0 * R131) + (-1.0 * R132) + (-1.0 * R188) + (-1.0 * R212) + ( 1.0 * R236) + ( 1.0 * R248) + (-1.0 * R260) + ( 1.0 * R302) + (-1.0 * R308) + ( 1.0 * R344))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0, name = cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb0, affected by kineticLaw

par cytopl_14=0.0
aux cytopl_14=cytopl_14
dcytopl_14/dt=(1/(cytoplasm))*((-1.0 * R133) + ( 1.0 * R134) + ( 1.0 * R165) + ( 1.0 * R189) + (-1.0 * R213) + (-1.0 * R261) + ( 1.0 * R273) + (-1.0 * R309) + ( 1.0 * R315) + (-1.0 * R345))

# Species:   id = nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0, name = nucleus_Foxo1_Pa1_Pd0_Pe0_pUb0, affected by kineticLaw

par nucleus_8=0.0
aux nucleus_8=nucleus_8
dnucleus_8/dt=(1/(nucleus))*(( 1.0 * R133) + (-1.0 * R134) + (-1.0 * R135) + ( 1.0 * R136) + ( 1.0 * R166) + ( 1.0 * R190) + (-1.0 * R214) + (-1.0 * R262) + ( 1.0 * R274) + (-1.0 * R310) + ( 1.0 * R316) + (-1.0 * R346))

# Species:   id = dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0, name = dnabound_Foxo1_Pa1_Pd0_Pe0_pUb0, affected by kineticLaw

par dnaboun_8=0.0
aux dnaboun_8=dnaboun_8
ddnaboun_8/dt=(1/(dnabound))*(( 1.0 * R135) + (-1.0 * R136) + ( 1.0 * R167) + ( 1.0 * R191) + (-1.0 * R215) + (-1.0 * R263) + ( 1.0 * R275) + (-1.0 * R311) + ( 1.0 * R317) + (-1.0 * R347))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1, name = cytoplasm_Foxo1_Pa1_Pd0_Pe0_pUb1, affected by kineticLaw

par cytopl_15=0.0
aux cytopl_15=cytopl_15
dcytopl_15/dt=(1/(cytoplasm))*((-1.0 * R137) + ( 1.0 * R138) + ( 1.0 * R168) + ( 1.0 * R192) + (-1.0 * R216) + (-1.0 * R264) + ( 1.0 * R276) + (-1.0 * R312) + ( 1.0 * R318) + ( 1.0 * R345) + (-1.0 * R361))

# Species:   id = nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1, name = nucleus_Foxo1_Pa1_Pd0_Pe0_pUb1, affected by kineticLaw

par nucleus_9=0.0
aux nucleus_9=nucleus_9
dnucleus_9/dt=(1/(nucleus))*(( 1.0 * R137) + (-1.0 * R138) + (-1.0 * R139) + ( 1.0 * R140) + ( 1.0 * R169) + ( 1.0 * R193) + (-1.0 * R217) + (-1.0 * R265) + ( 1.0 * R277) + (-1.0 * R313) + ( 1.0 * R319) + ( 1.0 * R346))

# Species:   id = dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1, name = dnabound_Foxo1_Pa1_Pd0_Pe0_pUb1, affected by kineticLaw

par dnaboun_9=0.0
aux dnaboun_9=dnaboun_9
ddnaboun_9/dt=(1/(dnabound))*(( 1.0 * R139) + (-1.0 * R140) + ( 1.0 * R170) + ( 1.0 * R194) + (-1.0 * R218) + (-1.0 * R266) + ( 1.0 * R278) + (-1.0 * R314) + ( 1.0 * R320) + ( 1.0 * R347))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0, name = cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb0, affected by kineticLaw

par cytopl_16=0.0
aux cytopl_16=cytopl_16
dcytopl_16/dt=(1/(cytoplasm))*((-1.0 * R141) + ( 1.0 * R142) + ( 1.0 * R171) + ( 1.0 * R195) + (-1.0 * R219) + (-1.0 * R267) + ( 1.0 * R279) + ( 1.0 * R309) + (-1.0 * R315) + (-1.0 * R348))

# Species:   id = nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0, name = nucleus_Foxo1_Pa1_Pd0_Pe1_pUb0, affected by kineticLaw

par nucleu_10=0.0
aux nucleu_10=nucleu_10
dnucleu_10/dt=(1/(nucleus))*(( 1.0 * R141) + (-1.0 * R142) + (-1.0 * R143) + ( 1.0 * R144) + ( 1.0 * R172) + ( 1.0 * R196) + (-1.0 * R220) + (-1.0 * R268) + ( 1.0 * R280) + ( 1.0 * R310) + (-1.0 * R316) + (-1.0 * R349))

# Species:   id = dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0, name = dnabound_Foxo1_Pa1_Pd0_Pe1_pUb0, affected by kineticLaw

par dnabou_10=0.0
aux dnabou_10=dnabou_10
ddnabou_10/dt=(1/(dnabound))*(( 1.0 * R143) + (-1.0 * R144) + ( 1.0 * R173) + ( 1.0 * R197) + (-1.0 * R221) + (-1.0 * R269) + ( 1.0 * R281) + ( 1.0 * R311) + (-1.0 * R317) + (-1.0 * R350))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1, name = cytoplasm_Foxo1_Pa1_Pd0_Pe1_pUb1, affected by kineticLaw

par cytopl_17=0.0
aux cytopl_17=cytopl_17
dcytopl_17/dt=(1/(cytoplasm))*((-1.0 * R145) + ( 1.0 * R146) + ( 1.0 * R174) + ( 1.0 * R198) + (-1.0 * R222) + (-1.0 * R270) + ( 1.0 * R282) + ( 1.0 * R312) + (-1.0 * R318) + ( 1.0 * R348) + (-1.0 * R362))

# Species:   id = nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1, name = nucleus_Foxo1_Pa1_Pd0_Pe1_pUb1, affected by kineticLaw

par nucleu_11=0.0
aux nucleu_11=nucleu_11
dnucleu_11/dt=(1/(nucleus))*(( 1.0 * R145) + (-1.0 * R146) + (-1.0 * R147) + ( 1.0 * R148) + ( 1.0 * R175) + ( 1.0 * R199) + (-1.0 * R223) + (-1.0 * R271) + ( 1.0 * R283) + ( 1.0 * R313) + (-1.0 * R319) + ( 1.0 * R349))

# Species:   id = dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1, name = dnabound_Foxo1_Pa1_Pd0_Pe1_pUb1, affected by kineticLaw

par dnabou_11=0.0
aux dnabou_11=dnabou_11
ddnabou_11/dt=(1/(dnabound))*(( 1.0 * R147) + (-1.0 * R148) + ( 1.0 * R176) + ( 1.0 * R200) + (-1.0 * R224) + (-1.0 * R272) + ( 1.0 * R284) + ( 1.0 * R314) + (-1.0 * R320) + ( 1.0 * R350))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0, name = cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb0, affected by kineticLaw

par cytopl_18=0.0
aux cytopl_18=cytopl_18
dcytopl_18/dt=(1/(cytoplasm))*((-1.0 * R149) + ( 1.0 * R150) + ( 1.0 * R177) + ( 1.0 * R201) + (-1.0 * R225) + ( 1.0 * R261) + (-1.0 * R273) + (-1.0 * R321) + ( 1.0 * R327) + (-1.0 * R351))

# Species:   id = nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0, name = nucleus_Foxo1_Pa1_Pd1_Pe0_pUb0, affected by kineticLaw

par nucleu_12=0.0
aux nucleu_12=nucleu_12
dnucleu_12/dt=(1/(nucleus))*(( 1.0 * R149) + (-1.0 * R150) + (-1.0 * R151) + ( 1.0 * R152) + ( 1.0 * R178) + ( 1.0 * R202) + (-1.0 * R226) + ( 1.0 * R262) + (-1.0 * R274) + (-1.0 * R322) + ( 1.0 * R328) + (-1.0 * R352))

# Species:   id = dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0, name = dnabound_Foxo1_Pa1_Pd1_Pe0_pUb0, affected by kineticLaw

par dnabou_12=0.0
aux dnabou_12=dnabou_12
ddnabou_12/dt=(1/(dnabound))*(( 1.0 * R151) + (-1.0 * R152) + ( 1.0 * R179) + ( 1.0 * R203) + (-1.0 * R227) + ( 1.0 * R263) + (-1.0 * R275) + (-1.0 * R323) + ( 1.0 * R329) + (-1.0 * R353))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1, name = cytoplasm_Foxo1_Pa1_Pd1_Pe0_pUb1, affected by kineticLaw

par cytopl_19=0.0
aux cytopl_19=cytopl_19
dcytopl_19/dt=(1/(cytoplasm))*((-1.0 * R153) + ( 1.0 * R154) + ( 1.0 * R180) + ( 1.0 * R204) + (-1.0 * R228) + ( 1.0 * R264) + (-1.0 * R276) + (-1.0 * R324) + ( 1.0 * R330) + ( 1.0 * R351) + (-1.0 * R363))

# Species:   id = nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1, name = nucleus_Foxo1_Pa1_Pd1_Pe0_pUb1, affected by kineticLaw

par nucleu_13=0.0
aux nucleu_13=nucleu_13
dnucleu_13/dt=(1/(nucleus))*(( 1.0 * R153) + (-1.0 * R154) + (-1.0 * R155) + ( 1.0 * R156) + ( 1.0 * R181) + ( 1.0 * R205) + (-1.0 * R229) + ( 1.0 * R265) + (-1.0 * R277) + (-1.0 * R325) + ( 1.0 * R331) + ( 1.0 * R352))

# Species:   id = dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1, name = dnabound_Foxo1_Pa1_Pd1_Pe0_pUb1, affected by kineticLaw

par dnabou_13=0.0
aux dnabou_13=dnabou_13
ddnabou_13/dt=(1/(dnabound))*(( 1.0 * R155) + (-1.0 * R156) + ( 1.0 * R182) + ( 1.0 * R206) + (-1.0 * R230) + ( 1.0 * R266) + (-1.0 * R278) + (-1.0 * R326) + ( 1.0 * R332) + ( 1.0 * R353))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0, name = cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb0, affected by kineticLaw

par cytopl_20=0.0
aux cytopl_20=cytopl_20
dcytopl_20/dt=(1/(cytoplasm))*((-1.0 * R157) + ( 1.0 * R158) + ( 1.0 * R183) + ( 1.0 * R207) + (-1.0 * R231) + ( 1.0 * R267) + (-1.0 * R279) + ( 1.0 * R321) + (-1.0 * R327) + (-1.0 * R354))

# Species:   id = nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0, name = nucleus_Foxo1_Pa1_Pd1_Pe1_pUb0, affected by kineticLaw

par nucleu_14=0.0
aux nucleu_14=nucleu_14
dnucleu_14/dt=(1/(nucleus))*(( 1.0 * R157) + (-1.0 * R158) + (-1.0 * R159) + ( 1.0 * R160) + ( 1.0 * R184) + ( 1.0 * R208) + (-1.0 * R232) + ( 1.0 * R268) + (-1.0 * R280) + ( 1.0 * R322) + (-1.0 * R328) + (-1.0 * R355))

# Species:   id = dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0, name = dnabound_Foxo1_Pa1_Pd1_Pe1_pUb0, affected by kineticLaw

par dnabou_14=0.0
aux dnabou_14=dnabou_14
ddnabou_14/dt=(1/(dnabound))*(( 1.0 * R159) + (-1.0 * R160) + ( 1.0 * R185) + ( 1.0 * R209) + (-1.0 * R233) + ( 1.0 * R269) + (-1.0 * R281) + ( 1.0 * R323) + (-1.0 * R329) + (-1.0 * R356))

# Species:   id = cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1, name = cytoplasm_Foxo1_Pa1_Pd1_Pe1_pUb1, affected by kineticLaw

par cytopl_21=0.0
aux cytopl_21=cytopl_21
dcytopl_21/dt=(1/(cytoplasm))*((-1.0 * R161) + ( 1.0 * R162) + ( 1.0 * R186) + ( 1.0 * R210) + (-1.0 * R234) + ( 1.0 * R270) + (-1.0 * R282) + ( 1.0 * R324) + (-1.0 * R330) + ( 1.0 * R354) + (-1.0 * R364))

# Species:   id = nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1, name = nucleus_Foxo1_Pa1_Pd1_Pe1_pUb1, affected by kineticLaw

par nucleu_15=0.0
aux nucleu_15=nucleu_15
dnucleu_15/dt=(1/(nucleus))*(( 1.0 * R161) + (-1.0 * R162) + (-1.0 * R163) + ( 1.0 * R164) + ( 1.0 * R187) + ( 1.0 * R211) + (-1.0 * R235) + ( 1.0 * R271) + (-1.0 * R283) + ( 1.0 * R325) + (-1.0 * R331) + ( 1.0 * R355))

# Species:   id = dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1, name = dnabound_Foxo1_Pa1_Pd1_Pe1_pUb1, affected by kineticLaw

par dnabou_15=0.0
aux dnabou_15=dnabou_15
ddnabou_15/dt=(1/(dnabound))*(( 1.0 * R163) + (-1.0 * R164) + ( 1.0 * R188) + ( 1.0 * R212) + (-1.0 * R236) + ( 1.0 * R272) + (-1.0 * R284) + ( 1.0 * R326) + (-1.0 * R332) + ( 1.0 * R356))

# Species:   id = Foxo1_Pa0_tot, name = Foxo1_Pa0_tot, involved in a rule 

# Species:   id = Foxo1_Pa1_tot, name = Foxo1_Pa1_tot, involved in a rule 

# Species:   id = Foxo1_Pd0_tot, name = Foxo1_Pd0_tot, involved in a rule 

# Species:   id = Foxo1_Pd1_tot, name = Foxo1_Pd1_tot, involved in a rule 

# Species:   id = Foxo1_Pe0_tot, name = Foxo1_Pe0_tot, involved in a rule 

# Species:   id = Foxo1_Pe1_tot, name = Foxo1_Pe1_tot, involved in a rule 

# Species:   id = Foxo1_pUb0_tot, name = Foxo1_pUb0_tot, involved in a rule 

# Species:   id = Foxo1_pUb1_tot, name = Foxo1_pUb1_tot, involved in a rule 

# Species:   id = cytoplasm_Foxo1_tot, name = cytoplasm_Foxo1_tot, involved in a rule 

# Species:   id = nucleus_Foxo1_tot, name = nucleus_Foxo1_tot, involved in a rule 

# Species:   id = dnabound_Foxo1_tot, name = dnabound_Foxo1_tot, involved in a rule 

# Species:   id = Foxo1_all, name = Foxo1_all, involved in a rule 

# Species:   id = nucleus_RNA_InR, name = nucleus_RNA_InR, affected by kineticLaw

par nucleus_R=0.0
aux nucleus_R=nucleus_R
dnucleus_R/dt=(1/(nucleus))*(( 1.0 * R365) + ( 1.0 * R367) + ( 1.0 * R369) + ( 1.0 * R371) + ( 1.0 * R373) + ( 1.0 * R375) + ( 1.0 * R377) + ( 1.0 * R379) + ( 1.0 * R381) + ( 1.0 * R383) + ( 1.0 * R385) + ( 1.0 * R387) + ( 1.0 * R389) + ( 1.0 * R391) + ( 1.0 * R393) + ( 1.0 * R395) + ( 1.0 * R397) + (-1.0 * R398))

# Species:   id = cytoplasm_RNA_InR, name = cytoplasm_RNA_InR, affected by kineticLaw

par cytopl_23=0.0
aux cytopl_23=cytopl_23
dcytopl_23/dt=(1/(cytoplasm))*(( 1.0 * R398) + (-1.0 * R399))

# Species:   id = nucleus_RNA_SOD2, name = nucleus_RNA_SOD2, affected by kineticLaw

par nucleu_17=0.0
aux nucleu_17=nucleu_17
dnucleu_17/dt=(1/(nucleus))*(( 1.0 * R366) + ( 1.0 * R368) + ( 1.0 * R370) + ( 1.0 * R372) + ( 1.0 * R374) + ( 1.0 * R376) + ( 1.0 * R378) + ( 1.0 * R380) + ( 1.0 * R382) + ( 1.0 * R384) + ( 1.0 * R386) + ( 1.0 * R388) + ( 1.0 * R390) + ( 1.0 * R392) + ( 1.0 * R394) + ( 1.0 * R396) + ( 1.0 * R402) + (-1.0 * R403))

# Species:   id = cytoplasm_RNA_SOD2, name = cytoplasm_RNA_SOD2, affected by kineticLaw

par cytopl_24=0.0
aux cytopl_24=cytopl_24
dcytopl_24/dt=(1/(cytoplasm))*(( 1.0 * R403) + (-1.0 * R404))

# Species:   id = E2F1, name = E2F1
# Warning species is not changed by either rules or reactions

par E2F1=300.0
aux E2F1=E2F1

# Species:   id = SGK, name = SGK
# Warning species is not changed by either rules or reactions

par SGK=0.0
aux SGK=SGK

# Species:   id = CDK2, name = CDK2
# Warning species is not changed by either rules or reactions

par CDK2=0.0
aux CDK2=CDK2

# Species:   id = AMPK, name = AMPK
# Warning species is not changed by either rules or reactions

par AMPK=0.0
aux AMPK=AMPK

# Species:   id = CBPP300, name = CBPP300
# Warning species is not changed by either rules or reactions

par CBPP300=10.0
aux CBPP300=CBPP300

# Species:   id = SIRT1, name = SIRT1
# Warning species is not changed by either rules or reactions

par SIRT1=1000.0
aux SIRT1=SIRT1

# Species:   id = E3, name = E3
# Warning species is not changed by either rules or reactions

par E3=0.0
aux E3=E3

# Species:   id = USP7, name = USP7
# Warning species is not changed by either rules or reactions

par USP7=1000.0
aux USP7=USP7

# Species:   id = SCF, name = SCF
# Warning species is not changed by either rules or reactions

par SCF=1000.0
aux SCF=SCF

# Species:   id = Proteasome, name = Proteasome
# Warning species is not changed by either rules or reactions

par Proteasom=1000.0
aux Proteasom=Proteasom

# event : event_1
event_1=if (t > 0) then (1.5) else (0.2)
global 1 {event_1 - 1.1} {Ins=500000}

# event : event_2
event_2=if (t >= 2785) then (1.5) else (0.2)
global 1 {event_2 - 1.1} {Ins=500000}

# event : event_3
event_3=if (t > 15) then (1.5) else (0.2)
global 1 {event_3 - 1.1} {Ins=0}

# event : event_4
event_4=if (t > 2800) then (1.5) else (0.2)
global 1 {event_4 - 1.1} {Ins=0}

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

