
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Mol2013 - Immune Signal Transduction in Leishmaniasis
#
# is http://identifiers.org/biomodels.db/MODEL1308080000
# is http://identifiers.org/biomodels.db/BIOMD0000000477
# isDescribedBy http://identifiers.org/pubmed/23994140
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# Compartment: id = mw0cba5a10_f303_4c95_aaf1_b6f942374d31, name = cytoplasm, constant
par mw0cba5a1=1.0

# Compartment: id = mwa5ac95a5_d135_4de0_bce2_093ac2c172db, name = nucleus, constant
par mwa5ac95a=1.0

# Reaction: id = mw56c6d2a8_5d66_4b27_841a_662ac710fac3, name = 1
# Local Parameter:   id =  mw826aae9f_9728_4bbb_a11b_60578912218b, name = k1
par mw826aae9=1.2


mw56c6d2a=mw826aae9*mw4d2e70a

# Reaction: id = mw2055093c_9534_4ee3_999e_dc4d7e0246cf, name = 2
# Local Parameter:   id =  mw6834a7ac_63c4_4741_b0fc_069c665f1de2, name = k2
par mw6834a7a=1.18


mw2055093=mw6834a7a*mw8cc67de

# Reaction: id = mw8d01ca0a_dc27_461f_a854_cede0c0697dd, name = 3
# Local Parameter:   id =  mw56211dd8_6a88_465e_bed2_f603bf8c5b52, name = k3
par mw56211dd=0.6

# Local Parameter:   id =  mw0733f43b_b430_40c4_8b93_1555a4bdbaa1, name = v3
par mw0733f43=0.6


mw8d01ca0=mw0733f43*mw6ee00a7/(mw56211dd+mw6ee00a7)

# Reaction: id = mwc021dbe5_8831_4239_b280_9dcfb2ce1101, name = 4
# Local Parameter:   id =  mwf89fc9a4_ad1e_4e59_8a06_4b8dc2cc84a7, name = v4
par mwf89fc9a=0.28

# Local Parameter:   id =  mwaad66a38_26d2_41fc_9261_79c57500a6d4, name = k4
par mwaad66a3=1.5


mwc021dbe=mwf89fc9a*mw6ee00a7/(mwaad66a3+mw6ee00a7)

# Reaction: id = mwc064fbe4_1c49_4130_b601_efefacd114e4, name = 5
# Local Parameter:   id =  mwbf5d43e3_e386_4b05_997d_4e70cbff9498, name = k5
par mwbf5d43e=0.15

# Local Parameter:   id =  mw5fdc2487_13a9_449a_b90c_95446ddf7f37, name = v5
par mw5fdc248=1.3


mwc064fbe=mw5fdc248*mw136c839/(mwbf5d43e+mw136c839)

# Reaction: id = mw57e0090c_072b_4494_bdf6_a005150e0f42, name = 6
# Local Parameter:   id =  mw9ac53fed_0388_4261_b457_030cd631fa0e, name = k6
par mw9ac53fe=0.1

# Local Parameter:   id =  mwd4bfd4cc_6fd4_4b3b_980d_547ce2740b7e, name = v6
par mwd4bfd4c=2.2


mw57e0090=mwd4bfd4c*mw7204ab7/(mw9ac53fe+mw7204ab7)

# Reaction: id = mwd78707fa_21d0_4f82_b3d1_a74ba6b8f727, name = 7
# Local Parameter:   id =  mwa68f7af3_30af_4fa0_9290_9e005c875763, name = k7
par mwa68f7af=1.4


mwd78707f=mwa68f7af*mw6939cef

# Reaction: id = mw065ddcfd_fe93_45f6_9ad4_a5aa4529aad4, name = 8
# Local Parameter:   id =  mwa7160f91_3c68_402a_b3bd_acd8490c5d2d, name = k8
par mwa7160f9=0.56

# Local Parameter:   id =  mw2b6193d2_d588_46b7_8463_ce7bc30e1575, name = v8
par mw2b6193d=1.3


mw065ddcf=mw2b6193d*mw2dc7305/(mwa7160f9+mw2dc7305)

# Reaction: id = mwc23385ec_434f_4f84_897b_fdb26e2fc8c9, name = 9
# Local Parameter:   id =  mw31c3bf7d_10cd_412a_9a76_0fb66845c18d, name = v9
par mw31c3bf7=0.6

# Local Parameter:   id =  mw37ac6d2c_1be9_4998_a9c5_8761d3e0ba0f, name = k9
par mw37ac6d2=0.2


mwc23385e=mw31c3bf7*mwf8cfed1/(mw37ac6d2+mwf8cfed1)

# Reaction: id = mw4dded01e_6e25_4d1e_aa54_62db26069cad, name = 10
# Local Parameter:   id =  mw8adff9cb_4657_413f_a2bd_100d4aa53076, name = v10
par mw8adff9c=0.98

# Local Parameter:   id =  mwc9cf88fa_c525_4372_80e1_c72b1cc758f1, name = k10
par mwc9cf88f=0.15


mw4dded01=mw8adff9c*mw702be69/(mwc9cf88f+mw702be69)

# Reaction: id = mwef3506d1_e875_48e5_8c0a_4ffebdcd0f32, name = 11
# Local Parameter:   id =  mwafa60fbe_9272_468d_94e7_b82b985f938c, name = k11
par mwafa60fb=0.61


mwef3506d=mwafa60fb*mwbee1163

# Reaction: id = mwc4a3a397_b069_48dc_9f2b_411ca1448d98, name = 12
# Local Parameter:   id =  mw1a1570ff_e786_473f_860b_2e7694acfcc2, name = v12
par mw1a1570f=1.14

# Local Parameter:   id =  mwf88d190e_a505_4f7e_ac8d_e43997c74b9c, name = k12
par mwf88d190=0.62


mwc4a3a39=mw1a1570f*mwd9e7a9b/(mwf88d190+mwd9e7a9b)

# Reaction: id = mwa502f05a_b689_4ad9_855e_90ae77824ba0, name = 13
# Local Parameter:   id =  mw2b1ea101_d4a1_42e9_a70f_cb8026911ed5, name = k13
par mw2b1ea10=0.08

# Local Parameter:   id =  mw9d622ba3_b43b_4101_bef8_c964c2f158a0, name = v13
par mw9d622ba=0.99


mwa502f05=mw9d622ba*mw6ee00a7/(mw2b1ea10+mw6ee00a7)

# Reaction: id = mw01a7e271_19c9_40a0_bb62_505bad155195, name = 14
# Local Parameter:   id =  mw107b07de_5145_436d_9fd7_e4e2103106d7, name = v14
par mw107b07d=1.2

# Local Parameter:   id =  mwd51a525a_5fea_42c6_a8fd_40429ee627cf, name = k14
par mwd51a525=0.02


mw01a7e27=mw107b07d*mw805b55d/(mwd51a525+mw805b55d)

# Reaction: id = mw7db85cdd_f1ac_4e07_9a35_809b7ab77aec, name = 15
# Local Parameter:   id =  mw286a7792_09c4_443e_98f4_a68f66a1f380, name = k15
par mw286a779=1.0


mw7db85cd=mw286a779*mwb71eb53

# Reaction: id = mw8917d625_0012_45c7_aede_8a528181d93d, name = 16
# Local Parameter:   id =  mw2a0659f9_eab8_4ada_8f82_23068b9986eb, name = v16
par mw2a0659f=1.5

# Local Parameter:   id =  mw13b39522_0751_4041_a78e_871cd5d81592, name = k16
par mw13b3952=0.2


mw8917d62=mw2a0659f*mw97345a6/(mw13b3952+mw97345a6)

# Reaction: id = mwd67b18a5_bb79_4581_8afa_9bc34a4fe139, name = 17
# Local Parameter:   id =  mw6e048357_d06d_4522_bb79_a91c4f53bda7, name = k17
par mw6e04835=0.6


mwd67b18a=mw6e04835*mwa5d6f7e

# Reaction: id = mwe28d9fcb_8170_4cbd_b3cc_564c18d65fcc, name = 18
# Local Parameter:   id =  mw4c0ee457_fb1c_48fa_a0b7_ff10d632d1e0, name = k18
par mw4c0ee45=2.0


mwe28d9fc=mw4c0ee45*mw4079e13

# Reaction: id = mw215b36f5_a3a1_44bf_b976_c52cb6daddb8, name = 19
# Local Parameter:   id =  mw5aa11378_86b4_45f6_aea1_27208e47e559, name = k19
par mw5aa1137=0.72


mw215b36f=mw5aa1137*mwe5fade7

# Reaction: id = mw15c83962_bdf0_43f0_b5df_9ab227af0595, name = 20
# Local Parameter:   id =  mw36ee8f87_d06f_4d16_ac13_f4075b56c6f4, name = k20
par mw36ee8f8=0.55


mw15c8396=mw36ee8f8*mw262497e

# Reaction: id = mwa3c7ed09_4e90_417b_a301_2a0b4ac2e1d5, name = 21
# Local Parameter:   id =  mwf0b9efb6_f0e9_4704_b5b1_dec2a68c3321, name = k21
par mwf0b9efb=0.48


mwa3c7ed0=mwf0b9efb*mw8bffd47

# Reaction: id = mwb6a1c4c1_677e_41a0_8608_c2d1f9037a16, name = 22
# Local Parameter:   id =  mwf5a1613b_fb22_43b0_b95a_2c18ecbcedd8, name = v22
par mwf5a1613=0.5

# Local Parameter:   id =  mw85a8c1da_f29f_4dcf_a515_bf9f9921240b, name = k22
par mw85a8c1d=0.2


mwb6a1c4c=mwf5a1613*mw308b75e/(mw85a8c1d+mw308b75e)

# Reaction: id = mwa23e3682_2d67_49cf_913c_52aa41335371, name = 23
# Local Parameter:   id =  mw1c3fcb1f_0b90_46dd_b13a_2950fb9e18ae, name = v23
par mw1c3fcb1=0.2

# Local Parameter:   id =  mw8a65d230_2abb_478d_ab8a_6719d972483d, name = k23
par mw8a65d23=0.01


mwa23e368=mw1c3fcb1*mw308b75e/(mw8a65d23+mw308b75e)

# Reaction: id = mw49bb8edf_f533_4abe_b55e_468a1f3b296e, name = 24
# Local Parameter:   id =  mw5990b7f9_7d15_4306_9047_6237ecf066ca, name = v24
par mw5990b7f=0.9

# Local Parameter:   id =  mwc29ba5b1_b0e7_4fa1_9e46_a4c0bdbdacc4, name = k24
par mwc29ba5b=0.2


mw49bb8ed=mw5990b7f*mw75377e1/(mwc29ba5b+mw75377e1)

# Reaction: id = mwe2722be2_db07_4c1d_879e_272e1518fb8e, name = 25
# Local Parameter:   id =  mwd2f6a3b7_5a74_4d77_b40c_1a6713b98554, name = k25
par mwd2f6a3b=0.42


mwe2722be=mwd2f6a3b*mw67d0cf0

# Reaction: id = mw573abe13_d3cc_4f5a_a886_029e2d5da8df, name = 26
# Local Parameter:   id =  mw75017b10_387d_43e4_9fb1_fed7ce6bd490, name = v26
par mw75017b1=0.3

# Local Parameter:   id =  mw251bb80a_5527_4b9c_9834_99556d4e824a, name = k26
par mw251bb80=0.01


mw573abe1=mw75017b1*mw308b75e/(mw251bb80+mw308b75e)

# Reaction: id = mw0649b87c_cb39_43b6_820a_0f21572f784e, name = 27
# Local Parameter:   id =  mw6ac279a2_23fe_4e48_a910_2a94ef61244c, name = v27
par mw6ac279a=0.1

# Local Parameter:   id =  mw0e1c63a9_8b8a_4ec7_9608_0059208d992f, name = k27
par mw0e1c63a=0.01


mw0649b87=mw6ac279a*mw308b75e/(mw0e1c63a+mw308b75e)

# Reaction: id = mw17bf22e9_37fd_42b6_b648_d2ae38fbc805, name = 28
# Local Parameter:   id =  mwcad6928f_259d_4125_987e_977e0c40ef7d, name = v28
par mwcad6928=1.5

# Local Parameter:   id =  mw1670fb0f_e301_4b7a_93d4_35fe7f504e92, name = k28
par mw1670fb0=0.03


mw17bf22e=mwcad6928*mw46ee629/(mw1670fb0+mw46ee629)

# Reaction: id = mw75054b4a_cf66_4bfe_bda0_44b88f715532, name = 29
# Local Parameter:   id =  mw1a4dcdaf_ff4b_41a9_ac1d_79fd2d942260, name = k29
par mw1a4dcda=0.6


mw75054b4=mw1a4dcda*mw0be0d19

# Reaction: id = mw4e1795dc_c8de_4708_ba0d_52d69fae724e, name = 30
# Local Parameter:   id =  mwb3751ef8_2226_4ec3_9ac9_f92f5771a1a4, name = v30
par mwb3751ef=2.0E-4

# Local Parameter:   id =  mw244e346b_4442_45db_864e_0442ceca94d1, name = k30
par mw244e346=0.5


mw4e1795d=mwb3751ef*mw280197c/(mw244e346+mw280197c)

# Reaction: id = mw51210768_0597_4bf6_a013_49896f03c73d, name = 31
# Local Parameter:   id =  mw18e075a4_dde4_42be_9315_e0e90d461b99, name = v31
par mw18e075a=0.6

# Local Parameter:   id =  mw6d4dc2a5_6fe8_4d80_93f4_b9f438b6eb0e, name = k31
par mw6d4dc2a=1.0


mw5121076=mw18e075a*mw9a5baf6/(mw6d4dc2a+mw9a5baf6)

# Reaction: id = mw05368c46_8a41_4609_b904_25219691464b, name = 32
# Local Parameter:   id =  mweaee0b65_7c40_4c9e_bd70_c5454eeb41fa, name = v32
par mweaee0b6=0.9

# Local Parameter:   id =  mw84020ddc_e419_4aa4_ab12_e84989ad461d, name = k32
par mw84020dd=0.3


mw05368c4=mweaee0b6*mw05469f5/(mw84020dd+mw05469f5)

# Reaction: id = mwb86f53d9_af3e_499e_9c41_7aaf353919e0, name = 33
# Local Parameter:   id =  mw9d566811_669e_4b95_8452_c4853f54a2de, name = k33
par mw9d56681=0.35


mwb86f53d=mw9d56681*mwf20834c

# Reaction: id = mw1a0f986a_5f18_4312_bf3a_9e79ae4e7f36, name = 34
# Local Parameter:   id =  mw99befd62_975f_49e1_bfaf_22a482ce44ea, name = v34
par mw99befd6=1.2

# Local Parameter:   id =  mwb38e4258_82d9_4b48_8059_eccf9fd6f8e3, name = k34
par mwb38e425=0.2


mw1a0f986=mw99befd6*mwb4633da/(mwb38e425+mwb4633da)

# Reaction: id = mw17b927e1_56f3_4e65_a482_b8f190af70aa, name = 35
# Local Parameter:   id =  mw78df1f4c_2a96_4d8f_a009_c19ba0ec406a, name = v35
par mw78df1f4=0.2

# Local Parameter:   id =  mw6a74caa7_9d44_449b_854b_c1678b36ac1d, name = k35
par mw6a74caa=0.8


mw17b927e=mw78df1f4*mw280197c/(mw6a74caa+mw280197c)

# Reaction: id = mw0549a0ba_63b4_4a0e_8506_1c379b878280, name = 36
# Local Parameter:   id =  mw3690266b_c916_4ba1_a98a_b589dc75c1cd, name = v36
par mw3690266=0.8

# Local Parameter:   id =  mwb69d510c_dcde_4bfb_9e4a_89954f6a7bf5, name = k36
par mwb69d510=1.5


mw0549a0b=mw3690266*mw9bb804c/(mwb69d510+mw9bb804c)

# Reaction: id = mw7ec21bdc_6e00_410d_8524_046f820d0921, name = 37
# Local Parameter:   id =  mwb336e12c_0e62_4fff_94c0_2771b1a19065, name = k37
par mwb336e12=0.2


mw7ec21bd=mwb336e12*mw64453fc

# Reaction: id = mwbc35988a_c061_4dff_a2b0_09fa8f45d873, name = 38
# Local Parameter:   id =  mw661c7759_2bd3_4c93_bb0a_823bb37b9820, name = k38
par mw661c775=0.299


mwbc35988=mw661c775*mw280197c

# Reaction: id = mwffb70cc8_3371_416f_b374_c518884ba240, name = 39
# Local Parameter:   id =  mw883852ed_c433_4dec_baa0_386309fc085c, name = v39
par mw883852e=0.24

# Local Parameter:   id =  mw6069097b_159a_4bcf_a591_e496d06cf0a9, name = k39
par mw6069097=1.2


mwffb70cc=mw883852e*mw323a57b/(mw6069097+mw323a57b)

# Reaction: id = mwcf26ace1_325c_4287_81d4_382e2f2beb1c, name = 40
# Local Parameter:   id =  mw78a1e67e_883c_497f_86a6_f85da783010e, name = v40
par mw78a1e67=0.2

# Local Parameter:   id =  mw5d6cf9c6_4dc0_4fe6_9afc_da397fe896b2, name = k40
par mw5d6cf9c=1.5


mwcf26ace=mw78a1e67*mw173d858/(mw5d6cf9c+mw173d858)

# Reaction: id = mwa52ff158_9e98_454a_a98e_3bc52e4aa39f, name = 41
# Local Parameter:   id =  mw26de6022_cc14_484b_a172_db4173a1ccaa, name = v41
par mw26de602=0.7

# Local Parameter:   id =  mw7e75e47c_6d88_49fb_a9c4_9154f12cc4d5, name = k41
par mw7e75e47=1.5


mwa52ff15=mw26de602*mw32c21c3/(mw7e75e47+mw32c21c3)

# Reaction: id = mw427812f2_a2ec_476c_8359_96749d8910f4, name = 42
# Local Parameter:   id =  mw2f1f65d1_5633_4625_b2b7_0eb267eac293, name = v42
par mw2f1f65d=0.4

# Local Parameter:   id =  mw0b0869f4_26bb_4d13_9124_b2c1b28e3ae1, name = k42
par mw0b0869f=1.5


mw427812f=mw2f1f65d*mw173d858/(mw0b0869f+mw173d858)

# Reaction: id = mw72aabd27_658a_45ef_87b2_cec59e2a548a, name = 43
# Local Parameter:   id =  mw234b354b_eb7b_4af6_a678_9339f6b5eb8d, name = v43
par mw234b354=0.01

# Local Parameter:   id =  mw18baeb4d_ad18_4c22_95c4_2ada0f618c65, name = k43
par mw18baeb4=1.8


mw72aabd2=mw234b354*mw280197c/(mw18baeb4+mw280197c)

# Reaction: id = mw1498886c_3fb6_44f5_ae32_7a8948030948, name = 44
# Local Parameter:   id =  mw66285193_607e_42b6_b726_c2409a2ce563, name = v44
par mw6628519=1.0

# Local Parameter:   id =  mwa4c28075_8524_4874_aee5_c38231bfbaae, name = k44
par mwa4c2807=1.5


mw1498886=mw6628519*mw3832f27/(mwa4c2807+mw3832f27)

# Reaction: id = mwdcd61085_a433_4362_a836_938c7ae43ded, name = 45
# Local Parameter:   id =  mw9a480703_d4bb_4de8_8975_13a18205ce53, name = k45
par mw9a48070=0.19


mwdcd6108=mw9a48070*mw1365114

# Reaction: id = mwe820c3d2_bbc1_4211_9818_1e515a583b8a, name = 46
# Local Parameter:   id =  mwbad3f510_fbca_4aa7_a4c2_5c1b47297802, name = v46
par mwbad3f51=2.35

# Local Parameter:   id =  mw4d5fd70d_8603_4056_adfa_5af26d657455, name = n46
par mw4d5fd70=1.0

# Local Parameter:   id =  mw2fa0d3fe_4e99_49d2_a339_089198589a1e, name = kp47
par mw2fa0d3f=0.43


mwe820c3d=mwbad3f51*mw8a35848^mw4d5fd70/(mw2fa0d3f+mw8a35848^mw4d5fd70)

# Reaction: id = mwd95fbca0_6234_4c19_81ea_5e74b558e2f1, name = 47
# Local Parameter:   id =  mw2b132eeb_ce2a_4a53_8c22_c102ebd2edb9, name = k47
par mw2b132ee=1.1


mwd95fbca=mw2b132ee*mwc844b7c

# Reaction: id = mw36e7aae0_ea29_437f_a9c0_57981e85b29e, name = 48
# Local Parameter:   id =  mwdeab2870_570e_4b2c_b73d_84c1ad8c2262, name = v48
par mwdeab287=1.0

# Local Parameter:   id =  mw4945db3d_e20c_4870_b96b_6fb98c4b12f6, name = k48
par mw4945db3=1.0


mw36e7aae=mwdeab287*mwb4633da/(mw4945db3+mwb4633da)

# Reaction: id = mwe6aec30e_5e5f_4427_bda2_9c7edc4d5547, name = 49
# Local Parameter:   id =  mw0f1ee85e_95a3_42c7_94ae_71f36061aaf0, name = v49
par mw0f1ee85=1.0

# Local Parameter:   id =  mw933afd80_4eff_4c6c_967b_d15b2244e55d, name = k49
par mw933afd8=1.0


mwe6aec30=mw0f1ee85*mwb4633da/(mw933afd8+mwb4633da)

# Species:   id = mw4d2e70a7_f499_461d_ae18_bc53b365b091, name = TNF, affected by kineticLaw

par mw4d2e70a=1.5
aux mw4d2e70a=mw4d2e70a
dmw4d2e70a/dt=(-1.0 * mw56c6d2a) + ( 1.0 * mwd95fbca)

# Species:   id = mw8cc67de0_64e6_428f_ab09_4c2825cc172c, name = TNFR1, affected by kineticLaw

par mw8cc67de=1.3
aux mw8cc67de=mw8cc67de
dmw8cc67de/dt=( 1.0 * mw56c6d2a) + (-1.0 * mw2055093)

# Species:   id = mw6ee00a71_ab68_454b_b1cd_60c1ebd19cfa, name = TRADD_TRAF2_RIP, affected by kineticLaw

par mw6ee00a7=1.3
aux mw6ee00a7=mw6ee00a7
dmw6ee00a7/dt=( 1.0 * mw2055093) + (-1.0 * mw8d01ca0) + (-1.0 * mwc021dbe) + (-1.0 * mwa502f05)

# Species:   id = mw2dc73059_a841_48d5_b4bd_3ac24d94c42e, name = IkB, affected by kineticLaw

par mw2dc7305=0.8
aux mw2dc7305=mw2dc7305
dmw2dc7305/dt=( 1.0 * mwc064fbe) + (-1.0 * mw065ddcf)

# Species:   id = mw136c8391_14f4_4a28_83a3_35cc74a2e040, name = NIK, affected by kineticLaw

par mw136c839=1.5
aux mw136c839=mw136c839
dmw136c839/dt=( 1.0 * mw8d01ca0) + (-1.0 * mwc064fbe) + ( 1.0 * mwb6a1c4c)

# Species:   id = mw7204ab72_2ee5_4b92_b420_2583dacc4343, name = IkK_NFkB, affected by kineticLaw

par mw7204ab7=1.4
aux mw7204ab7=mw7204ab7
dmw7204ab7/dt=(-1.0 * mw57e0090) + ( 1.0 * mw065ddcf) + ( 1.0 * mw1a0f986)

# Species:   id = mw6939cefe_e7ff_4a3f_b45b_a9234d1b5573, name = NFkB, affected by kineticLaw

par mw6939cef=1.2
aux mw6939cef=mw6939cef
dmw6939cef/dt=( 1.0 * mw57e0090) + (-1.0 * mwd78707f)

# Species:   id = mwf8cfed1b_6fcf_4cba_bc30_b44490814a7a, name = MEKK1, affected by kineticLaw

par mwf8cfed1=1.4
aux mwf8cfed1=mwf8cfed1
dmwf8cfed1/dt=( 1.0 * mwc021dbe) + (-1.0 * mwc23385e)

# Species:   id = mw702be69a_eb4f_425e_87c7_ef7d85254536, name = MKK4/7, affected by kineticLaw

par mw702be69=1.2
aux mw702be69=mw702be69
dmw702be69/dt=( 1.0 * mwc23385e) + (-1.0 * mw4dded01) + ( 1.0 * mw573abe1) + ( 1.0 * mw427812f)

# Species:   id = mwbee11634_55df_4a3f_998a_634dfaf46fd7, name = JNK, affected by kineticLaw

par mwbee1163=1.2
aux mwbee1163=mwbee1163
dmwbee1163/dt=( 1.0 * mw4dded01) + (-1.0 * mwef3506d)

# Species:   id = mw805b55df_cc91_4227_bb52_930e961b682c, name = ASK, affected by kineticLaw

par mw805b55d=1.5
aux mw805b55d=mw805b55d
dmw805b55d/dt=( 1.0 * mwa502f05) + (-1.0 * mw01a7e27)

# Species:   id = mwb71eb539_dca6_47ab_8df5_430d84af0bfb, name = p38, affected by kineticLaw

par mwb71eb53=0.9
aux mwb71eb53=mwb71eb53
dmwb71eb53/dt=(-1.0 * mw7db85cd) + ( 1.0 * mw17bf22e)

# Species:   id = mwa5d6f7e4_dc4d_4931_91ce_1e78e7b2f195, name = LPG, affected by kineticLaw

par mwa5d6f7e=1.5
aux mwa5d6f7e=mwa5d6f7e
dmwa5d6f7e/dt=(-1.0 * mwd67b18a)

# Species:   id = mw4079e13c_446e_4aa2_9ec4_233583833d02, name = CD14-TLR, affected by kineticLaw

par mw4079e13=1.5
aux mw4079e13=mw4079e13
dmw4079e13/dt=( 1.0 * mwd67b18a) + (-1.0 * mwe28d9fc)

# Species:   id = mwe5fade7d_1715_4bb1_843f_923da8ecddf1, name = MyD88, affected by kineticLaw

par mwe5fade7=0.85
aux mwe5fade7=mwe5fade7
dmwe5fade7/dt=( 1.0 * mwe28d9fc) + (-1.0 * mw215b36f)

# Species:   id = mw262497ec_3d54_4367_bfe3_76a9c57497cb, name = IRAK1/4, affected by kineticLaw

par mw262497e=1.0
aux mw262497e=mw262497e
dmw262497e/dt=( 1.0 * mw215b36f) + (-1.0 * mw15c8396)

# Species:   id = mw8bffd47e_34de_4738_81bf_7a39a40b3ae8, name = TRAF6, affected by kineticLaw

par mw8bffd47=1.1
aux mw8bffd47=mw8bffd47
dmw8bffd47/dt=( 1.0 * mw15c8396) + (-1.0 * mwa3c7ed0)

# Species:   id = mw308b75ec_28b7_4d97_92e2_51a8ce04116a, name = TAB2_TAK1_TAB1, affected by kineticLaw

par mw308b75e=1.3
aux mw308b75e=mw308b75e
dmw308b75e/dt=( 1.0 * mwa3c7ed0) + (-1.0 * mwb6a1c4c) + (-1.0 * mwa23e368) + (-1.0 * mw573abe1) + (-1.0 * mw0649b87)

# Species:   id = mw75377e12_e23d_44b3_9823_5fac9b23edc8, name = MKK1/2, affected by kineticLaw

par mw75377e1=1.1
aux mw75377e1=mw75377e1
dmw75377e1/dt=( 1.0 * mwa23e368) + (-1.0 * mw49bb8ed) + ( 1.0 * mwa52ff15)

# Species:   id = mw67d0cf04_d6a7_4725_a869_098a96a3350d, name = ERK1/2, affected by kineticLaw

par mw67d0cf0=0.8
aux mw67d0cf0=mw67d0cf0
dmw67d0cf0/dt=( 1.0 * mw49bb8ed) + (-1.0 * mwe2722be)

# Species:   id = mw46ee629a_dd6b_4163_9da1_2614bb1d74bc, name = MKK3/6, affected by kineticLaw

par mw46ee629=1.5
aux mw46ee629=mw46ee629
dmw46ee629/dt=( 1.0 * mw01a7e27) + ( 1.0 * mw0649b87) + (-1.0 * mw17bf22e)

# Species:   id = mw0be0d193_fd6b_4824_8928_dbade8b5c99c, name = EGF, affected by kineticLaw

par mw0be0d19=1.6
aux mw0be0d19=mw0be0d19
dmw0be0d19/dt=(-1.0 * mw75054b4)

# Species:   id = mw280197c8_98de_43f0_bf01_0f332a1ab689, name = EGFR, affected by kineticLaw

par mw280197c=1.3
aux mw280197c=mw280197c
dmw280197c/dt=( 1.0 * mw75054b4) + (-1.0 * mw4e1795d) + (-1.0 * mw17b927e) + (-1.0 * mwbc35988) + (-1.0 * mw72aabd2)

# Species:   id = mw9a5baf6d_0285_4ad3_9499_059c553d9cf6, name = PLC gamma, affected by kineticLaw

par mw9a5baf6=1.6
aux mw9a5baf6=mw9a5baf6
dmw9a5baf6/dt=( 1.0 * mw4e1795d) + (-1.0 * mw5121076)

# Species:   id = mw05469f51_73f7_4ba1_9f1a_bce5fea143c2, name = PIP2, affected by kineticLaw

par mw05469f5=1.45
aux mw05469f5=mw05469f5
dmw05469f5/dt=( 1.0 * mw5121076) + (-1.0 * mw05368c4)

# Species:   id = mwf20834c8_a115_460b_859c_4e3ca1ffd953, name = DAG, affected by kineticLaw

par mwf20834c=0.9
aux mwf20834c=mwf20834c
dmwf20834c/dt=( 1.0 * mw05368c4) + (-1.0 * mwb86f53d)

# Species:   id = mwb4633da9_f9d6_4ad8_a7e5_da075c830e17, name = PKC, affected by kineticLaw

par mwb4633da=1.5
aux mwb4633da=mwb4633da
dmwb4633da/dt=( 1.0 * mwb86f53d) + (-1.0 * mw1a0f986) + (-1.0 * mw36e7aae) + (-1.0 * mwe6aec30)

# Species:   id = mw9bb804c9_3e4e_4684_9f6b_4e6f6706a58e, name = PI3K, affected by kineticLaw

par mw9bb804c=1.6
aux mw9bb804c=mw9bb804c
dmw9bb804c/dt=( 1.0 * mw17b927e) + (-1.0 * mw0549a0b)

# Species:   id = mw64453fc5_a275_4bba_84f0_2af249b31514, name = Akt, affected by kineticLaw

par mw64453fc=1.2
aux mw64453fc=mw64453fc
dmw64453fc/dt=( 1.0 * mw0549a0b) + (-1.0 * mw7ec21bd)

# Species:   id = mw323a57b4_8e59_4116_9ad1_fe547b89c858, name = Shc/Grb2/Sos1, affected by kineticLaw

par mw323a57b=0.3
aux mw323a57b=mw323a57b
dmw323a57b/dt=( 1.0 * mwbc35988) + (-1.0 * mwffb70cc)

# Species:   id = mw173d8585_5817_4b4c_932a_cf7d673680ac, name = Ras, affected by kineticLaw

par mw173d858=1.2
aux mw173d858=mw173d858
dmw173d858/dt=( 1.0 * mwffb70cc) + (-1.0 * mwcf26ace) + (-1.0 * mw427812f) + ( 1.0 * mw36e7aae)

# Species:   id = mw32c21c39_237b_4d4c_bb5d_117cb30ce68a, name = Raf, affected by kineticLaw

par mw32c21c3=1.2
aux mw32c21c3=mw32c21c3
dmw32c21c3/dt=( 1.0 * mwcf26ace) + (-1.0 * mwa52ff15) + ( 1.0 * mwe6aec30)

# Species:   id = mw3832f277_aef2_4f1d_87af_abc2a3c1a7d5, name = JAK, affected by kineticLaw

par mw3832f27=1.6
aux mw3832f27=mw3832f27
dmw3832f27/dt=( 1.0 * mw72aabd2) + (-1.0 * mw1498886)

# Species:   id = mw13651143_feb5_49a5_adab_9105c2647446, name = STAT1/3, affected by kineticLaw

par mw1365114=1.1
aux mw1365114=mw1365114
dmw1365114/dt=( 1.0 * mw1498886) + (-1.0 * mwdcd6108)

# Species:   id = mw8a358487_b18b_42df_a646_cd75eb5bfcc2, name = NFkB, affected by kineticLaw

par mw8a35848=0.2
aux mw8a35848=mw8a35848
dmw8a35848/dt=( 1.0 * mwd78707f) + (-1.0 * mwe820c3d)

# Species:   id = mwd9e7a9b9_6f1b_4bbc_afa5_6cb192b62ce8, name = JNK, affected by kineticLaw

par mwd9e7a9b=0.6
aux mwd9e7a9b=mwd9e7a9b
dmwd9e7a9b/dt=( 1.0 * mwef3506d) + (-1.0 * mwc4a3a39)

# Species:   id = mwfed5a135_c91b_4d20_91b2_3a61723544dd, name = cjun, affected by kineticLaw

par mwfed5a13=0.91
aux mwfed5a13=mwfed5a13
dmwfed5a13/dt=( 1.0 * mwc4a3a39)

# Species:   id = mw97345a67_a8e8_42aa_8e62_69e9d2b6cf45, name = p38, affected by kineticLaw

par mw97345a6=0.8
aux mw97345a6=mw97345a6
dmw97345a6/dt=( 1.0 * mw7db85cd) + (-1.0 * mw8917d62)

# Species:   id = mw5c67812a_17f5_43cf_8acb_9bde272c1911, name = cfos, affected by kineticLaw

par mw5c67812=0.5
aux mw5c67812=mw5c67812
dmw5c67812/dt=( 1.0 * mw8917d62)

# Species:   id = mw1f12e5bc_ebbc_4347_b6b7_5cd1740ac69a, name = ERK1/2, affected by kineticLaw

par mw1f12e5b=0.0
aux mw1f12e5b=mw1f12e5b
dmw1f12e5b/dt=( 1.0 * mwe2722be)

# Species:   id = mwda4716f1_ae00_4149_aec3_12531380425a, name = Akt, affected by kineticLaw

par mwda4716f=0.0
aux mwda4716f=mwda4716f
dmwda4716f/dt=( 1.0 * mw7ec21bd)

# Species:   id = mw17ae9adc_54ab_407b_a34d_8413a3a10cc6, name = STAT1/3, affected by kineticLaw

par mw17ae9ad=0.0
aux mw17ae9ad=mw17ae9ad
dmw17ae9ad/dt=( 1.0 * mwdcd6108)

# Species:   id = mwc844b7c0_98f5_4d0d_8f0c_00dfe8b54e6d, name = TNF, affected by kineticLaw

par mwc844b7c=0.0
aux mwc844b7c=mwc844b7c
dmwc844b7c/dt=( 1.0 * mwe820c3d) + (-1.0 * mwd95fbca)

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

