
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Kerkhoven2013 - Glycolysis and Pentose Phosphate Pathway in T.brucei - MODEL D in fructose medium (with ATP:ADP antiporter)
#
# is http://identifiers.org/biomodels.db/MODEL1401310003
# is http://identifiers.org/biomodels.db/BIOMD0000000516
# isDescribedBy http://identifiers.org/pubmed/24339766
# isDerivedFrom http://identifiers.org/biomodels.db/BIOMD0000000511
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = vAK, name = vAK
vAK(ADP,AMP,ATP,k1,k2)=(k1*ADP^2-AMP*ATP*k2)


# FunctionDefinition id = v2sub2prod, name = v2sub2prod
v2sub2pro(Vfmax,Keq,S1,Ks1,S2,Ks2,P1,Kp1,P2,Kp2)=(Vfmax*S1*S2*(1-P1*P2/(Keq*S1*S2))/(Ks1*Ks2*(1+S1/Ks1+P1/Kp1)*(1+S2/Ks2+P2/Kp2)))


# FunctionDefinition id = v1sub, name = v1sub
v1sub(Vfmax,S,Ks)=(Vfmax*S/(Ks*(1+S/Ks)))


# FunctionDefinition id = v2sub2prod_compinhib, name = v2sub2prod_compinhib
v2sub2p_1(Vfmax,Keq,S1,Ks1,S2,Ks2,P1,Kp1,P2,Kp2,I1,Ki1,I2,Ki2)=(Vfmax*S1*S2*(1-P1*P2/(Keq*S1*S2))/(Ks1*Ks2*(1+S1/Ks1+P1/Kp1)*(1+S2/Ks2+P2/Kp2+I1/Ki1+I2/Ki2)))


# FunctionDefinition id = mass_action_rev, name = mass_action_rev
mass_acti(k1,S,k2,P)=(k1*S-k2*P)


# FunctionDefinition id = v1sub1prod, name = v1sub1prod
v1sub1pro(Vfmax,Keq,S,Ks,P,Kp)=(Vfmax*S*(1-P/(Keq*S))/(Ks*(1+S/Ks+P/Kp)))


# FunctionDefinition id = mass_action_irrev, name = mass_action_irrev
mass_ac_1(k,S)=(k*S)


# Compartment: id = cytosol, name = cytosol, constant
par cytosol=5.4549

# Compartment: id = glycosome, name = glycosome, constant
par glycosome=0.2451

# Compartment: id = default, name = default, constant
par default=1.0

# Reaction: id = TPI_g, name = TPI_g
# Local Parameter:   id =  TPI_g_Vmax, name = TPI_g_Vmax
par TPI_g_Vma=999.3

# Local Parameter:   id =  TPI_g_Keq, name = TPI_g_Keq
par TPI_g_Keq=0.046

# Local Parameter:   id =  TPI_g_KmDHAP, name = TPI_g_KmDHAP
par TPI_g_KmD=1.2

# Local Parameter:   id =  TPI_g_KmGA3P, name = TPI_g_KmGA3P
par TPI_g_KmG=0.25


TPI_g=v1sub1pro(TPI_g_Vma, TPI_g_Keq, DHAP_g, TPI_g_KmD, GA3P_g, TPI_g_KmG)

# Reaction: id = PYK_c, name = PYK_c
# Local Parameter:   id =  PYK_c_Vmax, name = PYK_c_Vmax
par PYK_c_Vma=1020.0

# Local Parameter:   id =  PYK_c_KmPEP, name = PYK_c_KmPEP
par PYK_c_KmP=0.34

# Local Parameter:   id =  PYK_c_KiATP, name = PYK_c_KiATP
par PYK_c_KiA=0.57

# Local Parameter:   id =  PYK_c_KiADP, name = PYK_c_KiADP
par PYK_c_K_1=0.64

# Local Parameter:   id =  PYK_c_n, name = PYK_c_n
par PYK_c_n=2.5

# Local Parameter:   id =  PYK_c_KmADP, name = PYK_c_KmADP
par PYK_c_KmA=0.114

# Local Parameter:   id =  PYK_c_Keq, name = PYK_c_Keq
par PYK_c_Keq=10800.0

# Local Parameter:   id =  PYK_c_KmPyr, name = PYK_c_KmPyr
par PYK_c_K_2=50.0

# Local Parameter:   id =  PYK_c_KmATP, name = PYK_c_KmATP
par PYK_c_K_3=15.0


PYK_c=PYK_c_Vma*ADP_c*(1-Pyr_c*ATP_c/(PYK_c_Keq*PEP_c*ADP_c))*(PEP_c/(PYK_c_KmP*(1+ADP_c/PYK_c_K_1+ATP_c/PYK_c_KiA)))^PYK_c_n/(PYK_c_KmA*(1+(PEP_c/(PYK_c_KmP*(1+ADP_c/PYK_c_K_1+ATP_c/PYK_c_KiA)))^PYK_c_n+Pyr_c/PYK_c_K_2)*(1+ADP_c/PYK_c_KmA+ATP_c/PYK_c_K_3))

# Reaction: id = PFK_g, name = PFK_g
# Local Parameter:   id =  PFK_g_Vmax, name = PFK_g_Vmax
par PFK_g_Vma=1708.0

# Local Parameter:   id =  PFK_g_Ki1, name = PFK_g_Ki1
par PFK_g_Ki1=15.8

# Local Parameter:   id =  PFK_g_KmFru6P, name = PFK_g_KmFru6P
par PFK_g_KmF=0.999

# Local Parameter:   id =  PFK_g_KmATP, name = PFK_g_KmATP
par PFK_g_KmA=0.0648

# Local Parameter:   id =  PFK_g_Keq, name = PFK_g_Keq
par PFK_g_Keq=1035.0

# Local Parameter:   id =  PFK_g_KsATP, name = PFK_g_KsATP
par PFK_g_KsA=0.0393

# Local Parameter:   id =  PFK_g_KmADP, name = PFK_g_KmADP
par PFK_g_K_1=1.0

# Local Parameter:   id =  PFK_g_Ki2, name = PFK_g_Ki2
par PFK_g_Ki2=10.7


PFK_g=PFK_g_Vma*PFK_g_Ki1*Fru6P_g*ATP_g*(1-Fru16BP_g*ADP_g/(PFK_g_Keq*Fru6P_g*ATP_g))/(PFK_g_KmF*PFK_g_KmA*(Fru16BP_g+PFK_g_Ki1)*(PFK_g_KsA/PFK_g_KmA+Fru6P_g/PFK_g_KmF+ATP_g/PFK_g_KmA+ADP_g/PFK_g_K_1+Fru16BP_g*ADP_g/(PFK_g_K_1*PFK_g_Ki2)+Fru6P_g*ATP_g/(PFK_g_KmF*PFK_g_KmA)))

# Reaction: id = G6PDH_g, name = G6PDH_g
# Local Parameter:   id =  G6PDH_g_Vmax, name = G6PDH_g_Vmax
par G6PDH_g_V=8.4

# Local Parameter:   id =  G6PDH_g_Keq, name = G6PDH_g_Keq
par G6PDH_g_K=5.02

# Local Parameter:   id =  G6PDH_g_KmGlc6P, name = G6PDH_g_KmGlc6P
par G6PDH_g_1=0.058

# Local Parameter:   id =  G6PDH_g_KmNADP, name = G6PDH_g_KmNADP
par G6PDH_g_2=0.0094

# Local Parameter:   id =  G6PDH_g_Km6PGL, name = G6PDH_g_Km6PGL
par G6PDH_g_3=0.04

# Local Parameter:   id =  G6PDH_g_KmNADPH, name = G6PDH_g_KmNADPH
par G6PDH_g_4=1.0E-4


G6PDH_g=v2sub2pro(G6PDH_g_V, G6PDH_g_K, Glc6P_g, G6PDH_g_1, NADP_g, G6PDH_g_2, _6PGL_g, G6PDH_g_3, NADPH_g, G6PDH_g_4)

# Reaction: id = PGAM_c, name = PGAM_c
# Local Parameter:   id =  PGAM_c_Vmax, name = PGAM_c_Vmax
par PGAM_c_Vm=225.0

# Local Parameter:   id =  PGAM_c_Keq, name = PGAM_c_Keq
par PGAM_c_Ke=0.17

# Local Parameter:   id =  PGAM_c_Km3PGA, name = PGAM_c_Km3PGA
par PGAM_c_Km=0.15

# Local Parameter:   id =  PGAM_c_Km2PGA, name = PGAM_c_Km2PGA
par PGAM_c__1=0.16


PGAM_c=v1sub1pro(PGAM_c_Vm, PGAM_c_Ke, _3PGA_c, PGAM_c_Km, _2PGA_c, PGAM_c__1)

# Reaction: id = PyrT_c, name = PyrT_c
# Local Parameter:   id =  PyrT_c_Vmax, name = PyrT_c_Vmax
par PyrT_c_Vm=230.0

# Local Parameter:   id =  PyrT_c_KmPyr, name = PyrT_c_KmPyr
par PyrT_c_Km=1.96


PyrT_c=v1sub(PyrT_c_Vm, Pyr_c, PyrT_c_Km)

# Reaction: id = G6PDH_c, name = G6PDH_c
# Local Parameter:   id =  G6PDH_c_Vmax, name = G6PDH_c_Vmax
par G6PDH_c_V=8.4

# Local Parameter:   id =  G6PDH_c_Keq, name = G6PDH_c_Keq
par G6PDH_c_K=5.02

# Local Parameter:   id =  G6PDH_c_KmGlc6P, name = G6PDH_c_KmGlc6P
par G6PDH_c_1=0.058

# Local Parameter:   id =  G6PDH_c_KmNADP, name = G6PDH_c_KmNADP
par G6PDH_c_2=0.0094

# Local Parameter:   id =  G6PDH_c_Km6PGL, name = G6PDH_c_Km6PGL
par G6PDH_c_3=0.04

# Local Parameter:   id =  G6PDH_c_KmNADPH, name = G6PDH_c_KmNADPH
par G6PDH_c_4=1.0E-4


G6PDH_c=v2sub2pro(G6PDH_c_V, G6PDH_c_K, Glc6P_c, G6PDH_c_1, NADP_c, G6PDH_c_2, _6PGL_c, G6PDH_c_3, NADPH_c, G6PDH_c_4)

# Reaction: id = ENO_c, name = ENO_c
# Local Parameter:   id =  ENO_c_Vmax, name = ENO_c_Vmax
par ENO_c_Vma=598.0

# Local Parameter:   id =  ENO_c_Keq, name = ENO_c_Keq
par ENO_c_Keq=4.17

# Local Parameter:   id =  ENO_c_Km2PGA, name = ENO_c_Km2PGA
par ENO_c_Km2=0.054

# Local Parameter:   id =  ENO_c_KmPEP, name = ENO_c_KmPEP
par ENO_c_KmP=0.24


ENO_c=v1sub1pro(ENO_c_Vma, ENO_c_Keq, _2PGA_c, ENO_c_Km2, PEP_c, ENO_c_KmP)

# Reaction: id = HXK_g, name = HXK_g
# Local Parameter:   id =  HXK_g_Vmax, name = HXK_g_Vmax
par HXK_g_Vma=1774.68

# Local Parameter:   id =  HXK_g_Keq, name = HXK_g_Keq
par HXK_g_Keq=759.0

# Local Parameter:   id =  HXK_g_KmGlc, name = HXK_g_KmGlc
par HXK_g_KmG=0.1

# Local Parameter:   id =  HXK_g_KmATP, name = HXK_g_KmATP
par HXK_g_KmA=0.116

# Local Parameter:   id =  HXK_g_KmGlc6P, name = HXK_g_KmGlc6P
par HXK_g_K_1=2.7

# Local Parameter:   id =  HXK_g_KmADP, name = HXK_g_KmADP
par HXK_g_K_2=0.126

# Local Parameter:   id =  HXK_g_KiFru, name = HXK_g_KiFru
par HXK_g_KiF=0.35

# Local Parameter:   id =  HXK_g_KiFru6P, name = HXK_g_KiFru6P
par HXK_g_K_3=2.7


HXK_g=v2sub2p_1(HXK_g_Vma, HXK_g_Keq, Glc_g, HXK_g_KmG, ATP_g, HXK_g_KmA, Glc6P_g, HXK_g_K_1, ADP_g, HXK_g_K_2, Fru_g, HXK_g_KiF, Fru6P_g, HXK_g_K_3)

# Reaction: id = _3PGAT_g, name = _3PGAT_g
# Local Parameter:   id =  _3PGAT_g_k, name = _3PGAT_g_k
par _3PGAT_g_=250.0


_3PGAT_g=mass_acti(_3PGAT_g_, _3PGA_g, _3PGAT_g_, _3PGA_c)

# Reaction: id = NADPHu_c, name = NADPHu_c
# Local Parameter:   id =  NADPHu_c_k, name = NADPHu_c_k
par NADPHu_c_=2.0


NADPHu_c=mass_ac_1(NADPHu_c_, NADPH_c)

# Reaction: id = HXK_c, name = HXK_c
# Local Parameter:   id =  HXK_c_Vmax, name = HXK_c_Vmax
par HXK_c_Vma=154.32

# Local Parameter:   id =  HXK_c_Keq, name = HXK_c_Keq
par HXK_c_Keq=759.0

# Local Parameter:   id =  HXK_c_KmGlc, name = HXK_c_KmGlc
par HXK_c_KmG=0.1

# Local Parameter:   id =  HXK_c_KmATP, name = HXK_c_KmATP
par HXK_c_KmA=0.116

# Local Parameter:   id =  HXK_c_KmGlc6P, name = HXK_c_KmGlc6P
par HXK_c_K_1=2.7

# Local Parameter:   id =  HXK_c_KmADP, name = HXK_c_KmADP
par HXK_c_K_2=0.126

# Local Parameter:   id =  HXK_c_KiFru, name = HXK_c_KiFru
par HXK_c_KiF=0.35

# Local Parameter:   id =  HXK_c_KiFru6P, name = HXK_c_KiFru6P
par HXK_c_K_3=2.7


HXK_c=v2sub2p_1(HXK_c_Vma, HXK_c_Keq, Glc_c, HXK_c_KmG, ATP_c, HXK_c_KmA, Glc6P_c, HXK_c_K_1, ADP_c, HXK_c_K_2, Fru_c, HXK_c_KiF, Fru6P_c, HXK_c_K_3)

# Reaction: id = NADPHu_g, name = NADPHu_g
# Local Parameter:   id =  NADPHu_g_k, name = NADPHu_g_k
par NADPHu_g_=2.0


NADPHu_g=mass_ac_1(NADPHu_g_, NADPH_g)

# Reaction: id = HXKfru_g, name = HXKfru_g
# Local Parameter:   id =  HXKfru_g_Vmax, name = HXKfru_g_Vmax
par HXKfru_g_=1774.68

# Local Parameter:   id =  HXKfru_g_Keq, name = HXKfru_g_Keq
par HXKfru__1=631.0

# Local Parameter:   id =  HXKfru_g_KmFru, name = HXKfru_g_KmFru
par HXKfru__2=0.35

# Local Parameter:   id =  HXKfru_g_KmATP, name = HXKfru_g_KmATP
par HXKfru__3=0.116

# Local Parameter:   id =  HXKfru_g_KmFru6P, name = HXKfru_g_KmFru6P
par HXKfru__4=2.7

# Local Parameter:   id =  HXKfru_g_KmADP, name = HXKfru_g_KmADP
par HXKfru__5=0.126

# Local Parameter:   id =  HXKfru_g_KiGlc, name = HXKfru_g_KiGlc
par HXKfru__6=0.1

# Local Parameter:   id =  HXKfru_g_KiGlc6P, name = HXKfru_g_KiGlc6P
par HXKfru__7=2.7


HXKfru_g=v2sub2p_1(HXKfru_g_, HXKfru__1, Fru_g, HXKfru__2, ATP_g, HXKfru__3, Fru6P_g, HXKfru__4, ADP_g, HXKfru__5, Glc_g, HXKfru__6, Glc6P_g, HXKfru__7)

# Reaction: id = G6PP_c, name = G6PP_c
# Local Parameter:   id =  G6PP_c_Vmax, name = G6PP_c_Vmax
par G6PP_c_Vm=28.0

# Local Parameter:   id =  G6PP_c_Keq, name = G6PP_c_Keq
par G6PP_c_Ke=263.0

# Local Parameter:   id =  G6PP_c_KmGlc6P, name = G6PP_c_KmGlc6P
par G6PP_c_Km=5.6

# Local Parameter:   id =  G6PP_c_KmGlc, name = G6PP_c_KmGlc
par G6PP_c__1=5.6


G6PP_c=v1sub1pro(G6PP_c_Vm, G6PP_c_Ke, Glc6P_c, G6PP_c_Km, Glc_c, G6PP_c__1)

# Reaction: id = AK_c, name = AK_c
# Local Parameter:   id =  AK_c_k1, name = AK_c_k1
par AK_c_k1=480.0

# Local Parameter:   id =  AK_c_k2, name = AK_c_k2
par AK_c_k2=1000.0


AK_c=vAK(ADP_c, AMP_c, ATP_c, AK_c_k1, AK_c_k2)

# Reaction: id = PGI_g, name = PGI_g
# Local Parameter:   id =  PGI_g_Vmax, name = PGI_g_Vmax
par PGI_g_Vma=1305.0

# Local Parameter:   id =  PGI_g_KmGlc6P, name = PGI_g_KmGlc6P
par PGI_g_KmG=0.4

# Local Parameter:   id =  PGI_g_Keq, name = PGI_g_Keq
par PGI_g_Keq=0.457

# Local Parameter:   id =  PGI_g_KmFru6P, name = PGI_g_KmFru6P
par PGI_g_KmF=0.12

# Local Parameter:   id =  PGI_g_Ki6PG, name = PGI_g_Ki6PG
par PGI_g_Ki6=0.14


PGI_g=PGI_g_Vma*Glc6P_g*(1-Fru6P_g/(PGI_g_Keq*Glc6P_g))/(PGI_g_KmG*(1+Glc6P_g/PGI_g_KmG+Fru6P_g/PGI_g_KmF+_6PG_g/PGI_g_Ki6))

# Reaction: id = HXKfru_c, name = HXKfru_c
# Local Parameter:   id =  HXKfru_c_Vmax, name = HXKfru_c_Vmax
par HXKfru_c_=154.32

# Local Parameter:   id =  HXKfru_c_Keq, name = HXKfru_c_Keq
par HXKfru__8=631.0

# Local Parameter:   id =  HXKfru_c_KmFru, name = HXKfru_c_KmFru
par HXKfru__9=0.35

# Local Parameter:   id =  HXKfru_c_KmATP, name = HXKfru_c_KmATP
par HXKfru_10=0.116

# Local Parameter:   id =  HXKfru_c_KmFru6P, name = HXKfru_c_KmFru6P
par HXKfru_11=2.7

# Local Parameter:   id =  HXKfru_c_KmADP, name = HXKfru_c_KmADP
par HXKfru_12=0.126

# Local Parameter:   id =  HXKfru_c_KiGlc, name = HXKfru_c_KiGlc
par HXKfru_13=0.1

# Local Parameter:   id =  HXKfru_c_KiGlc6P, name = HXKfru_c_KiGlc6P
par HXKfru_14=2.7


HXKfru_c=v2sub2p_1(HXKfru_c_, HXKfru__8, Fru_c, HXKfru__9, ATP_c, HXKfru_10, Fru6P_c, HXKfru_11, ADP_c, HXKfru_12, Glc_c, HXKfru_13, Glc6P_c, HXKfru_14)

# Reaction: id = TOX_c, name = TOX_c
# Local Parameter:   id =  TOX_c_k, name = TOX_c_k
par TOX_c_k=2.0


TOX_c=mass_ac_1(TOX_c_k, TSH2_c)

# Reaction: id = GDA_g, name = GDA_g
# Local Parameter:   id =  GDA_g_k, name = GDA_g_k
par GDA_g_k=600.0


GDA_g=Gly3P_g*GDA_g_k*DHAP_c-Gly3P_c*GDA_g_k*DHAP_g

# Reaction: id = ATPT_g, name = ATPT_g
# Local Parameter:   id =  ATPT_g_Vmax, name = ATPT_g_Vmax
par ATPT_g_Vm=1.5

# Local Parameter:   id =  ATPT_g_Keq, name = ATPT_g_Keq
par ATPT_g_Ke=1.0

# Local Parameter:   id =  ATPT_g_KmADP, name = ATPT_g_KmADP
par ATPT_g_Km=0.02

# Local Parameter:   id =  ATPT_g_KmATP, name = ATPT_g_KmATP
par ATPT_g__1=0.02


ATPT_g=v2sub2pro(ATPT_g_Vm, ATPT_g_Ke, ADP_g, ATPT_g_Km, ATP_c, ATPT_g__1, ADP_c, ATPT_g_Km, ATP_g, ATPT_g__1)

# Reaction: id = PGL_c, name = PGL_c
# Local Parameter:   id =  PGL_c_Vmax, name = PGL_c_Vmax
par PGL_c_Vma=28.0

# Local Parameter:   id =  PGL_c_Keq, name = PGL_c_Keq
par PGL_c_Keq=20000.0

# Local Parameter:   id =  PGL_c_Km6PGL, name = PGL_c_Km6PGL
par PGL_c_Km6=0.05

# Local Parameter:   id =  PGL_c_Km6PG, name = PGL_c_Km6PG
par PGL_c_K_1=0.05

# Local Parameter:   id =  PGL_c_k, name = PGL_c_k
par PGL_c_k=0.055


PGL_c=PGL_c_k*cytosol*(_6PGL_c-_6PG_c/PGL_c_Keq)+v1sub1pro(PGL_c_Vma, PGL_c_Keq, _6PGL_c, PGL_c_Km6, _6PG_c, PGL_c_K_1)

# Reaction: id = FruT_c, name = FruT_c
# Local Parameter:   id =  FruT_c_Vmax, name = FruT_c_Vmax
par FruT_c_Vm=69.1

# Local Parameter:   id =  FruT_c_KmFru, name = FruT_c_KmFru
par FruT_c_Km=3.91

# Local Parameter:   id =  FruT_c_alpha, name = FruT_c_alpha
par FruT_c_al=0.75


FruT_c=FruT_c_Vm*(Fru_e-Fru_c)/(FruT_c_Km+Fru_e+Fru_c+FruT_c_al*Fru_e*Fru_c/FruT_c_Km)

# Reaction: id = AK_g, name = AK_g
# Local Parameter:   id =  AK_g_k1, name = AK_g_k1
par AK_g_k1=480.0

# Local Parameter:   id =  AK_g_k2, name = AK_g_k2
par AK_g_k2=1000.0


AK_g=vAK(ADP_g, AMP_g, ATP_g, AK_g_k1, AK_g_k2)

# Reaction: id = _6PGDH_c, name = _6PGDH_c
# Local Parameter:   id =  _6PGDH_c_Vmax, name = _6PGDH_c_Vmax
par _6PGDH_c_=10.6

# Local Parameter:   id =  _6PGDH_c_Keq, name = _6PGDH_c_Keq
par _6PGDH__1=47.0

# Local Parameter:   id =  _6PGDH_c_Km6PG, name = _6PGDH_c_Km6PG
par _6PGDH__2=0.0035

# Local Parameter:   id =  _6PGDH_c_KmNADP, name = _6PGDH_c_KmNADP
par _6PGDH__3=0.001

# Local Parameter:   id =  _6PGDH_c_KmRul5P, name = _6PGDH_c_KmRul5P
par _6PGDH__4=0.03

# Local Parameter:   id =  _6PGDH_c_KmNADPH, name = _6PGDH_c_KmNADPH
par _6PGDH__5=6.0E-4


_6PGDH_c=v2sub2pro(_6PGDH_c_, _6PGDH__1, _6PG_c, _6PGDH__2, NADP_c, _6PGDH__3, Rul5P_c, _6PGDH__4, NADPH_c, _6PGDH__5)

# Reaction: id = PPI_c, name = PPI_c
# Local Parameter:   id =  PPI_c_Vmax, name = PPI_c_Vmax
par PPI_c_Vma=72.0

# Local Parameter:   id =  PPI_c_Keq, name = PPI_c_Keq
par PPI_c_Keq=5.6

# Local Parameter:   id =  PPI_c_KmRul5P, name = PPI_c_KmRul5P
par PPI_c_KmR=1.4

# Local Parameter:   id =  PPI_c_KmRib5P, name = PPI_c_KmRib5P
par PPI_c_K_1=4.0


PPI_c=v1sub1pro(PPI_c_Vma, PPI_c_Keq, Rul5P_c, PPI_c_KmR, Rib5P_c, PPI_c_K_1)

# Reaction: id = PPI_g, name = PPI_g
# Local Parameter:   id =  PPI_g_Vmax, name = PPI_g_Vmax
par PPI_g_Vma=72.0

# Local Parameter:   id =  PPI_g_Keq, name = PPI_g_Keq
par PPI_g_Keq=5.6

# Local Parameter:   id =  PPI_g_KmRul5P, name = PPI_g_KmRul5P
par PPI_g_KmR=1.4

# Local Parameter:   id =  PPI_g_KmRib5P, name = PPI_g_KmRib5P
par PPI_g_K_1=4.0


PPI_g=v1sub1pro(PPI_g_Vma, PPI_g_Keq, Rul5P_g, PPI_g_KmR, Rib5P_g, PPI_g_K_1)

# Reaction: id = _6PGDH_g, name = _6PGDH_g
# Local Parameter:   id =  _6PGDH_g_Vmax, name = _6PGDH_g_Vmax
par _6PGDH_g_=10.6

# Local Parameter:   id =  _6PGDH_g_Keq, name = _6PGDH_g_Keq
par _6PGDH__6=47.0

# Local Parameter:   id =  _6PGDH_g_Km6PG, name = _6PGDH_g_Km6PG
par _6PGDH__7=0.0035

# Local Parameter:   id =  _6PGDH_g_KmNADP, name = _6PGDH_g_KmNADP
par _6PGDH__8=0.001

# Local Parameter:   id =  _6PGDH_g_KmRul5P, name = _6PGDH_g_KmRul5P
par _6PGDH__9=0.03

# Local Parameter:   id =  _6PGDH_g_KmNADPH, name = _6PGDH_g_KmNADPH
par _6PGDH_10=6.0E-4


_6PGDH_g=v2sub2pro(_6PGDH_g_, _6PGDH__6, _6PG_g, _6PGDH__7, NADP_g, _6PGDH__8, Rul5P_g, _6PGDH__9, NADPH_g, _6PGDH_10)

# Reaction: id = GlcT_g, name = GlcT_g
# Local Parameter:   id =  GlcT_g_k1, name = GlcT_g_k1
par GlcT_g_k1=250000.0

# Local Parameter:   id =  GlcT_g_k2, name = GlcT_g_k2
par GlcT_g_k2=250000.0


GlcT_g=mass_acti(GlcT_g_k1, Glc_c, GlcT_g_k2, Glc_g)

# Reaction: id = GlcT_c, name = GlcT_c
# Local Parameter:   id =  GlcT_c_Vmax, name = GlcT_c_Vmax
par GlcT_c_Vm=111.7

# Local Parameter:   id =  GlcT_c_KmGlc, name = GlcT_c_KmGlc
par GlcT_c_Km=1.0

# Local Parameter:   id =  GlcT_c_alpha, name = GlcT_c_alpha
par GlcT_c_al=0.75


GlcT_c=GlcT_c_Vm*(Glc_e-Glc_c)/(GlcT_c_Km+Glc_e+Glc_c+GlcT_c_al*Glc_e*Glc_c/GlcT_c_Km)

# Reaction: id = PGL_g, name = PGL_g
# Local Parameter:   id =  PGL_g_Vmax, name = PGL_g_Vmax
par PGL_g_Vma=5.0

# Local Parameter:   id =  PGL_g_Keq, name = PGL_g_Keq
par PGL_g_Keq=20000.0

# Local Parameter:   id =  PGL_g_Km6PGL, name = PGL_g_Km6PGL
par PGL_g_Km6=0.05

# Local Parameter:   id =  PGL_g_Km6PG, name = PGL_g_Km6PG
par PGL_g_K_1=0.05

# Local Parameter:   id =  PGL_g_k, name = PGL_g_k
par PGL_g_k=0.055


PGL_g=glycosome*PGL_g_k*(_6PGL_g-_6PG_g/PGL_g_Keq)+v1sub1pro(PGL_g_Vma, PGL_g_Keq, _6PGL_g, PGL_g_Km6, _6PG_g, PGL_g_K_1)

# Reaction: id = TR_c, name = TR_c
# Local Parameter:   id =  TR_c_Vmax, name = TR_c_Vmax
par TR_c_Vmax=252.0

# Local Parameter:   id =  TR_c_Keq, name = TR_c_Keq
par TR_c_Keq=434.0

# Local Parameter:   id =  TR_c_KmTS2, name = TR_c_KmTS2
par TR_c_KmTS=0.0069

# Local Parameter:   id =  TR_c_KmNADPH, name = TR_c_KmNADPH
par TR_c_KmNA=7.7E-4

# Local Parameter:   id =  TR_c_KmTSH2, name = TR_c_KmTSH2
par TR_c_Km_1=0.0018

# Local Parameter:   id =  TR_c_KmNADP, name = TR_c_KmNADP
par TR_c_Km_2=0.081


TR_c=v2sub2pro(TR_c_Vmax, TR_c_Keq, TS2_c, TR_c_KmTS, NADPH_c, TR_c_KmNA, TSH2_c, TR_c_Km_1, NADP_c, TR_c_Km_2)

# Reaction: id = PGK_g, name = PGK_g
# Local Parameter:   id =  PGK_g_Vmax, name = PGK_g_Vmax
par PGK_g_Vma=2862.0

# Local Parameter:   id =  PGK_g_Keq, name = PGK_g_Keq
par PGK_g_Keq=3377.0

# Local Parameter:   id =  PGK_g_Km13BPGA, name = PGK_g_Km13BPGA
par PGK_g_Km1=0.003

# Local Parameter:   id =  PGK_g_KmADP, name = PGK_g_KmADP
par PGK_g_KmA=0.1

# Local Parameter:   id =  PGK_g_Km3PGA, name = PGK_g_Km3PGA
par PGK_g_Km3=1.62

# Local Parameter:   id =  PGK_g_KmATP, name = PGK_g_KmATP
par PGK_g_K_1=0.29


PGK_g=v2sub2pro(PGK_g_Vma, PGK_g_Keq, _13BPGA_g, PGK_g_Km1, ADP_g, PGK_g_KmA, _3PGA_g, PGK_g_Km3, ATP_g, PGK_g_K_1)

# Reaction: id = G3PDH_g, name = G3PDH_g
# Local Parameter:   id =  G3PDH_g_Vmax, name = G3PDH_g_Vmax
par G3PDH_g_V=465.0

# Local Parameter:   id =  G3PDH_g_Keq, name = G3PDH_g_Keq
par G3PDH_g_K=17085.0

# Local Parameter:   id =  G3PDH_g_KmDHAP, name = G3PDH_g_KmDHAP
par G3PDH_g_1=0.1

# Local Parameter:   id =  G3PDH_g_KmNADH, name = G3PDH_g_KmNADH
par G3PDH_g_2=0.01

# Local Parameter:   id =  G3PDH_g_KmGly3P, name = G3PDH_g_KmGly3P
par G3PDH_g_3=2.0

# Local Parameter:   id =  G3PDH_g_KmNAD, name = G3PDH_g_KmNAD
par G3PDH_g_4=0.4


G3PDH_g=v2sub2pro(G3PDH_g_V, G3PDH_g_K, DHAP_g, G3PDH_g_1, NADH_g, G3PDH_g_2, Gly3P_g, G3PDH_g_3, NAD_g, G3PDH_g_4)

# Reaction: id = FruT_g, name = FruT_g
# Local Parameter:   id =  FruT_g_k1, name = FruT_g_k1
par FruT_g_k1=250000.0

# Local Parameter:   id =  FruT_g_k2, name = FruT_g_k2
par FruT_g_k2=250000.0


FruT_g=mass_acti(FruT_g_k1, Fru_c, FruT_g_k2, Fru_g)

# Reaction: id = ATPu_c, name = ATPu_c
# Local Parameter:   id =  ATPu_c_k, name = ATPu_c_k
par ATPu_c_k=50.0


ATPu_c=ATPu_c_k*ATP_c/ADP_c

# Reaction: id = GK_g, name = GK_g
# Local Parameter:   id =  GK_g_Vmax, name = GK_g_Vmax
par GK_g_Vmax=200.0

# Local Parameter:   id =  GK_g_Keq, name = GK_g_Keq
par GK_g_Keq=8.37E-4

# Local Parameter:   id =  GK_g_KmGly3P, name = GK_g_KmGly3P
par GK_g_KmGl=3.83

# Local Parameter:   id =  GK_g_KmADP, name = GK_g_KmADP
par GK_g_KmAD=0.56

# Local Parameter:   id =  GK_g_KmGly, name = GK_g_KmGly
par GK_g_Km_1=0.44

# Local Parameter:   id =  GK_g_KmATP, name = GK_g_KmATP
par GK_g_KmAT=0.24


GK_g=v2sub2pro(GK_g_Vmax, GK_g_Keq, Gly3P_g, GK_g_KmGl, ADP_g, GK_g_KmAD, Gly_e, GK_g_Km_1, ATP_g, GK_g_KmAT)

# Reaction: id = ALD_g, name = ALD_g
# Local Parameter:   id =  ALD_g_Vmax, name = ALD_g_Vmax
par ALD_g_Vma=560.0

# Local Parameter:   id =  ALD_g_KmFru16BP, name = ALD_g_KmFru16BP
par ALD_g_KmF=0.009

# Local Parameter:   id =  ALD_g_KiATP, name = ALD_g_KiATP
par ALD_g_KiA=0.68

# Local Parameter:   id =  ALD_g_KiADP, name = ALD_g_KiADP
par ALD_g_K_1=1.51

# Local Parameter:   id =  ALD_g_KiAMP, name = ALD_g_KiAMP
par ALD_g_K_2=3.65

# Local Parameter:   id =  ALD_g_Keq, name = ALD_g_Keq
par ALD_g_Keq=0.084

# Local Parameter:   id =  ALD_g_KmGA3P, name = ALD_g_KmGA3P
par ALD_g_KmG=0.067

# Local Parameter:   id =  ALD_g_KmDHAP, name = ALD_g_KmDHAP
par ALD_g_KmD=0.015

# Local Parameter:   id =  ALD_g_KiGA3P, name = ALD_g_KiGA3P
par ALD_g_KiG=0.098


ALD_g=ALD_g_Vma*Fru16BP_g*(1-GA3P_g*DHAP_g/(Fru16BP_g*ALD_g_Keq))/(ALD_g_KmF*(1+ATP_g/ALD_g_KiA+ADP_g/ALD_g_K_1+AMP_g/ALD_g_K_2)*(1+GA3P_g/ALD_g_KmG+DHAP_g/ALD_g_KmD+Fru16BP_g/(ALD_g_KmF*(1+ATP_g/ALD_g_KiA+ADP_g/ALD_g_K_1+AMP_g/ALD_g_K_2))+GA3P_g*DHAP_g/(ALD_g_KmG*ALD_g_KmD)+Fru16BP_g*GA3P_g/(ALD_g_KmF*ALD_g_KiG*(1+ATP_g/ALD_g_KiA+ADP_g/ALD_g_K_1+AMP_g/ALD_g_K_2))))

# Reaction: id = GAPDH_g, name = GAPDH_g
# Local Parameter:   id =  GAPDH_g_Vmax, name = GAPDH_g_Vmax
par GAPDH_g_V=720.9

# Local Parameter:   id =  GAPDH_g_Keq, name = GAPDH_g_Keq
par GAPDH_g_K=0.066

# Local Parameter:   id =  GAPDH_g_KmGA3P, name = GAPDH_g_KmGA3P
par GAPDH_g_1=0.15

# Local Parameter:   id =  GAPDH_g_KmNAD, name = GAPDH_g_KmNAD
par GAPDH_g_2=0.45

# Local Parameter:   id =  GAPDH_g_Km13BPGA, name = GAPDH_g_Km13BPGA
par GAPDH_g_3=0.1

# Local Parameter:   id =  GAPDH_g_KmNADH, name = GAPDH_g_KmNADH
par GAPDH_g_4=0.02


GAPDH_g=v2sub2pro(GAPDH_g_V, GAPDH_g_K, GA3P_g, GAPDH_g_1, NAD_g, GAPDH_g_2, _13BPGA_g, GAPDH_g_3, NADH_g, GAPDH_g_4)

# Reaction: id = GPO_c, name = GPO_c
# Local Parameter:   id =  GPO_c_Vmax, name = GPO_c_Vmax
par GPO_c_Vma=368.0

# Local Parameter:   id =  GPO_c_KmGly3P, name = GPO_c_KmGly3P
par GPO_c_KmG=1.7


GPO_c=v1sub(GPO_c_Vma, Gly3P_c, GPO_c_KmG)

# Species:   id = Fru_e, name = Fru_e, constant
par Fru_e=5.0


# Species:   id = _2PGA_c, name = _2PGA_c, affected by kineticLaw

init _2PGA_c=0.1
d_2PGA_c/dt=(1/(cytosol))*(( 1.0 * PGAM_c) + (-1.0 * ENO_c))

# Species:   id = Fru_g, name = Fru_g, affected by kineticLaw

init Fru_g=0.1
dFru_g/dt=(1/(glycosome))*((-1.0 * HXKfru_g) + ( 1.0 * FruT_g))

# Species:   id = Fru_c, name = Fru_c, affected by kineticLaw

init Fru_c=0.1
dFru_c/dt=(1/(cytosol))*((-1.0 * HXKfru_c) + ( 1.0 * FruT_c) + (-1.0 * FruT_g))

# Species:   id = DHAP_c, name = DHAP_c, affected by kineticLaw

init DHAP_c=2.23132912
dDHAP_c/dt=(1/(cytosol))*((-1.0 * GDA_g) + ( 1.0 * GPO_c))

# Species:   id = ATP_g, name = ATP_g, affected by kineticLaw

init ATP_g=0.2405
dATP_g/dt=(1/(glycosome))*((-1.0 * PFK_g) + (-1.0 * HXK_g) + (-1.0 * HXKfru_g) + ( 1.0 * ATPT_g) + ( 1.0 * AK_g) + ( 1.0 * PGK_g) + ( 1.0 * GK_g))

# Species:   id = DHAP_g, name = DHAP_g, affected by kineticLaw

init DHAP_g=8.483130623
dDHAP_g/dt=(1/(glycosome))*((-1.0 * TPI_g) + ( 1.0 * GDA_g) + (-1.0 * G3PDH_g) + ( 1.0 * ALD_g))

# Species:   id = ADP_g, name = ADP_g, affected by kineticLaw

init ADP_g=1.519
dADP_g/dt=(1/(glycosome))*(( 1.0 * PFK_g) + ( 1.0 * HXK_g) + ( 1.0 * HXKfru_g) + (-1.0 * ATPT_g) + (-2.0 * AK_g) + (-1.0 * PGK_g) + (-1.0 * GK_g))

# Species:   id = Glc6P_g, name = Glc6P_g, affected by kineticLaw

init Glc6P_g=0.5
dGlc6P_g/dt=(1/(glycosome))*((-1.0 * G6PDH_g) + ( 1.0 * HXK_g) + (-1.0 * PGI_g))

# Species:   id = ADP_c, name = ADP_c, affected by kineticLaw

init ADP_c=1.3165
dADP_c/dt=(1/(cytosol))*((-1.0 * PYK_c) + ( 1.0 * HXK_c) + (-2.0 * AK_c) + ( 1.0 * HXKfru_c) + ( 1.0 * ATPT_g) + ( 1.0 * ATPu_c))

# Species:   id = _3PGA_c, name = _3PGA_c, affected by kineticLaw

init _3PGA_c=0.1
d_3PGA_c/dt=(1/(cytosol))*((-1.0 * PGAM_c) + ( 1.0 * _3PGAT_g))

# Species:   id = Fru6P_g, name = Fru6P_g, affected by kineticLaw

init Fru6P_g=0.5
dFru6P_g/dt=(1/(glycosome))*((-1.0 * PFK_g) + ( 1.0 * HXKfru_g) + ( 1.0 * PGI_g))

# Species:   id = Fru6P_c, name = Fru6P_c, constant
par Fru6P_c=0.9


# Species:   id = Pi_g, name = Pi_g, constant
par Pi_g=0.0


# Species:   id = O2_c, name = O2_c, constant
par O2_c=1.0


# Species:   id = NADP_c, name = NADP_c, affected by kineticLaw

init NADP_c=0.1
dNADP_c/dt=(1/(cytosol))*((-1.0 * G6PDH_c) + ( 1.0 * NADPHu_c) + (-1.0 * _6PGDH_c) + ( 1.0 * TR_c))

# Species:   id = ATP_c, name = ATP_c, affected by kineticLaw

init ATP_c=0.3417
dATP_c/dt=(1/(cytosol))*(( 1.0 * PYK_c) + (-1.0 * HXK_c) + ( 1.0 * AK_c) + (-1.0 * HXKfru_c) + (-1.0 * ATPT_g) + (-1.0 * ATPu_c))

# Species:   id = NADP_g, name = NADP_g, affected by kineticLaw

init NADP_g=0.1
dNADP_g/dt=(1/(glycosome))*((-1.0 * G6PDH_g) + ( 1.0 * NADPHu_g) + (-1.0 * _6PGDH_g))

# Species:   id = _6PG_g, name = _6PG_g, affected by kineticLaw

init _6PG_g=0.0841958
d_6PG_g/dt=(1/(glycosome))*((-1.0 * _6PGDH_g) + ( 1.0 * PGL_g))

# Species:   id = CO2_c, name = CO2_c, constant
par CO2_c=0.0


# Species:   id = Rul5P_c, name = Rul5P_c, affected by kineticLaw

init Rul5P_c=0.41282
dRul5P_c/dt=(1/(cytosol))*(( 1.0 * _6PGDH_c) + (-1.0 * PPI_c))

# Species:   id = _6PG_c, name = _6PG_c, affected by kineticLaw

init _6PG_c=0.0841958
d_6PG_c/dt=(1/(cytosol))*(( 1.0 * PGL_c) + (-1.0 * _6PGDH_c))

# Species:   id = Rul5P_g, name = Rul5P_g, affected by kineticLaw

init Rul5P_g=0.41282
dRul5P_g/dt=(1/(glycosome))*((-1.0 * PPI_g) + ( 1.0 * _6PGDH_g))

# Species:   id = Glc6P_c, name = Glc6P_c, affected by kineticLaw

init Glc6P_c=0.5
dGlc6P_c/dt=(1/(cytosol))*((-1.0 * G6PDH_c) + ( 1.0 * HXK_c) + (-1.0 * G6PP_c))

# Species:   id = Rib5P_c, name = Rib5P_c, constant
par Rib5P_c=0.01


# Species:   id = _13BPGA_g, name = _13BPGA_g, affected by kineticLaw

init _13BPGA_g=0.5
d_13BPGA_g/dt=(1/(glycosome))*((-1.0 * PGK_g) + ( 1.0 * GAPDH_g))

# Species:   id = Glc_c, name = Glc_c, affected by kineticLaw

init Glc_c=0.1
dGlc_c/dt=(1/(cytosol))*((-1.0 * HXK_c) + ( 1.0 * G6PP_c) + (-1.0 * GlcT_g) + ( 1.0 * GlcT_c))

# Species:   id = Rib5P_g, name = Rib5P_g, constant
par Rib5P_g=0.01


# Species:   id = Glc_g, name = Glc_g, affected by kineticLaw

init Glc_g=0.1
dGlc_g/dt=(1/(glycosome))*((-1.0 * HXK_g) + ( 1.0 * GlcT_g))

# Species:   id = Glc_e, name = Glc_e, constant
par Glc_e=5.0


# Species:   id = NADPH_g, name = NADPH_g, affected by kineticLaw

init NADPH_g=3.9
dNADPH_g/dt=(1/(glycosome))*(( 1.0 * G6PDH_g) + (-1.0 * NADPHu_g) + ( 1.0 * _6PGDH_g))

# Species:   id = NADPH_c, name = NADPH_c, affected by kineticLaw

init NADPH_c=3.9
dNADPH_c/dt=(1/(cytosol))*(( 1.0 * G6PDH_c) + (-1.0 * NADPHu_c) + ( 1.0 * _6PGDH_c) + (-1.0 * TR_c))

# Species:   id = Pyr_c, name = Pyr_c, affected by kineticLaw

init Pyr_c=10.0
dPyr_c/dt=(1/(cytosol))*(( 1.0 * PYK_c) + (-1.0 * PyrT_c))

# Species:   id = Pyr_e, name = Pyr_e, constant
par Pyr_e=0.0


# Species:   id = NAD_g, name = NAD_g, affected by kineticLaw

init NAD_g=2.0
dNAD_g/dt=(1/(glycosome))*(( 1.0 * G3PDH_g) + (-1.0 * GAPDH_g))

# Species:   id = Fru16BP_g, name = Fru16BP_g, affected by kineticLaw

init Fru16BP_g=10.0
dFru16BP_g/dt=(1/(glycosome))*(( 1.0 * PFK_g) + (-1.0 * ALD_g))

# Species:   id = GA3P_g, name = GA3P_g, affected by kineticLaw

init GA3P_g=2.5
dGA3P_g/dt=(1/(glycosome))*(( 1.0 * TPI_g) + ( 1.0 * ALD_g) + (-1.0 * GAPDH_g))

# Species:   id = Gly_e, name = Gly_e, constant
par Gly_e=0.0


# Species:   id = TSH2_c, name = TSH2_c, affected by kineticLaw

init TSH2_c=0.01
dTSH2_c/dt=(1/(cytosol))*((-1.0 * TOX_c) + ( 1.0 * TR_c))

# Species:   id = CO2_g, name = CO2_g, constant
par CO2_g=0.0


# Species:   id = Gly3P_c, name = Gly3P_c, affected by kineticLaw

init Gly3P_c=2.76867088
dGly3P_c/dt=(1/(cytosol))*(( 1.0 * GDA_g) + (-1.0 * GPO_c))

# Species:   id = Gly3P_g, name = Gly3P_g, affected by kineticLaw

init Gly3P_g=10.51686938
dGly3P_g/dt=(1/(glycosome))*((-1.0 * GDA_g) + ( 1.0 * G3PDH_g) + (-1.0 * GK_g))

# Species:   id = _6PGL_c, name = _6PGL_c, affected by kineticLaw

init _6PGL_c=0.0795278
d_6PGL_c/dt=(1/(cytosol))*(( 1.0 * G6PDH_c) + (-1.0 * PGL_c))

# Species:   id = TS2_c, name = TS2_c, affected by kineticLaw

init TS2_c=0.37
dTS2_c/dt=(1/(cytosol))*(( 1.0 * TOX_c) + (-1.0 * TR_c))

# Species:   id = _6PGL_g, name = _6PGL_g, affected by kineticLaw

init _6PGL_g=0.0795278
d_6PGL_g/dt=(1/(glycosome))*(( 1.0 * G6PDH_g) + (-1.0 * PGL_g))

# Species:   id = PEP_c, name = PEP_c, affected by kineticLaw

init PEP_c=1.0
dPEP_c/dt=(1/(cytosol))*((-1.0 * PYK_c) + ( 1.0 * ENO_c))

# Species:   id = AMP_g, name = AMP_g, affected by kineticLaw

init AMP_g=4.2405
dAMP_g/dt=(1/(glycosome))*(( 1.0 * AK_g))

# Species:   id = _3PGA_g, name = _3PGA_g, affected by kineticLaw

init _3PGA_g=0.1
d_3PGA_g/dt=(1/(glycosome))*((-1.0 * _3PGAT_g) + ( 1.0 * PGK_g))

# Species:   id = AMP_c, name = AMP_c, affected by kineticLaw

init AMP_c=2.2418
dAMP_c/dt=(1/(cytosol))*(( 1.0 * AK_c))

# Species:   id = NADH_g, name = NADH_g, affected by kineticLaw

init NADH_g=2.0
dNADH_g/dt=(1/(glycosome))*((-1.0 * G3PDH_g) + ( 1.0 * GAPDH_g))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

