
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Smith2010 - Response of FOXO Transcription Factors to Post-Translational Modifications Made by Ageing-Related Signalling Pathways
#
# is http://identifiers.org/biomodels.db/MODEL1112260000
# isDescribedBy http://identifiers.org/pubmed/20567500
# is http://identifiers.org/biomodels.db/BIOMD0000000705
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Constant_flux__irreversible, name = Constant flux (irreversible)
Constant_(v)=(v)


# FunctionDefinition id = Function_for_Synthesis, name = Function for Synthesis
Function_(E2F1,cytoplasm,ksynth)=(E2F1*cytoplasm*ksynth/cytoplasm)


# FunctionDefinition id = Function_for_transport_cytoplasm_Foxo1_Pa0_pUb0_to_nucleus_Foxo1_Pa0_pUb0, name = Function for transport cytoplasm_Foxo1_Pa0_pUb0 to nucleus_Foxo1_Pa0_pUb0
Functio_1(cytoplasm,cytoplasm_Foxo1_Pa0_pUb0,ktr)=(cytoplasm_Foxo1_Pa0_pUb0*cytoplasm*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa0_pUb0_to_cytoplasm_Foxo1_Pa0_pUb0, name = Function for transport nucleus_Foxo1_Pa0_pUb0 to cytoplasm_Foxo1_Pa0_pUb0
Functio_2(ktr,nucleus,nucleus_Foxo1_Pa0_pUb0)=(nucleus_Foxo1_Pa0_pUb0*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa0_pUb0_to_dnabound_Foxo1_Pa0_pUb0, name = Function for transport nucleus_Foxo1_Pa0_pUb0 to dnabound_Foxo1_Pa0_pUb0
Functio_3(ktr,nucleus,nucleus_Foxo1_Pa0_pUb0)=(nucleus_Foxo1_Pa0_pUb0*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_dnabound_Foxo1_Pa0_pUb0_to_nucleus_Foxo1_Pa0_pUb0, name = Function for transport dnabound_Foxo1_Pa0_pUb0 to nucleus_Foxo1_Pa0_pUb0
Functio_4(dnabound,dnabound_Foxo1_Pa0_pUb0,ktr)=(dnabound_Foxo1_Pa0_pUb0*dnabound*ktr)


# FunctionDefinition id = Function_for_transport_cytoplasm_Foxo1_Pa0_pUb1_to_nucleus_Foxo1_Pa0_pUb1, name = Function for transport cytoplasm_Foxo1_Pa0_pUb1 to nucleus_Foxo1_Pa0_pUb1
Functio_5(cytoplasm,cytoplasm_Foxo1_Pa0_pUb1,ktr)=(cytoplasm_Foxo1_Pa0_pUb1*cytoplasm*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa0_pUb1_to_cytoplasm_Foxo1_Pa0_pUb1, name = Function for transport nucleus_Foxo1_Pa0_pUb1 to cytoplasm_Foxo1_Pa0_pUb1
Functio_6(ktr,nucleus,nucleus_Foxo1_Pa0_pUb1)=(nucleus_Foxo1_Pa0_pUb1*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa0_pUb1_to_dnabound_Foxo1_Pa0_pUb1, name = Function for transport nucleus_Foxo1_Pa0_pUb1 to dnabound_Foxo1_Pa0_pUb1
Functio_7(ktr,nucleus,nucleus_Foxo1_Pa0_pUb1)=(nucleus_Foxo1_Pa0_pUb1*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_dnabound_Foxo1_Pa0_pUb1_to_nucleus_Foxo1_Pa0_pUb1, name = Function for transport dnabound_Foxo1_Pa0_pUb1 to nucleus_Foxo1_Pa0_pUb1
Functio_8(dnabound,dnabound_Foxo1_Pa0_pUb1,ktr)=(dnabound_Foxo1_Pa0_pUb1*dnabound*ktr)


# FunctionDefinition id = Function_for_transport_cytoplasm_Foxo1_Pa1_pUb0_to_nucleus_Foxo1_Pa1_pUb0, name = Function for transport cytoplasm_Foxo1_Pa1_pUb0 to nucleus_Foxo1_Pa1_pUb0
Functio_9(cytoplasm,cytoplasm_Foxo1_Pa1_pUb0,ktr)=(cytoplasm_Foxo1_Pa1_pUb0*cytoplasm*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa1_pUb0_to_cytoplasm_Foxo1_Pa1_pUb0, name = Function for transport nucleus_Foxo1_Pa1_pUb0 to cytoplasm_Foxo1_Pa1_pUb0
Functi_10(ktr,nucleus,nucleus_Foxo1_Pa1_pUb0)=(nucleus_Foxo1_Pa1_pUb0*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa1_pUb0_to_dnabound_Foxo1_Pa1_pUb0, name = Function for transport nucleus_Foxo1_Pa1_pUb0 to dnabound_Foxo1_Pa1_pUb0
Functi_11(ktr,nucleus,nucleus_Foxo1_Pa1_pUb0)=(nucleus_Foxo1_Pa1_pUb0*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_dnabound_Foxo1_Pa1_pUb0_to_nucleus_Foxo1_Pa1_pUb0, name = Function for transport dnabound_Foxo1_Pa1_pUb0 to nucleus_Foxo1_Pa1_pUb0
Functi_12(dnabound,dnabound_Foxo1_Pa1_pUb0,ktr)=(dnabound_Foxo1_Pa1_pUb0*dnabound*ktr)


# FunctionDefinition id = Function_for_transport_cytoplasm_Foxo1_Pa1_pUb1_to_nucleus_Foxo1_Pa1_pUb1, name = Function for transport cytoplasm_Foxo1_Pa1_pUb1 to nucleus_Foxo1_Pa1_pUb1
Functi_13(cytoplasm,cytoplasm_Foxo1_Pa1_pUb1,ktr)=(cytoplasm_Foxo1_Pa1_pUb1*cytoplasm*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa1_pUb1_to_cytoplasm_Foxo1_Pa1_pUb1, name = Function for transport nucleus_Foxo1_Pa1_pUb1 to cytoplasm_Foxo1_Pa1_pUb1
Functi_14(ktr,nucleus,nucleus_Foxo1_Pa1_pUb1)=(nucleus_Foxo1_Pa1_pUb1*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_nucleus_Foxo1_Pa1_pUb1_to_dnabound_Foxo1_Pa1_pUb1, name = Function for transport nucleus_Foxo1_Pa1_pUb1 to dnabound_Foxo1_Pa1_pUb1
Functi_15(ktr,nucleus,nucleus_Foxo1_Pa1_pUb1)=(nucleus_Foxo1_Pa1_pUb1*nucleus*ktr)


# FunctionDefinition id = Function_for_transport_dnabound_Foxo1_Pa1_pUb1_to_nucleus_Foxo1_Pa1_pUb1, name = Function for transport dnabound_Foxo1_Pa1_pUb1 to nucleus_Foxo1_Pa1_pUb1
Functi_16(dnabound,dnabound_Foxo1_Pa1_pUb1,ktr)=(dnabound_Foxo1_Pa1_pUb1*dnabound*ktr)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa0_pUb0_to_cytoplasm_Foxo1_Pa1_pUb0_by_Akt, name = Function for conversion of cytoplasm_Foxo1_Pa0_pUb0 to cytoplasm_Foxo1_Pa1_pUb0 by Akt
Functi_17(Akt,cytoplasm,cytoplasm_Foxo1_Pa0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_pUb0*cytoplasm*Akt*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa0_pUb0_to_nucleus_Foxo1_Pa1_pUb0_by_Akt, name = Function for conversion of nucleus_Foxo1_Pa0_pUb0 to nucleus_Foxo1_Pa1_pUb0 by Akt
Functi_18(Akt,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_pUb0)=(nucleus_Foxo1_Pa0_pUb0*nucleus*Akt*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa0_pUb0_to_dnabound_Foxo1_Pa1_pUb0_by_Akt, name = Function for conversion of dnabound_Foxo1_Pa0_pUb0 to dnabound_Foxo1_Pa1_pUb0 by Akt
Functi_19(Akt,cytoplasm,dnabound,dnabound_Foxo1_Pa0_pUb0,kkin)=(dnabound_Foxo1_Pa0_pUb0*dnabound*Akt*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa0_pUb1_to_cytoplasm_Foxo1_Pa1_pUb1_by_Akt, name = Function for conversion of cytoplasm_Foxo1_Pa0_pUb1 to cytoplasm_Foxo1_Pa1_pUb1 by Akt
Functi_20(Akt,cytoplasm,cytoplasm_Foxo1_Pa0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_pUb1*cytoplasm*Akt*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa0_pUb1_to_nucleus_Foxo1_Pa1_pUb1_by_Akt, name = Function for conversion of nucleus_Foxo1_Pa0_pUb1 to nucleus_Foxo1_Pa1_pUb1 by Akt
Functi_21(Akt,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_pUb1)=(nucleus_Foxo1_Pa0_pUb1*nucleus*Akt*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa0_pUb1_to_dnabound_Foxo1_Pa1_pUb1_by_Akt, name = Function for conversion of dnabound_Foxo1_Pa0_pUb1 to dnabound_Foxo1_Pa1_pUb1 by Akt
Functi_22(Akt,cytoplasm,dnabound,dnabound_Foxo1_Pa0_pUb1,kkin)=(dnabound_Foxo1_Pa0_pUb1*dnabound*Akt*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa0_pUb0_to_cytoplasm_Foxo1_Pa1_pUb0_by_SGK, name = Function for conversion of cytoplasm_Foxo1_Pa0_pUb0 to cytoplasm_Foxo1_Pa1_pUb0 by SGK
Functi_23(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_pUb0,kkin)=(cytoplasm_Foxo1_Pa0_pUb0*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa0_pUb0_to_nucleus_Foxo1_Pa1_pUb0_by_SGK, name = Function for conversion of nucleus_Foxo1_Pa0_pUb0 to nucleus_Foxo1_Pa1_pUb0 by SGK
Functi_24(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_pUb0)=(nucleus_Foxo1_Pa0_pUb0*nucleus*SGK*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa0_pUb0_to_dnabound_Foxo1_Pa1_pUb0_by_SGK, name = Function for conversion of dnabound_Foxo1_Pa0_pUb0 to dnabound_Foxo1_Pa1_pUb0 by SGK
Functi_25(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_pUb0,kkin)=(dnabound_Foxo1_Pa0_pUb0*dnabound*SGK*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa0_pUb1_to_cytoplasm_Foxo1_Pa1_pUb1_by_SGK, name = Function for conversion of cytoplasm_Foxo1_Pa0_pUb1 to cytoplasm_Foxo1_Pa1_pUb1 by SGK
Functi_26(SGK,cytoplasm,cytoplasm_Foxo1_Pa0_pUb1,kkin)=(cytoplasm_Foxo1_Pa0_pUb1*cytoplasm*SGK*cytoplasm*kkin/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa0_pUb1_to_nucleus_Foxo1_Pa1_pUb1_by_SGK, name = Function for conversion of nucleus_Foxo1_Pa0_pUb1 to nucleus_Foxo1_Pa1_pUb1 by SGK
Functi_27(SGK,cytoplasm,kkin,nucleus,nucleus_Foxo1_Pa0_pUb1)=(nucleus_Foxo1_Pa0_pUb1*nucleus*SGK*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa0_pUb1_to_dnabound_Foxo1_Pa1_pUb1_by_SGK, name = Function for conversion of dnabound_Foxo1_Pa0_pUb1 to dnabound_Foxo1_Pa1_pUb1 by SGK
Functi_28(SGK,cytoplasm,dnabound,dnabound_Foxo1_Pa0_pUb1,kkin)=(dnabound_Foxo1_Pa0_pUb1*dnabound*SGK*cytoplasm*kkin)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa1_pUb0_to_cytoplasm_Foxo1_Pa0_pUb0_by_PP2A, name = Function for conversion of cytoplasm_Foxo1_Pa1_pUb0 to cytoplasm_Foxo1_Pa0_pUb0 by PP2A
Functi_29(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_pUb0,kdephos)=(cytoplasm_Foxo1_Pa1_pUb0*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa1_pUb0_to_nucleus_Foxo1_Pa0_pUb0_by_PP2A, name = Function for conversion of nucleus_Foxo1_Pa1_pUb0 to nucleus_Foxo1_Pa0_pUb0 by PP2A
Functi_30(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_pUb0)=(nucleus_Foxo1_Pa1_pUb0*nucleus*PP2A*cytoplasm*kdephos)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa1_pUb0_to_dnabound_Foxo1_Pa0_pUb0_by_PP2A, name = Function for conversion of dnabound_Foxo1_Pa1_pUb0 to dnabound_Foxo1_Pa0_pUb0 by PP2A
Functi_31(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_pUb0,kdephos)=(dnabound_Foxo1_Pa1_pUb0*dnabound*PP2A*cytoplasm*kdephos)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa1_pUb1_to_cytoplasm_Foxo1_Pa0_pUb1_by_PP2A, name = Function for conversion of cytoplasm_Foxo1_Pa1_pUb1 to cytoplasm_Foxo1_Pa0_pUb1 by PP2A
Functi_32(PP2A,cytoplasm,cytoplasm_Foxo1_Pa1_pUb1,kdephos)=(cytoplasm_Foxo1_Pa1_pUb1*cytoplasm*PP2A*cytoplasm*kdephos/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa1_pUb1_to_nucleus_Foxo1_Pa0_pUb1_by_PP2A, name = Function for conversion of nucleus_Foxo1_Pa1_pUb1 to nucleus_Foxo1_Pa0_pUb1 by PP2A
Functi_33(PP2A,cytoplasm,kdephos,nucleus,nucleus_Foxo1_Pa1_pUb1)=(nucleus_Foxo1_Pa1_pUb1*nucleus*PP2A*cytoplasm*kdephos)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa1_pUb1_to_dnabound_Foxo1_Pa0_pUb1_by_PP2A, name = Function for conversion of dnabound_Foxo1_Pa1_pUb1 to dnabound_Foxo1_Pa0_pUb1 by PP2A
Functi_34(PP2A,cytoplasm,dnabound,dnabound_Foxo1_Pa1_pUb1,kdephos)=(dnabound_Foxo1_Pa1_pUb1*dnabound*PP2A*cytoplasm*kdephos)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa0_pUb0_to_cytoplasm_Foxo1_Pa0_pUb1_by_SCF, name = Function for conversion of cytoplasm_Foxo1_Pa0_pUb0 to cytoplasm_Foxo1_Pa0_pUb1 by SCF
Functi_35(SCF,cytoplasm,cytoplasm_Foxo1_Pa0_pUb0,kub)=(cytoplasm_Foxo1_Pa0_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa0_pUb0_to_nucleus_Foxo1_Pa0_pUb1_by_SCF, name = Function for conversion of nucleus_Foxo1_Pa0_pUb0 to nucleus_Foxo1_Pa0_pUb1 by SCF
Functi_36(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa0_pUb0)=(nucleus_Foxo1_Pa0_pUb0*nucleus*SCF*cytoplasm*kub)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa0_pUb0_to_dnabound_Foxo1_Pa0_pUb1_by_SCF, name = Function for conversion of dnabound_Foxo1_Pa0_pUb0 to dnabound_Foxo1_Pa0_pUb1 by SCF
Functi_37(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa0_pUb0,kub)=(dnabound_Foxo1_Pa0_pUb0*dnabound*SCF*cytoplasm*kub)


# FunctionDefinition id = Function_for_conversion_of_cytoplasm_Foxo1_Pa1_pUb0_to_cytoplasm_Foxo1_Pa1_pUb1_by_SCF, name = Function for conversion of cytoplasm_Foxo1_Pa1_pUb0 to cytoplasm_Foxo1_Pa1_pUb1 by SCF
Functi_38(SCF,cytoplasm,cytoplasm_Foxo1_Pa1_pUb0,kub)=(cytoplasm_Foxo1_Pa1_pUb0*cytoplasm*SCF*cytoplasm*kub/cytoplasm)


# FunctionDefinition id = Function_for_conversion_of_nucleus_Foxo1_Pa1_pUb0_to_nucleus_Foxo1_Pa1_pUb1_by_SCF, name = Function for conversion of nucleus_Foxo1_Pa1_pUb0 to nucleus_Foxo1_Pa1_pUb1 by SCF
Functi_39(SCF,cytoplasm,kub,nucleus,nucleus_Foxo1_Pa1_pUb0)=(nucleus_Foxo1_Pa1_pUb0*nucleus*SCF*cytoplasm*kub)


# FunctionDefinition id = Function_for_conversion_of_dnabound_Foxo1_Pa1_pUb0_to_dnabound_Foxo1_Pa1_pUb1_by_SCF, name = Function for conversion of dnabound_Foxo1_Pa1_pUb0 to dnabound_Foxo1_Pa1_pUb1 by SCF
Functi_40(SCF,cytoplasm,dnabound,dnabound_Foxo1_Pa1_pUb0,kub)=(dnabound_Foxo1_Pa1_pUb0*dnabound*SCF*cytoplasm*kub)


# FunctionDefinition id = Function_for_degradation_of_cytoplasm_Foxo1_Pa0_pUb1, name = Function for degradation of cytoplasm_Foxo1_Pa0_pUb1
Functi_41(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa0_pUb1,kdeg)=(cytoplasm_Foxo1_Pa0_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = Function_for_degradation_of_cytoplasm_Foxo1_Pa1_pUb1, name = Function for degradation of cytoplasm_Foxo1_Pa1_pUb1
Functi_42(Proteasome,cytoplasm,cytoplasm_Foxo1_Pa1_pUb1,kdeg)=(cytoplasm_Foxo1_Pa1_pUb1*cytoplasm*Proteasome*cytoplasm*kdeg/cytoplasm)


# FunctionDefinition id = Function_for_transcription_of_inr_by_dnabound_Foxo1_Pa0_pUb0, name = Function for transcription of inr by dnabound_Foxo1_Pa0_pUb0
Functi_43(dnabound,dnabound_Foxo1_Pa0_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_sod2_by_dnabound_Foxo1_Pa0_pUb0, name = Function for transcription of sod2 by dnabound_Foxo1_Pa0_pUb0
Functi_44(dnabound,dnabound_Foxo1_Pa0_pUb0,ktranscr)=(dnabound_Foxo1_Pa0_pUb0*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_inr_by_dnabound_Foxo1_Pa0_pUb1, name = Function for transcription of inr by dnabound_Foxo1_Pa0_pUb1
Functi_45(dnabound,dnabound_Foxo1_Pa0_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_sod2_by_dnabound_Foxo1_Pa0_pUb1, name = Function for transcription of sod2 by dnabound_Foxo1_Pa0_pUb1
Functi_46(dnabound,dnabound_Foxo1_Pa0_pUb1,ktranscr)=(dnabound_Foxo1_Pa0_pUb1*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_inr_by_dnabound_Foxo1_Pa1_pUb0, name = Function for transcription of inr by dnabound_Foxo1_Pa1_pUb0
Functi_47(dnabound,dnabound_Foxo1_Pa1_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_sod2_by_dnabound_Foxo1_Pa1_pUb0, name = Function for transcription of sod2 by dnabound_Foxo1_Pa1_pUb0
Functi_48(dnabound,dnabound_Foxo1_Pa1_pUb0,ktranscr)=(dnabound_Foxo1_Pa1_pUb0*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_inr_by_dnabound_Foxo1_Pa1_pUb1, name = Function for transcription of inr by dnabound_Foxo1_Pa1_pUb1
Functi_49(dnabound,dnabound_Foxo1_Pa1_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = Function_for_transcription_of_sod2_by_dnabound_Foxo1_Pa1_pUb1, name = Function for transcription of sod2 by dnabound_Foxo1_Pa1_pUb1
Functi_50(dnabound,dnabound_Foxo1_Pa1_pUb1,ktranscr)=(dnabound_Foxo1_Pa1_pUb1*dnabound*ktranscr)


# FunctionDefinition id = Function_for_export_of_inr_RNA, name = Function for export of inr RNA
Functi_51(kexp,nucleus,nucleus_RNA_Inr)=(nucleus_RNA_Inr*nucleus*kexp)


# FunctionDefinition id = Function_for_cyto_degr_of_inr_RNA, name = Function for cyto degr of inr RNA
Functi_52(cytoplasm,cytoplasm_RNA_Inr,kmdeg)=(cytoplasm_RNA_Inr*cytoplasm*kmdeg/cytoplasm)


# FunctionDefinition id = Function_for_translation_of_inr, name = Function for translation of inr
Functi_53(cytoplasm,cytoplasm_RNA_Inr,ktransl)=(cytoplasm_RNA_Inr*cytoplasm*ktransl/cytoplasm)


# FunctionDefinition id = Function_for_degradation_of_Inr_protein, name = Function for degradation of Inr protein
Functi_54(cytoplasm,cytoplasm_Inr,kpdeg)=(cytoplasm_Inr*cytoplasm*kpdeg/cytoplasm)


# FunctionDefinition id = Function_for_export_of_sod2_RNA, name = Function for export of sod2 RNA
Functi_55(kexp,nucleus,nucleus_RNA_Sod2)=(nucleus_RNA_Sod2*nucleus*kexp)


# FunctionDefinition id = Function_for_cyto_degr_of_sod2_RNA, name = Function for cyto degr of sod2 RNA
Functi_56(cytoplasm,cytoplasm_RNA_Sod2,kmdeg)=(cytoplasm_RNA_Sod2*cytoplasm*kmdeg/cytoplasm)


# FunctionDefinition id = Function_for_translation_of_sod2, name = Function for translation of sod2
Functi_57(cytoplasm,cytoplasm_RNA_Sod2,ktransl)=(cytoplasm_RNA_Sod2*cytoplasm*ktransl/cytoplasm)


# FunctionDefinition id = Function_for_degradation_of_Sod2_protein, name = Function for degradation of Sod2 protein
Functi_58(cytoplasm,cytoplasm_Sod2,kpdeg)=(cytoplasm_Sod2*cytoplasm*kpdeg/cytoplasm)


# Compartment: id = extracellular, name = extracellular, constant
par extracell=8.3E-12

# Compartment: id = cellsurface, name = cellsurface, constant
par cellsurfa=6.4E-14

# Compartment: id = cytoplasm, name = cytoplasm, constant
par cytoplasm=1.65E-11

# Compartment: id = nucleus, name = nucleus, constant
par nucleus=5.0E-13

# Compartment: id = dnabound, name = dnabound, constant
par dnabound=1.0E-13

# Parameter:   id =  transcription_rate, name = transcription_rate, constant
par transcrip=3.0

# Parameter:   id =  kmdeg, name = kmdeg, constant
par kmdeg=5.622

# Parameter:   id =  kpdeg, name = kpdeg, constant
par kpdeg=0.0019

# Parameter:   id =  kdeg, name = kdeg, constant
par kdeg=1.0E-4

# Parameter:   id =  kdephos, name = kdephos, constant
par kdephos=5.0E-5

# Parameter:   id =  kexp, name = kexp, constant
par kexp=0.22

# Parameter:   id =  kkin, name = kkin, constant
par kkin=5.0E-5

# Parameter:   id =  kub1, name = kub1, constant
par kub1=1.0E-6

# Parameter:   id =  kub2, name = kub2, constant
par kub2=3.0E-6

# Parameter:   id =  ksynth, name = ksynth, constant
par ksynth=0.0055

# Parameter:   id =  ktranscr, name = ktranscr, constant
par ktranscr=0.3

# Parameter:   id =  ktransl, name = ktransl, constant
par ktransl=1.23

# Parameter:   id =  ktr1_181818, name = ktr1_181818, constant
par ktr1_1818=0.181818

# Parameter:   id =  ktr2_0181818, name = ktr2_0181818, constant
par ktr2_0181=0.0181818

# Parameter:   id =  ktr3_125, name = ktr3_125, constant
par ktr3_125=0.125

# Parameter:   id =  ktr4_055, name = ktr4_055, constant
par ktr4_055=0.055

# Parameter:   id =  ktr5_25, name = ktr5_25, constant
par ktr5_25=0.25

# Parameter:   id =  ktr4_55, name = ktr4_55, constant
par ktr4_55=0.55

# Parameter:   id =  Metabolite_21, name = Initial for Foxo1_total, constant
par Metabolit=1.20481927710843E14

# assignmentRule: variable = Foxo1_pUb1_tot
Foxo1_p_1=(cytopla_2*cytoplasm+nucleus_1*nucleus+dnaboun_1*dnabound+cytopla_4*cytoplasm+nucleus_3*nucleus+dnaboun_3*dnabound)/extracell
aux Foxo1_p_1=Foxo1_p_1

# assignmentRule: variable = cytoplasm_Foxo1_tot
cytopla_5=(cytopla_1*cytoplasm+cytopla_2*cytoplasm+cytopla_3*cytoplasm+cytopla_4*cytoplasm)/extracell
aux cytopla_5=cytopla_5

# assignmentRule: variable = Foxo1_Pa0_tot
Foxo1_Pa0=(cytopla_1*cytoplasm+nucleus_F*nucleus+dnabound_*dnabound+cytopla_2*cytoplasm+nucleus_1*nucleus+dnaboun_1*dnabound)/extracell
aux Foxo1_Pa0=Foxo1_Pa0

# assignmentRule: variable = Foxo1_Pa1_tot
Foxo1_Pa1=(cytopla_3*cytoplasm+nucleus_2*nucleus+dnaboun_2*dnabound+cytopla_4*cytoplasm+nucleus_3*nucleus+dnaboun_3*dnabound)/extracell
aux Foxo1_Pa1=Foxo1_Pa1

# assignmentRule: variable = Foxo1_pUb0_tot
Foxo1_pUb=(cytopla_1*cytoplasm+nucleus_F*nucleus+dnabound_*dnabound+cytopla_3*cytoplasm+nucleus_2*nucleus+dnaboun_2*dnabound)/extracell
aux Foxo1_pUb=Foxo1_pUb

# assignmentRule: variable = nucleus_Foxo1_tot
nucleus_4=(nucleus_F*nucleus+nucleus_1*nucleus+nucleus_2*nucleus+nucleus_3*nucleus)/extracell
aux nucleus_4=nucleus_4

# assignmentRule: variable = dnabound_Foxo1_tot
dnaboun_4=(dnabound_*dnabound+dnaboun_1*dnabound+dnaboun_2*dnabound+dnaboun_3*dnabound)/extracell
aux dnaboun_4=dnaboun_4

# assignmentRule: variable = Foxo1_all
Foxo1_all=(cytopla_5*extracell+nucleus_4*extracell+dnaboun_4*extracell)/extracell
aux Foxo1_all=Foxo1_all

# assignmentRule: variable = Foxo1_total_rate
Foxo1_tot=Foxo1_all/Metabolit
aux Foxo1_tot=Foxo1_tot

# Reaction: id = R1, name = Synthesis

R1=cytoplasm*Function_(E2F1, cytoplasm, ksynth)

# Reaction: id = R2, name = transport cytoplasm_Foxo1 to nucleus_Foxo1

R2=Functio_1(cytoplasm, cytopla_1, ktr1_1818)

# Reaction: id = R3, name = transport nucleus_Foxo1 to cytoplasm_Foxo1

R3=Functio_2(ktr4_055, nucleus, nucleus_F)

# Reaction: id = R4, name = transport nucleus_Foxo1 to dnabound_Foxo1_

R4=Functio_3(ktr5_25, nucleus, nucleus_F)

# Reaction: id = R5, name = transport dnabound_Foxo1 to nucleus_Foxo1

R5=Functio_4(dnabound, dnabound_, ktr3_125)

# Reaction: id = R6, name = transport cytoplasm_Foxo1_polyubiquitinated to nucleus_Foxo1_polyubiquitinated

R6=Functio_5(cytoplasm, cytopla_2, ktr1_1818)

# Reaction: id = R7, name = transport nucleus_Foxo1_polyubiquitinated to cytoplasm_Foxo1_polyubiquitinated

R7=Functio_6(ktr4_055, nucleus, nucleus_1)

# Reaction: id = R8, name = transport nucleus_Foxo1_polyubiquitinated to dnabound_Foxo1_polyubiquitinated

R8=Functio_7(ktr5_25, nucleus, nucleus_1)

# Reaction: id = R9, name = transport dnabound_Foxo1_polyubiquitinated to nucleus_Foxo1_polyubiquitinated

R9=Functio_8(dnabound, dnaboun_1, ktr3_125)

# Reaction: id = R10, name = transport cytoplasm_Foxo1_phosphorylated to nucleus_Foxo1_phosphorylated

R10=Functio_9(cytoplasm, cytopla_3, ktr2_0181)

# Reaction: id = R11, name = transport nucleus_Foxo1_phosphorylated to cytoplasm_Foxo1_phosphorylated

R11=Functi_10(ktr4_55, nucleus, nucleus_2)

# Reaction: id = R12, name = transport nucleus_Foxo1_phosphorylated to dnabound_Foxo1_phosphorylated

R12=Functi_11(ktr3_125, nucleus, nucleus_2)

# Reaction: id = R13, name = transport dnabound_Foxo1_phosphorylated to nucleus_Foxo1_phosphorylated

R13=Functi_12(dnabound, dnaboun_2, ktr3_125)

# Reaction: id = R14, name = transport cytoplasm_Foxo1_phosphorylated_polyubiquitinated to nucleus_Foxo1_phosphorylated_polyubiquitinated

R14=Functi_13(cytoplasm, cytopla_4, ktr2_0181)

# Reaction: id = R15, name = transport nucleus_Foxo1_phosphorylated_polyubiquitinated to cytoplasm_Foxo1_phosphorylated_polyubiquitinated

R15=Functi_14(ktr4_55, nucleus, nucleus_3)

# Reaction: id = R16, name = transport nucleus_Foxo1_phosphorylated_polyubiquitinated to dnabound_Foxo1_phosphorylated_polyubiquitinated

R16=Functi_15(ktr3_125, nucleus, nucleus_3)

# Reaction: id = R17, name = transport dnabound_Foxo1_phosphorylated_polyubiquitinated to nucleus_Foxo1_phosphorylated_polyubiquitinated

R17=Functi_16(dnabound, dnaboun_3, ktr3_125)

# Reaction: id = R18, name = phosphorylation of cytoplasm_Foxo1_not_polyubiquitinated Akt

R18=cytoplasm*Functi_17(Akt, cytoplasm, cytopla_1, kkin)

# Reaction: id = R19, name = phosphorylation of nucleus_Foxo1_not_polyubiquitinated by Akt

R19=Functi_18(Akt, cytoplasm, kkin, nucleus, nucleus_F)

# Reaction: id = R20, name = phosphorylation of dnabound_Foxo1_phosphorylated

R20=Functi_19(Akt, cytoplasm, dnabound, dnabound_, kkin)

# Reaction: id = R21, name = phosphorylation of cytoplasm_Foxo1_polyubiquitinated

R21=cytoplasm*Functi_20(Akt, cytoplasm, cytopla_2, kkin)

# Reaction: id = R22, name = phosphorylation of nucleus_Foxo1_polyubiquitinated

R22=Functi_21(Akt, cytoplasm, kkin, nucleus, nucleus_1)

# Reaction: id = R23, name = phosphorylation of dnabound_Foxo1_polyubiquitinated

R23=Functi_22(Akt, cytoplasm, dnabound, dnaboun_1, kkin)

# Reaction: id = R24, name = phosphorylation of cytoplasm_Foxo1 to cytoplasm_Foxo1_phosphorylated by SGK

R24=cytoplasm*Functi_23(SGK, cytoplasm, cytopla_1, kkin)

# Reaction: id = R25, name = phosphorylation of nucleus_Foxo1 to nucleus_Foxo1_phosphorylated by SGK

R25=Functi_24(SGK, cytoplasm, kkin, nucleus, nucleus_F)

# Reaction: id = R26, name = phosphorylation of dnabound_Foxo1 to dnabound_Foxo1_phosphorylated by SGK

R26=Functi_25(SGK, cytoplasm, dnabound, dnabound_, kkin)

# Reaction: id = R27, name = phosphorylation of cytoplasm_Foxo1_polyubiquitinated to cytoplasm_Foxo1_phosphorylated_polyubiquitinated by SGK

R27=cytoplasm*Functi_26(SGK, cytoplasm, cytopla_2, kkin)

# Reaction: id = R28, name = phosphorylation of nucleus_Foxo1_polyubiquitinated to nucleus_Foxo1_phosphorylated_polyubiquitinatedby SGK

R28=Functi_27(SGK, cytoplasm, kkin, nucleus, nucleus_1)

# Reaction: id = R29, name = phosphorylation of dnabound_Foxo1_polyubiquitinated to dnabound_Foxo1_phosphorylated_polyubiquitinated by SGK

R29=Functi_28(SGK, cytoplasm, dnabound, dnaboun_1, kkin)

# Reaction: id = R30, name = dephosphorylation of cytoplasm_Foxo1_phosphorylated

R30=cytoplasm*Functi_29(PP2A, cytoplasm, cytopla_3, kdephos)

# Reaction: id = R31, name = dephosphorylation of nucleus_Foxo1_phosphorylated

R31=Functi_30(PP2A, cytoplasm, kdephos, nucleus, nucleus_2)

# Reaction: id = R32, name = dephosphorylation of dnabound_Foxo1_phosphorylated

R32=Functi_31(PP2A, cytoplasm, dnabound, dnaboun_2, kdephos)

# Reaction: id = R33, name = dephosphorylation of cytoplasm_Foxo1_phosphorylated_polyubiquitinated

R33=cytoplasm*Functi_32(PP2A, cytoplasm, cytopla_4, kdephos)

# Reaction: id = R34, name = dephosphorylation of nucleus_Foxo1_phosphorylated_polyubiquitinated

R34=Functi_33(PP2A, cytoplasm, kdephos, nucleus, nucleus_3)

# Reaction: id = R35, name = dephosphorylation of dnabound_Foxo1_phosphorylated_polyubiquitinated

R35=Functi_34(PP2A, cytoplasm, dnabound, dnaboun_3, kdephos)

# Reaction: id = R36, name = polyubiquination of cytoplasm_Foxo1

R36=cytoplasm*Functi_35(SCF, cytoplasm, cytopla_1, kub1)

# Reaction: id = R37, name = polyubiquination of nucleus_Foxo1

R37=Functi_36(SCF, cytoplasm, kub1, nucleus, nucleus_F)

# Reaction: id = R38, name = polyubiquination of dnabound_Foxo1

R38=Functi_37(SCF, cytoplasm, dnabound, dnabound_, kub1)

# Reaction: id = R39, name = polyubiquination of cytoplasm_Foxo1_phosphorylated

R39=cytoplasm*Functi_38(SCF, cytoplasm, cytopla_3, kub2)

# Reaction: id = R40, name = polyubiquination of nucleus_Foxo1_phosphorylated

R40=Functi_39(SCF, cytoplasm, kub2, nucleus, nucleus_2)

# Reaction: id = R41, name = polyubiquination of dnabound_Foxo1_phosphorylated

R41=Functi_40(SCF, cytoplasm, dnabound, dnaboun_2, kub2)

# Reaction: id = R42, name = degradation of cytoplasm_Foxo1_polyubiquitinated

R42=cytoplasm*Functi_41(Proteasom, cytoplasm, cytopla_2, kdeg)

# Reaction: id = R43, name = degradation of cytoplasm_Foxo1_Pa1_polyubiquitinated

R43=cytoplasm*Functi_42(Proteasom, cytoplasm, cytopla_4, kdeg)

# Reaction: id = R44, name = transcription of inr by dnabound_Foxo1

R44=Functi_43(dnabound, dnabound_, ktranscr)

# Reaction: id = R45, name = transcription of sod2 by dnabound_Foxo1

R45=Functi_44(dnabound, dnabound_, ktranscr)

# Reaction: id = R46, name = transcription of inr by dnabound_Foxo1_polyubiquitinated

R46=Functi_45(dnabound, dnaboun_1, ktranscr)

# Reaction: id = R47, name = transcription of sod2 by dnabound_Foxo1_polyubiquitinated

R47=Functi_46(dnabound, dnaboun_1, ktranscr)

# Reaction: id = R48, name = transcription of inr by dnabound_Foxo1_phosphorylated

R48=Functi_47(dnabound, dnaboun_2, ktranscr)

# Reaction: id = R49, name = transcription of sod2 by dnabound_Foxo1_phosphorylated

R49=Functi_48(dnabound, dnaboun_2, ktranscr)

# Reaction: id = R50, name = transcription of inr by dnabound_Foxo1_Pa1_polyubiquitinated

R50=Functi_49(dnabound, dnaboun_3, ktranscr)

# Reaction: id = R51, name = transcription of sod2 by dnabound_Foxo1_Pa1_polyubiquitinated

R51=Functi_50(dnabound, dnaboun_3, ktranscr)

# Reaction: id = R52, name = basal transcription of inr

R52=Constant_(transcrip)

# Reaction: id = R53, name = export of inr RNA

R53=Functi_51(kexp, nucleus, nucleus_R)

# Reaction: id = R54, name = cyto degradation of inr RNA

R54=cytoplasm*Functi_52(cytoplasm, cytopla_6, kmdeg)

# Reaction: id = R55, name = translation of inr

R55=cytoplasm*Functi_53(cytoplasm, cytopla_6, ktransl)

# Reaction: id = R56, name = degradation of Inr protein

R56=cytoplasm*Functi_54(cytoplasm, cytopla_7, kpdeg)

# Reaction: id = R57, name = basal transcription of sod2

R57=Constant_(transcrip)

# Reaction: id = R58, name = export of sod2 RNA

R58=Functi_55(kexp, nucleus, nucleus_5)

# Reaction: id = R59, name = cyto degradation of sod2 RNA

R59=cytoplasm*Functi_56(cytoplasm, cytopla_8, kmdeg)

# Reaction: id = R60, name = translation of sod2

R60=cytoplasm*Functi_57(cytoplasm, cytopla_8, ktransl)

# Reaction: id = R61, name = degradation of Sod2 protein

R61=cytoplasm*Functi_58(cytoplasm, cytopla_9, kpdeg)

# Species:   id = null, name = null, constant
par null=0.0


# Species:   id = degr_Foxo1, name = degr_Foxo1, constant
par degr_Foxo=0.0


# Species:   id = cytoplasm_Foxo1_Pa0_pUb0, name = cytoplasm_Foxo1_unpolyubiquitinated_unphosphorylated, affected by kineticLaw

par cytopla_1=6.06060606060606E13
aux cytopla_1=cytopla_1
dcytopla_1/dt=(1/(cytoplasm))*(( 1.0 * R1) + (-1.0 * R2) + ( 1.0 * R3) + (-1.0 * R18) + (-1.0 * R24) + ( 1.0 * R30) + (-1.0 * R36))

# Species:   id = nucleus_Foxo1_Pa0_pUb0, name = nucleus_Foxo1_unpolyubiquitinated_unphosphorylated, affected by kineticLaw

par nucleus_F=0.0
aux nucleus_F=nucleus_F
dnucleus_F/dt=(1/(nucleus))*(( 1.0 * R2) + (-1.0 * R3) + (-1.0 * R4) + ( 1.0 * R5) + (-1.0 * R19) + (-1.0 * R25) + ( 1.0 * R31) + (-1.0 * R37))

# Species:   id = dnabound_Foxo1_Pa0_pUb0, name = dnabound_Foxo1_unpolyubiquitinated_unphosphorylated, affected by kineticLaw

par dnabound_=0.0
aux dnabound_=dnabound_
ddnabound_/dt=(1/(dnabound))*(( 1.0 * R4) + (-1.0 * R5) + (-1.0 * R20) + (-1.0 * R26) + ( 1.0 * R32) + (-1.0 * R38))

# Species:   id = cytoplasm_Foxo1_Pa0_pUb1, name = cytoplasm_Foxo1_polyubiquitinated, affected by kineticLaw

par cytopla_2=0.0
aux cytopla_2=cytopla_2
dcytopla_2/dt=(1/(cytoplasm))*((-1.0 * R6) + ( 1.0 * R7) + (-1.0 * R21) + (-1.0 * R27) + ( 1.0 * R33) + ( 1.0 * R36) + (-1.0 * R42))

# Species:   id = nucleus_Foxo1_Pa0_pUb1, name = nucleus_Foxo1_polyubiquitinated, affected by kineticLaw

par nucleus_1=0.0
aux nucleus_1=nucleus_1
dnucleus_1/dt=(1/(nucleus))*(( 1.0 * R6) + (-1.0 * R7) + (-1.0 * R8) + ( 1.0 * R9) + (-1.0 * R22) + (-1.0 * R28) + ( 1.0 * R34) + ( 1.0 * R37))

# Species:   id = dnabound_Foxo1_Pa0_pUb1, name = dnabound_Foxo1_polyubiquitinated, affected by kineticLaw

par dnaboun_1=0.0
aux dnaboun_1=dnaboun_1
ddnaboun_1/dt=(1/(dnabound))*(( 1.0 * R8) + (-1.0 * R9) + (-1.0 * R23) + (-1.0 * R29) + ( 1.0 * R35) + ( 1.0 * R38))

# Species:   id = cytoplasm_Foxo1_Pa1_pUb0, name = cytoplasm_Foxo1_phosphorylated, affected by kineticLaw

par cytopla_3=0.0
aux cytopla_3=cytopla_3
dcytopla_3/dt=(1/(cytoplasm))*((-1.0 * R10) + ( 1.0 * R11) + ( 1.0 * R18) + ( 1.0 * R24) + (-1.0 * R30) + (-1.0 * R39))

# Species:   id = nucleus_Foxo1_Pa1_pUb0, name = nucleus_Foxo1_phosphorylated, affected by kineticLaw

par nucleus_2=0.0
aux nucleus_2=nucleus_2
dnucleus_2/dt=(1/(nucleus))*(( 1.0 * R10) + (-1.0 * R11) + (-1.0 * R12) + ( 1.0 * R13) + ( 1.0 * R19) + ( 1.0 * R25) + (-1.0 * R31) + (-1.0 * R40))

# Species:   id = dnabound_Foxo1_Pa1_pUb0, name = dnabound_Foxo1_phosphorylated, affected by kineticLaw

par dnaboun_2=0.0
aux dnaboun_2=dnaboun_2
ddnaboun_2/dt=(1/(dnabound))*(( 1.0 * R12) + (-1.0 * R13) + ( 1.0 * R20) + ( 1.0 * R26) + (-1.0 * R32) + (-1.0 * R41))

# Species:   id = cytoplasm_Foxo1_Pa1_pUb1, name = cytoplasm_Foxo1_polyubiquitinated_phosphorylated, affected by kineticLaw

par cytopla_4=0.0
aux cytopla_4=cytopla_4
dcytopla_4/dt=(1/(cytoplasm))*((-1.0 * R14) + ( 1.0 * R15) + ( 1.0 * R21) + ( 1.0 * R27) + (-1.0 * R33) + ( 1.0 * R39) + (-1.0 * R43))

# Species:   id = nucleus_Foxo1_Pa1_pUb1, name = nucleus_Foxo1_polyubiquitinated_phosphorylated, affected by kineticLaw

par nucleus_3=0.0
aux nucleus_3=nucleus_3
dnucleus_3/dt=(1/(nucleus))*(( 1.0 * R14) + (-1.0 * R15) + (-1.0 * R16) + ( 1.0 * R17) + ( 1.0 * R22) + ( 1.0 * R28) + (-1.0 * R34) + ( 1.0 * R40))

# Species:   id = dnabound_Foxo1_Pa1_pUb1, name = dnabound_Foxo1_polyubiquitinated_phosphorylated, affected by kineticLaw

par dnaboun_3=0.0
aux dnaboun_3=dnaboun_3
ddnaboun_3/dt=(1/(dnabound))*(( 1.0 * R16) + (-1.0 * R17) + ( 1.0 * R23) + ( 1.0 * R29) + (-1.0 * R35) + ( 1.0 * R41))

# Species:   id = Foxo1_Pa0_tot, name = Foxo1_unphosphorylated_total, involved in a rule 

# Species:   id = Foxo1_Pa1_tot, name = Foxo1_phosphorylated_total, involved in a rule 

# Species:   id = Foxo1_pUb0_tot, name = Foxo1_unpolyubiquitinated_total, involved in a rule 

# Species:   id = Foxo1_pUb1_tot, name = Foxo1_polyubiquitinated_total, involved in a rule 

# Species:   id = cytoplasm_Foxo1_tot, name = cytoplasm_Foxo1_total, involved in a rule 

# Species:   id = nucleus_Foxo1_tot, name = nucleus_Foxo1_total, involved in a rule 

# Species:   id = dnabound_Foxo1_tot, name = dnabound_Foxo1_total, involved in a rule 

# Species:   id = Foxo1_all, name = Foxo1_total, involved in a rule 

# Species:   id = nucleus_RNA_Inr, name = nucleus_RNA_Inr, affected by kineticLaw

par nucleus_R=0.0
aux nucleus_R=nucleus_R
dnucleus_R/dt=(1/(nucleus))*(( 1.0 * R44) + ( 1.0 * R46) + ( 1.0 * R48) + ( 1.0 * R50) + ( 1.0 * R52) + (-1.0 * R53))

# Species:   id = cytoplasm_RNA_Inr, name = cytoplasm_RNA_Inr, affected by kineticLaw

par cytopla_6=0.0
aux cytopla_6=cytopla_6
dcytopla_6/dt=(1/(cytoplasm))*(( 1.0 * R53) + (-1.0 * R54))

# Species:   id = cytoplasm_Inr, name = cytoplasm_Inr, affected by kineticLaw

par cytopla_7=0.0
aux cytopla_7=cytopla_7
dcytopla_7/dt=(1/(cytoplasm))*(( 1.0 * R55) + (-1.0 * R56))

# Species:   id = nucleus_RNA_Sod2, name = nucleus_RNA_Sod2, affected by kineticLaw

par nucleus_5=0.0
aux nucleus_5=nucleus_5
dnucleus_5/dt=(1/(nucleus))*(( 1.0 * R45) + ( 1.0 * R47) + ( 1.0 * R49) + ( 1.0 * R51) + ( 1.0 * R57) + (-1.0 * R58))

# Species:   id = cytoplasm_RNA_Sod2, name = cytoplasm_RNA_Sod2, affected by kineticLaw

par cytopla_8=0.0
aux cytopla_8=cytopla_8
dcytopla_8/dt=(1/(cytoplasm))*(( 1.0 * R58) + (-1.0 * R59))

# Species:   id = cytoplasm_Sod2, name = cytoplasm_Sod2, affected by kineticLaw

par cytopla_9=0.0
aux cytopla_9=cytopla_9
dcytopla_9/dt=(1/(cytoplasm))*(( 1.0 * R60) + (-1.0 * R61))

# Species:   id = E2F1, name = E2F1
# Warning species is not changed by either rules or reactions

par E2F1=6.06060606060606E12
aux E2F1=E2F1

# Species:   id = Akt, name = Akt
# Warning species is not changed by either rules or reactions

par Akt=1.51515151515152E15
aux Akt=Akt

# Species:   id = SGK, name = SGK
# Warning species is not changed by either rules or reactions

par SGK=0.0
aux SGK=SGK

# Species:   id = CDK2, name = CDK2
# Warning species is not changed by either rules or reactions

par CDK2=0.0
aux CDK2=CDK2

# Species:   id = AMPK, name = AMPK
# Warning species is not changed by either rules or reactions

par AMPK=0.0
aux AMPK=AMPK

# Species:   id = IKKb, name = IKK
# Warning species is not changed by either rules or reactions

par IKKb=0.0
aux IKKb=IKKb

# Species:   id = JNK, name = JNK
# Warning species is not changed by either rules or reactions

par JNK=0.0
aux JNK=JNK

# Species:   id = PP2A, name = PP2A
# Warning species is not changed by either rules or reactions

par PP2A=6.06060606060606E14
aux PP2A=PP2A

# Species:   id = CBPP300, name = CBPP300
# Warning species is not changed by either rules or reactions

par CBPP300=0.0
aux CBPP300=CBPP300

# Species:   id = SIRT1, name = SIRT1
# Warning species is not changed by either rules or reactions

par SIRT1=0.0
aux SIRT1=SIRT1

# Species:   id = E3, name = E3
# Warning species is not changed by either rules or reactions

par E3=0.0
aux E3=E3

# Species:   id = USP7, name = USP7
# Warning species is not changed by either rules or reactions

par USP7=6.06060606060606E13
aux USP7=USP7

# Species:   id = SCF, name = SCF
# Warning species is not changed by either rules or reactions

par SCF=6.06060606060606E13
aux SCF=SCF

# Species:   id = Proteasome, name = Proteasome
# Warning species is not changed by either rules or reactions

par Proteasom=0.0
aux Proteasom=Proteasom

# Species:   id = Foxo1_total_rate, name = Foxo1_total_rate, involved in a rule 

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

