
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Chen2011/1 - bone marrow invasion absolute model
#
# is http://identifiers.org/biomodels.db/MODEL1908130002
# is http://identifiers.org/biomodels.db/BIOMD0000000793
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = hg, name = hg
hg(b1,H)=(b1*H*(1-H))


# FunctionDefinition id = tg, name = tg
tg(b2,T,H)=(b2*T*(1-T-H))


# FunctionDefinition id = ti, name = ti
ti(b1,T,H)=(b1*T*H)


# Compartment: id = bone_marrow, name = bone marrow, constant
par bone_marr=1.0

# Parameter:   id =  b1, name = b1, constant
par b1=0.2

# Parameter:   id =  u1, name = u1, constant
par u1=0.1

# Parameter:   id =  b2, name = b2, constant
par b2=0.8

# Parameter:   id =  u2, name = u2, constant
par u2=0.1

# Reaction: id = HSC_growth, name = HSC growth

HSC_growt=bone_marr*hg(b1, H)

# Reaction: id = HSC_death, name = HSC death

HSC_death=bone_marr*u1*H

# Reaction: id = Tumor_growth, name = Tumor growth

Tumor_gro=bone_marr*tg(b2, T_renamed, H)

# Reaction: id = Tumor_death, name = Tumor death

Tumor_dea=bone_marr*u2*T_renamed

# Reaction: id = Tumor_inhibition, name = Tumor inhibition

Tumor_inh=bone_marr*ti(b1, T_renamed, H)

# Species:   id = H, name = H, affected by kineticLaw

init H=0.6
dH/dt=(1/(bone_marr))*(( 1.0 * HSC_growt) + (-1.0 * HSC_death))

# Species:   id = T, name = T, affected by kineticLaw

par T_renamed=1.0E-4
aux T_renamed=T_renamed
dT_renamed/dt=(1/(bone_marr))*(( 1.0 * Tumor_gro) + (-1.0 * Tumor_dea) + (-1.0 * Tumor_inh))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

