
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Verma2016 - Ca(2+) Signal Propagation Along Hepatocyte Cords
#
# isInstanceOf http://identifiers.org/go/GO:0019722
# isInstanceOf http://identifiers.org/biomodels.db/MODEL1603110003
# isInstanceOf http://identifiers.org/taxonomy/9606
# isInstanceOf http://identifiers.org/bto/BTO:0000575
# isDescribedBy http://identifiers.org/taxonomy/9606
# isDescribedBy http://identifiers.org/bto/BTO:0000575
# isDescribedBy http://identifiers.org/pubmed/27076052
# is http://identifiers.org/biomodels.db/MODEL1603110003
# is http://identifiers.org/biomodels.db/BIOMD0000000834
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Constant_flux__reversible, name = Constant flux (reversible)
Constant_(v)=(v)


# FunctionDefinition id = function_4_r127, name = function_4_r127
function_(D,IP3_15)=(0.5*D*IP3_15)


# FunctionDefinition id = function_4_r139, name = function_4_r139
functio_1(G,IP3_10,IP3_11,cytosol11)=(G*(IP3_11+(-IP3_10))*cytosol11)


# FunctionDefinition id = function_4_r134, name = function_4_r134
functio_2(A,CaI_14,CaT_14,IP3_14,L,g_14,k1,store14)=((1+(-g_14))*(A*(0.5*IP3_14)^4*1/(k1+0.5*IP3_14)^4+L)*(CaT_14+(-CaI_14))*store14)


# FunctionDefinition id = function_4_r141, name = function_4_r141
functio_3(G,IP3_12,IP3_13,cytosol13)=(G*(IP3_13+(-IP3_12))*cytosol13)


# FunctionDefinition id = function_4_r143, name = function_4_r143
functio_4(G,IP3_11,IP3_12,cytosol12)=(G*(IP3_12+(-IP3_11))*cytosol12)


# FunctionDefinition id = function_4_r1, name = function_4_r1
functio_5(H,k_HR,k_d,k_r1,r_1)=(k_d*r_1+k_HR*H*r_1+k_r1*r_1)


# FunctionDefinition id = function_4_r4, name = function_4_r4
functio_6(D,IP3_1)=(0.5*D*IP3_1)


# FunctionDefinition id = function_4_r3, name = function_4_r3
functio_7(A,CaI_1,CaT_1,IP3_1,L,g_1,k1,store1)=((1+(-g_1))*(A*(0.5*IP3_1)^4*1/(k1+0.5*IP3_1)^4+L)*(CaT_1+(-CaI_1))*store1)


# FunctionDefinition id = function_4_r14, name = function_4_r14
functio_8(D,IP3_2)=(0.5*D*IP3_2)


# FunctionDefinition id = function_4_r12, name = function_4_r12
functio_9(H,k_HR,k_d,k_r2,r_2)=(k_d*r_2+k_HR*H*r_2+k_r2*r_2)


# FunctionDefinition id = function_4_r13, name = function_4_r13
functi_10(CaI_2,E,g_2)=(E*CaI_2^4*(1+(-g_2)))


# FunctionDefinition id = function_4_r9, name = function_4_r9
functi_11(A,CaI_2,CaT_2,IP3_2,L,g_2,k1,store2)=((1+(-g_2))*(A*(0.5*IP3_2)^4*1/(k1+0.5*IP3_2)^4+L)*(CaT_2+(-CaI_2))*store2)


# FunctionDefinition id = function_4_r0, name = function_4_r0
functi_12(CaI_1,H,k3,k_ip31,kcat,r_1)=(k_ip31*H*r_1*(1+(-k3*1/(CaI_1+k3)))*1/(kcat+r_1))


# FunctionDefinition id = function_4_r5, name = function_4_r5
functi_13(B,CaI_1,cytosol1,k2)=(B*CaI_1^2*1/(k2^2+CaI_1^2)*cytosol1)


# FunctionDefinition id = function_4_r6, name = function_4_r6
functi_14(CaI_1,E,g_1)=(E*CaI_1^4*(1+(-g_1)))


# FunctionDefinition id = function_4_r8, name = function_4_r8
functi_15(CaI_2,H,k3,k_ip32,kcat,r_2)=(k_ip32*H*r_2*(1+(-k3*1/(CaI_2+k3)))*1/(kcat+r_2))


# FunctionDefinition id = function_4_r25, name = function_4_r25
functi_16(CaI_3,E,g_3)=(E*CaI_3^4*(1+(-g_3)))


# FunctionDefinition id = function_4_r19, name = function_4_r19
functi_17(A,CaI_3,CaT_3,IP3_3,L,g_3,k1,store3)=((1+(-g_3))*(A*(0.5*IP3_3)^4*1/(k1+0.5*IP3_3)^4+L)*(CaT_3+(-CaI_3))*store3)


# FunctionDefinition id = function_4_r15, name = function_4_r15
functi_18(B,CaI_2,cytosol2,k2)=(B*CaI_2^2*1/(k2^2+CaI_2^2)*cytosol2)


# FunctionDefinition id = function_4_r16, name = function_4_r16
functi_19(G,IP3_1,IP3_2,cytosol1)=(G*(IP3_1+(-IP3_2))*cytosol1)


# FunctionDefinition id = function_4_r18, name = function_4_r18
functi_20(CaI_3,H,k3,k_ip33,kcat,r_3)=(k_ip33*H*r_3*(1+(-k3*1/(CaI_3+k3)))*1/(kcat+r_3))


# FunctionDefinition id = function_4_r21, name = function_4_r21
functi_21(H,k_HR,k_d,k_r3,r_3)=(k_d*r_3+k_HR*H*r_3+k_r3*r_3)


# FunctionDefinition id = function_4_r23, name = function_4_r23
functi_22(D,IP3_3)=(0.5*D*IP3_3)


# FunctionDefinition id = function_4_r30, name = function_4_r30
functi_23(D,IP3_4)=(0.5*D*IP3_4)


# FunctionDefinition id = function_4_r33, name = function_4_r33
functi_24(CaI_4,E,g_4)=(E*CaI_4^4*(1+(-g_4)))


# FunctionDefinition id = function_4_r34, name = function_4_r34
functi_25(A,CaI_4,CaT_4,IP3_4,L,g_4,k1,store4)=((1+(-g_4))*(A*(0.5*IP3_4)^4*1/(k1+0.5*IP3_4)^4+L)*(CaT_4+(-CaI_4))*store4)


# FunctionDefinition id = function_4_r24, name = function_4_r24
functi_26(B,CaI_3,cytosol3,k2)=(B*CaI_3^2*1/(k2^2+CaI_3^2)*cytosol3)


# FunctionDefinition id = function_4_r27, name = function_4_r27
functi_27(G,IP3_2,IP3_3,cytosol3)=(G*(IP3_3+(-IP3_2))*cytosol3)


# FunctionDefinition id = function_4_r28, name = function_4_r28
functi_28(H,k_HR,k_d,k_r4,r_4)=(k_d*r_4+k_HR*H*r_4+k_r4*r_4)


# FunctionDefinition id = function_4_r29, name = function_4_r29
functi_29(CaI_4,H,k3,k_ip34,kcat,r_4)=(k_ip34*H*r_4*(1+(-k3*1/(CaI_4+k3)))*1/(kcat+r_4))


# FunctionDefinition id = function_4_r43, name = function_4_r43
functi_30(D,IP3_5)=(0.5*D*IP3_5)


# FunctionDefinition id = function_4_r40, name = function_4_r40
functi_31(A,CaI_5,CaT_5,IP3_5,L,g_5,k1,store5)=((1+(-g_5))*(A*(0.5*IP3_5)^4*1/(k1+0.5*IP3_5)^4+L)*(CaT_5+(-CaI_5))*store5)


# FunctionDefinition id = function_4_r35, name = function_4_r35
functi_32(B,CaI_4,cytosol4,k2)=(B*CaI_4^2*1/(k2^2+CaI_4^2)*cytosol4)


# FunctionDefinition id = function_4_r37, name = function_4_r37
functi_33(G,IP3_3,IP3_4,cytosol4)=(G*(IP3_4+(-IP3_3))*cytosol4)


# FunctionDefinition id = function_4_r38, name = function_4_r38
functi_34(H,k_HR,k_d,k_r5,r_5)=(k_d*r_5+k_HR*H*r_5+k_r5*r_5)


# FunctionDefinition id = function_4_r39, name = function_4_r39
functi_35(CaI_5,E,g_5)=(E*CaI_5^4*(1+(-g_5)))


# FunctionDefinition id = function_4_r42, name = function_4_r42
functi_36(CaI_5,H,k3,k_ip35,kcat,r_5)=(k_ip35*H*r_5*(1+(-k3*1/(CaI_5+k3)))*1/(kcat+r_5))


# FunctionDefinition id = function_4_r55, name = function_4_r55
functi_37(CaI_6,H,k3,k_ip36,kcat,r_6)=(k_ip36*H*r_6*(1+(-k3*1/(CaI_6+k3)))*1/(kcat+r_6))


# FunctionDefinition id = function_4_r54, name = function_4_r54
functi_38(D,IP3_6)=(0.5*D*IP3_6)


# FunctionDefinition id = function_4_r64, name = function_4_r64
functi_39(B,CaI_7,cytosol7,k2)=(B*CaI_7^2*1/(k2^2+CaI_7^2)*cytosol7)


# FunctionDefinition id = function_4_r57, name = function_4_r57
functi_40(G,IP3_5,IP3_6,cytosol6)=(G*(IP3_6+(-IP3_5))*cytosol6)


# FunctionDefinition id = function_4_r58, name = function_4_r58
functi_41(CaI_7,E,g_7)=(E*CaI_7^4*(1+(-g_7)))


# FunctionDefinition id = function_4_r60, name = function_4_r60
functi_42(CaI_7,H,k3,k_ip37,kcat,r_7)=(k_ip37*H*r_7*(1+(-k3*1/(CaI_7+k3)))*1/(kcat+r_7))


# FunctionDefinition id = function_4_r45, name = function_4_r45
functi_43(B,CaI_5,cytosol5,k2)=(B*CaI_5^2*1/(k2^2+CaI_5^2)*cytosol5)


# FunctionDefinition id = function_4_r47, name = function_4_r47
functi_44(G,IP3_4,IP3_5,cytosol5)=(G*(IP3_5+(-IP3_4))*cytosol5)


# FunctionDefinition id = function_4_r51, name = function_4_r51
functi_45(CaI_6,E,g_6)=(E*CaI_6^4*(1+(-g_6)))


# FunctionDefinition id = function_4_r53, name = function_4_r53
functi_46(H,k_HR,k_d,k_r6,r_6)=(k_d*r_6+k_HR*H*r_6+k_r6*r_6)


# FunctionDefinition id = function_4_r62, name = function_4_r62
functi_47(D,IP3_7)=(0.5*D*IP3_7)


# FunctionDefinition id = function_4_r63, name = function_4_r63
functi_48(H,k_HR,k_d,k_r7,r_7)=(k_d*r_7+k_HR*H*r_7+k_r7*r_7)


# FunctionDefinition id = function_4_r68, name = function_4_r68
functi_49(D,IP3_8)=(0.5*D*IP3_8)


# FunctionDefinition id = function_4_r71, name = function_4_r71
functi_50(H,k_HR,k_d,k_r8,r_8)=(k_d*r_8+k_HR*H*r_8+k_r8*r_8)


# FunctionDefinition id = function_4_r70, name = function_4_r70
functi_51(CaI_8,E,g_8)=(E*CaI_8^4*(1+(-g_8)))


# FunctionDefinition id = function_4_r67, name = function_4_r67
functi_52(G,IP3_6,IP3_7,cytosol7)=(G*(IP3_7+(-IP3_6))*cytosol7)


# FunctionDefinition id = function_4_r48, name = function_4_r48
functi_53(B,CaI_6,cytosol6,k2)=(B*CaI_6^2*1/(k2^2+CaI_6^2)*cytosol6)


# FunctionDefinition id = function_4_r50, name = function_4_r50
functi_54(A,CaI_6,CaT_6,IP3_6,L,g_6,k1,store6)=((1+(-g_6))*(A*(0.5*IP3_6)^4*1/(k1+0.5*IP3_6)^4+L)*(CaT_6+(-CaI_6))*store6)


# FunctionDefinition id = function_4_r73, name = function_4_r73
functi_55(CaI_8,H,k3,k_ip38,kcat,r_8)=(k_ip38*H*r_8*(1+(-k3*1/(CaI_8+k3)))*1/(kcat+r_8))


# FunctionDefinition id = function_4_r61, name = function_4_r61
functi_56(A,CaI_7,CaT_7,IP3_7,L,g_7,k1,store7)=((1+(-g_7))*(A*(0.5*IP3_7)^4*1/(k1+0.5*IP3_7)^4+L)*(CaT_7+(-CaI_7))*store7)


# FunctionDefinition id = function_4_r78, name = function_4_r78
functi_57(CaI_9,E,g_9)=(E*CaI_9^4*(1+(-g_9)))


# FunctionDefinition id = function_4_r81, name = function_4_r81
functi_58(CaI_9,H,k3,k_ip39,kcat,r_9)=(k_ip39*H*r_9*(1+(-k3*1/(CaI_9+k3)))*1/(kcat+r_9))


# FunctionDefinition id = function_4_r72, name = function_4_r72
functi_59(A,CaI_8,CaT_8,IP3_8,L,g_8,k1,store8)=((1+(-g_8))*(A*(0.5*IP3_8)^4*1/(k1+0.5*IP3_8)^4+L)*(CaT_8+(-CaI_8))*store8)


# FunctionDefinition id = function_4_r75, name = function_4_r75
functi_60(B,CaI_8,cytosol8,k2)=(B*CaI_8^2*1/(k2^2+CaI_8^2)*cytosol8)


# FunctionDefinition id = function_4_r77, name = function_4_r77
functi_61(G,IP3_7,IP3_8,cytosol8)=(G*(IP3_8+(-IP3_7))*cytosol8)


# FunctionDefinition id = function_4_r87, name = function_4_r87
functi_62(G,IP3_8,IP3_9,cytosol9)=(G*(IP3_9+(-IP3_8))*cytosol9)


# FunctionDefinition id = function_4_r91, name = function_4_r91
functi_63(H,k_HR,k_d,k_r10,r_10)=(k_d*r_10+k_HR*H*r_10+k_r10*r_10)


# FunctionDefinition id = function_4_r89, name = function_4_r89
functi_64(CaI_10,H,k3,k_ip310,kcat,r_10)=(k_ip310*H*r_10*(1+(-k3*1/(CaI_10+k3)))*1/(kcat+r_10))


# FunctionDefinition id = function_4_r94, name = function_4_r94
functi_65(A,CaI_10,CaT_10,IP3_10,L,g_10,k1,store10)=((1+(-g_10))*(A*(0.5*IP3_10)^4*1/(k1+0.5*IP3_10)^4+L)*(CaT_10+(-CaI_10))*store10)


# FunctionDefinition id = function_4_r95, name = function_4_r95
functi_66(B,CaI_10,cytosol10,k2)=(B*CaI_10^2*1/(k2^2+CaI_10^2)*cytosol10)


# FunctionDefinition id = function_4_r82, name = function_4_r82
functi_67(H,k_HR,k_d,k_r9,r_9)=(k_d*r_9+k_HR*H*r_9+k_r9*r_9)


# FunctionDefinition id = function_4_r83, name = function_4_r83
functi_68(D,IP3_9)=(0.5*D*IP3_9)


# FunctionDefinition id = function_4_r84, name = function_4_r84
functi_69(A,CaI_9,CaT_9,IP3_9,L,g_9,k1,store9)=((1+(-g_9))*(A*(0.5*IP3_9)^4*1/(k1+0.5*IP3_9)^4+L)*(CaT_9+(-CaI_9))*store9)


# FunctionDefinition id = function_4_r85, name = function_4_r85
functi_70(B,CaI_9,cytosol9,k2)=(B*CaI_9^2*1/(k2^2+CaI_9^2)*cytosol9)


# FunctionDefinition id = function_4_r96, name = function_4_r96
functi_71(G,IP3_10,IP3_9,cytosol10)=(G*(IP3_10+(-IP3_9))*cytosol10)


# FunctionDefinition id = function_4_r98, name = function_4_r98
functi_72(CaI_11,H,k3,k_ip311,kcat,r_11)=(k_ip311*H*r_11*(1+(-k3*1/(CaI_11+k3)))*1/(kcat+r_11))


# FunctionDefinition id = function_4_r110, name = function_4_r110
functi_73(CaI_13,H,k3,k_ip313,kcat,r_13)=(k_ip313*H*r_13*(1+(-k3*1/(CaI_13+k3)))*1/(kcat+r_13))


# FunctionDefinition id = function_4_r109, name = function_4_r109
functi_74(D,IP3_12)=(0.5*D*IP3_12)


# FunctionDefinition id = function_4_r107, name = function_4_r107
functi_75(H,k_HR,k_d,k_r12,r_12)=(k_d*r_12+k_HR*H*r_12+k_r12*r_12)


# FunctionDefinition id = function_4_r105, name = function_4_r105
functi_76(CaI_12,E,g_12)=(E*CaI_12^4*(1+(-g_12)))


# FunctionDefinition id = function_4_r92, name = function_4_r92
functi_77(CaI_10,E,g_10)=(E*CaI_10^4*(1+(-g_10)))


# FunctionDefinition id = function_4_r93, name = function_4_r93
functi_78(D,IP3_10)=(0.5*D*IP3_10)


# FunctionDefinition id = function_4_r121, name = function_4_r121
functi_79(D,IP3_14)=(0.5*D*IP3_14)


# FunctionDefinition id = function_4_r119, name = function_4_r119
functi_80(H,k_HR,k_d,k_r14,r_14)=(k_d*r_14+k_HR*H*r_14+k_r14*r_14)


# FunctionDefinition id = function_4_r117, name = function_4_r117
functi_81(CaI_14,E,g_14)=(E*CaI_14^4*(1+(-g_14)))


# FunctionDefinition id = function_4_r99, name = function_4_r99
functi_82(CaI_11,E,g_11)=(E*CaI_11^4*(1+(-g_11)))


# FunctionDefinition id = function_4_r101, name = function_4_r101
functi_83(H,k_HR,k_d,k_r11,r_11)=(k_d*r_11+k_HR*H*r_11+k_r11*r_11)


# FunctionDefinition id = function_4_r103, name = function_4_r103
functi_84(D,IP3_11)=(0.5*D*IP3_11)


# FunctionDefinition id = function_4_r104, name = function_4_r104
functi_85(CaI_12,H,k3,k_ip312,kcat,r_12)=(k_ip312*H*r_12*(1+(-k3*1/(CaI_12+k3)))*1/(kcat+r_12))


# FunctionDefinition id = function_4_r122, name = function_4_r122
functi_86(CaI_15,H,k3,k_ip315,kcat,r_15)=(k_ip315*H*r_15*(1+(-k3*1/(CaI_15+k3)))*1/(kcat+r_15))


# FunctionDefinition id = function_4_r128, name = function_4_r128
functi_87(A,CaI_11,CaT_11,IP3_11,L,g_11,k1,store11)=((1+(-g_11))*(A*(0.5*IP3_11)^4*1/(k1+0.5*IP3_11)^4+L)*(CaT_11+(-CaI_11))*store11)


# FunctionDefinition id = function_4_r129, name = function_4_r129
functi_88(B,CaI_11,cytosol11,k2)=(B*CaI_11^2*1/(k2^2+CaI_11^2)*cytosol11)


# FunctionDefinition id = function_4_r130, name = function_4_r130
functi_89(A,CaI_12,CaT_12,IP3_12,L,g_12,k1,store12)=((1+(-g_12))*(A*(0.5*IP3_12)^4*1/(k1+0.5*IP3_12)^4+L)*(CaT_12+(-CaI_12))*store12)


# FunctionDefinition id = function_4_r111, name = function_4_r111
functi_90(CaI_13,E,g_13)=(E*CaI_13^4*(1+(-g_13)))


# FunctionDefinition id = function_4_r113, name = function_4_r113
functi_91(H,k_HR,k_d,k_r13,r_13)=(k_d*r_13+k_HR*H*r_13+k_r13*r_13)


# FunctionDefinition id = function_4_r115, name = function_4_r115
functi_92(D,IP3_13)=(0.5*D*IP3_13)


# FunctionDefinition id = function_4_r116, name = function_4_r116
functi_93(CaI_14,H,k3,k_ip314,kcat,r_14)=(k_ip314*H*r_14*(1+(-k3*1/(CaI_14+k3)))*1/(kcat+r_14))


# FunctionDefinition id = function_4_r123, name = function_4_r123
functi_94(CaI_15,E,g_15)=(E*CaI_15^4*(1+(-g_15)))


# FunctionDefinition id = function_4_r125, name = function_4_r125
functi_95(H,k_HR,k_d,k_r15,r_15)=(k_d*r_15+k_HR*H*r_15+k_r15*r_15)


# FunctionDefinition id = function_4_r137, name = function_4_r137
functi_96(B,CaI_15,cytosol15,k2)=(B*CaI_15^2*1/(k2^2+CaI_15^2)*cytosol15)


# FunctionDefinition id = function_4_r131, name = function_4_r131
functi_97(B,CaI_12,cytosol12,k2)=(B*CaI_12^2*1/(k2^2+CaI_12^2)*cytosol12)


# FunctionDefinition id = function_4_r132, name = function_4_r132
functi_98(A,CaI_13,CaT_13,IP3_13,L,g_13,k1,store13)=((1+(-g_13))*(A*(0.5*IP3_13)^4*1/(k1+0.5*IP3_13)^4+L)*(CaT_13+(-CaI_13))*store13)


# FunctionDefinition id = function_4_r133, name = function_4_r133
functi_99(B,CaI_13,cytosol13,k2)=(B*CaI_13^2*1/(k2^2+CaI_13^2)*cytosol13)


# FunctionDefinition id = function_4_r135, name = function_4_r135
func_100(B,CaI_14,cytosol14,k2)=(B*CaI_14^2*1/(k2^2+CaI_14^2)*cytosol14)


# FunctionDefinition id = function_4_r136, name = function_4_r136
func_101(A,CaI_15,CaT_15,IP3_15,L,g_15,k1,store15)=((1+(-g_15))*(A*(0.5*IP3_15)^4*1/(k1+0.5*IP3_15)^4+L)*(CaT_15+(-CaI_15))*store15)


# FunctionDefinition id = function_4_r145, name = function_4_r145
func_102(G,IP3_13,IP3_14,cytosol14)=(G*(IP3_14+(-IP3_13))*cytosol14)


# FunctionDefinition id = function_4_r147, name = function_4_r147
func_103(G,IP3_14,IP3_15,cytosol15)=(G*(IP3_15+(-IP3_14))*cytosol15)


# Compartment: id = cytosol5, name = cytosol5, constant
par cytosol5=1.0

# Compartment: id = store5, name = store5, constant
par store5=1.0

# Compartment: id = cytosol4, name = cytosol4, constant
par cytosol4=1.0

# Compartment: id = cytosol1, name = cytosol1, constant
par cytosol1=1.0

# Compartment: id = cytosol6, name = cytosol6, constant
par cytosol6=1.0

# Compartment: id = store6, name = store6, constant
par store6=1.0

# Compartment: id = store1, name = store1, constant
par store1=1.0

# Compartment: id = store3, name = store3, constant
par store3=1.0

# Compartment: id = cytosol3, name = cytosol3, constant
par cytosol3=1.0

# Compartment: id = cytosol7, name = cytosol7, constant
par cytosol7=1.0

# Compartment: id = store7, name = store7, constant
par store7=1.0

# Compartment: id = cytosol8, name = cytosol8, constant
par cytosol8=1.0

# Compartment: id = store8, name = store8, constant
par store8=1.0

# Compartment: id = cytosol2, name = cytosol2, constant
par cytosol2=1.0

# Compartment: id = store2, name = store2, constant
par store2=1.0

# Compartment: id = cytosol9, name = cytosol9, constant
par cytosol9=1.0

# Compartment: id = store9, name = store9, constant
par store9=1.0

# Compartment: id = cytosol10, name = cytosol10, constant
par cytosol10=1.0

# Compartment: id = store10, name = store10, constant
par store10=1.0

# Compartment: id = cytosol11, name = cytosol11, constant
par cytosol11=1.0

# Compartment: id = store11, name = store11, constant
par store11=1.0

# Compartment: id = cytosol13, name = cytosol13, constant
par cytosol13=1.0

# Compartment: id = store13, name = store13, constant
par store13=1.0

# Compartment: id = cytosol14, name = cytosol14, constant
par cytosol14=1.0

# Compartment: id = store14, name = store14, constant
par store14=1.0

# Compartment: id = cytosol15, name = cytosol15, constant
par cytosol15=1.0

# Compartment: id = store15, name = store15, constant
par store15=1.0

# Compartment: id = store4, name = store4, constant
par store4=1.0

# Compartment: id = cytosol12, name = cytosol12, constant
par cytosol12=1.0

# Compartment: id = store12, name = store12, constant
par store12=1.0

# Parameter:   id =  H, name = H
par H=1.8E-4

# Parameter:   id =  k_d, name = k_d, constant
par k_d=0.34

# Parameter:   id =  k_HR, name = k_HR, constant
par k_HR=1.0

# Parameter:   id =  kcat, name = kcat, constant
par kcat=0.45

# Parameter:   id =  k3, name = k3, constant
par k3=1.0

# Parameter:   id =  D, name = D, constant
par D=1.6

# Parameter:   id =  E, name = E, constant
par E=1.0

# Parameter:   id =  F, name = F, constant
par F=0.01

# Parameter:   id =  A, name = A, constant
par A=0.2

# Parameter:   id =  k1, name = k1, constant
par k1=0.5

# Parameter:   id =  L, name = L, constant
par L=1.5E-4

# Parameter:   id =  B, name = B, constant
par B=0.082

# Parameter:   id =  k2, name = k2, constant
par k2=0.15

# Parameter:   id =  k_r1, name = k_r1, constant
par k_r1=1.0

# Parameter:   id =  G, name = G, constant
par G=0.9

# Parameter:   id =  k_r2, name = k_r2, constant
par k_r2=1.5

# Parameter:   id =  k_r, name = k_r, constant
par k_r=2.0

# Parameter:   id =  k_r3, name = k_r3, constant
par k_r3=1.928571

# Parameter:   id =  k_r4, name = k_r4, constant
par k_r4=1.357143

# Parameter:   id =  k_r5, name = k_r5, constant
par k_r5=1.857143

# Parameter:   id =  k_r6, name = k_r6, constant
par k_r6=1.785714

# Parameter:   id =  k_r7, name = k_r7, constant
par k_r7=1.571429

# Parameter:   id =  k_r8, name = k_r8, constant
par k_r8=1.714286

# Parameter:   id =  k_r9, name = k_r9, constant
par k_r9=1.142857

# Parameter:   id =  k_r10, name = k_r10, constant
par k_r10=1.642857

# Parameter:   id =  k_r11, name = k_r11, constant
par k_r11=1.428571

# Parameter:   id =  k_r12, name = k_r12, constant
par k_r12=2.0

# Parameter:   id =  k_r13, name = k_r13, constant
par k_r13=1.214286

# Parameter:   id =  k_r14, name = k_r14, constant
par k_r14=1.071429

# Reaction: id = r0, name = r0
# Local Parameter:   id =  k_ip31, name = k_ip31
par k_ip31=0.785714


r0=cytosol1*functi_12(CaI_1, H, k3, k_ip31, kcat, r_1)

# Reaction: id = r1, name = r1

r1=cytosol1*functio_5(H, k_HR, k_d, k_r1, r_1)

# Reaction: id = r3, name = r3

r3=functio_7(A, CaI_1, CaT_1, IP3_1, L, g_1, k1, store1)

# Reaction: id = r4, name = r4

r4=cytosol1*functio_6(D, IP3_1)

# Reaction: id = r5, name = r5

r5=functi_13(B, CaI_1, cytosol1, k2)

# Reaction: id = r6, name = r6

r6=cytosol1*functi_14(CaI_1, E, g_1)

# Reaction: id = r7, name = r7

r7=cytosol1*Constant_(F)

# Reaction: id = r2, name = r2

r2=cytosol1*Constant_(k_r1)

# Reaction: id = r8, name = r8
# Local Parameter:   id =  k_ip32, name = k_ip32
par k_ip32=0.885714


r8=cytosol2*functi_15(CaI_2, H, k3, k_ip32, kcat, r_2)

# Reaction: id = r10, name = r10

r10=cytosol2*Constant_(F)

# Reaction: id = r11, name = r11

r11=cytosol2*Constant_(k_r2)

# Reaction: id = r12, name = r12

r12=cytosol2*functio_9(H, k_HR, k_d, k_r2, r_2)

# Reaction: id = r13, name = r13

r13=cytosol2*functi_10(CaI_2, E, g_2)

# Reaction: id = r14, name = r14

r14=cytosol2*functio_8(D, IP3_2)

# Reaction: id = r9, name = r9

r9=functi_11(A, CaI_2, CaT_2, IP3_2, L, g_2, k1, store2)

# Reaction: id = r15, name = r15

r15=functi_18(B, CaI_2, cytosol2, k2)

# Reaction: id = r16, name = r16

r16=functi_19(G, IP3_1, IP3_2, cytosol1)

# Reaction: id = r18, name = r18
# Local Parameter:   id =  k_ip33, name = k_ip33
par k_ip33=0.757143


r18=cytosol3*functi_20(CaI_3, H, k3, k_ip33, kcat, r_3)

# Reaction: id = r20, name = r20

r20=cytosol3*Constant_(k_r3)

# Reaction: id = r21, name = r21

r21=cytosol3*functi_21(H, k_HR, k_d, k_r3, r_3)

# Reaction: id = r22, name = r22

r22=cytosol3*Constant_(F)

# Reaction: id = r23, name = r23

r23=cytosol3*functi_22(D, IP3_3)

# Reaction: id = r25, name = r25

r25=cytosol3*functi_16(CaI_3, E, g_3)

# Reaction: id = r19, name = r19

r19=functi_17(A, CaI_3, CaT_3, IP3_3, L, g_3, k1, store3)

# Reaction: id = r24, name = r24

r24=functi_26(B, CaI_3, cytosol3, k2)

# Reaction: id = r27, name = r27

r27=functi_27(G, IP3_2, IP3_3, cytosol3)

# Reaction: id = r28, name = r28

r28=cytosol4*functi_28(H, k_HR, k_d, k_r4, r_4)

# Reaction: id = r29, name = r29
# Local Parameter:   id =  k_ip34, name = k_ip34
par k_ip34=0.857143


r29=cytosol4*functi_29(CaI_4, H, k3, k_ip34, kcat, r_4)

# Reaction: id = r30, name = r30

r30=cytosol4*functi_23(D, IP3_4)

# Reaction: id = r31, name = r31

r31=cytosol4*Constant_(F)

# Reaction: id = r32, name = r32

r32=cytosol4*Constant_(k_r4)

# Reaction: id = r33, name = r33

r33=cytosol4*functi_24(CaI_4, E, g_4)

# Reaction: id = r34, name = r34

r34=functi_25(A, CaI_4, CaT_4, IP3_4, L, g_4, k1, store4)

# Reaction: id = r35, name = r35

r35=functi_32(B, CaI_4, cytosol4, k2)

# Reaction: id = r37, name = r37

r37=functi_33(G, IP3_3, IP3_4, cytosol4)

# Reaction: id = r38, name = r38

r38=cytosol5*functi_34(H, k_HR, k_d, k_r5, r_5)

# Reaction: id = r39, name = r39

r39=cytosol5*functi_35(CaI_5, E, g_5)

# Reaction: id = r41, name = r41

r41=cytosol5*Constant_(F)

# Reaction: id = r42, name = r42
# Local Parameter:   id =  k_ip35, name = k_ip35
par k_ip35=0.842857


r42=cytosol5*functi_36(CaI_5, H, k3, k_ip35, kcat, r_5)

# Reaction: id = r43, name = r43

r43=cytosol5*functi_30(D, IP3_5)

# Reaction: id = r44, name = r44

r44=cytosol5*Constant_(k_r5)

# Reaction: id = r40, name = r40

r40=functi_31(A, CaI_5, CaT_5, IP3_5, L, g_5, k1, store5)

# Reaction: id = r45, name = r45

r45=functi_43(B, CaI_5, cytosol5, k2)

# Reaction: id = r47, name = r47

r47=functi_44(G, IP3_4, IP3_5, cytosol5)

# Reaction: id = r49, name = r49

r49=cytosol6*Constant_(F)

# Reaction: id = r51, name = r51

r51=cytosol6*functi_45(CaI_6, E, g_6)

# Reaction: id = r52, name = r52

r52=cytosol6*Constant_(k_r6)

# Reaction: id = r53, name = r53

r53=cytosol6*functi_46(H, k_HR, k_d, k_r6, r_6)

# Reaction: id = r54, name = r54

r54=cytosol6*functi_38(D, IP3_6)

# Reaction: id = r55, name = r55
# Local Parameter:   id =  k_ip36, name = k_ip36
par k_ip36=0.814286


r55=cytosol6*functi_37(CaI_6, H, k3, k_ip36, kcat, r_6)

# Reaction: id = r48, name = r48

r48=functi_53(B, CaI_6, cytosol6, k2)

# Reaction: id = r50, name = r50

r50=functi_54(A, CaI_6, CaT_6, IP3_6, L, g_6, k1, store6)

# Reaction: id = r57, name = r57

r57=functi_40(G, IP3_5, IP3_6, cytosol6)

# Reaction: id = r58, name = r58

r58=cytosol7*functi_41(CaI_7, E, g_7)

# Reaction: id = r59, name = r59

r59=cytosol7*Constant_(k_r7)

# Reaction: id = r60, name = r60
# Local Parameter:   id =  k_ip37, name = k_ip37
par k_ip37=0.742857


r60=cytosol7*functi_42(CaI_7, H, k3, k_ip37, kcat, r_7)

# Reaction: id = r62, name = r62

r62=cytosol7*functi_47(D, IP3_7)

# Reaction: id = r63, name = r63

r63=cytosol7*functi_48(H, k_HR, k_d, k_r7, r_7)

# Reaction: id = r65, name = r65

r65=cytosol7*Constant_(F)

# Reaction: id = r61, name = r61

r61=functi_56(A, CaI_7, CaT_7, IP3_7, L, g_7, k1, store7)

# Reaction: id = r64, name = r64

r64=functi_39(B, CaI_7, cytosol7, k2)

# Reaction: id = r67, name = r67

r67=functi_52(G, IP3_6, IP3_7, cytosol7)

# Reaction: id = r68, name = r68

r68=cytosol8*functi_49(D, IP3_8)

# Reaction: id = r69, name = r69

r69=cytosol8*Constant_(F)

# Reaction: id = r70, name = r70

r70=cytosol8*functi_51(CaI_8, E, g_8)

# Reaction: id = r71, name = r71

r71=cytosol8*functi_50(H, k_HR, k_d, k_r8, r_8)

# Reaction: id = r73, name = r73
# Local Parameter:   id =  k_ip38, name = k_ip38
par k_ip38=0.828571


r73=cytosol8*functi_55(CaI_8, H, k3, k_ip38, kcat, r_8)

# Reaction: id = r74, name = r74

r74=cytosol8*Constant_(k_r8)

# Reaction: id = r72, name = r72

r72=functi_59(A, CaI_8, CaT_8, IP3_8, L, g_8, k1, store8)

# Reaction: id = r75, name = r75

r75=functi_60(B, CaI_8, cytosol8, k2)

# Reaction: id = r77, name = r77

r77=functi_61(G, IP3_7, IP3_8, cytosol8)

# Reaction: id = r78, name = r78

r78=cytosol9*functi_57(CaI_9, E, g_9)

# Reaction: id = r79, name = r79

r79=cytosol9*Constant_(F)

# Reaction: id = r80, name = r80

r80=cytosol9*Constant_(k_r9)

# Reaction: id = r81, name = r81
# Local Parameter:   id =  k_ip39, name = k_ip39
par k_ip39=0.771429


r81=cytosol9*functi_58(CaI_9, H, k3, k_ip39, kcat, r_9)

# Reaction: id = r82, name = r82

r82=cytosol9*functi_67(H, k_HR, k_d, k_r9, r_9)

# Reaction: id = r83, name = r83

r83=cytosol9*functi_68(D, IP3_9)

# Reaction: id = r84, name = r84

r84=functi_69(A, CaI_9, CaT_9, IP3_9, L, g_9, k1, store9)

# Reaction: id = r85, name = r85

r85=functi_70(B, CaI_9, cytosol9, k2)

# Reaction: id = r87, name = r87

r87=functi_62(G, IP3_8, IP3_9, cytosol9)

# Reaction: id = r88, name = r88

r88=cytosol10*Constant_(k_r10)

# Reaction: id = r89, name = r89
# Local Parameter:   id =  k_ip310, name = k_ip310
par k_ip310=0.728571


r89=cytosol10*functi_64(CaI_10, H, k3, k_ip310, kcat, r_10)

# Reaction: id = r90, name = r90

r90=cytosol10*Constant_(F)

# Reaction: id = r91, name = r91

r91=cytosol10*functi_63(H, k_HR, k_d, k_r10, r_10)

# Reaction: id = r92, name = r92

r92=cytosol10*functi_77(CaI_10, E, g_10)

# Reaction: id = r93, name = r93

r93=cytosol10*functi_78(D, IP3_10)

# Reaction: id = r94, name = r94

r94=functi_65(A, CaI_10, CaT_10, IP3_10, L, g_10, k1, store10)

# Reaction: id = r95, name = r95

r95=functi_66(B, CaI_10, cytosol10, k2)

# Reaction: id = r96, name = r96

r96=functi_71(G, IP3_10, IP3_9, cytosol10)

# Reaction: id = r98, name = r98
# Local Parameter:   id =  k_ip311, name = k_ip311
par k_ip311=0.714286


r98=cytosol11*functi_72(CaI_11, H, k3, k_ip311, kcat, r_11)

# Reaction: id = r99, name = r99

r99=cytosol11*functi_82(CaI_11, E, g_11)

# Reaction: id = r100, name = r100

r100=cytosol11*Constant_(F)

# Reaction: id = r101, name = r101

r101=cytosol11*functi_83(H, k_HR, k_d, k_r11, r_11)

# Reaction: id = r102, name = r102

r102=cytosol11*Constant_(k_r11)

# Reaction: id = r103, name = r103

r103=cytosol11*functi_84(D, IP3_11)

# Reaction: id = r104, name = r104
# Local Parameter:   id =  k_ip312, name = k_ip312
par k_ip312=0.871429


r104=cytosol12*functi_85(CaI_12, H, k3, k_ip312, kcat, r_12)

# Reaction: id = r105, name = r105

r105=cytosol12*functi_76(CaI_12, E, g_12)

# Reaction: id = r106, name = r106

r106=cytosol12*Constant_(F)

# Reaction: id = r107, name = r107

r107=cytosol12*functi_75(H, k_HR, k_d, k_r12, r_12)

# Reaction: id = r108, name = r108

r108=cytosol12*Constant_(k_r12)

# Reaction: id = r109, name = r109

r109=cytosol12*functi_74(D, IP3_12)

# Reaction: id = r110, name = r110
# Local Parameter:   id =  k_ip313, name = k_ip313
par k_ip313=0.9


r110=cytosol13*functi_73(CaI_13, H, k3, k_ip313, kcat, r_13)

# Reaction: id = r111, name = r111

r111=cytosol13*functi_90(CaI_13, E, g_13)

# Reaction: id = r112, name = r112

r112=cytosol13*Constant_(F)

# Reaction: id = r113, name = r113

r113=cytosol13*functi_91(H, k_HR, k_d, k_r13, r_13)

# Reaction: id = r114, name = r114

r114=cytosol13*Constant_(k_r13)

# Reaction: id = r115, name = r115

r115=cytosol13*functi_92(D, IP3_13)

# Reaction: id = r116, name = r116
# Local Parameter:   id =  k_ip314, name = k_ip314
par k_ip314=0.7


r116=cytosol14*functi_93(CaI_14, H, k3, k_ip314, kcat, r_14)

# Reaction: id = r117, name = r117

r117=cytosol14*functi_81(CaI_14, E, g_14)

# Reaction: id = r118, name = r118

r118=cytosol14*Constant_(F)

# Reaction: id = r119, name = r119

r119=cytosol14*functi_80(H, k_HR, k_d, k_r14, r_14)

# Reaction: id = r120, name = r120

r120=cytosol14*Constant_(k_r14)

# Reaction: id = r121, name = r121

r121=cytosol14*functi_79(D, IP3_14)

# Reaction: id = r122, name = r122
# Local Parameter:   id =  k_ip315, name = k_ip315
par k_ip315=0.8


r122=cytosol15*functi_86(CaI_15, H, k3, k_ip315, kcat, r_15)

# Reaction: id = r123, name = r123

r123=cytosol15*functi_94(CaI_15, E, g_15)

# Reaction: id = r124, name = r124

r124=cytosol15*Constant_(F)

# Reaction: id = r125, name = r125
# Local Parameter:   id =  k_r15, name = k_r15
par k_r15=1.28571


r125=cytosol15*functi_95(H, k_HR, k_d, k_r15, r_15)

# Reaction: id = r126, name = r126
# Local Parameter:   id =  v, name = v
par v=1.28571


r126=cytosol15*Constant_(v)

# Reaction: id = r127, name = r127

r127=cytosol15*function_(D, IP3_15)

# Reaction: id = r128, name = r128

r128=functi_87(A, CaI_11, CaT_11, IP3_11, L, g_11, k1, store11)

# Reaction: id = r129, name = r129

r129=functi_88(B, CaI_11, cytosol11, k2)

# Reaction: id = r130, name = r130

r130=functi_89(A, CaI_12, CaT_12, IP3_12, L, g_12, k1, store12)

# Reaction: id = r131, name = r131

r131=functi_97(B, CaI_12, cytosol12, k2)

# Reaction: id = r132, name = r132

r132=functi_98(A, CaI_13, CaT_13, IP3_13, L, g_13, k1, store13)

# Reaction: id = r133, name = r133

r133=functi_99(B, CaI_13, cytosol13, k2)

# Reaction: id = r134, name = r134

r134=functio_2(A, CaI_14, CaT_14, IP3_14, L, g_14, k1, store14)

# Reaction: id = r135, name = r135

r135=func_100(B, CaI_14, cytosol14, k2)

# Reaction: id = r136, name = r136

r136=func_101(A, CaI_15, CaT_15, IP3_15, L, g_15, k1, store15)

# Reaction: id = r137, name = r137

r137=functi_96(B, CaI_15, cytosol15, k2)

# Reaction: id = r139, name = r139

r139=functio_1(G, IP3_10, IP3_11, cytosol11)

# Reaction: id = r141, name = r141

r141=functio_3(G, IP3_12, IP3_13, cytosol13)

# Reaction: id = r143, name = r143

r143=functio_4(G, IP3_11, IP3_12, cytosol12)

# Reaction: id = r145, name = r145

r145=func_102(G, IP3_13, IP3_14, cytosol14)

# Reaction: id = r147, name = r147

r147=func_103(G, IP3_14, IP3_15, cytosol15)

# Species:   id = CaI_1, name = cytosolic Ca2+_CaI_1, affected by kineticLaw

init CaI_1=0.2
dCaI_1/dt=(1/(cytosol1))*(( 1.0 * r3) + (-1.0 * r5))

# Species:   id = g_1, name = total IP3R_g_1, affected by kineticLaw

init g_1=0.25
dg_1/dt=(1/(cytosol1))*(( 1.0 * r6) + (-1.0 * r7))

# Species:   id = IP3_1, name = cytosolic IP3_IP3_1, affected by kineticLaw

init IP3_1=0.1
dIP3_1/dt=(1/(cytosol1))*(( 1.0 * r0) + (-1.0 * r4) + (-1.0 * r16))

# Species:   id = r_1, name = total receptor levels _r_1, affected by kineticLaw

init r_1=0.5
dr_1/dt=(1/(cytosol1))*((-1.0 * r1) + ( 1.0 * r2))

# Species:   id = CaT_1, name = total intracellular store Ca2+ content_CaT_1, affected by kineticLaw

init CaT_1=500.0
dCaT_1/dt=(1/(store1))*((-1.0 * r3) + ( 1.0 * r5))

# Species:   id = g_2, name = total IP3R_g_2, affected by kineticLaw

init g_2=0.25
dg_2/dt=(1/(cytosol2))*((-1.0 * r10) + ( 1.0 * r13))

# Species:   id = r_2, name = total receptor levels _r_2, affected by kineticLaw

init r_2=0.5
dr_2/dt=(1/(cytosol2))*(( 1.0 * r11) + (-1.0 * r12))

# Species:   id = CaI_2, name = cytosolic Ca2+_CaI_2, affected by kineticLaw

init CaI_2=0.2
dCaI_2/dt=(1/(cytosol2))*(( 1.0 * r9) + (-1.0 * r15))

# Species:   id = IP3_2, name = cytosolic IP3_IP3_2, affected by kineticLaw

init IP3_2=0.1
dIP3_2/dt=(1/(cytosol2))*(( 1.0 * r8) + (-1.0 * r14) + ( 1.0 * r16) + ( 1.0 * r27))

# Species:   id = CaT_2, name = total intracellular store Ca2+ content_CaT_2, affected by kineticLaw

init CaT_2=500.0
dCaT_2/dt=(1/(store2))*((-1.0 * r9) + ( 1.0 * r15))

# Species:   id = CaI_3, name = cytosolic Ca2+_CaI_3, affected by kineticLaw

init CaI_3=0.2
dCaI_3/dt=(1/(cytosol3))*(( 1.0 * r19) + (-1.0 * r24))

# Species:   id = IP3_3, name = cytosolic IP3_IP3_3, affected by kineticLaw

init IP3_3=0.1
dIP3_3/dt=(1/(cytosol3))*(( 1.0 * r18) + (-1.0 * r23) + (-1.0 * r27) + ( 1.0 * r37))

# Species:   id = g_3, name = total IP3R_g_3, affected by kineticLaw

init g_3=0.25
dg_3/dt=(1/(cytosol3))*((-1.0 * r22) + ( 1.0 * r25))

# Species:   id = r_3, name = total receptor levels _r_3, affected by kineticLaw

init r_3=0.5
dr_3/dt=(1/(cytosol3))*(( 1.0 * r20) + (-1.0 * r21))

# Species:   id = CaT_3, name = total intracellular store Ca2+ content_CaT_3, affected by kineticLaw

init CaT_3=500.0
dCaT_3/dt=(1/(store3))*((-1.0 * r19) + ( 1.0 * r24))

# Species:   id = CaI_4, name = cytosolic Ca2+_CaI_4, affected by kineticLaw

init CaI_4=0.2
dCaI_4/dt=(1/(cytosol4))*(( 1.0 * r34) + (-1.0 * r35))

# Species:   id = IP3_4, name = cytosolic IP3_IP3_4, affected by kineticLaw

init IP3_4=0.1
dIP3_4/dt=(1/(cytosol4))*(( 1.0 * r29) + (-1.0 * r30) + (-1.0 * r37) + ( 1.0 * r47))

# Species:   id = r_4, name = total receptor levels _r_4, affected by kineticLaw

init r_4=0.5
dr_4/dt=(1/(cytosol4))*((-1.0 * r28) + ( 1.0 * r32))

# Species:   id = g_4, name = total IP3R_g_4, affected by kineticLaw

init g_4=0.25
dg_4/dt=(1/(cytosol4))*((-1.0 * r31) + ( 1.0 * r33))

# Species:   id = CaT_4, name = total intracellular store Ca2+ content_CaT_4, affected by kineticLaw

init CaT_4=500.0
dCaT_4/dt=(1/(store4))*((-1.0 * r34) + ( 1.0 * r35))

# Species:   id = r_5, name = total receptor levels _r_5, affected by kineticLaw

init r_5=0.5
dr_5/dt=(1/(cytosol5))*((-1.0 * r38) + ( 1.0 * r44))

# Species:   id = IP3_5, name = cytosolic IP3_IP3_5, affected by kineticLaw

init IP3_5=0.1
dIP3_5/dt=(1/(cytosol5))*(( 1.0 * r42) + (-1.0 * r43) + (-1.0 * r47) + ( 1.0 * r57))

# Species:   id = g_5, name = total IP3R_g_5, affected by kineticLaw

init g_5=0.25
dg_5/dt=(1/(cytosol5))*(( 1.0 * r39) + (-1.0 * r41))

# Species:   id = CaI_5, name = cytosolic Ca2+_CaI_5, affected by kineticLaw

init CaI_5=0.2
dCaI_5/dt=(1/(cytosol5))*(( 1.0 * r40) + (-1.0 * r45))

# Species:   id = CaT_5, name = total intracellular store Ca2+ content_CaT_5, affected by kineticLaw

init CaT_5=500.0
dCaT_5/dt=(1/(store5))*((-1.0 * r40) + ( 1.0 * r45))

# Species:   id = CaI_6, name = cytosolic Ca2+_CaI_6, affected by kineticLaw

init CaI_6=0.2
dCaI_6/dt=(1/(cytosol6))*((-1.0 * r48) + ( 1.0 * r50))

# Species:   id = g_6, name = total IP3R_g_6, affected by kineticLaw

init g_6=0.25
dg_6/dt=(1/(cytosol6))*((-1.0 * r49) + ( 1.0 * r51))

# Species:   id = r_6, name = total receptor levels _r_6, affected by kineticLaw

init r_6=0.5
dr_6/dt=(1/(cytosol6))*(( 1.0 * r52) + (-1.0 * r53))

# Species:   id = IP3_6, name = cytosolic IP3_IP3_6, affected by kineticLaw

init IP3_6=0.1
dIP3_6/dt=(1/(cytosol6))*((-1.0 * r54) + ( 1.0 * r55) + (-1.0 * r57) + ( 1.0 * r67))

# Species:   id = CaT_6, name = total intracellular store Ca2+ content_CaT_6, affected by kineticLaw

init CaT_6=500.0
dCaT_6/dt=(1/(store6))*(( 1.0 * r48) + (-1.0 * r50))

# Species:   id = CaI_7, name = cytosolic Ca2+_CaI_7, affected by kineticLaw

init CaI_7=0.2
dCaI_7/dt=(1/(cytosol7))*(( 1.0 * r61) + (-1.0 * r64))

# Species:   id = g_7, name = total IP3R_g_7, affected by kineticLaw

init g_7=0.25
dg_7/dt=(1/(cytosol7))*(( 1.0 * r58) + (-1.0 * r65))

# Species:   id = r_7, name = total receptor levels_ r_7, affected by kineticLaw

init r_7=0.5
dr_7/dt=(1/(cytosol7))*(( 1.0 * r59) + (-1.0 * r63))

# Species:   id = IP3_7, name = cytosolic IP3_IP3_7, affected by kineticLaw

init IP3_7=0.1
dIP3_7/dt=(1/(cytosol7))*(( 1.0 * r60) + (-1.0 * r62) + (-1.0 * r67) + ( 1.0 * r77))

# Species:   id = CaT_7, name = total intracellular store Ca2+ content_CaT_7, affected by kineticLaw

init CaT_7=500.0
dCaT_7/dt=(1/(store7))*((-1.0 * r61) + ( 1.0 * r64))

# Species:   id = r_8, name = total receptor levels _r_8, affected by kineticLaw

init r_8=0.5
dr_8/dt=(1/(cytosol8))*((-1.0 * r71) + ( 1.0 * r74))

# Species:   id = IP3_8, name = cytosolic IP3_IP3_8, affected by kineticLaw

init IP3_8=0.1
dIP3_8/dt=(1/(cytosol8))*((-1.0 * r68) + ( 1.0 * r73) + (-1.0 * r77) + ( 1.0 * r87))

# Species:   id = g_8, name = total IP3R_g_8, affected by kineticLaw

init g_8=0.25
dg_8/dt=(1/(cytosol8))*((-1.0 * r69) + ( 1.0 * r70))

# Species:   id = CaI_8, name = cytosolic Ca2+_CaI_8, affected by kineticLaw

init CaI_8=0.2
dCaI_8/dt=(1/(cytosol8))*(( 1.0 * r72) + (-1.0 * r75))

# Species:   id = CaT_8, name = total intracellular store Ca2+ content_CaT_8, affected by kineticLaw

init CaT_8=500.0
dCaT_8/dt=(1/(store8))*((-1.0 * r72) + ( 1.0 * r75))

# Species:   id = IP3_9, name = cytosolic IP3_IP3_9, affected by kineticLaw

init IP3_9=0.1
dIP3_9/dt=(1/(cytosol9))*(( 1.0 * r81) + (-1.0 * r83) + (-1.0 * r87) + ( 1.0 * r96))

# Species:   id = CaI_9, name = cytosolic Ca2+_CaI_9, affected by kineticLaw

init CaI_9=0.2
dCaI_9/dt=(1/(cytosol9))*(( 1.0 * r84) + (-1.0 * r85))

# Species:   id = r_9, name = total receptor levels _r_9, affected by kineticLaw

init r_9=0.5
dr_9/dt=(1/(cytosol9))*(( 1.0 * r80) + (-1.0 * r82))

# Species:   id = g_9, name = total IP3R_g_9, affected by kineticLaw

init g_9=0.25
dg_9/dt=(1/(cytosol9))*(( 1.0 * r78) + (-1.0 * r79))

# Species:   id = CaT_9, name = total intracellular store Ca2+ content_CaT_9, affected by kineticLaw

init CaT_9=500.0
dCaT_9/dt=(1/(store9))*((-1.0 * r84) + ( 1.0 * r85))

# Species:   id = r_10, name = total receptor levels _r_10, affected by kineticLaw

init r_10=0.5
dr_10/dt=(1/(cytosol10))*(( 1.0 * r88) + (-1.0 * r91))

# Species:   id = IP3_10, name = cytosolic IP3_IP3_10, affected by kineticLaw

init IP3_10=0.1
dIP3_10/dt=(1/(cytosol10))*(( 1.0 * r89) + (-1.0 * r93) + (-1.0 * r96) + ( 1.0 * r139))

# Species:   id = g_10, name = total IP3R_g_10, affected by kineticLaw

init g_10=0.25
dg_10/dt=(1/(cytosol10))*((-1.0 * r90) + ( 1.0 * r92))

# Species:   id = CaI_10, name = cytosolic Ca2+_CaI_10, affected by kineticLaw

init CaI_10=0.2
dCaI_10/dt=(1/(cytosol10))*(( 1.0 * r94) + (-1.0 * r95))

# Species:   id = CaT_10, name = total intracellular store Ca2+ content_CaT_10, affected by kineticLaw

init CaT_10=500.0
dCaT_10/dt=(1/(store10))*((-1.0 * r94) + ( 1.0 * r95))

# Species:   id = IP3_11, name = cytosolic IP3_IP3_11, affected by kineticLaw

init IP3_11=0.1
dIP3_11/dt=(1/(cytosol11))*(( 1.0 * r98) + (-1.0 * r103) + (-1.0 * r139) + ( 1.0 * r143))

# Species:   id = g_11, name = total IP3R_g_11, affected by kineticLaw

init g_11=0.25
dg_11/dt=(1/(cytosol11))*(( 1.0 * r99) + (-1.0 * r100))

# Species:   id = CaI_11, name = cytosolic Ca2+_CaI_11, affected by kineticLaw

init CaI_11=0.2
dCaI_11/dt=(1/(cytosol11))*(( 1.0 * r128) + (-1.0 * r129))

# Species:   id = r_11, name = total receptor levels _r_11, affected by kineticLaw

init r_11=0.5
dr_11/dt=(1/(cytosol11))*((-1.0 * r101) + ( 1.0 * r102))

# Species:   id = IP3_12, name = cytosolic IP3_IP3_12, affected by kineticLaw

init IP3_12=0.1
dIP3_12/dt=(1/(cytosol12))*(( 1.0 * r104) + (-1.0 * r109) + ( 1.0 * r141) + (-1.0 * r143))

# Species:   id = g_12, name = total IP3R_g_12, affected by kineticLaw

init g_12=0.25
dg_12/dt=(1/(cytosol12))*(( 1.0 * r105) + (-1.0 * r106))

# Species:   id = CaI_12, name = cytosolic Ca2+_CaI_12, affected by kineticLaw

init CaI_12=0.2
dCaI_12/dt=(1/(cytosol12))*(( 1.0 * r130) + (-1.0 * r131))

# Species:   id = r_12, name = total receptor levels _r_12, affected by kineticLaw

init r_12=0.5
dr_12/dt=(1/(cytosol12))*((-1.0 * r107) + ( 1.0 * r108))

# Species:   id = IP3_13, name = cytosolic IP3_IP3_13, affected by kineticLaw

init IP3_13=0.1
dIP3_13/dt=(1/(cytosol13))*(( 1.0 * r110) + (-1.0 * r115) + (-1.0 * r141) + ( 1.0 * r145))

# Species:   id = g_13, name = total IP3R_g_13, affected by kineticLaw

init g_13=0.25
dg_13/dt=(1/(cytosol13))*(( 1.0 * r111) + (-1.0 * r112))

# Species:   id = CaI_13, name = cytosolic Ca2+_CaI_13, affected by kineticLaw

init CaI_13=0.2
dCaI_13/dt=(1/(cytosol13))*(( 1.0 * r132) + (-1.0 * r133))

# Species:   id = r_13, name = total receptor levels _r_13, affected by kineticLaw

init r_13=0.5
dr_13/dt=(1/(cytosol13))*((-1.0 * r113) + ( 1.0 * r114))

# Species:   id = IP3_14, name = cytosolic IP3_IP3_14, affected by kineticLaw

init IP3_14=0.1
dIP3_14/dt=(1/(cytosol14))*(( 1.0 * r116) + (-1.0 * r121) + (-1.0 * r145) + ( 1.0 * r147))

# Species:   id = g_14, name = total IP3R_g_14, affected by kineticLaw

init g_14=0.25
dg_14/dt=(1/(cytosol14))*(( 1.0 * r117) + (-1.0 * r118))

# Species:   id = CaI_14, name = cytosolic Ca2+_CaI_14, affected by kineticLaw

init CaI_14=0.2
dCaI_14/dt=(1/(cytosol14))*(( 1.0 * r134) + (-1.0 * r135))

# Species:   id = r_14, name = total receptor levels _r_14, affected by kineticLaw

init r_14=0.5
dr_14/dt=(1/(cytosol14))*((-1.0 * r119) + ( 1.0 * r120))

# Species:   id = IP3_15, name = cytosolic IP3_IP3_15, affected by kineticLaw

init IP3_15=0.1
dIP3_15/dt=(1/(cytosol15))*(( 1.0 * r122) + (-1.0 * r127) + (-1.0 * r147))

# Species:   id = g_15, name = total IP3R_g_15, affected by kineticLaw

init g_15=0.25
dg_15/dt=(1/(cytosol15))*(( 1.0 * r123) + (-1.0 * r124))

# Species:   id = CaI_15, name = cytosolic Ca2+_CaI_15, affected by kineticLaw

init CaI_15=0.2
dCaI_15/dt=(1/(cytosol15))*(( 1.0 * r136) + (-1.0 * r137))

# Species:   id = r_15, name = total receptor levels _r_15, affected by kineticLaw

init r_15=0.5
dr_15/dt=(1/(cytosol15))*((-1.0 * r125) + ( 1.0 * r126))

# Species:   id = CaT_11, name = total intracellular store Ca2+ content_CaT_11, affected by kineticLaw

init CaT_11=500.0
dCaT_11/dt=(1/(store11))*((-1.0 * r128) + ( 1.0 * r129))

# Species:   id = CaT_12, name = total intracellular store Ca2+ content_CaT_12, affected by kineticLaw

init CaT_12=500.0
dCaT_12/dt=(1/(store12))*((-1.0 * r130) + ( 1.0 * r131))

# Species:   id = CaT_13, name = total intracellular store Ca2+ content_CaT_13, affected by kineticLaw

init CaT_13=500.0
dCaT_13/dt=(1/(store13))*((-1.0 * r132) + ( 1.0 * r133))

# Species:   id = CaT_14, name = total intracellular store Ca2+ content_CaT_14, affected by kineticLaw

init CaT_14=500.0
dCaT_14/dt=(1/(store14))*((-1.0 * r134) + ( 1.0 * r135))

# Species:   id = CaT_15, name = total intracellular store Ca2+ content_CaT_15, affected by kineticLaw

init CaT_15=500.0
dCaT_15/dt=(1/(store15))*((-1.0 * r136) + ( 1.0 * r137))

# event : event_1
# unable to handle events with delays currently.
# event ignored.


@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

