
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Dudziuk2019 - Biologically sound formal model of Hsp70 heat induction
#
# isDescribedBy http://identifiers.org/pubmed/31181241
# isDerivedFrom http://identifiers.org/pubmed/19327370
# isDerivedFrom http://identifiers.org/pubmed/23985732
# is http://identifiers.org/biomodels.db/MODEL1807160001
# is http://identifiers.org/biomodels.db/BIOMD0000000843
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Constant_flux__irreversible, name = Constant flux (irreversible)
Constant_(v)=(v)


# FunctionDefinition id = Function_for_HSP_Translation, name = Function_for_HSP_Translation
Function_(k4,mRNA)=(k4*mRNA)


# FunctionDefinition id = Function_for_mRNA_Transcription, name = Function_for_mRNA_Transcription
Functio_1(k_8_T,HSE_HSF_3)=(k_8_T*HSE_HSF_3)


# FunctionDefinition id = Function_for_HSF_Activation, name = Function_for_HSF_Activation
Functio_2(k3,HSF)=(k3*HSF^3)


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Parameter:   id =  k1, name = k1, constant
par k1=12.6

# Parameter:   id =  I1, name = I1, constant
par I1=0.003028

# Parameter:   id =  k2, name = k2, constant
par k2=0.218

# Parameter:   id =  I2, name = I2, constant
par I2=1.162

# Parameter:   id =  k3, name = k3, constant
par k3=446500.0

# Parameter:   id =  I3, name = I3, constant
par I3=2.392

# Parameter:   id =  k4, name = k4, constant
par k4=18.85

# Parameter:   id =  k5, name = k5, constant
par k5=8.709E-4

# Parameter:   id =  k6, name = k6, constant
par k6=0.08899

# Parameter:   id =  k7, name = k7, constant
par k7=5892.0

# Parameter:   id =  I_7_T, name = I_7_T, defined by a Rule

# Parameter:   id =  I_7_37, name = I_7_37, constant
par I_7_37=47.68

# Parameter:   id =  I_7_41, name = I_7_41, constant
par I_7_41=1.233

# Parameter:   id =  I_7_42, name = I_7_42, constant
par I_7_42=0.6628

# Parameter:   id =  I_7_43, name = I_7_43, constant
par I_7_43=0.01639

# Parameter:   id =  I_7_44, name = I_7_44, constant
par I_7_44=50.01

# Parameter:   id =  I_7_45, name = I_7_45, constant
par I_7_45=84.27

# Parameter:   id =  k_8_T, name = k_8_T, defined by a Rule

# Parameter:   id =  k_8_max, name = k_8_max, constant
par k_8_max=96.07

# Parameter:   id =  R_k_8, name = R_k_8, constant
par R_k_8=15.93

# Parameter:   id =  T_k_8, name = T_k_8, constant
par T_k_8=42.89

# Parameter:   id =  k9, name = k9, constant
par k9=0.001888

# Parameter:   id =  k10, name = k10, constant
par k10=0.09813

# Parameter:   id =  k_11_T, name = k_11_T, defined by a Rule

# Parameter:   id =  T_0, name = T_0, constant
par T_0=35.81

# Parameter:   id =  T_05, name = T_05, constant
par T_05=47.13

# Parameter:   id =  n_V, name = n_V, constant
par n_V=6.522

# Parameter:   id =  P_tot, name = P_tot, constant
par P_tot=1297.0

# Parameter:   id =  HSF_tot, name = HSF_tot, constant
par HSF_tot=0.01568

# Parameter:   id =  HSE_tot, name = HSE_tot, constant
par HSE_tot=4.0E-6

# Parameter:   id =  V_den_T, name = V_den_T, defined by a Rule

# Parameter:   id =  T, name = T, constant
par T_renamed=42.0

# Parameter:   id =  HSF_3_tot, name = HSF_3_tot, defined by a Rule

# Parameter:   id =  ModelValue_13, name = Initial for I_7_42, constant
par ModelValu=0.6628

# Parameter:   id =  ModelValue_20, name = Initial for R_k_8, constant
par ModelVa_1=15.93

# Parameter:   id =  ModelValue_21, name = Initial for T_k_8, constant
par ModelVa_2=42.89

# Parameter:   id =  ModelValue_23, name = Initial for k10, constant
par ModelVa_3=0.09813

# Parameter:   id =  ModelValue_19, name = Initial for k_8_max, constant
par ModelVa_4=96.07

# Parameter:   id =  ModelValue_27, name = Initial for n_V, constant
par ModelVa_5=6.522

# assignmentRule: variable = I_7_T
I_7_T=ModelValu
aux I_7_T=I_7_T

# assignmentRule: variable = k_8_T
k_8_T=ModelVa_4*(1-1/(1+exp((-ModelVa_1)*(T_renamed-ModelVa_2))))
aux k_8_T=k_8_T

# assignmentRule: variable = V_den_T
V_den_T=1-(1+((T_renamed-T_0)/(T_05-T_0))^ModelVa_5)^(-1)
aux V_den_T=V_den_T

# assignmentRule: variable = k_11_T
k_11_T=ModelVa_3*V_den_T/(1-V_den_T)
aux k_11_T=k_11_T

# assignmentRule: variable = HSF_3_tot
HSF_3_tot=HSF_3+HSE_HSF_3
aux HSF_3_tot=HSF_3_tot

# Reaction: id = HSF_Inactivation, name = HSF_Inactivation

HSF_Inact=compartme*I3*HSP*HSF_3

# Reaction: id = HSP_S_Association, name = HSP_S_Association

HSP_S_Ass=compartme*k1*HSP*S

# Reaction: id = HSP_S_Dissociation, name = HSP_S_Dissociation

HSP_S_Dis=compartme*I1*HSP_S

# Reaction: id = HSP_HSF_Association, name = HSP_HSF_Association

HSP_HSF_A=compartme*k2*HSF*HSP

# Reaction: id = HSP_HSF_Dissociation, name = HSP_HSF_Dissociation

HSP_HSF_D=compartme*I2*HSP_HSF

# Reaction: id = HSP_Degradation, name = HSP_Degradation

HSP_Degra=compartme*k9*HSP

# Reaction: id = HSP_S_Protein_Refolding, name = HSP_S_Protein_Refolding

HSP_S_Pro=compartme*k10*HSP_S

# Reaction: id = HSP_Translation, name = HSP_Translation

HSP_Trans=compartme*Function_(k4, mRNA)

# Reaction: id = HSP_Production_Constitutive, name = HSP_Production_Constitutive

HSP_Produ=compartme*Constant_(k6)

# Reaction: id = HSF_Activation, name = HSF_Activation

HSF_Activ=compartme*Functio_2(k3, HSF)

# Reaction: id = P_Proteins_Denaturation, name = P_Proteins_Denaturation

P_Protein=compartme*k_11_T*P

# Reaction: id = HSE_HSF_3_Association, name = HSE_HSF_3_Association

HSE_HSF_1=compartme*k7*HSE*HSF_3

# Reaction: id = HSE_HSF_3_Dissociation, name = HSE_HSF_3_Dissociation

HSE_HSF_2=compartme*I_7_T*HSE_HSF_3

# Reaction: id = mRNA_Transcription, name = mRNA_Transcription

mRNA_Tran=compartme*Functio_1(k_8_T, HSE_HSF_3)

# Reaction: id = mRNA_Degradation, name = mRNA_Degradation

mRNA_Degr=compartme*k5*mRNA

# Species:   id = HSP, name = HSP, affected by kineticLaw

init HSP=52.06
dHSP/dt=(1/(compartme))*((-1.0 * HSF_Inact) + (-1.0 * HSP_S_Ass) + ( 1.0 * HSP_S_Dis) + (-1.0 * HSP_HSF_A) + ( 1.0 * HSP_HSF_D) + (-1.0 * HSP_Degra) + ( 1.0 * HSP_S_Pro) + ( 1.0 * HSP_Trans) + ( 1.0 * HSP_Produ))

# Species:   id = HSF, name = HSF, affected by kineticLaw

init HSF=0.001363
dHSF/dt=(1/(compartme))*(( 2.0 * HSF_Inact) + (-1.0 * HSP_HSF_A) + ( 1.0 * HSP_HSF_D) + (-3.0 * HSF_Activ))

# Species:   id = S, name = S, affected by kineticLaw

init S=8.122E-8
dS/dt=(1/(compartme))*((-1.0 * HSP_S_Ass) + ( 1.0 * HSP_S_Dis) + ( 1.0 * P_Protein))

# Species:   id = HSP_HSF, name = HSP_HSF, affected by kineticLaw

init HSP_HSF=0.01429
dHSP_HSF/dt=(1/(compartme))*(( 1.0 * HSF_Inact) + ( 1.0 * HSP_HSF_A) + (-1.0 * HSP_HSF_D))

# Species:   id = HSP_S, name = HSP_S, affected by kineticLaw

init HSP_S=5.268E-4
dHSP_S/dt=(1/(compartme))*(( 1.0 * HSP_S_Ass) + (-1.0 * HSP_S_Dis) + (-1.0 * HSP_S_Pro))

# Species:   id = HSF_3, name = HSF_3, affected by kineticLaw

init HSF_3=9.082E-6
dHSF_3/dt=(1/(compartme))*((-1.0 * HSF_Inact) + ( 1.0 * HSF_Activ) + (-1.0 * HSE_HSF_1) + ( 1.0 * HSE_HSF_2))

# Species:   id = HSE, name = HSE, affected by kineticLaw

init HSE=3.996E-6
dHSE/dt=(1/(compartme))*((-1.0 * HSE_HSF_1) + ( 1.0 * HSE_HSF_2))

# Species:   id = HSE_HSF_3, name = HSE_HSF_3, affected by kineticLaw

init HSE_HSF_3=4.484E-9
dHSE_HSF_3/dt=(1/(compartme))*(( 1.0 * HSE_HSF_1) + (-1.0 * HSE_HSF_2))

# Species:   id = P, name = P, affected by kineticLaw

init P=1297.0
dP/dt=(1/(compartme))*(( 1.0 * HSP_S_Pro) + (-1.0 * P_Protein))

# Species:   id = mRNA, name = mRNA, affected by kineticLaw

init mRNA=4.946E-4
dmRNA/dt=(1/(compartme))*(( 1.0 * mRNA_Tran) + (-1.0 * mRNA_Degr))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

