
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Cooper2015 - Modeling the effects of systemic mediators on the inflammatory phase of wound healing
#
# isDescribedBy http://identifiers.org/pubmed/25446708
# isDerivedFrom http://identifiers.org/pubmed/22810171
# isDerivedFrom http://identifiers.org/pubmed/16584750
# isDerivedFrom http://identifiers.org/pubmed/16616206
# is http://identifiers.org/biomodels.db/MODEL1911130002
# is http://identifiers.org/biomodels.db/BIOMD0000000855
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Constant_flux__irreversible, name = Constant flux (irreversible)
Constant_(v)=(v)


# FunctionDefinition id = Function_for_Pathogen_Growth, name = Function_for_Pathogen_Growth
Function_(kpg,P,pinf)=(kpg*P*(1-P/pinf))


# FunctionDefinition id = Function_for_Pathogen_Destruction_Neutrophils, name = Function_for_Pathogen_Destruction_Neutrophils
Functio_1(kpn,P,N,ken,E)=(kpn*P*N*(1+ken*E))


# FunctionDefinition id = Function_for_Pathogen_Destruction_Background_Response, name = Function_for_Pathogen_Destruction_Background_Response
Functio_2(kpb,sb,P,mub,kbp)=(kpb*sb*P/(mub+kbp*P))


# FunctionDefinition id = Function_for_Macrophage_Recruitment, name = Function_for_Macrophage_Recruitment
Functio_3(smr,R1,mumr)=(smr*R1/(mumr+R1))


# FunctionDefinition id = Function_for_Debris_Destruction_Macrophages, name = Function_for_Debris_Destruction_Macrophages
Functio_4(kptm,Pt,fi2,kem,E)=(kptm*Pt*fi2*(1+kem*E))


# FunctionDefinition id = Function_for_Debris_Destruction_Neutrophils, name = Function_for_Debris_Destruction_Neutrophils
Functio_5(kptn,Pt,N,ken)=(kptn*Pt*N*(1+ken*N))


# FunctionDefinition id = Function_for_Pathogen_Destruction_Macrophages, name = Function_for_Pathogen_Destruction_Macrophages
Functio_6(kpm,P,fi2,kem,E)=(kpm*P*fi2*(1+kem*E))


# FunctionDefinition id = Function_for_Neutrophil_Destruction_Macrophage, name = Function_for_Neutrophil_Destruction_Macrophage
Functio_7(knm,N,fi2)=(knm*N*fi2)


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Parameter:   id =  kpn, name = kpn, constant
par kpn=35.03

# Parameter:   id =  kpm, name = kpm, constant
par kpm=34.8

# Parameter:   id =  Ninf, name = Ninf, constant
par Ninf=0.11

# Parameter:   id =  kptn, name = kptn, constant
par kptn=2.03

# Parameter:   id =  kptm, name = kptm, constant
par kptm=3.16

# Parameter:   id =  mupt, name = mupt, constant
par mupt=0.37

# Parameter:   id =  knp, name = knp, constant
par knp=17.58

# Parameter:   id =  knpt, name = knpt, constant
par knpt=2.97

# Parameter:   id =  snr, name = snr, constant
par snr=0.38

# Parameter:   id =  munr, name = munr, constant
par munr=3.3

# Parameter:   id =  mun, name = mun, constant
par mun=1.02

# Parameter:   id =  knm, name = knm, constant
par knm=6.42

# Parameter:   id =  kmp, name = kmp, constant
par kmp=18.52

# Parameter:   id =  kmm, name = kmm, constant
par kmm=0.06

# Parameter:   id =  kmn, name = kmn, constant
par kmn=10.58

# Parameter:   id =  kmpt, name = kmpt, constant
par kmpt=41.5

# Parameter:   id =  smr, name = smr, constant
par smr=0.17

# Parameter:   id =  mumr, name = mumr, constant
par mumr=0.54

# Parameter:   id =  mum, name = mum, constant
par mum=0.5

# Parameter:   id =  fi2, name = fi2, defined by a Rule

# Parameter:   id =  fEN, name = fEN, defined by a Rule

# Parameter:   id =  R1, name = R1, defined by a Rule

# Parameter:   id =  R2, name = R2, defined by a Rule

# Parameter:   id =  ENinf, name = ENinf, constant
par ENinf=6.8

# Parameter:   id =  ken, name = ken, constant
par ken=5.37

# Parameter:   id =  EMinf, name = EMinf, constant
par EMinf=5.0

# Parameter:   id =  kem, name = kem, constant
par kem=4.97

# Parameter:   id =  Cn, name = Cn, constant
par Cn=175.72

# Parameter:   id =  Cm1, name = Cm1, constant
par Cm1=72.84

# Parameter:   id =  Cm2, name = Cm2, constant
par Cm2=13.06

# Parameter:   id =  kpg, name = kpg, constant
par kpg=14.4

# Parameter:   id =  pinf, name = pinf, constant
par pinf=20.0

# Parameter:   id =  kbp, name = kbp, constant
par kbp=0.2

# Parameter:   id =  sb, name = sb, constant
par sb=0.12

# Parameter:   id =  mub, name = mub, constant
par mub=0.048

# Parameter:   id =  kpb, name = kpb, constant
par kpb=14.4

# Parameter:   id =  C, name = C, constant
par C=0.0

# Parameter:   id =  E, name = E, constant
par E=0.0

# Parameter:   id =  fEM_Kmm_E, name = fEM_Kmm_E, defined by a Rule

# assignmentRule: variable = fEM_Kmm_E
fEM_Kmm_E=kmm/(1+(E/EMinf)^2)
aux fEM_Kmm_E=fEM_Kmm_E

# assignmentRule: variable = fi2
fi2=M/(1+(N/Ninf)^2+(C/Cm1)^2)
aux fi2=fi2

# assignmentRule: variable = R1
R1=(kmpt*Pt+kmp*P+fEM_Kmm_E*M+kmn*N)/(1+(C/Cm2)^2)
aux R1=R1

# assignmentRule: variable = R2
R2=(knpt*Pt+knp*P)/(1+(C/Cn)^2)
aux R2=R2

# assignmentRule: variable = fEN
fEN=snr*R2/(munr+R2)/(1+(E/ENinf)^2)
aux fEN=fEN

# Reaction: id = Pathogen_Growth, name = Pathogen_Growth

Pathogen_=compartme*Function_(kpg, P, pinf)

# Reaction: id = Pathogen_Destruction_Background_Response, name = Pathogen_Destruction_Background_Response

Pathoge_1=compartme*Functio_2(kpb, sb, P, mub, kbp)

# Reaction: id = Pathogen_Destruction_Neutrophils, name = Pathogen_Destruction_Neutrophils

Pathoge_2=compartme*Functio_1(kpn, P, N, ken, E)

# Reaction: id = Pathogen_Destruction_Macrophages, name = Pathogen_Destruction_Macrophages

Pathoge_3=compartme*Functio_6(kpm, P, fi2, kem, E)

# Reaction: id = Debris_Destruction_Neutrophils, name = Debris_Destruction_Neutrophils

Debris_De=compartme*Functio_5(kptn, Pt, N, ken)

# Reaction: id = Debris_Destruction_Macrophages, name = Debris_Destruction_Macrophages

Debris__1=compartme*Functio_4(kptm, Pt, fi2, kem, E)

# Reaction: id = Debris_Neutrophil_Decay, name = Debris_Neutrophil_Decay

Debris_Ne=compartme*mun*N

# Reaction: id = Debris_Decay_Intrinsic, name = Debris_Decay_Intrinsic

Debris__2=compartme*mupt*Pt

# Reaction: id = Macrophage_Recruitment, name = Macrophage_Recruitment

Macrophag=compartme*Functio_3(smr, R1, mumr)

# Reaction: id = Macrophage_Activation, name = Macrophage_Activation

Macroph_1=compartme*mum*M

# Reaction: id = Neutrophil_Activation, name = Neutrophil_Activation

Neutrophi=compartme*Constant_(fEN)

# Reaction: id = Neutrophil_Destruction_Macrophage, name = Neutrophil_Destruction_Macrophage

Neutrop_1=compartme*Functio_7(knm, N, fi2)

# Species:   id = P, name = P, affected by kineticLaw

init P=0.1
dP/dt=(1/(compartme))*(( 1.0 * Pathogen_) + (-1.0 * Pathoge_1) + (-1.0 * Pathoge_2) + (-1.0 * Pathoge_3))

# Species:   id = Pt, name = Pt, affected by kineticLaw

init Pt=2.0
dPt/dt=(1/(compartme))*((-1.0 * Debris_De) + (-1.0 * Debris__1) + ( 1.0 * Debris_Ne) + (-1.0 * Debris__2))

# Species:   id = M, name = M, affected by kineticLaw

init M=0.0
dM/dt=(1/(compartme))*(( 1.0 * Macrophag) + (-1.0 * Macroph_1))

# Species:   id = N, name = N, affected by kineticLaw

init N=0.1
dN/dt=(1/(compartme))*((-1.0 * Debris_Ne) + ( 1.0 * Neutrophi) + (-1.0 * Neutrop_1))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

