
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Simon2019 - NIK-dependent p100 processing into p52 and IkBd degradation, mass action, SBML 2v4
#
# is http://identifiers.org/biomodels.db/MODEL1904020003
# is http://identifiers.org/biomodels.db/BIOMD0000000870
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Parameter:   id =  p52_uM, name = p52_uM, defined by a Rule

# Parameter:   id =  IkBd_uM, name = IkBd_uM, defined by a Rule

# assignmentRule: variable = p52_uM
p52_uM=p52/1000
aux p52_uM=p52_uM

# assignmentRule: variable = IkBd_uM
IkBd_uM=IkBd/1000
aux IkBd_uM=IkBd_uM

# Reaction: id = p100_mRNA_Expressions, name = p100 mRNA Expressions
# Local Parameter:   id =  k1, name = k1
par k1=0.2


p100_mRNA=compartme*k1*p100t

# Reaction: id = p100_processing, name = p100 processing
# Local Parameter:   id =  k1, name = k1
par k1_1=0.05


p100_proc=compartme*k1_1*p100_NIK

# Reaction: id = p52_degradation, name = p52 degradation
# Local Parameter:   id =  k1, name = k1
par k1_1_2=3.8E-4


p52_degra=compartme*k1_1_2*p52

# Reaction: id = p100_degradation, name = p100 degradation
# Local Parameter:   id =  k1, name = k1
par k1_1_2_3=3.8E-4


p100_degr=compartme*k1_1_2_3*p100

# Reaction: id = p100_dimerization, name = p100 dimerization
# Local Parameter:   id =  k1, name = k1
par k1_1_2__4=1.6E-5

# Local Parameter:   id =  k2, name = k2
par k2=2.4E-4


p100_dime=compartme*(k1_1_2__4*p100^2-k2*IkBd)

# Reaction: id = IkBd_degradation, name = IkBd degradation
# Local Parameter:   id =  k1, name = k1
par k1_1_2__5=3.8E-4


IkBd_degr=compartme*k1_1_2__5*IkBd

# Reaction: id = IkBd_degradation_by_NIK, name = IkBd degradation by NIK
# Local Parameter:   id =  k1, name = k1
par k1_1_2__6=0.05


IkBd_de_1=compartme*k1_1_2__6*IkBd_NIK

# Reaction: id = p100_NIK_binding, name = p100 NIK binding
# Local Parameter:   id =  k1, name = k1
par k1_1_2__7=0.005

# Local Parameter:   id =  k2, name = k2
par k2_1=2.4E-4


p100_NIK_=compartme*(k1_1_2__7*p100*NIK-k2_1*p100_NIK)

# Reaction: id = IkBd_NIK_binding, name = IkBd NIK binding
# Local Parameter:   id =  k1, name = k1
par k1_1_2__8=0.005

# Local Parameter:   id =  k2, name = k2
par k2_1_2=2.4E-4


IkBd_NIK_=compartme*(k1_1_2__8*IkBd*NIK-k2_1_2*IkBd_NIK)

# Species:   id = p100t, name = p100t, constant
par p100t=2.5


# Species:   id = p100, name = p100, affected by kineticLaw

init p100=0.0
dp100/dt=(1/(compartme))*(( 1.0 * p100_mRNA) + (-1.0 * p100_degr) + (-2.0 * p100_dime) + (-1.0 * p100_NIK_))

# Species:   id = p52, name = p52, affected by kineticLaw

init p52=0.0
dp52/dt=(1/(compartme))*(( 1.0 * p100_proc) + (-1.0 * p52_degra))

# Species:   id = NIK, name = NIK, affected by kineticLaw

init NIK=10.0
dNIK/dt=(1/(compartme))*(( 1.0 * p100_proc) + ( 1.0 * IkBd_de_1) + (-1.0 * p100_NIK_) + (-1.0 * IkBd_NIK_))

# Species:   id = IkBd, name = IkBd, affected by kineticLaw

init IkBd=0.0
dIkBd/dt=(1/(compartme))*(( 1.0 * p100_dime) + (-1.0 * IkBd_degr) + (-1.0 * IkBd_NIK_))

# Species:   id = IkBd_NIK, name = IkBd:NIK, affected by kineticLaw

init IkBd_NIK=0.0
dIkBd_NIK/dt=(1/(compartme))*((-1.0 * IkBd_de_1) + ( 1.0 * IkBd_NIK_))

# Species:   id = p100_NIK, name = p100:NIK, affected by kineticLaw

init p100_NIK=0.0
dp100_NIK/dt=(1/(compartme))*((-1.0 * p100_proc) + ( 1.0 * p100_NIK_))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

