
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Soni2018 - IL6 induced M2 Phenotype in Leishmania major infected macrophage
#
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Function_for_reaction_15b, name = Function for reaction_15b
Function_(mw7ff2e94a_ac19_47ed_9127_14d385a1e544,mwb9a40fab_a7c9_4984_805f_045fefc4ff32,mwf8062aeb_69d6_416b_b877_9687ef6fbc80,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw7ff2e94a_ac19_47ed_9127_14d385a1e544*mwb9a40fab_a7c9_4984_805f_045fefc4ff32*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mwf8062aeb_69d6_416b_b877_9687ef6fbc80+mwb9a40fab_a7c9_4984_805f_045fefc4ff32*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_22, name = Function for reaction_22
Functio_1(mw3d58864c_79c7_4ff2_98fe_1a85b2ccc43d,mw5805aaa6_5a0a_495b_a21b_16e6ba6f39bc,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)=(mw5805aaa6_5a0a_495b_a21b_16e6ba6f39bc*mw3d58864c_79c7_4ff2_98fe_1a85b2ccc43d*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_23, name = Function for reaction_23
Functio_2(mw57b4236e_c789_4799_a4f9_a03437a5593a,mw658feef9_67a1_431f_95fa_7358c6b294d2,mw8d03d46b_3832_4fe6_8a6b_467ef38af206,mwacd53f34_4935_4b6a_8267_024f0d966c8c,mwf50b6519_aaf9_4cb0_a651_d5a3159d7390,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw658feef9_67a1_431f_95fa_7358c6b294d2*mw57b4236e_c789_4799_a4f9_a03437a5593a*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mw8d03d46b_3832_4fe6_8a6b_467ef38af206*(1+mwacd53f34_4935_4b6a_8267_024f0d966c8c*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwf50b6519_aaf9_4cb0_a651_d5a3159d7390)+mw57b4236e_c789_4799_a4f9_a03437a5593a*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_3, name = Function for reaction_3
Functio_3(mw0930c7cf_99a6_4a20_a33d_02fd90e424bb,mwc42127ea_2b78_4381_b230_30e95cd5a9d6,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw0930c7cf_99a6_4a20_a33d_02fd90e424bb*mwc42127ea_2b78_4381_b230_30e95cd5a9d6*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_4, name = Function for reaction_4
Functio_4(mw4fd8b902_e2a2_4910_899c_2a7d3425e0e0,mw5b78650d_d92f_4602_bbe9_66d900ff312e,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw5b78650d_d92f_4602_bbe9_66d900ff312e*mw4fd8b902_e2a2_4910_899c_2a7d3425e0e0*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_5, name = Function for reaction_5
Functio_5(mwec4950e3_ecf8_4077_9cd1_b70818e911b9,mwf06c0537_577b_4f13_a9a3_521f9d2217fb,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwec4950e3_ecf8_4077_9cd1_b70818e911b9*mwf06c0537_577b_4f13_a9a3_521f9d2217fb*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_6, name = Function for reaction_6
Functio_6(mw9c4a9937_faff_4853_8a76_d17a084948d9,mwbba20281_3d8b_48c3_8e13_dee78e87dfb8,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw9c4a9937_faff_4853_8a76_d17a084948d9*mwbba20281_3d8b_48c3_8e13_dee78e87dfb8*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_7, name = Function for reaction_7
Functio_7(mw78198c86_4b16_4117_8592_6a95c3953126,mwb8d480f9_5783_4feb_aaf1_2f861b09e009,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwb8d480f9_5783_4feb_aaf1_2f861b09e009*mw78198c86_4b16_4117_8592_6a95c3953126*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_10, name = Function for reaction_10
Functio_8(mw5607cee0_ee75_4065_9368_d07c3abbe18b,mw58dfe861_b815_48b4_89e9_6f71cccb561e,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)=(mw58dfe861_b815_48b4_89e9_6f71cccb561e*mw5607cee0_ee75_4065_9368_d07c3abbe18b*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_11, name = Function for reaction_11
Functio_9(mw8675a533_92fb_4fbf_b747_7bca05c5841c,mwdf0efe39_4f88_4fc1_930b_55865b8d52f0,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwdf0efe39_4f88_4fc1_930b_55865b8d52f0*mw8675a533_92fb_4fbf_b747_7bca05c5841c*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_13, name = Function for reaction_13
Functi_10(mw4594ab28_d538_4a72_875a_d878e907020d,mw5b252d78_9ab9_438c_8b81_2189b1f76357,mw664a2e7f_0c35_423c_ac5d_34090e629a69,mwb167e768_b778_4072_8798_3cf19e96d1d7)=(mw4594ab28_d538_4a72_875a_d878e907020d*mwb167e768_b778_4072_8798_3cf19e96d1d7*mw664a2e7f_0c35_423c_ac5d_34090e629a69*mw5b252d78_9ab9_438c_8b81_2189b1f76357*mw664a2e7f_0c35_423c_ac5d_34090e629a69/mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_12, name = Function for reaction_12
Functi_11(mw56c26af9_9f4a_4f13_936a_94ae6364342b,mw664a2e7f_0c35_423c_ac5d_34090e629a69,mw7b7a1d20_f258_4e3d_9234_62db60126326,mw9b410665_6c5e_4f37_a7f2_0cb0963b98b1)=(mw7b7a1d20_f258_4e3d_9234_62db60126326*mw9b410665_6c5e_4f37_a7f2_0cb0963b98b1*mw664a2e7f_0c35_423c_ac5d_34090e629a69*mw56c26af9_9f4a_4f13_936a_94ae6364342b*mw664a2e7f_0c35_423c_ac5d_34090e629a69/mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_15a, name = Function for reaction_15a
Functi_12(mw58370246_a992_4253_8029_12fbb07a417d,mw5ea6c681_bf85_4ac5_9aac_536087a97950,mw65a608c7_1026_4108_bb3d_f3358430aaf2,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw65a608c7_1026_4108_bb3d_f3358430aaf2*mw58370246_a992_4253_8029_12fbb07a417d*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mw5ea6c681_bf85_4ac5_9aac_536087a97950+mw58370246_a992_4253_8029_12fbb07a417d*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_14a, name = Function for reaction_14a
Functi_13(mw106608bc_52fb_40e5_babb_cbb58aaaeed4,mw664a2e7f_0c35_423c_ac5d_34090e629a69,mwf219928e_abba_4c09_9597_5d6910f7e4d9)=(mw106608bc_52fb_40e5_babb_cbb58aaaeed4*mwf219928e_abba_4c09_9597_5d6910f7e4d9*mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_8, name = Function for reaction_8
Functi_14(mw7938fab7_d0c6_497b_8fb6_75922fcc19d5,mwe0f7b31e_2efc_481e_90d0_e86c3b8d0be4,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwe0f7b31e_2efc_481e_90d0_e86c3b8d0be4*mw7938fab7_d0c6_497b_8fb6_75922fcc19d5*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_9, name = Function for reaction_9
Functi_15(mw1981fa4d_c122_41a6_8c85_55a49d408c00,mw340bc412_34ab_498a_bd42_47dd6cf025bd,mw6cf7ac60_5bab_4b73_bb47_dc064486f000,mwba110304_bd9a_4fd0_9b4c_b8bfc975e30b,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)=(mw1981fa4d_c122_41a6_8c85_55a49d408c00*(mwba110304_bd9a_4fd0_9b4c_b8bfc975e30b*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mw340bc412_34ab_498a_bd42_47dd6cf025bd/(mw6cf7ac60_5bab_4b73_bb47_dc064486f000+(mwba110304_bd9a_4fd0_9b4c_b8bfc975e30b*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mw340bc412_34ab_498a_bd42_47dd6cf025bd)/mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_19, name = Function for reaction_19
Functi_16(mw87e9394c_7eef_4271_85bc_d1b0a96db1f2,mwd5f166e6_df0a_45bf_b662_e87b91b79a27,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw87e9394c_7eef_4271_85bc_d1b0a96db1f2*mwd5f166e6_df0a_45bf_b662_e87b91b79a27*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_20, name = Function for reaction_20
Functi_17(mw9275f30d_c42b_459c_91c5_67b7e08b6486,mwd84cf612_edaf_4dd9_9abd_003cc0569864,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwd84cf612_edaf_4dd9_9abd_003cc0569864*mw9275f30d_c42b_459c_91c5_67b7e08b6486*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_21, name = Function for reaction_21
Functi_18(mw051e0a03_1d45_448b_be4a_9d489e1b3ff9,mw322ca6ab_81cf_4f6c_835e_48bb5f8b11de,mwbe46ba92_97de_4cc4_970d_2dec54671573,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9,mwf9b630f8_c8a5_4fd0_bef1_92819b1257d2)=(mw051e0a03_1d45_448b_be4a_9d489e1b3ff9*(mwbe46ba92_97de_4cc4_970d_2dec54671573*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mwf9b630f8_c8a5_4fd0_bef1_92819b1257d2/(mw322ca6ab_81cf_4f6c_835e_48bb5f8b11de+(mwbe46ba92_97de_4cc4_970d_2dec54671573*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mwf9b630f8_c8a5_4fd0_bef1_92819b1257d2)/mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_16, name = Function for reaction_16
Functi_19(mw869055b5_5d27_4f4a_a390_b3fa48d6780e,mwe479dc91_2774_4239_8212_60a330a84a76,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwe479dc91_2774_4239_8212_60a330a84a76*mw869055b5_5d27_4f4a_a390_b3fa48d6780e*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_17, name = Function for reaction_17
Functi_20(mwc84af692_e3fc_4ede_99b6_b0cce3729bf7,mwf5ba0e23_9a0b_4bf6_b0ea_9fbc91843b5c,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwf5ba0e23_9a0b_4bf6_b0ea_9fbc91843b5c*mwc84af692_e3fc_4ede_99b6_b0cce3729bf7*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_18, name = Function for reaction_18
Functi_21(mw3bf6abba_fc8d_4254_bc9c_037ec64d3e12,mw4c1174b0_1cba_4d7c_bedb_c29d9f65c10c,mw55b6f083_2b28_4a1a_ab90_82a751525d72,mw85474b5d_1b19_4388_bcee_098fbb23f2e0,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)=(mw3bf6abba_fc8d_4254_bc9c_037ec64d3e12*(mw55b6f083_2b28_4a1a_ab90_82a751525d72*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mw4c1174b0_1cba_4d7c_bedb_c29d9f65c10c/(mw85474b5d_1b19_4388_bcee_098fbb23f2e0+(mw55b6f083_2b28_4a1a_ab90_82a751525d72*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mw4c1174b0_1cba_4d7c_bedb_c29d9f65c10c)/mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_14b, name = Function for reaction_14b
Functi_22(mw664a2e7f_0c35_423c_ac5d_34090e629a69,mwd01d5494_fdcd_494e_8652_87201fa5b291,mwf219928e_abba_4c09_9597_5d6910f7e4d9)=(mwd01d5494_fdcd_494e_8652_87201fa5b291*mwf219928e_abba_4c09_9597_5d6910f7e4d9*mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_28, name = Function for reaction_28
Functi_23(mw364ca1a4_fc56_4138_8031_16341ac865de,mw5b67154e_1851_4ba0_9491_7a14b2064c42,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)=(mw5b67154e_1851_4ba0_9491_7a14b2064c42*mw364ca1a4_fc56_4138_8031_16341ac865de*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_24, name = Function for reaction_24
Functi_24(mw202bb744_d70a_4cf2_b2db_0d9d360bdfb5,mw78198c86_4b16_4117_8592_6a95c3953126,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw202bb744_d70a_4cf2_b2db_0d9d360bdfb5*mw78198c86_4b16_4117_8592_6a95c3953126*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_25, name = Function for reaction_25
Functi_25(mw3288f227_0208_435a_a41c_b1778f50008c,mwf26f605f_29e9_4454_834c_7b3edab4bbc2,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw3288f227_0208_435a_a41c_b1778f50008c*mwf26f605f_29e9_4454_834c_7b3edab4bbc2*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_26, name = Function for reaction_26
Functi_26(mw10b15557_55f5_4525_b19d_161b056f5791,mwe250484c_acc9_4453_9eb6_49cda54b2f1e,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwe250484c_acc9_4453_9eb6_49cda54b2f1e*mw10b15557_55f5_4525_b19d_161b056f5791*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_27, name = Function for reaction_27
Functi_27(mw2ba0a425_a224_4fa1_affc_bcc206027a3e,mw58370246_a992_4253_8029_12fbb07a417d,mw8f586bdf_8d42_49c1_807a_670a1c49cbd9,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw8f586bdf_8d42_49c1_807a_670a1c49cbd9*mw58370246_a992_4253_8029_12fbb07a417d*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mw2ba0a425_a224_4fa1_affc_bcc206027a3e+mw58370246_a992_4253_8029_12fbb07a417d*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_34, name = Function for reaction_34
Functi_28(mw4fc13b75_10cc_41fb_b9f8_1ce95fccae73,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9,mwe808b2da_9ed2_421e_a8d9_3c3534d42ee0)=(mwe808b2da_9ed2_421e_a8d9_3c3534d42ee0*mw4fc13b75_10cc_41fb_b9f8_1ce95fccae73*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_29, name = Function for reaction_29
Functi_29(mw49322d55_ad63_4e7c_b1eb_42835c9b577a,mw664a2e7f_0c35_423c_ac5d_34090e629a69,mw7246cef3_7a78_43b0_acb7_21533c394daa,mw85ae78ed_34f7_460c_b906_1f512a83810c)=(mw7246cef3_7a78_43b0_acb7_21533c394daa*mw85ae78ed_34f7_460c_b906_1f512a83810c*mw664a2e7f_0c35_423c_ac5d_34090e629a69*mw49322d55_ad63_4e7c_b1eb_42835c9b577a*mw664a2e7f_0c35_423c_ac5d_34090e629a69/mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_30, name = Function for reaction_30
Functi_30(mw2081c907_9d37_48a0_8581_8b8f3d5f7148,mw664a2e7f_0c35_423c_ac5d_34090e629a69,mwd7270399_0429_4c85_920a_de2e0ae74440)=(mw2081c907_9d37_48a0_8581_8b8f3d5f7148*mwd7270399_0429_4c85_920a_de2e0ae74440*mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_31, name = Function for reaction_31
Functi_31(mw7f261959_39d2_4e8b_92b6_4466c2504544,mw91a51f27_e4be_41a6_a967_b6a63c909652,mwd7b0f9fb_1180_47bb_b8c0_be2f89aa1c59,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw91a51f27_e4be_41a6_a967_b6a63c909652*mw7f261959_39d2_4e8b_92b6_4466c2504544*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mwd7b0f9fb_1180_47bb_b8c0_be2f89aa1c59+mw7f261959_39d2_4e8b_92b6_4466c2504544*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_32, name = Function for reaction_32
Functi_32(mw2a60d98a_bc06_4e05_b965_c920da8987dc,mw3c07a768_8e7a_49bb_8a1d_fdc92192f92b,mw7f261959_39d2_4e8b_92b6_4466c2504544,mw9704b67a_2c16_4ac7_a311_2096ab426758,mwacd53f34_4935_4b6a_8267_024f0d966c8c,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mw3c07a768_8e7a_49bb_8a1d_fdc92192f92b*mw7f261959_39d2_4e8b_92b6_4466c2504544*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mw9704b67a_2c16_4ac7_a311_2096ab426758*(1+mwacd53f34_4935_4b6a_8267_024f0d966c8c*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/mw2a60d98a_bc06_4e05_b965_c920da8987dc)+mw7f261959_39d2_4e8b_92b6_4466c2504544*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_33, name = Function for reaction_33
Functi_33(mw9ca6d980_6fbd_4207_9f2c_c05e2b5b0502,mwbe46ba92_97de_4cc4_970d_2dec54671573,mwcffa9e49_67c6_4908_9314_6c16030c8989,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9,mwf32cef57_32ba_4c0f_bbaf_bbc90af4a8aa)=(mwf32cef57_32ba_4c0f_bbaf_bbc90af4a8aa*(mwbe46ba92_97de_4cc4_970d_2dec54671573*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mwcffa9e49_67c6_4908_9314_6c16030c8989/(mw9ca6d980_6fbd_4207_9f2c_c05e2b5b0502+(mwbe46ba92_97de_4cc4_970d_2dec54671573*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mwcffa9e49_67c6_4908_9314_6c16030c8989)/mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_35, name = Function for reaction_35
Functi_34(mw287bd1ba_fbc1_43a0_94ab_38a6336bbebb,mw2db26dbd_dda3_4770_b923_d2725a80ccba,mw55b6f083_2b28_4a1a_ab90_82a751525d72,mwb86b112e_674a_4e98_8ca4_3d0273a134d4,mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)=(mwb86b112e_674a_4e98_8ca4_3d0273a134d4*(mw55b6f083_2b28_4a1a_ab90_82a751525d72*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mw2db26dbd_dda3_4770_b923_d2725a80ccba/(mw287bd1ba_fbc1_43a0_94ab_38a6336bbebb+(mw55b6f083_2b28_4a1a_ab90_82a751525d72*mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)^mw2db26dbd_dda3_4770_b923_d2725a80ccba)/mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9)


# FunctionDefinition id = Function_for_reaction_14, name = Function for reaction_14
Functi_35(mw1aca690a_9ee1_460f_bc28_780fb04c1a32,mwb9a40fab_a7c9_4984_805f_045fefc4ff32,mwf604d18f_ae32_4d08_bfef_f778aae8f24b,mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)=(mwf604d18f_ae32_4d08_bfef_f778aae8f24b*mwb9a40fab_a7c9_4984_805f_045fefc4ff32*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(mw1aca690a_9ee1_460f_bc28_780fb04c1a32+mwb9a40fab_a7c9_4984_805f_045fefc4ff32*mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)/mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22)


# FunctionDefinition id = Function_for_reaction_1, name = Function for reaction_1
Functi_36(mw664a2e7f_0c35_423c_ac5d_34090e629a69,mw763cffc8_c121_4004_afdb_97e9de9f0081,mwa244ea2a_3e41_473b_9ae7_d0db512fc366,mwf80a94ba_03ba_44f0_b793_4f60c20fd074,mwfaacd7f7_6aa9_4e6c_a7d8_281f2022ba2f)=(mwf80a94ba_03ba_44f0_b793_4f60c20fd074*mwfaacd7f7_6aa9_4e6c_a7d8_281f2022ba2f*mw664a2e7f_0c35_423c_ac5d_34090e629a69*mwa244ea2a_3e41_473b_9ae7_d0db512fc366*mw664a2e7f_0c35_423c_ac5d_34090e629a69*mw763cffc8_c121_4004_afdb_97e9de9f0081*mw664a2e7f_0c35_423c_ac5d_34090e629a69/mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# FunctionDefinition id = Function_for_reaction_2, name = Function for reaction_2
Functi_37(mw6339814d_af4c_4eee_9455_7e20795f6aeb,mw664a2e7f_0c35_423c_ac5d_34090e629a69,mwce7a28b5_2f60_4228_a88f_ccd3a6213c3e)=(mwce7a28b5_2f60_4228_a88f_ccd3a6213c3e*mw6339814d_af4c_4eee_9455_7e20795f6aeb*mw664a2e7f_0c35_423c_ac5d_34090e629a69)


# Compartment: id = mw664a2e7f_0c35_423c_ac5d_34090e629a69, name = membrane, constant
par mw664a2e7=1.0

# Compartment: id = mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22, name = CYTOSOL, constant
par mwfef402b=1.0

# Compartment: id = mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9, name = NUCLEUS, constant
par mwdfcbcdb=1.0

# Reaction: id = mw3e247db2_b375_4e41_9e33_bb760833ee16, name = reaction_3
# Local Parameter:   id =  mw0930c7cf_99a6_4a20_a33d_02fd90e424bb, name = mw0930c7cf_99a6_4a20_a33d_02fd90e424bb
par mw0930c7c=0.24


mw3e247db=mwfef402b*Functio_3(mw0930c7c, mwc42127e, mwfef402b)

# Reaction: id = mwe089edae_0b7c_485a_814d_227b9a9ad5fd, name = reaction_4
# Local Parameter:   id =  mw5b78650d_d92f_4602_bbe9_66d900ff312e, name = mw5b78650d_d92f_4602_bbe9_66d900ff312e
par mw5b78650=0.22


mwe089eda=mwfef402b*Functio_4(mw4fd8b90, mw5b78650, mwfef402b)

# Reaction: id = mw355d0180_1300_4b22_afd0_dca38ce33afe, name = reaction_5
# Local Parameter:   id =  mwec4950e3_ecf8_4077_9cd1_b70818e911b9, name = mwec4950e3_ecf8_4077_9cd1_b70818e911b9
par mwec4950e=0.19


mw355d018=mwfef402b*Functio_5(mwec4950e, mwf06c053, mwfef402b)

# Reaction: id = mw68476f54_ab4a_403c_af35_355d74054f82, name = reaction_6
# Local Parameter:   id =  mw9c4a9937_faff_4853_8a76_d17a084948d9, name = mw9c4a9937_faff_4853_8a76_d17a084948d9
par mw9c4a993=0.16


mw68476f5=mwfef402b*Functio_6(mw9c4a993, mwbba2028, mwfef402b)

# Reaction: id = mw8248f0e8_00d0_44dc_ae79_b61f77b4c52c, name = reaction_7
# Local Parameter:   id =  mwb8d480f9_5783_4feb_aaf1_2f861b09e009, name = mwb8d480f9_5783_4feb_aaf1_2f861b09e009
par mwb8d480f=0.14


mw8248f0e=mwfef402b*Functio_7(mw78198c8, mwb8d480f, mwfef402b)

# Reaction: id = mw301aee85_afee_49b3_ad89_b1cc5c8567b1, name = reaction_10
# Local Parameter:   id =  mw58dfe861_b815_48b4_89e9_6f71cccb561e, name = mw58dfe861_b815_48b4_89e9_6f71cccb561e
par mw58dfe86=0.095


mw301aee8=Functio_8(mw5607cee, mw58dfe86, mwdfcbcdb)

# Reaction: id = mw59a4b107_a52b_43b5_8415_3668e494102e, name = reaction_11
# Local Parameter:   id =  mwdf0efe39_4f88_4fc1_930b_55865b8d52f0, name = mwdf0efe39_4f88_4fc1_930b_55865b8d52f0
par mwdf0efe3=0.08


mw59a4b10=Functio_9(mw8675a53, mwdf0efe3, mwfef402b)

# Reaction: id = mw2fe228f0_8489_473b_b52d_da641e63e7cb, name = reaction_13
# Local Parameter:   id =  mw4594ab28_d538_4a72_875a_d878e907020d, name = mw4594ab28_d538_4a72_875a_d878e907020d
par mw4594ab2=1.0E-15


mw2fe228f=mw664a2e7*Functi_10(mw4594ab2, mw5b252d7, mw664a2e7, mwb167e76)

# Reaction: id = mwc6831066_978e_4f05_b58a_7b138e3ba727, name = reaction_12
# Local Parameter:   id =  mw7b7a1d20_f258_4e3d_9234_62db60126326, name = mw7b7a1d20_f258_4e3d_9234_62db60126326
par mw7b7a1d2=6.0E-5


mwc683106=mw664a2e7*Functi_11(mw56c26af, mw664a2e7, mw7b7a1d2, mw9b41066)

# Reaction: id = mw3ea84261_760d_4fc7_b420_c728b0f6d90d, name = reaction_15a
# Local Parameter:   id =  mw5ea6c681_bf85_4ac5_9aac_536087a97950, name = mw5ea6c681_bf85_4ac5_9aac_536087a97950
par mw5ea6c68=1.0

# Local Parameter:   id =  mw65a608c7_1026_4108_bb3d_f3358430aaf2, name = mw65a608c7_1026_4108_bb3d_f3358430aaf2
par mw65a608c=1.0


mw3ea8426=mwfef402b*Functi_12(mw5837024, mw5ea6c68, mw65a608c, mwfef402b)

# Reaction: id = mw4a4f5084_a8ec_4fd2_a74f_6db84a627a29, name = reaction_14a
# Local Parameter:   id =  mw106608bc_52fb_40e5_babb_cbb58aaaeed4, name = mw106608bc_52fb_40e5_babb_cbb58aaaeed4
par mw106608b=0.24


mw4a4f508=Functi_13(mw106608b, mw664a2e7, mwf219928)

# Reaction: id = mw1eec4037_93c1_4fe1_93d3_7e85a42216f7, name = reaction_8
# Local Parameter:   id =  mwe0f7b31e_2efc_481e_90d0_e86c3b8d0be4, name = mwe0f7b31e_2efc_481e_90d0_e86c3b8d0be4
par mwe0f7b31=0.125


mw1eec403=Functi_14(mw7938fab, mwe0f7b31, mwfef402b)

# Reaction: id = mwe737aa62_097e_474c_87d5_7b7eeaadd087, name = reaction_9
# Local Parameter:   id =  mw1981fa4d_c122_41a6_8c85_55a49d408c00, name = mw1981fa4d_c122_41a6_8c85_55a49d408c00
par mw1981fa4=400.0

# Local Parameter:   id =  mw340bc412_34ab_498a_bd42_47dd6cf025bd, name = mw340bc412_34ab_498a_bd42_47dd6cf025bd
par mw340bc41=1.0

# Local Parameter:   id =  mw6cf7ac60_5bab_4b73_bb47_dc064486f000, name = mw6cf7ac60_5bab_4b73_bb47_dc064486f000
par mw6cf7ac6=2000.0


mwe737aa6=mwdfcbcdb*Functi_15(mw1981fa4, mw340bc41, mw6cf7ac6, mwba11030, mwdfcbcdb)

# Reaction: id = mw5dd08c34_8422_4e63_a58d_a497237b3d46, name = reaction_19
# Local Parameter:   id =  mw87e9394c_7eef_4271_85bc_d1b0a96db1f2, name = mw87e9394c_7eef_4271_85bc_d1b0a96db1f2
par mw87e9394=0.0


mw5dd08c3=mwfef402b*Functi_16(mw87e9394, mwd5f166e, mwfef402b)

# Reaction: id = mw019a6415_bb9a_40a9_b627_5aa5fccedbc8, name = reaction_20
# Local Parameter:   id =  mwd84cf612_edaf_4dd9_9abd_003cc0569864, name = mwd84cf612_edaf_4dd9_9abd_003cc0569864
par mwd84cf61=0.0


mw019a641=Functi_17(mw9275f30, mwd84cf61, mwfef402b)

# Reaction: id = mwc2dc1496_a57b_4ea5_ba81_838f3344915c, name = reaction_21
# Local Parameter:   id =  mw051e0a03_1d45_448b_be4a_9d489e1b3ff9, name = mw051e0a03_1d45_448b_be4a_9d489e1b3ff9
par mw051e0a0=0.0

# Local Parameter:   id =  mw322ca6ab_81cf_4f6c_835e_48bb5f8b11de, name = mw322ca6ab_81cf_4f6c_835e_48bb5f8b11de
par mw322ca6a=0.0

# Local Parameter:   id =  mwf9b630f8_c8a5_4fd0_bef1_92819b1257d2, name = mwf9b630f8_c8a5_4fd0_bef1_92819b1257d2
par mwf9b630f=0.0


mwc2dc149=mwdfcbcdb*Functi_18(mw051e0a0, mw322ca6a, mwbe46ba9, mwdfcbcdb, mwf9b630f)

# Reaction: id = mw35c5dd2a_d94c_4b60_a72d_561cb55f84f0, name = reaction_16
# Local Parameter:   id =  mwe479dc91_2774_4239_8212_60a330a84a76, name = mwe479dc91_2774_4239_8212_60a330a84a76
par mwe479dc9=0.86


mw35c5dd2=mwfef402b*Functi_19(mw869055b, mwe479dc9, mwfef402b)

# Reaction: id = mwd4d17665_ea8f_45cd_aeae_c8a3ea8d4115, name = reaction_17
# Local Parameter:   id =  mwf5ba0e23_9a0b_4bf6_b0ea_9fbc91843b5c, name = mwf5ba0e23_9a0b_4bf6_b0ea_9fbc91843b5c
par mwf5ba0e2=0.1


mwd4d1766=Functi_20(mwc84af69, mwf5ba0e2, mwfef402b)

# Reaction: id = mw4764870e_b030_4ffe_861a_1660a6d08340, name = reaction_18
# Local Parameter:   id =  mw3bf6abba_fc8d_4254_bc9c_037ec64d3e12, name = mw3bf6abba_fc8d_4254_bc9c_037ec64d3e12
par mw3bf6abb=1000.0

# Local Parameter:   id =  mw4c1174b0_1cba_4d7c_bedb_c29d9f65c10c, name = mw4c1174b0_1cba_4d7c_bedb_c29d9f65c10c
par mw4c1174b=1.0

# Local Parameter:   id =  mw85474b5d_1b19_4388_bcee_098fbb23f2e0, name = mw85474b5d_1b19_4388_bcee_098fbb23f2e0
par mw85474b5=700.0


mw4764870=mwdfcbcdb*Functi_21(mw3bf6abb, mw4c1174b, mw55b6f08, mw85474b5, mwdfcbcdb)

# Reaction: id = mwddce3a0d_4301_48aa_ae63_37a44f2f2088, name = reaction_14b
# Local Parameter:   id =  mwd01d5494_fdcd_494e_8652_87201fa5b291, name = mwd01d5494_fdcd_494e_8652_87201fa5b291
par mwd01d549=0.002


mwddce3a0=Functi_22(mw664a2e7, mwd01d549, mwf219928)

# Reaction: id = mwa93a841c_769e_407d_8c81_f1831ca594dd, name = reaction_15b
# Local Parameter:   id =  mw7ff2e94a_ac19_47ed_9127_14d385a1e544, name = mw7ff2e94a_ac19_47ed_9127_14d385a1e544
par mw7ff2e94=1.0

# Local Parameter:   id =  mwf8062aeb_69d6_416b_b877_9687ef6fbc80, name = mwf8062aeb_69d6_416b_b877_9687ef6fbc80
par mwf8062ae=1.0


mwa93a841=mwfef402b*Function_(mw7ff2e94, mwb9a40fa, mwf8062ae, mwfef402b)

# Reaction: id = mwbc1856f9_a538_4023_bce5_09484e8e71cf, name = reaction_22
# Local Parameter:   id =  mw5805aaa6_5a0a_495b_a21b_16e6ba6f39bc, name = mw5805aaa6_5a0a_495b_a21b_16e6ba6f39bc
par mw5805aaa=0.3


mwbc1856f=Functio_1(mw3d58864, mw5805aaa, mwdfcbcdb)

# Reaction: id = mw1f853efb_fa0c_47b5_8151_210a68961204, name = reaction_23
# Local Parameter:   id =  mw658feef9_67a1_431f_95fa_7358c6b294d2, name = mw658feef9_67a1_431f_95fa_7358c6b294d2
par mw658feef=1.0E-15

# Local Parameter:   id =  mw8d03d46b_3832_4fe6_8a6b_467ef38af206, name = mw8d03d46b_3832_4fe6_8a6b_467ef38af206
par mw8d03d46=10.0

# Local Parameter:   id =  mwf50b6519_aaf9_4cb0_a651_d5a3159d7390, name = mwf50b6519_aaf9_4cb0_a651_d5a3159d7390
par mwf50b651=10.0


mw1f853ef=mwfef402b*Functio_2(mw57b4236, mw658feef, mw8d03d46, mwacd53f3, mwf50b651, mwfef402b)

# Reaction: id = mwfdc768f1_5ae9_47dc_9506_b957dd352582, name = reaction_28
# Local Parameter:   id =  mw5b67154e_1851_4ba0_9491_7a14b2064c42, name = mw5b67154e_1851_4ba0_9491_7a14b2064c42
par mw5b67154=0.06


mwfdc768f=Functi_23(mw364ca1a, mw5b67154, mwdfcbcdb)

# Reaction: id = mw35593d33_6426_452d_ad36_21f20cb38436, name = reaction_24
# Local Parameter:   id =  mw202bb744_d70a_4cf2_b2db_0d9d360bdfb5, name = mw202bb744_d70a_4cf2_b2db_0d9d360bdfb5
par mw202bb74=0.1


mw35593d3=mwfef402b*Functi_24(mw202bb74, mw78198c8, mwfef402b)

# Reaction: id = mwb77c1134_efd5_47d0_8d36_02c3c68687c6, name = reaction_25
# Local Parameter:   id =  mw3288f227_0208_435a_a41c_b1778f50008c, name = mw3288f227_0208_435a_a41c_b1778f50008c
par mw3288f22=0.09


mwb77c113=mwfef402b*Functi_25(mw3288f22, mwf26f605, mwfef402b)

# Reaction: id = mw9fb7e873_2840_486e_ac59_2329e9e9e45b, name = reaction_26
# Local Parameter:   id =  mwe250484c_acc9_4453_9eb6_49cda54b2f1e, name = mwe250484c_acc9_4453_9eb6_49cda54b2f1e
par mwe250484=0.3


mw9fb7e87=mwfef402b*Functi_26(mw10b1555, mwe250484, mwfef402b)

# Reaction: id = mwb582e1ea_d2f2_4bcb_a843_661ce2e430e5, name = reaction_27
# Local Parameter:   id =  mw2ba0a425_a224_4fa1_affc_bcc206027a3e, name = mw2ba0a425_a224_4fa1_affc_bcc206027a3e
par mw2ba0a42=1.0

# Local Parameter:   id =  mw8f586bdf_8d42_49c1_807a_670a1c49cbd9, name = mw8f586bdf_8d42_49c1_807a_670a1c49cbd9
par mw8f586bd=1.0


mwb582e1e=mwfef402b*Functi_27(mw2ba0a42, mw5837024, mw8f586bd, mwfef402b)

# Reaction: id = mwfe6ed8b6_844a_4bfd_bb0a_195c6fb5579e, name = reaction_34
# Local Parameter:   id =  mwe808b2da_9ed2_421e_a8d9_3c3534d42ee0, name = mwe808b2da_9ed2_421e_a8d9_3c3534d42ee0
par mwe808b2d=0.2


mwfe6ed8b=Functi_28(mw4fc13b7, mwdfcbcdb, mwe808b2d)

# Reaction: id = mw666be0bc_42c7_48cd_89b7_87e131f1e724, name = reaction_29
# Local Parameter:   id =  mw7246cef3_7a78_43b0_acb7_21533c394daa, name = mw7246cef3_7a78_43b0_acb7_21533c394daa
par mw7246cef=0.001


mw666be0b=mw664a2e7*Functi_29(mw49322d5, mw664a2e7, mw7246cef, mw85ae78e)

# Reaction: id = mw1d5d6ab3_4d84_4f27_a13a_c47c38be09de, name = reaction_30
# Local Parameter:   id =  mw2081c907_9d37_48a0_8581_8b8f3d5f7148, name = mw2081c907_9d37_48a0_8581_8b8f3d5f7148
par mw2081c90=0.1


mw1d5d6ab=Functi_30(mw2081c90, mw664a2e7, mwd727039)

# Reaction: id = mw69e4cb2d_f85e_4107_b5cd_a9bafe0827ee, name = reaction_31
# Local Parameter:   id =  mw91a51f27_e4be_41a6_a967_b6a63c909652, name = mw91a51f27_e4be_41a6_a967_b6a63c909652
par mw91a51f2=1.0

# Local Parameter:   id =  mwd7b0f9fb_1180_47bb_b8c0_be2f89aa1c59, name = mwd7b0f9fb_1180_47bb_b8c0_be2f89aa1c59
par mwd7b0f9f=1.0


mw69e4cb2=mwfef402b*Functi_31(mw7f26195, mw91a51f2, mwd7b0f9f, mwfef402b)

# Reaction: id = mw29ed8c78_d683_42b9_90fb_69e2dca364ee, name = reaction_32
# Local Parameter:   id =  mw2a60d98a_bc06_4e05_b965_c920da8987dc, name = mw2a60d98a_bc06_4e05_b965_c920da8987dc
par mw2a60d98=10.0

# Local Parameter:   id =  mw3c07a768_8e7a_49bb_8a1d_fdc92192f92b, name = mw3c07a768_8e7a_49bb_8a1d_fdc92192f92b
par mw3c07a76=1.0E-15

# Local Parameter:   id =  mw9704b67a_2c16_4ac7_a311_2096ab426758, name = mw9704b67a_2c16_4ac7_a311_2096ab426758
par mw9704b67=10.0


mw29ed8c7=mwfef402b*Functi_32(mw2a60d98, mw3c07a76, mw7f26195, mw9704b67, mwacd53f3, mwfef402b)

# Reaction: id = mwbda33f89_b1c8_45c9_ad37_ec7130e4ba12, name = reaction_33
# Local Parameter:   id =  mw9ca6d980_6fbd_4207_9f2c_c05e2b5b0502, name = mw9ca6d980_6fbd_4207_9f2c_c05e2b5b0502
par mw9ca6d98=0.0

# Local Parameter:   id =  mwcffa9e49_67c6_4908_9314_6c16030c8989, name = mwcffa9e49_67c6_4908_9314_6c16030c8989
par mwcffa9e4=0.0

# Local Parameter:   id =  mwf32cef57_32ba_4c0f_bbaf_bbc90af4a8aa, name = mwf32cef57_32ba_4c0f_bbaf_bbc90af4a8aa
par mwf32cef5=0.0


mwbda33f8=mwdfcbcdb*Functi_33(mw9ca6d98, mwbe46ba9, mwcffa9e4, mwdfcbcdb, mwf32cef5)

# Reaction: id = mw0de495aa_28d6_4ae7_8c1a_247b3546ed40, name = reaction_35
# Local Parameter:   id =  mw287bd1ba_fbc1_43a0_94ab_38a6336bbebb, name = mw287bd1ba_fbc1_43a0_94ab_38a6336bbebb
par mw287bd1b=10.0

# Local Parameter:   id =  mw2db26dbd_dda3_4770_b923_d2725a80ccba, name = mw2db26dbd_dda3_4770_b923_d2725a80ccba
par mw2db26db=1.0

# Local Parameter:   id =  mwb86b112e_674a_4e98_8ca4_3d0273a134d4, name = mwb86b112e_674a_4e98_8ca4_3d0273a134d4
par mwb86b112=10.0


mw0de495a=mwdfcbcdb*Functi_34(mw287bd1b, mw2db26db, mw55b6f08, mwb86b112, mwdfcbcdb)

# Reaction: id = mw152eb150_14a4_40a8_bc56_0d6e3281a206, name = reaction_14
# Local Parameter:   id =  mw1aca690a_9ee1_460f_bc28_780fb04c1a32, name = mw1aca690a_9ee1_460f_bc28_780fb04c1a32
par mw1aca690=1.0

# Local Parameter:   id =  mwf604d18f_ae32_4d08_bfef_f778aae8f24b, name = mwf604d18f_ae32_4d08_bfef_f778aae8f24b
par mwf604d18=1.0


mw152eb15=mwfef402b*Functi_35(mw1aca690, mwb9a40fa, mwf604d18, mwfef402b)

# Reaction: id = mwdd6b7201_bde8_4631_8e90_e53b986d539d, name = reaction_1
# Local Parameter:   id =  mwf80a94ba_03ba_44f0_b793_4f60c20fd074, name = mwf80a94ba_03ba_44f0_b793_4f60c20fd074
par mwf80a94b=8.0E-9


mwdd6b720=mw664a2e7*Functi_36(mw664a2e7, mw763cffc, mwa244ea2, mwf80a94b, mwfaacd7f)

# Reaction: id = mw00a624d9_79b2_424c_9362_50e77c3a3d6f, name = reaction_2
# Local Parameter:   id =  mwce7a28b5_2f60_4228_a88f_ccd3a6213c3e, name = mwce7a28b5_2f60_4228_a88f_ccd3a6213c3e
par mwce7a28b=0.23


mw00a624d=Functi_37(mw6339814, mw664a2e7, mwce7a28b)

# Species:   id = mwfaacd7f7_6aa9_4e6c_a7d8_281f2022ba2f, name = TLR2, constant
par mwfaacd7f=1000.0


# Species:   id = mwa244ea2a_3e41_473b_9ae7_d0db512fc366, name = TLR6/1, constant
par mwa244ea2=1000.0


# Species:   id = mwb167e768_b778_4072_8798_3cf19e96d1d7, name = IL6-IL6R, constant
par mwb167e76=1000.0


# Species:   id = mw9b410665_6c5e_4f37_a7f2_0cb0963b98b1, name = IL6R, constant
par mw9b41066=100000.0


# Species:   id = mw56c26af9_9f4a_4f13_936a_94ae6364342b, name = IL6, constant
par mw56c26af=1000.0


# Species:   id = mw763cffc8_c121_4004_afdb_97e9de9f0081, name = LPG, constant
par mw763cffc=1000.0


# Species:   id = mwf219928e_abba_4c09_9597_5d6910f7e4d9, name = IL6-IL6R-GP130, affected by kineticLaw

par mwf219928=1000.0
aux mwf219928=mwf219928
dmwf219928/dt=(1/(mw664a2e7))*(( 1.0 * mw2fe228f) + (-1.0 * mw4a4f508) + (-1.0 * mwddce3a0))

# Species:   id = mw85ae78ed_34f7_460c_b906_1f512a83810c, name = IFN-g, constant
par mw85ae78e=200.0


# Species:   id = mw49322d55_ad63_4e7c_b1eb_42835c9b577a, name = IFN-gR, constant
par mw49322d5=150.0


# Species:   id = mwd7270399_0429_4c85_920a_de2e0ae74440, name = IFNg-IFNgR, affected by kineticLaw

par mwd727039=800.0
aux mwd727039=mwd727039
dmwd727039/dt=(1/(mw664a2e7))*(( 1.0 * mw666be0b) + (-1.0 * mw1d5d6ab))

# Species:   id = mw5b252d78_9ab9_438c_8b81_2189b1f76357, name = gp130, constant
par mw5b252d7=1000.0


# Species:   id = mw6339814d_af4c_4eee_9455_7e20795f6aeb, name = TLR2/6-LPG, affected by kineticLaw

par mw6339814=900.0
aux mw6339814=mw6339814
dmw6339814/dt=(1/(mw664a2e7))*(( 1.0 * mwdd6b720) + (-1.0 * mw00a624d))

# Species:   id = mwc42127ea_2b78_4381_b230_30e95cd5a9d6, name = MyD88, affected by kineticLaw

par mwc42127e=800.0
aux mwc42127e=mwc42127e
dmwc42127e/dt=(1/(mwfef402b))*((-1.0 * mw3e247db) + ( 1.0 * mw00a624d))

# Species:   id = mw4fd8b902_e2a2_4910_899c_2a7d3425e0e0, name = IRAK1-IRAK4, affected by kineticLaw

par mw4fd8b90=700.0
aux mw4fd8b90=mw4fd8b90
dmw4fd8b90/dt=(1/(mwfef402b))*(( 1.0 * mw3e247db) + (-1.0 * mwe089eda))

# Species:   id = mwf06c0537_577b_4f13_a9a3_521f9d2217fb, name = TRAF6, affected by kineticLaw

par mwf06c053=600.0
aux mwf06c053=mwf06c053
dmwf06c053/dt=(1/(mwfef402b))*(( 1.0 * mwe089eda) + (-1.0 * mw355d018))

# Species:   id = mwbba20281_3d8b_48c3_8e13_dee78e87dfb8, name = TAK1-TAB1/2, affected by kineticLaw

par mwbba2028=500.0
aux mwbba2028=mwbba2028
dmwbba2028/dt=(1/(mwfef402b))*(( 1.0 * mw355d018) + (-1.0 * mw68476f5))

# Species:   id = mw78198c86_4b16_4117_8592_6a95c3953126, name = IKKbeta, affected by kineticLaw

par mw78198c8=400.0
aux mw78198c8=mw78198c8
dmw78198c8/dt=(1/(mwfef402b))*(( 1.0 * mw68476f5) + (-1.0 * mw8248f0e) + (-1.0 * mw35593d3))

# Species:   id = mw7938fab7_d0c6_497b_8fb6_75922fcc19d5, name = NFkB, affected by kineticLaw

par mw7938fab=300.0
aux mw7938fab=mw7938fab
dmw7938fab/dt=(1/(mwfef402b))*(( 1.0 * mw8248f0e) + (-1.0 * mw1eec403))

# Species:   id = mw8675a533_92fb_4fbf_b747_7bca05c5841c, name = IL6, affected by kineticLaw

par mw8675a53=100.0
aux mw8675a53=mw8675a53
dmw8675a53/dt=(1/(mwfef402b))*(( 1.0 * mw301aee8) + (-1.0 * mw59a4b10))

# Species:   id = mw869055b5_5d27_4f4a_a390_b3fa48d6780e, name = STAT3.P, affected by kineticLaw

par mw869055b=90000.0
aux mw869055b=mw869055b
dmw869055b/dt=(1/(mwfef402b))*(( 1.0 * mw3ea8426) + (-1.0 * mw35c5dd2) + ( 1.0 * mwb582e1e))

# Species:   id = mwd5f166e6_df0a_45bf_b662_e87b91b79a27, name = STAT1.P, affected by kineticLaw

par mwd5f166e=0.0
aux mwd5f166e=mwd5f166e
dmwd5f166e/dt=(1/(mwfef402b))*((-1.0 * mw5dd08c3) + ( 1.0 * mwa93a841) + ( 1.0 * mw69e4cb2) + ( 1.0 * mw152eb15))

# Species:   id = mwce6e4efd_3187_4379_ad47_104c95e0eb3b, name = JAK1/2, constant
par mwce6e4ef=2000.0


# Species:   id = mw9275f30d_c42b_459c_91c5_67b7e08b6486, name = 2.STAT1, affected by kineticLaw

par mw9275f30=0.0
aux mw9275f30=mw9275f30
dmw9275f30/dt=(1/(mwfef402b))*(( 1.0 * mw5dd08c3) + (-1.0 * mw019a641))

# Species:   id = mwc84af692_e3fc_4ede_99b6_b0cce3729bf7, name = 2.STAT3, affected by kineticLaw

par mwc84af69=80000.0
aux mwc84af69=mwc84af69
dmwc84af69/dt=(1/(mwfef402b))*(( 1.0 * mw35c5dd2) + (-1.0 * mwd4d1766))

# Species:   id = mw57b4236e_c789_4799_a4f9_a03437a5593a, name = JAK2/1, constant
par mw57b4236=2000.0


# Species:   id = mwacd53f34_4935_4b6a_8267_024f0d966c8c, name = SOCS1, affected by kineticLaw

par mwacd53f3=10000.0
aux mwacd53f3=mwacd53f3
dmwacd53f3/dt=(1/(mwfef402b))*(( 1.0 * mwbc1856f) + (-1.0 * mw1f853ef) + ( 1.0 * mw1f853ef) + (-1.0 * mw29ed8c7) + ( 1.0 * mw29ed8c7))

# Species:   id = mwf26f605f_29e9_4454_834c_7b3edab4bbc2, name = TLP2, affected by kineticLaw

par mwf26f605=200.0
aux mwf26f605=mwf26f605
dmwf26f605/dt=(1/(mwfef402b))*(( 1.0 * mw35593d3) + (-1.0 * mwb77c113))

# Species:   id = mw10b15557_55f5_4525_b19d_161b056f5791, name = MKK1/2, affected by kineticLaw

par mw10b1555=250.0
aux mw10b1555=mw10b1555
dmw10b1555/dt=(1/(mwfef402b))*(( 1.0 * mwb77c113) + (-1.0 * mw9fb7e87))

# Species:   id = mw6f8ce639_1c28_444f_b6e6_30ff06ab0d6e, name = ERK1/ERK2, constant
par mw6f8ce63=100.0


# Species:   id = mw7f261959_39d2_4e8b_92b6_4466c2504544, name = JAK2, constant
par mw7f26195=15000.0


# Species:   id = mwb9a40fab_a7c9_4984_805f_045fefc4ff32, name = STAT1, affected by kineticLaw

par mwb9a40fa=100.0
aux mwb9a40fa=mwb9a40fa
dmwb9a40fa/dt=(1/(mwfef402b))*((-1.0 * mwa93a841) + ( 1.0 * mwfdc768f) + (-1.0 * mw152eb15))

# Species:   id = mw58370246_a992_4253_8029_12fbb07a417d, name = STAT3, affected by kineticLaw

par mw5837024=20000.0
aux mw5837024=mw5837024
dmw5837024/dt=(1/(mwfef402b))*((-1.0 * mw3ea8426) + (-1.0 * mwb582e1e) + ( 1.0 * mwfe6ed8b))

# Species:   id = mwba110304_bd9a_4fd0_9b4c_b8bfc975e30b, name = NFkB, affected by kineticLaw

par mwba11030=200.0
aux mwba11030=mwba11030
dmwba11030/dt=(1/(mwdfcbcdb))*(( 1.0 * mw1eec403) + (-1.0 * mwe737aa6))

# Species:   id = mw5607cee0_ee75_4065_9368_d07c3abbe18b, name = IL6, affected by kineticLaw

par mw5607cee=250.0
aux mw5607cee=mw5607cee
dmw5607cee/dt=(1/(mwdfcbcdb))*((-1.0 * mw301aee8) + ( 1.0 * mwe737aa6))

# Species:   id = mwbe46ba92_97de_4cc4_970d_2dec54671573, name = 2.STAT1, affected by kineticLaw

par mwbe46ba9=0.0
aux mwbe46ba9=mwbe46ba9
dmwbe46ba9/dt=(1/(mwdfcbcdb))*(( 1.0 * mw019a641) + (-1.0 * mwc2dc149) + (-1.0 * mwbda33f8))

# Species:   id = mw55b6f083_2b28_4a1a_ab90_82a751525d72, name = 2.STAT3, affected by kineticLaw

par mw55b6f08=9000.0
aux mw55b6f08=mw55b6f08
dmw55b6f08/dt=(1/(mwdfcbcdb))*(( 1.0 * mwd4d1766) + (-1.0 * mw4764870) + (-1.0 * mw0de495a))

# Species:   id = mwe3af2471_5087_4796_982a_56fad9a9a972, name = SOCS3, affected by kineticLaw

par mwe3af247=0.0
aux mwe3af247=mwe3af247
dmwe3af247/dt=(1/(mwdfcbcdb))*(( 1.0 * mw0de495a))

# Species:   id = mw364ca1a4_fc56_4138_8031_16341ac865de, name = STAT1, affected by kineticLaw

par mw364ca1a=100.0
aux mw364ca1a=mw364ca1a
dmw364ca1a/dt=(1/(mwdfcbcdb))*(( 1.0 * mwe737aa6) + (-1.0 * mwfdc768f))

# Species:   id = mw4fc13b75_10cc_41fb_b9f8_1ce95fccae73, name = STAT3, affected by kineticLaw

par mw4fc13b7=100.0
aux mw4fc13b7=mw4fc13b7
dmw4fc13b7/dt=(1/(mwdfcbcdb))*(( 1.0 * mwe737aa6) + (-1.0 * mwfe6ed8b))

# Species:   id = mw3d58864c_79c7_4ff2_98fe_1a85b2ccc43d, name = SOCS1, affected by kineticLaw

par mw3d58864=50000.0
aux mw3d58864=mw3d58864
dmw3d58864/dt=(1/(mwdfcbcdb))*(( 1.0 * mwc2dc149) + (-1.0 * mwbc1856f))

# Species:   id = mw6949b379_107d_4822_b13e_680a491d2425, name = iNOS, affected by kineticLaw

par mw6949b37=0.0
aux mw6949b37=mw6949b37
dmw6949b37/dt=(1/(mwdfcbcdb))*(( 1.0 * mwbda33f8))

# Species:   id = mwcbadb505_1cfb_4903_9975_0e53de2ba877, name = AIF, affected by kineticLaw

par mwcbadb50=0.0
aux mwcbadb50=mwcbadb50
dmwcbadb50/dt=(1/(mwdfcbcdb))*(( 1.0 * mw4764870))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

