
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Dunster2016 - Nondimensional Coagulation Model
#
# is http://identifiers.org/biomodels.db/MODEL1808140001
# is http://identifiers.org/biomodels.db/BIOMD0000000925
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Rate_Law_for_reaction_for_Generation_of_thrombin_1_1, name = Rate Law for reaction for Generation of thrombin_1_1
Rate_Law_(Factor_V,Prothrombin__II,Xa_L,q4a)=(q4a*Xa_L*Prothrombin__II/(Factor_V+1+Prothrombin__II))


# FunctionDefinition id = Rate_Law_for_reaction_for_production_of_V_1, name = Rate Law for reaction for production of V_1
Rate_La_1(Factor_V,Factor_Xa,Fibrinogen,Prothrombinase__Va_Xa,Thrombin__IIa,k2a,k2am,k2b)=(k2a*Thrombin__IIa*Factor_V/(Factor_V+k2a*k2am*(1+Fibrinogen))+k2a*k2b*Factor_Xa*Factor_V/(Factor_V+1+Prothrombinase__Va_Xa))


# FunctionDefinition id = Rate_Law_for_reaction_for_inactive_Xa__Xi__1, name = Rate Law for reaction for inactive Xa (Xi)_1
Rate_La_2(Factor_Xa,Prothrombinase__Va_Xa,k1b,k2a,k3b,q3a)=(k1b*Factor_Xa+k2a*k3b/q3a*Prothrombinase__Va_Xa)


# FunctionDefinition id = Rate_Law_for_reaction_for_formaation_of_prothrombinase_1, name = Rate Law for reaction for formaation of prothrombinase_1
Rate_La_3(APC,Factor_Va,Factor_Xa,Prothrombinase__Va_Xa,k3a,k3c)=(k3a*Factor_Xa*Factor_Va-k3c*k3a*APC*Prothrombinase__Va_Xa/(Prothrombinase__Va_Xa+1))


# FunctionDefinition id = Rate_Law_for_reaction_for_Inactivation_of_prothrombinase_2_1, name = Rate Law for reaction for Inactivation of prothrombinase_2_1
Rate_La_4(APC,Prothrombinase__Va_Xa,k3c,q3a)=(k3c*q3a*APC*Prothrombinase__Va_Xa/(Prothrombinase__Va_Xa+1))


# FunctionDefinition id = Rate_Law_for_reaction_for_generation_of_Xa_1, name = Rate Law for reaction for generation of Xa_1
Rate_La_5(_Dunster2016___Nondimensional_Coagulation_Model,gamma1a,k1a)=(k1a*gamma1a*exp((-gamma1a)*_Dunster2016___Nondimensional_Coagulation_Model))


# FunctionDefinition id = Rate_law_reaction_for_generation_of_Va_1, name = Rate law reaction for generation of Va_1
Rate_la_6(Factor_V,Factor_Va,Factor_Xa,Fibrinogen,Prothrombin__II,Prothrombinase__Va_Xa,Thrombin__IIa,k2am,k2b,k3b,q3a)=(Thrombin__IIa*Factor_V/(Factor_V+k2am*(1+Fibrinogen))+k2b*Factor_Xa*Factor_V/(Factor_V+1+Prothrombin__II)+k3b/q3a*Prothrombinase__Va_Xa-Factor_Xa*Factor_Va)


# FunctionDefinition id = Rate_Law_for_reaction_for_Inactivation_of_prothrombinase_1_1, name = Rate Law for reaction for Inactivation of prothrombinase_1_1
Rate_La_7(Factor_Va,Factor_Xa,Prothrombinase__Va_Xa,k3b,q3a)=(k3b*Prothrombinase__Va_Xa-q3a*Factor_Xa*Factor_Va)


# FunctionDefinition id = Rate_Law_for_reaction_for_thrombin_2_1, name = Rate Law for reaction for thrombin_2_1
Rate_La_8(Thrombin__IIa)=(Thrombin__IIa)


# FunctionDefinition id = Rate_Law_for_reaction_for_Inactivation_of_Va, name = Rate Law for reaction for Inactivation of Va
Rate_La_9(APC,Factor_Va)=(APC*Factor_Va/(Factor_Va+1))


# FunctionDefinition id = Rate_Law_for_reaction_for_thrombin_1_1, name = Rate Law for reaction for thrombin_1_1
Rate_L_10(Prothrombin__II,Va_Xa_L,k4b,k4bm,q4a)=(q4a*k4b*Va_Xa_L*Prothrombin__II/(q4a*(Prothrombin__II+k4bm)))


# FunctionDefinition id = Rate_Law_for_reaction_for_prothrombin_1, name = Rate Law for reaction for prothrombin_1
Rate_L_11(Prothrombin__II,Va_Xa_L,k4b,k4bm)=(k4b*Va_Xa_L*Prothrombin__II/(Prothrombin__II+k4bm))


# Compartment: id = compartment, name = compartment, constant
par compartme=1.0

# Parameter:   id =  k1a, name = k1a, constant
par k1a=150.0

# Parameter:   id =  gamma1a, name = gamma1a, constant
par gamma1a=0.77

# Parameter:   id =  k1b, name = k1b, constant
par k1b=0.19

# Parameter:   id =  k2a, name = k2a, constant
par k2a=2.0

# Parameter:   id =  k2am, name = k2am, constant
par k2am=7.2

# Parameter:   id =  k2b, name = k2b, constant
par k2b=0.013

# Parameter:   id =  k3a, name = k3a, constant
par k3a=150.0

# Parameter:   id =  q3a, name = q3a, constant
par q3a=1.0

# Parameter:   id =  k3b, name = k3b, constant
par k3b=0.038

# Parameter:   id =  k3c, name = k3c, constant
par k3c=1.0

# Parameter:   id =  k4a, name = k4a, constant
par k4a=0.12

# Parameter:   id =  q4a, name = q4a, constant
par q4a=0.004

# Parameter:   id =  k4b, name = k4b, constant
par k4b=530.0

# Parameter:   id =  k4bm, name = k4bm, constant
par k4bm=3.6

# Parameter:   id =  k5a, name = k5a, constant
par k5a=0.0011

# Parameter:   id =  k5b, name = k5b, constant
par k5b=0.27

# Parameter:   id =  k6, name = k6, constant
par k6=1500.0

# Parameter:   id =  kx, name = kx, constant
par kx=385.0

# Parameter:   id =  kb, name = kb, constant
par kb=5.0E-4

# Parameter:   id =  Ix, name = Ix, constant
par Ix=7.69

# Parameter:   id =  Ib, name = Ib, constant
par Ib=0.05

# Parameter:   id =  log_time, name = log_time, defined by a Rule

# assignmentRule: variable = Va_Xa_L
Va_Xa_L=0.5*(kb+Ib+Prothromb-((kb+Ib+Prothromb)^2-4*Ib*Prothromb)^(1/2))
aux Va_Xa_L=Va_Xa_L

# assignmentRule: variable = Xa_L
Xa_L=0.5*(kx+Ix+Factor_Xa-((kx+Ix+Factor_Xa)^2-4*Ix*Factor_Xa)^(1/2))
aux Xa_L=Xa_L

# assignmentRule: variable = log_time
log_time=log(10, t)/log(10, 10)/log(10, 10)/log(10, 10)
aux log_time=log_time

# Reaction: id = Reaction_for_Generation_of_Xa, name = Reaction for Generation of Xa

Reaction_=compartme*Rate_La_5(t, gamma1a, k1a)

# Reaction: id = Reaction_for_Generation_of_Va, name = Reaction for Generation of Va

Reactio_1=compartme*Rate_la_6(Factor_V, Factor_Va, Factor_Xa, Fibrinoge, Prothro_1, Prothromb, Thrombin_, k2am, k2b, k3b, q3a)

# Reaction: id = Reaction_for_Inactivation_of_Xa, name = Reaction for Inactivation of Xa

Reactio_2=compartme*k1b*Factor_Xa

# Reaction: id = Reaction_for_Inactivation_of_Va, name = Reaction for Inactivation of Va

Reactio_3=compartme*Rate_La_9(APC, Factor_Va)

# Reaction: id = Reaction_for_Formation_of_Prothrombinase, name = Reaction for Formation of Prothrombinase

Reactio_4=compartme*Rate_La_3(APC, Factor_Va, Factor_Xa, Prothromb, k3a, k3c)

# Reaction: id = Reaction_for_Inactivation_of_prothrombinase_1, name = Reaction for Inactivation of prothrombinase_1

Reactio_5=compartme*Rate_La_7(Factor_Va, Factor_Xa, Prothromb, k3b, q3a)

# Reaction: id = reaction_for_Inactivation_of_prothrombinase_2, name = reaction for Inactivation of prothrombinase_2

reactio_6=compartme*Rate_La_4(APC, Prothromb, k3c, q3a)

# Reaction: id = reaction_for_Generation_of_thrombin, name = reaction for Generation of thrombin

reactio_7=compartme*Rate_Law_(Factor_V, Prothro_1, Xa_L, q4a)

# Reaction: id = reaction_for_Generation_of_protein_C, name = reaction for Generation of protein C

reactio_8=compartme*k5a*Protein_C

# Reaction: id = Reaction_for_Inactivation_of_protein_C, name = Reaction for Inactivation of protein C

Reactio_9=compartme*k5b*APC

# Reaction: id = reaction_for_Generation_of__Fibrin, name = reaction for Generation of  Fibrin

reacti_10=compartme*k6*Fibrinoge

# Reaction: id = Reaction_of_V_Inactivation, name = Reaction of V Inactivation

Reacti_11=compartme*Rate_La_1(Factor_V, Factor_Xa, Fibrinoge, Prothromb, Thrombin_, k2a, k2am, k2b)

# Reaction: id = Reaction_for_Thrombin_Generation, name = Reaction for Thrombin Generation

Reacti_12=compartme*Rate_La_8(Thrombin_)

# Reaction: id = Reaction_for_Thrombin_Inactivation, name = Reaction for Thrombin Inactivation

Reacti_13=compartme*Rate_L_10(Prothro_1, Va_Xa_L, k4b, k4bm, q4a)

# Reaction: id = Reaction_for_Prothrombin_inactivation, name = Reaction for Prothrombin inactivation

Reacti_14=compartme*Rate_L_11(Prothro_1, Va_Xa_L, k4b, k4bm)

# Reaction: id = Reaction_for_Inactive_Xa, name = Reaction for Inactive Xa production

Reacti_15=compartme*Rate_La_2(Factor_Xa, Prothromb, k1b, k2a, k3b, q3a)

# Species:   id = Factor_Xa, name = Factor Xa, affected by kineticLaw

init Factor_Xa=0.0
dFactor_Xa/dt=(1/(compartme))*(( 1.0 * Reaction_) + (-1.0 * Reactio_2) + (-1.0 * Reactio_4))

# Species:   id = Thrombin__IIa, name = Thrombin (IIa), affected by kineticLaw

par Thrombin_=0.0
aux Thrombin_=Thrombin_
dThrombin_/dt=(1/(compartme))*(( 1.0 * reactio_7) + (-1.0 * Reacti_12) + ( 1.0 * Reacti_13))

# Species:   id = Factor_V, name = Factor V, affected by kineticLaw

init Factor_V=3.0
dFactor_V/dt=(1/(compartme))*((-1.0 * Reacti_11))

# Species:   id = Factor_Va, name = Factor Va, affected by kineticLaw

init Factor_Va=0.0
dFactor_Va/dt=(1/(compartme))*(( 1.0 * Reactio_1) + (-1.0 * Reactio_3))

# Species:   id = APC, name = APC, affected by kineticLaw

init APC=0.0
dAPC/dt=(1/(compartme))*(( 1.0 * reactio_8) + (-1.0 * Reactio_9))

# Species:   id = VInactive, name = VInactive, affected by kineticLaw

init VInactive=0.0
dVInactive/dt=(1/(compartme))*(( 1.0 * Reactio_3) + ( 1.0 * reactio_6))

# Species:   id = Prothrombinase__Va_Xa, name = Prothrombinase (Va:Xa), affected by kineticLaw

par Prothromb=0.0
aux Prothromb=Prothromb
dProthromb/dt=(1/(compartme))*((-1.0 * Reactio_5) + (-1.0 * reactio_6))

# Species:   id = Prothrombin__II, name = Prothrombin (II), affected by kineticLaw

par Prothro_1=17.0
aux Prothro_1=Prothro_1
dProthro_1/dt=(1/(compartme))*((-1.0 * reactio_7) + (-1.0 * Reacti_14))

# Species:   id = Xa_L, name = Xa:L, involved in a rule 

# Species:   id = Va_Xa_L, name = Va:Xa:L, involved in a rule 

# Species:   id = Protein_C, name = Protein C, affected by kineticLaw

init Protein_C=92.0
dProtein_C/dt=(1/(compartme))*((-1.0 * reactio_8))

# Species:   id = Inactive_protein_C, name = Inactive protein C, affected by kineticLaw

par Inactive_=0.0
aux Inactive_=Inactive_
dInactive_/dt=(1/(compartme))*(( 1.0 * Reactio_9))

# Species:   id = Fibrin, name = Fibrin, affected by kineticLaw

init Fibrin=0.0
dFibrin/dt=(1/(compartme))*(( 1.0 * reacti_10))

# Species:   id = Fibrinogen, name = Fibrinogen, affected by kineticLaw

par Fibrinoge=5.0
aux Fibrinoge=Fibrinoge
dFibrinoge/dt=(1/(compartme))*((-1.0 * reacti_10))

# Species:   id = Inactive_Thrombin, name = Inactive Thrombin, affected by kineticLaw

par Inactiv_1=0.0
aux Inactiv_1=Inactiv_1
dInactiv_1/dt=(1/(compartme))*(( 1.0 * Reacti_12))

# Species:   id = Factor_Xi, name = Factor Xi, affected by kineticLaw

init Factor_Xi=0.0
dFactor_Xi/dt=(1/(compartme))*(( 1.0 * Reacti_15))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

