
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Kurlovics2021 - Metformin partitioning from plasma to RBC,  single coefficient
#
# isInstanceOf http://identifiers.org/biomodels.db/MODEL2103170001
# isInstanceOf http://identifiers.org/bto/BTO:0000424
# isInstanceOf http://identifiers.org/mamo/MAMO_0000046
# isInstanceOf http://identifiers.org/chebi/CHEBI:6801
# isInstanceOf http://identifiers.org/taxonomy/9606
# isInstanceOf http://identifiers.org/go/GO:0015893
# is http://identifiers.org/biomodels.db/MODEL2103170001
# is http://identifiers.org/biomodels.db/BIOMD0000001040
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Diffusion_to_RBC, name = Diffusion to RBC
Diffusion(k,x)=(k*x)


# Compartment: id = RBC, name = RBC, constant
par RBC=2198.0

# Parameter:   id =  Mpl, name = Mpl, defined by a Rule

# Parameter:   id =  A, name = A, constant
par A=1382.06142698431

# Parameter:   id =  B, name = B, defined by a Rule

# Parameter:   id =  d, name = d, constant
par d=-0.783006790599975

# Parameter:   id =  Kin, name = K, constant
par Kin=0.04453125683

# Parameter:   id =  c, name = c, constant
par c=-0.215608884195034

# Parameter:   id =  Summary_flux_to_RBC, name = Summary flux to RBC, defined by a Rule

# Parameter:   id =  ModelValue_1, name = Initial for A, constant
par ModelValu=1382.06142698431

# Parameter:   id =  ModelValue_2, name = Initial for B, constant
par ModelVa_1=1382.06142698431

# Parameter:   id =  ModelValue_5, name = Initial for c, constant
par ModelVa_2=-0.215608884195034

# Parameter:   id =  ModelValue_3, name = Initial for d, constant
par ModelVa_3=-0.783006790599975

# assignmentRule: variable = B
B=ModelValu
aux B=B

# assignmentRule: variable = Mpl
Mpl=ModelValu*exp(ModelVa_2*t)-ModelVa_1*exp(ModelVa_3*t)
aux Mpl=Mpl

# assignmentRule: variable = Summary_flux_to_RBC
Summary_f=Vin-Vout
aux Summary_f=Summary_f

# Reaction: id = Vout, name = Vout

Vout=RBC*Kin*Mrbc

# Reaction: id = Vin, name = Vin

Vin=RBC*Diffusion(Kin, Mpl)

# Species:   id = Mrbc, name = Mrbc, affected by kineticLaw

init Mrbc=0.0
dMrbc/dt=(1/(RBC))*((-1.0 * Vout) + ( 1.0 * Vin))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

